// MYOCYTER Version 2.0.49 (29th of June 2026)

/*

*Corresponding author: Dr. Tobias Jung, Arthur-Scheunert-Allee 114 - 116,   

14558 Nuthetal, Dept. of Molecular Toxicology (MTOX); Tel.: +49 33200 88-2490, 
email: tobias.jung@dife.de

*/


// *********************************Global Settings start here, defining JPEG-quality, specify time and date of the evaluation, as well as the parameters measured my ImageJ**********************

requires("1.52p");

filetype=".avi";

run("Colors...", "foreground=black background=black selection=yellow");
run("Set Measurements...", "area mean standard modal min centroid center perimeter bounding fit shape feret's integrated median skewness kurtosis area_fraction stack limit display redirect=None decimal=3");
run("Input/Output...", "jpeg=90 gif=-1 file=.txt use_file copy_column copy_row save_column save_row");

getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
MonthNames = newArray("Jan","Feb","Mar","Apr","May","Jun","Jul","Aug","Sep","Oct","Nov","Dec"); 

if (hour<10) {hours = "0"+hour;}
else {hours=hour;}
if (minute<10) {minutes = "0"+minute;}
else {minutes=minute;}
if (month<10) {months = "0"+(month+1);}
else {months=month+1;}
if (dayOfMonth<10) {dayOfMonths = "0"+dayOfMonth;}
else {dayOfMonths=dayOfMonth;}


// *********************************Global Settings end here**********************


// *********************************Please select what you want to do********

Dialog.create("Please choose...");
  
  Dialog.addChoice("Select:", newArray("1. Pretest (for size and threshold)", "2. Create a Batch List", "3. Manual ROI selection", "4. Evaluation", "5. Exclude Data", "6. Re-Evaluation", "7. Data Extraction", "8. Extraction for Statistics", "9. Statistics for selected Samples", "10. Overall Statistics (for cells)", "11. Prepare data for ANOVA (contractions)", "12. Apply ANOVA (contractions)", "13. Comparison & visualization (single cells)","14. Create Motion-Heatmaps"));

Dialog.show();
  
option = Dialog.getChoice();


// ************ The pretest starts here, evaluate the whole video or only the first 300 frames to save time ***********************************

if (option == "1. Pretest (for size and threshold)") {


Dialog.create("Pretest for your video");
Dialog.addChoice("Select test:", newArray("LowMovement", "HighMovement"));
Dialog.addCheckbox("Test only first", false);
Dialog.addNumber("frames: ", 300);
Dialog.show();
  
option= Dialog.getChoice();
qickpretest = Dialog.getCheckbox();
firstlimit = Dialog.getNumber();

// ************ Setting the options for the pretest starts here, for low moving cells a higher sensitivity is applied in order to recognize changes between images induced by moving that are represented by higher pixel-intensities ***********************************



if (option == "LowMovement") {
	testruns=12;
	startthresh=132;
}

if (option == "HighMovement") {
	testruns=12;
	startthresh=254;
}



// ************ Setting the options for the pretest ends here ***********************************


// ************ Select the folder containing the videos, get the file list, process video-files  ***********************************
 
dir=getDirectory("Please choose directory containing videos to pretest");
print(dir); 
preDir=dir + "\pretest "+"("+option+") "+year+"-"+MonthNames[month]+"-"+dayOfMonths+" "+hours+"h"+minutes+"\\"; 
print(preDir); 
File.makeDirectory(preDir); 

list = getFileList(dir); 

for (i=0; i<list.length; i++) {

     if (endsWith(list[i], filetype)){
               print(i + ": " + dir+list[i]);

if (qickpretest==false){
run("AVI...", "open=[" + dir+list[i] + "] use convert");
}



if (qickpretest==true){
run("AVI...", "open=[" + dir+list[i] + "] last="+ firstlimit +" use convert");
}

             imgName=getTitle();

name = indexOf(list[i], filetype);
title = substring(list[i], 0, name);


// ************ Exclude videos with less than 10 frames from evaluation, create two stacks from the video, shift the frames in one stack and calculate the differences between both stacks to get the speed (the difference between two subsequent frames) *******************************


if (nSlices>10) {


selectWindow(title+filetype);

run("Duplicate...", "duplicate");
setSlice(1);
run("Delete Slice");
setSlice(nSlices);
run("Add Slice");
id1=getImageID;


selectWindow(title+filetype);
run("Duplicate...", "duplicate");
id2=getImageID;

imageCalculator("Difference create 8-bit stack", id1, id2);


if (isOpen(title+"-1"+filetype)) {
     selectWindow(title+"-1"+filetype);
     run("Close");
}


if (isOpen(title+"-2"+filetype)) {
     selectWindow(title+"-2"+filetype);
     run("Close");
}

if (isOpen(title+"-1-1"+filetype)) {
     selectWindow(title+"-1-1"+filetype);
     run("Close");
}

if (isOpen(title+filetype)) {
     selectWindow(title+filetype);
     run("Close");
}


// ******************* Delete the last black frame that contains no difference information to the non-existing next one, overlay all frames to get the mask used for masked evaluation, movement is depicted with brighter pixels, close no longer needed frames ***************


selectWindow("Result of "+title+"-1"+filetype);
setSlice(nSlices);
run("Delete Slice");

run("8-bit");

run("Z Project...", "projection=[Sum Slices]");

rename("SUM_Stack");


if (isOpen("Result of "+title+"-1"+filetype)) {
     selectWindow("Result of "+title+"-1"+filetype);
     run("Close");
}


selectWindow("SUM_Stack");
run("8-bit");

run("Brightness/Contrast...");
run("Enhance Contrast", "saturated=0.35");


getDimensions(width, height, channels, slices, frames);

if ((height/width)>1.8) {
run("Rotate 90 Degrees Left");
}

partdim=((width*height)/(100));
fontsize=round((width/500)*17);


if (fontsize<17){
fontsize=17;
}

roifont=fontsize;
x=1;
y=fontsize;

run("Copy");


for (s=0; s<((testruns*testruns)-1); s++) {
run("Add Slice");
run("Paste");
}


// ******************* Produce a panel that contains different combinations of threshold and particle-size *******************************

run("8-bit");

rename("sum");

setBatchMode(true);

for (m=1; m<(testruns+1); m++) {

for (n=1; n<(testruns+1); n++) {

selectWindow("sum");
setSlice(m*n);


if (option == "LowMovement") {

	threshmin=round(startthresh-((startthresh/testruns)*m));
}

if (option == "HighMovement") {

	threshmin=round(startthresh-((startthresh/(2*testruns))*m));
}


setThreshold(threshmin, 255);

run("Analyze Particles...", "size="+round((n*partdim))+"-Infinity show=[Overlay Masks] display clear include summarize add slice");
R=roiManager("count");

selectWindow("sum");


makeRectangle(1, 1, 1, 1);
run("Add Selection...");


// ******************* Apply the used setting-combinations of threshold and particle-size to the thumbnails produced by the pre-test *******************************


run("Labels...", "color=blue font="+roifont+" show draw bold");
roiManager("Show All with labels");
run("Flatten", "slice");
run("RGB Color");
setFont("Serif" , fontsize, "antialiased");
setColor("black");
drawString("Thr="+threshmin+"; Size>="+round((n*partdim))+"; cells="+R+" ", x, y, "green");

run("Copy");

if (n*m>1){
selectWindow("sum-1");
run("Add Slice");
run("Paste");

if (isOpen("sum-1-1")) {
     selectWindow("sum-1-1");
     run("Close");
}

if (isOpen("sum-2")) {
     selectWindow("sum-2");
     run("Close");
}


}

}

}

setBatchMode(false);


close("sum");

//****************************Setting the image size of the images produced by the pretest starts here *******************************


if (width>500){
run("Size...", "width=500 height=500 constrain average interpolation=Bilinear");
}

run("Make Montage...", "columns="+(testruns)+" rows="+(testruns)+" scale=1 first=1 last="+((testruns)*(testruns))+" increment=1 border=1 font=12");


close("sum-1");
saveAs("Jpeg", preDir+title+"-test.jpg");
close(title+"-test.jpg");

run("Close All");

run("Collect Garbage");

if (isOpen("ROI Manager")) {
     selectWindow("ROI Manager");
     run("Close");
}


//****************************Setting the image size of the images produced by the pretest ends here *******************************

}

     }


}


//**************************** Closing of the remaning opened windows starts here, close only windows that are actually open ******************************************


if (isOpen("Results")) {
     selectWindow("Results");
     run("Close");
}


if (isOpen("B&C")) {
     selectWindow("B&C");
     run("Close");
}


if (isOpen("Log")) {
     selectWindow("Log");
     run("Close");
}


if (isOpen("Summary of sum")) {
     selectWindow("Summary of sum");
     run("Close");
}


while (nImages>0) { 
          selectImage(nImages); 
          close(); 
}





//**************************** Closing of the remaning opened windows ends here *******************************


}


// ****************************** The pretest ends here ***********************************



// ****************************************** Evaluation starts here, apply the desired settings and parameters ****************************



if (option == "4. Evaluation") {


Dialog.create("Please insert values for lower threshold and size from pre-test");
Dialog.addNumber("Lower Threshold: ", 7);
Dialog.addNumber("Size: ", 1600);

Dialog.addCheckbox("Video output", false);
Dialog.addNumber("[%] of max recogized as beat", 20);
Dialog.addNumber("Detection", 4);
Dialog.addCheckbox("Smoother", false);
Dialog.addCheckbox("Force reference-frame", false);
Dialog.addCheckbox("Replace zero from RefFrame", true);
Dialog.addCheckbox("Batching", true);
Dialog.addCheckbox("Use manual ROI-list", false);

Dialog.show();
  
thrslow = Dialog.getNumber();
cellsize = Dialog.getNumber();
vidout = Dialog.getCheckbox();
asbeat = Dialog.getNumber()/100;
detection = Dialog.getNumber();
smoother = Dialog.getCheckbox();
forceframe=Dialog.getCheckbox();
refreplace = Dialog.getCheckbox();
batching = Dialog.getCheckbox();
manualROIs = Dialog.getCheckbox();


// ****************************************** Select a directory containing the files, get the file list and process only the video-files ********************************

if(manualROIs==true && batching==true){waitForUser("Manual ROI-selection was activated;" + "\n" + "thus, <Batching> has been deactivated"); batching=false;}

dir=getDirectory("Choose the Directory containing your videos");

print(dir); 
splitDir=dir + "\VidsMovement "+year+"-"+MonthNames[month]+"-"+dayOfMonths+" "+hours+"h"+minutes+"\\"; 
print(splitDir); 
File.makeDirectory(splitDir); 

diffmovDir=splitDir + "\diffMov\\";
File.makeDirectory(diffmovDir);

isolDir=splitDir + "\isolated\\";
File.makeDirectory(isolDir);

list = getFileList(dir);


// If manual ROIs have been defined, please select the according folder and load the data

if(manualROIs==true){

//Please select the ROIFile-Folder

names=newArray();
ROIs=newArray();
RefList=newArray();
CellIDs=newArray();
noroisassigned=newArray();
SkippedCells=newArray();

ROIdir=getDirectory("Choose the <manrois>-directory containing the user-defined ROIs"); 
list = getFileList(ROIdir); 

if (File.exists(ROIdir+ "\\" + "roilist.txt")==true){filestring=File.openAsString(ROIdir+ "\\" + "roilist.txt");}
if (File.exists(ROIdir+ "\\" + "roilist.txt")==false){exit("Sorry, no <roilist.txt> was found in this folder.");}

ROIlines=split(filestring, "\n");
ROIdata=split(filestring, "\t\n\r");

// Remove the videos without ROIs assigned

trunc=0;
while(ROIdata[trunc]!="Videos without ROI(s) assigned:" && trunc<ROIdata.length-1){trunc++;}
if(ROIdata[trunc]=="Videos without ROI(s) assigned:"){ROIdata=Array.trim(ROIdata, trunc-1);}

ROItitles=split(ROIlines[0], "\t");

ROIdataonly=Array.slice(ROIdata, ROItitles.length);

ROIsample=newArray(ROIdataonly.length/2);
ROIfiles=newArray(ROIdataonly.length/2);

for (btch=0; btch<ROIdataonly.length/2; btch++){
ROIsample[btch]=ROIdataonly[2*btch];
}

for (btch=0; btch<ROIdataonly.length/2; btch++){
ROIfiles[btch]=ROIdataonly[2*btch+1];
}

list=ROIsample;


// Load the diffroi-list and extract the according data for diff-files and their individual ROIs 

if (File.exists(ROIdir+ "\\" + "diffroilist.txt")==true){filestring=File.openAsString(ROIdir+ "\\" + "diffroilist.txt");}
if (File.exists(ROIdir+ "\\" + "diffroilist.txt")==false){exit("Sorry, no <diffroilist.txt> was found in this folder.");}

diffroilines=split(filestring, "\n");
diffroidata=split(filestring, "\t\n\r");

trunc=0;
while(diffroidata[trunc]!="Videos without ROI(s) assigned:" && trunc<diffroidata.length-1){trunc++;}
if(diffroidata[trunc]=="Videos without ROI(s) assigned:"){noroisassigned=Array.copy(diffroidata); diffroidata=Array.trim(diffroidata, trunc-1);}

noroisassigned=Array.slice(noroisassigned, trunc, noroisassigned.length);

diffroititles=split(diffroilines[0], "\t");

diffroidataonly=Array.slice(diffroidata, diffroititles.length);

diffroisample=newArray(diffroidataonly.length/5);
diffroicells=newArray(diffroidataonly.length/5);
diffroirefframes=newArray(diffroidataonly.length/5);
diffrois=newArray(diffroidataonly.length/5);
difffiles=newArray(diffroidataonly.length/5);

// Filling the array containing the original filenames

for (btch=0; btch<diffroidataonly.length/5; btch++){
diffroisample[btch]=diffroidataonly[5*btch];
}

// Filling the Array containing the cell numbers

for (btch=0; btch<diffroidataonly.length/5; btch++){
diffroicells[btch]=diffroidataonly[5*btch+1];
}

// Filling the array containing the selected RefFrames if there are any

for (btch=0; btch<diffroidataonly.length/5; btch++){
diffroirefframes[btch]=diffroidataonly[5*btch+2];
}

// Filling the array containing the individually assigned ROIs

for (btch=0; btch<diffroidataonly.length/5; btch++){
diffrois[btch]=diffroidataonly[5*btch+3];
}

// Filling the array containing the according diff-files for every single cell

for (btch=0; btch<diffroidataonly.length/5; btch++){
difffiles[btch]=diffroidataonly[5*btch+4];
}

}


// ************************* If batch-mode is activated replace the list, size, threshold *******************


if(batching==true && manualROIs==false){

if (File.exists(dir+ "\\" + "batch.txt")==true){filestring=File.openAsString(dir+ "\\" + "batch.txt");}

if (File.exists(dir+ "\\" + "batch.txt")==false){exit("Sorry, no <batch.txt> was found." + "\n" + "Please generate one and copy it into your video-folder.");}

batchlines=split(filestring, "\n");
batchdata=split(filestring, "\t\n\r");

batchtitles=split(batchlines[0], "\t");

batchdataonly=Array.slice(batchdata, batchtitles.length);

Array.print(batchdata);

Array.print(batchdataonly);

batchsample=newArray(batchdataonly.length/3);
batchthr=newArray(batchdataonly.length/3);
batchsize=newArray(batchdataonly.length/3);

for (btch=0; btch<batchdataonly.length/3; btch++){
batchsample[btch]=batchdataonly[3*btch];
}
 for (btch=0; btch<batchdataonly.length/3; btch++){
batchsize[btch]=batchdataonly[3*btch+1];
}

for (btch=0; btch<batchdataonly.length/3; btch++){
batchthr[btch]=batchdataonly[3*btch+2];
}

list=batchsample;

}


for (z=0; z<list.length; z++) {

     if (endsWith(list[z], filetype)){
               print(z + ": " + dir+list[z]); 

if (File.exists(dir+list[z])==true){	
		
	run("AVI...", "open=[" + dir+list[z] + "] use convert");
             imgName=getTitle();

name = indexOf(list[z], filetype);
title = substring(list[z], 0, name);


if (nSlices>10) {
 fps=round(Stack.getFrameRate());

// ****************** Duplicate the stack, shift the frames and calculate the differences between to get the mask for the individual cells ********************************

selectWindow(title+filetype);

run("Duplicate...", "duplicate");


selectWindow(title+"-1"+filetype);

setSlice(1);
run("Delete Slice");
setSlice(nSlices);
run("Add Slice");

id1=getImageID;

selectWindow(title+filetype);
run("Duplicate...", "duplicate");


if (isOpen(title+"-2"+filetype)) {
     selectWindow(title+"-2"+filetype);
}else{selectWindow(title+"-1-1"+filetype);}

id2=getImageID;

imageCalculator("Difference create 8-bit stack", id1, id2);


if (isOpen(title+"-1"+filetype)) {
     selectWindow(title+"-1"+filetype);
     run("Close");
}


if (isOpen(title+"-2"+filetype)) {
     selectWindow(title+"-2"+filetype);
     run("Close");
}

if (isOpen(title+"-1-1"+filetype)) {
     selectWindow(title+"-1-1"+filetype);
     run("Close");
}

selectWindow("Result of "+title+"-1"+filetype);
setSlice(nSlices);
run("Delete Slice");
run("8-bit");

run("Z Project...", "projection=[Sum Slices]");

rename("SUM");
selectWindow("SUM");

run("8-bit");

selectWindow("SUM");

run("Brightness/Contrast...");
run("Enhance Contrast", "saturated=0.35");

setAutoThreshold("Default dark");

if(batching==true && manualROIs==false){
thrslow=batchthr[z];
cellsize=batchsize[z];
}

if(manualROIs==false){
setThreshold(thrslow, 255);
run("Analyze Particles...", "size="+cellsize+"-Infinity display clear include summarize add in_situ");
}

if(manualROIs==true){roiManager("Open", ROIdir+ROIfiles[z]);}

close("SUM");
 selectWindow(title+filetype);

slicenumber=nSlices+1;


// ****************************** If there is at least ONE ROI (at least one recognized moving structure) starts here ***********************

if (roiManager("count")>0) {

selectWindow(title+filetype); 
run("Duplicate...", "duplicate range=1-1");
roiManager("Show All with labels");


run("Flatten");
saveAs("Jpeg", splitDir+title+"-cells.jpg");

 if (isOpen(title+"-1"+filetype)) {
     selectWindow(title+"-1"+filetype);
     run("Close");
}


if (isOpen(title+"-cells.jpg")) {
selectWindow(title+"-cells.jpg");
close();	
} 

if (isOpen(title+"-2.avi")) {
selectWindow(title+"-2.avi");
close();	
} 

if (isOpen(title+"-1-1.avi")) {
selectWindow(title+"-1-1.avi");
close();	
}


// ************************ If there is more than one ROI (more than only a single cell) starts here *****************************

if (roiManager("count")>1) { 
	for (j=0; j<roiManager("count"); j++){

	
// create the video of the isolated cell and save it

selectWindow(title+filetype);
run("Select None");

roiManager("Select", j);
selectiontest=selectionType();
run("Duplicate...", "duplicate range="+"1"+"-"+slicenumber);


if (isOpen(title+"-1.avi")){selectWindow(title+"-1"+filetype);}else{
	selectWindow(title+filetype);
run("Select None");

roiManager("Select", j);
selectiontest=selectionType();
run("Duplicate...", "duplicate range="+"1"+"-"+slicenumber);
	}

selectWindow(title+"-1"+filetype);


if((j+1)<10){run("AVI... ", "compression=Uncompressed frame=fps save=["+isolDir+title+"-diff-cell 0"+(j+1)+" ("+fps+"fps)-isolated"+filetype+"]");
}
if((j+1)>=10){run("AVI... ", "compression=Uncompressed frame=fps save=["+isolDir+title+"-diff-cell "+(j+1)+" ("+fps+"fps)-isolated"+filetype+"]");}

// create the video of the isolated cell with black background and save it

selectWindow(title+"-1"+filetype);
// XXX do not select the roi here or the whole frame will be black
//roiManager("Select", j);
// XXX Problem may happen if there is a rectangular selection

// Wenn eine rechteckige Selektion vorliegt, dann muss ja eben nichts geloescht werden

if(selectiontest==0){roiManager("Select", j);} 

setBackgroundColor(0, 0, 0);
if(selectiontest!=0){run("Clear Outside", "stack");}

if((j+1)<10){run("AVI... ", "compression=Uncompressed frame=fps save=["+splitDir+title+"-cell 0"+(j+1)+" ("+fps+"fps)"+filetype+"]");}
if((j+1)>=10){run("AVI... ", "compression=Uncompressed frame=fps save=["+splitDir+title+"-cell "+(j+1)+" ("+fps+"fps)"+filetype+"]");}


if (isOpen(title+"-1"+filetype)) {
     selectWindow(title+"-1"+filetype);
     run("Close");
}

 
// ******************************** produce the videos containing the differences between the single frames and save them for later quantification, apply proper filenames **********************************  

selectWindow("Result of "+title+"-1"+filetype);
roiManager("Select", j);
selectiontest=selectionType();
run("Duplicate...", "duplicate range="+"1"+"-"+slicenumber);

if (isOpen("Result of "+title+"-2"+filetype)) {
     selectWindow("Result of "+title+"-2"+filetype);
}else{selectWindow("Result of "+title+"-1-1"+filetype);}

setBackgroundColor(0, 0, 0);
// do not select the roi here or the whole frame will be black
//roiManager("Select", j);
// XXX Problem may happen if there is a rectangular selection

// Wenn eine rechteckige Selektion vorliegt, dann muss ja eben nichts geloescht werden

if(selectiontest==0){roiManager("Select", j);} 

if(selectiontest!=0){run("Clear Outside", "stack");}

if((j+1)<10){run("AVI... ", "compression=Uncompressed frame=fps save=["+diffmovDir+title+"-diff-cell 0"+(j+1)+" ("+fps+"fps)"+filetype+"]");
}
if((j+1)>=10){run("AVI... ", "compression=Uncompressed frame=fps save=["+diffmovDir+title+"-diff-cell "+(j+1)+" ("+fps+"fps)"+filetype+"]");}

 if (isOpen("Result of "+title+"-2"+filetype)) {
     selectWindow("Result of "+title+"-2"+filetype);
     run("Close");
}

if (isOpen("Result of "+title+"-1-1"+filetype)) {
     selectWindow("Result of "+title+"-1-1"+filetype);
     run("Close");
}

 }

if (isOpen("Result of "+title+"-1"+filetype)) {
     selectWindow("Result of "+title+"-1"+filetype);
     run("Close");}

}

// **************************** If there is exactly one ROI (a single recognized cell) starts here **************************************

if (roiManager("count")==1) {

selectWindow(title+filetype);

roiManager("Select", 0);
selectiontest=selectionType();
run("Duplicate...", "duplicate range="+"1"+"-"+slicenumber);
selectWindow(title+"-1"+filetype);

run("AVI... ", "compression=Uncompressed frame=fps save=["+isolDir+title+"-diff-cell 01 "+"("+fps+"fps)-isolated"+filetype+"]");


// XX hier wird etwas seltsames gespeichert

selectWindow(title+"-1"+filetype);
setBackgroundColor(0, 0, 0);

// do not select the roi here or the whole frame will be black
//roiManager("Select", 0);
// XXX Problem may happen if there is a rectangular selection

// Wenn eine rechteckige Selektion vorliegt, dann muss ja eben nichts geloescht werden

if(selectiontest==0){roiManager("Select", 0);} 

if(selectiontest!=0){run("Clear Outside", "stack");
}
run("AVI... ", "compression=Uncompressed frame=fps save=["+splitDir+title+"-cell 01 "+"("+fps+"fps)"+filetype+"]");


if (isOpen(title+"-1"+filetype)) {
     selectWindow(title+"-1"+filetype);
     run("Close");
}

 
selectWindow("Result of "+title+"-1"+filetype);
setBackgroundColor(0, 0, 0);

roiManager("Select", 0);
run("Clear Outside", "stack");

run("Duplicate...", "duplicate range="+"1"+"-"+slicenumber);

run("AVI... ", "compression=Uncompressed frame=fps save=["+diffmovDir+title+"-diff-cell 01 "+"("+fps+"fps)"+filetype+"]");


if (isOpen("Result of "+title+"-2"+filetype)) {
     selectWindow("Result of "+title+"-2"+filetype);
     run("Close");
}

if (isOpen("Result of "+title+"-1-1"+filetype)) {
     selectWindow("Result of "+title+"-1-1"+filetype);
     run("Close");
}

roiManager("Select", 0);
roiManager("Delete");
 }

// **************************** If there is exactly one ROI ends here ********************************************
 
 // ******************************* This clears the ROI manager (if there are more than only one recognized cell) ************************************************

b = newArray(roiManager("count"));

if (roiManager("count")>1) {
//for (k=0; k<roiManager("count"); k++) b[k]=k;
//roiManager("Select", b);
//roiManager("Delete");
roiManager("reset");
}


// **************************** End of clearing the ROI manager from multiple ROIs ****************************************


}


if (isOpen(title+filetype)) {
     selectWindow(title+filetype);
     run("Close");
}

if (isOpen("Result of "+title+"-1"+filetype)) {
     selectWindow("Result of "+title+"-1"+filetype);
     run("Close");
}

	}

	}
	}
     
	}



// **************************** Automatic plotting of the data starts here ***********************************


// ******************************* Conversion of difference-movies to intensity-values starts here, the values from every frame are put into arrays *********************************

dir=diffmovDir;
print("\\Clear");
dataDir=dir + "\dataplots\\";
File.makeDirectory(dataDir);

list = getFileList(dir);

if(manualROIs==true){list=difffiles;}

for (y=0; y<list.length; y++) {

     if (endsWith(list[y], filetype)){
               print(y + ": " + dir+list[y]);
             run("AVI...", "open=[" + dir+list[y] + "] use convert");
             imgName=getTitle();


         baseNameEnd=indexOf(imgName, filetype);
         baseName=substring(imgName, 0, baseNameEnd);


fps=round(Stack.getFrameRate());

slicenumber=nSlices;
values = newArray(nSlices);
movalues = newArray(nSlices);
times = newArray(nSlices);
firstdev = newArray(nSlices);

print(baseName);


// *************** Masking the moving parts of the difference movie and evaluation starts here, the applied threshold is 1 ***********************

if(manualROIs==true){roiManager("reset");}


selectWindow(baseName+filetype);
 for (j=1; j<slicenumber; j++) {

setSlice(j);

setThreshold(1, 255);
run("Measure");

tmpMean = getResult("Mean");

if (isNaN(tmpMean)) {tmpMean = 0;}

values[j-1]=tmpMean;
times[j]=(j/fps);
         
     }


if (isOpen(baseName+filetype)) {
     selectWindow(baseName+filetype);
     run("Close");
}



// *************** Masking the moving parts of the difference movie and evaluation ends here ***********************



//************************* Open the isolated cell, select the reference frame and compare the whole movie to this reference to get the amplitude starts here ************************************


strg=replace(baseName,"-diff","");

open(splitDir+strg+filetype);

run("8-bit");

//************************ If there is a hyperstack-video, convert it into regular greyscale (recent FIJI-problem) starts here) ****************************************

if (Stack.isHyperstack==1) {
selectWindow(strg+filetype);

run("Split Channels");

selectWindow("C1-"+strg+filetype);
run("Make Composite", "display=Grayscale");
selectWindow("C2-"+strg+filetype);
run("Make Composite", "display=Grayscale");
selectWindow("C3-"+strg+filetype);
run("Make Composite", "display=Grayscale");

run("Merge Channels...", "c1=[C1-" + strg+filetype + "] c2=[C2-" + strg+filetype + "] c3=[C3-" + strg+filetype + "]");
selectWindow("RGB");
rename(strg+filetype);

}



//************************ If there is a hyperstack-video, convert it into regular greyscale (recent FIJI-problem) ends here ****************************************


if (forceframe==true && manualROIs==false){
setSlice(1);
waitForUser( "Select Referenceframe","Please select Referenceframe (use the slider) and click >OK<");
forcedframe=getSliceNumber();
setSlice(1);
}


//****** Problem: If manualROIs==false, there is no array diffroirefframes defined; thus, this array is created here and filled with "N/A"; length is list.length in this case

if(manualROIs==false){

diffroirefframes=newArray(list.length);

for (probsol = 0; probsol < list.length; probsol++) {
diffroirefframes[probsol]="N/A";
}
	
}



//*************** Here, we find the lowest difference between two subsequent frames and define the according reference frame from it, if no frame is set by the user ***********************

if ((forceframe==false && manualROIs==false) || (manualROIs==true && diffroirefframes[y]=="N/A")){

run("AVI...", "open=[" + dir+list[y] + "] use convert");

selectWindow(list[y]);
run("8-bit");
slicenumber=nSlices;
differ = newArray(nSlices);



for (j=1; j<slicenumber+1; j++) {
setSlice(j);

setThreshold(1, 255);
run("Measure");

tmpMean = getResult("Mean");

if (isNaN(tmpMean)) {tmpMean = 0;}

differ[j-1]=tmpMean;
         
     }



// Detect the reference frame starts here

average=newArray(round(differ.length/4));

for (avgr = 0; avgr < average.length && (4*avgr+3<differ.length); avgr++) {
average[avgr]=(differ[4*avgr]+differ[4*avgr+1]+differ[4*avgr+2]+differ[4*avgr+3])/4;	
}


average=Array.deleteValue(average, 0); 

averageranks=Array.rankPositions(average);

finalframe=4*averageranks[0];

for (final = 1; final < 4; final++) {
if (finalframe>4*averageranks[0]+final){finalframe=4*averageranks[0]+final;}	
}

lowfrm=finalframe+1;

if (lowfrm<1) {
lowfrm=1;
}
if (lowfrm>slicenumber) {
lowfrm=slicenumber;
}


// Detect the reference frame ends here

// Close the according -diff-file

selectWindow(list[y]);
close();

}

//******************* Forced reference frame (from user) overwrites the detected one starts here *********************************

if (forceframe==true && manualROIs==false){
lowfrm=forcedframe;
}


// Ref-Frame from manual ROI-selection is used

if(manualROIs==true && diffroirefframes[y]!="N/A"){
lowfrm=diffroirefframes[y];
}


//******************* Forced reference frame overwrites the detected one ends here ******************************


//********************** Now, the reference frame is compared to every other frame of the movie, results are put into an array *****************************



selectWindow(strg+filetype);
setSlice(lowfrm);


run("Duplicate...", " ");

selectWindow(strg+"-1"+filetype);
run("Copy");

setBatchMode(true); 

for (i=1; i<slicenumber+1; i++) {
run("Add Slice");
run("Paste");
}

setBatchMode(false);


selectWindow(strg+filetype);
id2=getImageID;

selectWindow(strg+"-1"+filetype);
id1=getImageID;

// XXX Neuer Catch eingebaut


imageCalculator("Difference create 8-bit stack", id1, id2);

wait(100);

if(isOpen("Result of "+strg+"-1"+filetype)==false){imageCalculator("Difference create 8-bit stack", id1, id2);}


if (isOpen(strg+filetype)) {
     selectWindow(strg+filetype);
     run("Close");
}


if (isOpen(strg+"-1"+filetype)) {
     selectWindow(strg+"-1"+filetype);
     run("Close");
}


slicenumber=nSlices;
movalues = newArray(nSlices);

selectWindow("Result of "+strg+"-1"+filetype);
run("8-bit");


// ****************** Use a selection to improve specificity, the evaluation of the intensities starts here, if user applied threshold from pretest, evaluation is restricted to the moving cell only **************************
// ****************** Dark pixels, that are outside of the mask (strongest movement) are excluded via threshold, results are put into an array *****************************

if (thrslow >0 && manualROIs==false) {
run("Duplicate...", "duplicate");

if (isOpen("Result of "+strg+"-2"+filetype)) {
     selectWindow("Result of "+strg+"-2"+filetype);
}else{selectWindow("Result of "+strg+"-1-1"+filetype);}


run("Z Project...", "projection=[Sum Slices]");
run("8-bit");


if (isOpen("Result of "+strg+"-2"+filetype)) {
     selectWindow("Result of "+strg+"-2"+filetype);
     run("Close");
}

if (isOpen("Result of "+strg+"-1-1"+filetype)) {
     selectWindow("Result of "+strg+"-1-1"+filetype);
     run("Close");
}


if (isOpen("SUM_"+"Result of "+strg+"-2"+filetype)) {
     selectWindow("SUM_"+"Result of "+strg+"-2"+filetype);
}else{selectWindow("SUM_"+"Result of "+strg+"-1-1"+filetype);}

setAutoThreshold("Default dark");
setThreshold(1, 255);
run("Create Selection");}

if(manualROIs==true){
roiManager("reset");	
}




selectWindow("Result of "+strg+"-1"+filetype);

for (jj=1; jj<slicenumber; jj++) {

setSlice(jj);

if (thrslow >0 && manualROIs==false) {run("Restore Selection");}

setAutoThreshold("Default dark");
setThreshold(1, 255);

run("Measure");

tmpMean = getResult("Mean");

if (isNaN(tmpMean)) {tmpMean = 0;}

movalues[jj-1]=tmpMean;
         
     }




if (thrslow >0) {
if (isOpen("SUM_"+"Result of "+strg+"-2"+filetype)) {
     selectWindow("SUM_"+"Result of "+strg+"-2"+filetype);
     run("Close");}

if (isOpen("SUM_"+"Result of "+strg+"-1-1"+filetype)) {
     selectWindow("SUM_"+"Result of "+strg+"-1-1"+filetype);
     run("Close");}

}


// *********************** Use a selection to improve specificity, the evaluation of the intensities ends here ***********************************


// ********************** Eliminate the zero caused by the reference frame and replace it with the second lowest value starts here, if the user selected that option *********************************

if (refreplace==true){

lowestmoval=Array.copy(movalues);
Array.sort(lowestmoval);
replacer=0;
t=0;

while(replacer==0 && t<lowestmoval.length){
	replacer=lowestmoval[t];t++;}

movalues[lowfrm-1]=replacer;

}


// ********************** Eliminate the zero caused by the reference frame and replace it with the second lowest value ends here **************************


// ********************** Calculate the first derivative of the amplitude ***************************** 

for (j=0; j<slicenumber-1; j++) {
firstdev[j]=movalues[j+1]-movalues[j];
    
     }


if (isOpen("Result of "+strg+"-1"+filetype)) {
     selectWindow("Result of "+strg+"-1"+filetype);
     run("Close");
}



// ************************* Open the isolated cell, select the reference frame and compare the whole movie to this reference to get amplitude ends here **************


// ******************************* Conversion of movies to intensity-values ends here ****************************


// ************ Optional recognition and remove of peaks starts here (last 15% of the array, "jumps" of 10% are considered to be outliners), if set by the user ******************************


if (smoother==true){


valuessmooth=Array.copy(values);
valuessmoothsorted=Array.copy(values);

movaluessmooth=Array.copy(movalues);
movaluessmoothsorted=Array.copy(movalues);

Array.sort(valuessmoothsorted);
Array.sort(movaluessmoothsorted);


limiter=0;
molimiter=0;

for (i=(valuessmoothsorted.length*0.85); i<valuessmoothsorted.length-1 && limiter<1; i++) {

if ((valuessmoothsorted[i+1]/valuessmoothsorted[i])>1.1){
peaklimit=valuessmoothsorted[i+1];
limiter=2;
}

}

for (i=(movaluessmoothsorted.length*0.85); i<movaluessmoothsorted.length-1 && molimiter<1; i++) {

if ((movaluessmoothsorted[i+1]/movaluessmoothsorted[i])>1.1){
mopeaklimit=movaluessmoothsorted[i+1];
molimiter=2;
}

}


// ********************************************** Eradication of the outliners starts here *********************

if (limiter>1){

for (i=0; i<valuessmooth.length; i++) {

if (i<1) {
if(valuessmooth[i]>(peaklimit*0.99)) {
valuessmooth[i]=0;
}
}

if (i>0) {
if(valuessmooth[i]>(peaklimit*0.99)) {
valuessmooth[i]=valuessmooth[i-1];
}
}


}

}


if (molimiter>1){

for (i=0; i<valuessmooth.length; i++) {

if (i<1) {
if(movaluessmooth[i]>(mopeaklimit*0.99)) {
movaluessmooth[i]=0;
}
}

if (i>0) {
if(movaluessmooth[i]>(mopeaklimit*0.99)) {
movaluessmooth[i]=movaluessmooth[i-1];
}
}


}

}

// ******************* Replacement of the original data with the smoothed ones starts here *****************************

values=Array.copy(valuessmooth);

movalues=Array.copy(movaluessmooth);


for (j=0; j<movalues.length-1; j++) {
firstdev[j]=movalues[j+1]-movalues[j];
    
     }


// ******************* Replacement of the original data with the smoothed ones ends here ***************************



// ********************************************** Eradication of the outliners ends here *********************************


}


//****************************** Optional recognition and remove of peaks ends here ************************************


//******************************* Remove the last zero from the value-arrays starts here! ******************************

times = Array.slice(times, 0, times.length-1);
values = Array.slice(values, 0, values.length-1);
movalues = Array.slice(movalues, 0, movalues.length-1);
firstdev = Array.slice(firstdev, 0, firstdev.length-1);


//******************************* Remove the last zero from the values-array ends here! Slicenumber is (values.length+1)! ************************************

//****************************** Printing the analyzed data from the array starts here *****************************


thresh10=0.1;
thresh50=0.5;
thresh90=0.9;


Array.getStatistics(movalues, pmin, pmax, pmean, pstdDev);
Array.getStatistics(values, speedmin, speedmax, speedmean, speedstdDev);

ampRange = pmax - pmin;

if (isNaN(ampRange)) {
	ampRange = 0;
}

if (ampRange < 0) {
	ampRange = 0;
}

detectDelta = 0;

if (detection > 0) {
	detectDelta = ampRange/detection;
}

maxima=Array.findMaxima(movalues, detectDelta);
minima=Array.findMinima(movalues, detectDelta);
Array.sort(maxima);
Array.sort(minima);


min=0;
max=0;
beats=1;
btimea=0;
btimeabs="";
btimeold=0;
beattimes=newArray();
threshold=asbeat;

//*************** Here, all the minima are paired with the according (following) maxima and the amplitudes are calculated **************************** 
truncmin=Array.copy(minima);
truncmax=Array.copy(maxima);

if(truncmin.length<1 || truncmax.length<1){
print(" ");
print("Sorry, no maxima/minima were detected with the applied settings!")
;
	}

if(truncmin.length>0 && truncmax.length>0){

if (truncmax[0]<truncmin[0]){
truncmax=Array.slice(truncmax,1,truncmax.length);
}


if(truncmax.length>truncmin.length){
	truncmax=Array.slice(truncmax,0,truncmin.length);
}

if(truncmax.length<truncmin.length){
	truncmin=Array.slice(truncmin,0,truncmax.length);
}


maxamplitudes=newArray(truncmax.length);

for (www=0; www<truncmax.length; www++){
	maxamplitudes[www]=movalues[truncmax[www]]-movalues[truncmin[www]];

	if (isNaN(maxamplitudes[www])) {
		maxamplitudes[www]=0;
	}
}

//********************* Printing of the data starts here *******************

// Create Arrays that contain the transition points before and after maxima for the different thresholds starts here

systuserstart=newArray(truncmax.length);
diastuserend=newArray(truncmax.length);

syst10start=newArray(truncmax.length);
diast10end=newArray(truncmax.length);

syst50start=newArray(truncmax.length);
diast50end=newArray(truncmax.length);

syst90start=newArray(truncmax.length);
diast90end=newArray(truncmax.length);

for (transition = 0; transition < truncmax.length; transition++) {

//user
dropleft=truncmax[transition];
dropright=truncmax[transition];
while(dropleft>0 && movalues[dropleft]>((maxamplitudes[transition])*asbeat)+movalues[truncmin[transition]]){dropleft=dropleft-1;}
while(dropright<movalues.length-1 && movalues[dropright]>((maxamplitudes[transition])*asbeat)+movalues[truncmin[transition]]){dropright++;}
systuserstart[transition]=dropleft;
diastuserend[transition]=dropright;

//Thr10%
dropleft=truncmax[transition];
dropright=truncmax[transition];
while(dropleft>0 && movalues[dropleft]>((maxamplitudes[transition])*0.1)+movalues[truncmin[transition]]){dropleft=dropleft-1;}
while(dropright<movalues.length-1 && movalues[dropright]>((maxamplitudes[transition])*0.1)+movalues[truncmin[transition]]){dropright++;}
syst10start[transition]=dropleft;
diast10end[transition]=dropright;

//Thr50%
dropleft=truncmax[transition];
dropright=truncmax[transition];
while(dropleft>0 && movalues[dropleft]>((maxamplitudes[transition])*0.5)+movalues[truncmin[transition]]){dropleft=dropleft-1;}
while(dropright<movalues.length-1 && movalues[dropright]>((maxamplitudes[transition])*0.5)+movalues[truncmin[transition]]){dropright++;}
syst50start[transition]=dropleft;
diast50end[transition]=dropright;

//Thr90%
dropleft=truncmax[transition];
dropright=truncmax[transition];
while(dropleft>0 && movalues[dropleft]>((maxamplitudes[transition])*0.9)+movalues[truncmin[transition]]){dropleft=dropleft-1;}
while(dropright<movalues.length-1 && movalues[dropright]>((maxamplitudes[transition])*0.9)+movalues[truncmin[transition]]){dropright++;}
syst90start[transition]=dropleft;
diast90end[transition]=dropright;
	
}


// Create Arrays that contain the transition points before and after maxima for the different thresholds ends here


//********** defining necessary constants starts here ********************

ampl=0;

peaktime=0;
peaktimeabs=0;
peaktimeold=0;

peaktime10=0;
peaktime10abs=0;
peaktime10old=0;

peaktime50=0;
peaktime50abs=0;
peaktime50old=0;

peaktime90=0;
peaktime90abs=0;
peaktime90old=0;

systime=0;
systimeabs="";
systimeold=0;

diastime=0;
diastimeabs=0;
diastimeold=0;

systime10=0;
systime10abs="";
systime10old=0;

diastime10=0;
diastime10abs=0;
diastime10old=0;

systime50=0;
systime50abs="";
systime50old=0;

diastime50=0;
diastime50abs=0;
diastime50old=0;

systime90=0;
systime90abs="";
systime90old=0;

diastime90=0;
diastime90abs=0;
diastime90old=0;

sys10=newArray();
sys50=newArray();
sys90=newArray();
sysuser=newArray();

dias10=newArray();
dias50=newArray();
dias90=newArray();
diasuser=newArray();

btime10=newArray();
btime50=newArray();
btime90=newArray();
btimeuser=newArray();


//********** Defining necessary constants ends here ********************

// ************ Printing the headlines starts here ********************


print(" ");

print("Frame #" + "\t" + "Time [sec]" + "\t" + "Amplitude [a.u.]" + "\t" + "Amplitude baselined [a.u.]" + "\t" + "Amplitude baselined normalized [a.u.]" + "\t" + "1st deriv. of amplitude" + "\t" + "Absol. 1st deriv. of amplitude" + "\t" + "Speed [a.u.]" + "\t" + "Speed baselined [a.u.]" + "\t" + "Maxima [a.u.]" + "\t" + "Loc. Maxamplitude [a.u]" + "\t" + "Minima [a.u.]" + "\t" + "Since last beat [sec]" + "\t" + "Since last beat abs. time [sec]" + "\t" + "Sum of beats" + "\t" + "User threshold (" + asbeat*100 + "%) [a.u.]" + "\t" + "Peak time user [sec]" + "\t" + "Peak time user absolute [sec]" + "\t" + "Contract. interval (user) [sec]" + "\t" + "Contract. interval (user) absol. [sec]" + "\t" + "Relax. interval (user) [sec]" + "\t" + "Relax. interval (user) absol. [sec]" + "\t" + "Thr(10%) [a.u.]" + "\t" + "Peak time Thr(10%) [sec]" + "\t" + "Peak time Thr(10%) absol. [sec]" + "\t" + "Contract. interval Thr(10%) [sec]" + "\t" + "Contract. interval Thr(10%) absol. [sec]" + "\t" + "Relax. interval Thr(10%) [sec]" + "\t" + "Relax. interval Thr(10%) absol. [sec]" + "\t" + "Thr(50%) [a.u.]" + "\t" + "Peak time Thr(50%) [sec]" + "\t" + "Peak time Thr(50%) absol. [sec]" + "\t" + "Contract. interval Thr(50%) [sec]" + "\t" + "Contract. interval Thr(50%) absol. [sec]" + "\t" + "Relax. interval Thr(50%) [sec]" + "\t" + "Relax. interval Thr(50%) absol. [sec]" + "\t" + "Thr(90%) [a.u.]" + "\t" + "Peak time Thr(90%) [sec]" + "\t" + "Peak time Thr(90%) absol. [sec]" + "\t" + "Contract. interval Thr(90%) [sec]" + "\t" + "Contract. interval Thr(90%) absol. [sec]" + "\t" + "Relax. interval Thr(90%) [sec]" + "\t" + "Relax. interval Thr(90%) absol. [sec]");



// ************ Printing the headlines ends here

// Wenn die folgenden Arrays leer sind, dann einfach das Drucken abbrechen!

if(truncmax.length>0 && systuserstart.length>0){

for (rr=0; rr<movalues.length-1; rr++){

ampNorm = 0;

if (ampRange > 0) {ampNorm = (movalues[rr]-pmin)/ampRange;}

if (isNaN(ampNorm)) {ampNorm = 0;}


//******************** Calculation of the systoles and diastoles for the thresholds (user, 10, 50 and 90%) starts here *************************


if (rr>systuserstart[ampl] && rr<truncmax[ampl]){
	systime=systime+1/fps; 
	systimeold=systime;
}
 else {systime=0;}

// NEU for Gesamtsystole starts here *****************************************************************
if (rr==truncmax[ampl] && systime==0 && systime<=systimeold){
	systimeabs=systimeold;
	sysuser=Array.concat(sysuser, systimeabs);
	
}
 else {systimeabs="";}
// NEU for Gesamtsystole ends here ******************************************************************* 

if (rr>=truncmax[ampl] && rr<diastuserend[ampl]){
	diastime=diastime+1/fps;
	diastimeold=diastime;

}
 else {diastime=0;}


// NEU for GesamtDIAstole starts here *****************************************************************
 if (diastimeold>diastime){
	diastimeabs=diastimeold;
	diastimeold=0;
        diasuser=Array.concat(diasuser, diastimeabs);
}
 else {diastimeabs="";}
// NEU for GesamtDIAstole ends here ******************************************************************* 


if (rr>syst10start[ampl] && rr<truncmax[ampl]){
	systime10=systime10+1/fps;
	systime10old=systime10;
}
 else {systime10=0;}

// NEU for Gesamtsystole 10 starts here *****************************************************************
if (rr==truncmax[ampl] && systime10==0 && systime10<=systime10old){
	systime10abs=systime10old;
	sys10=Array.concat(sys10, systime10abs);
	
}
 else {systime10abs="";}
// NEU for Gesamtsystole 10 ends here ******************************************************************* 


if (rr>=truncmax[ampl] && rr<diast10end[ampl]){
	diastime10=diastime10+1/fps;
	diastime10old=diastime10;
}
 else {diastime10=0;}


// NEU fuer GesamtDIAstole 10 starts here *****************************************************************
 if (diastime10old>diastime10){
	diastime10abs=diastime10old;
	diastime10old=0;
	dias10=Array.concat(dias10, diastime10abs);
}
 else {diastime10abs="";}
// NEU for GesamtDIAstole 10 ends here ******************************************************************* 

if (rr>syst50start[ampl] && rr<truncmax[ampl]){
	systime50=systime50+1/fps;
	systime50old=systime50;
}
 else {systime50=0;}

// NEU for Gesamtsystole 50 starts here *****************************************************************
if (rr==truncmax[ampl] && systime50==0 && systime50<=systime50old){
	systime50abs=systime50old;
	sys50=Array.concat(sys50, systime50abs);
	
}
 else {systime50abs="";}
// NEU for Gesamtsystole 50 ends here ******************************************************************* 

 
if (rr>1){
if (rr>=truncmax[ampl] && rr<diast50end[ampl]){
	diastime50=diastime50+1/fps;
	diastime50old=diastime50;
}
 else {diastime50=0;}}


// NEU fuer GesamtDIAstole 50 starts here *****************************************************************
 if (diastime50old>diastime50){
	diastime50abs=diastime50old;
	diastime50old=0;
	dias50=Array.concat(dias50, diastime50abs);
}
 else {diastime50abs="";}
// NEU for GesamtDIAstole 50 ends here ******************************************************************* 


if (rr>syst90start[ampl] && rr<truncmax[ampl]){
	systime90=systime90+1/fps;
	systime90old=systime90;
}
 else {systime90=0;}


// NEU for Gesamtsystole 90 starts here *****************************************************************
if (rr==truncmax[ampl] && systime90==0 && systime90<=systime90old){
	systime90abs=systime90old;
	sys90=Array.concat(sys90, systime90abs);
	
}
 else {systime90abs="";}
// NEU for Gesamtsystole 90 ends here ******************************************************************* 


if (rr>1){
if (rr>=truncmax[ampl] && rr<diast90end[ampl]){
	diastime90=diastime90+1/fps;
	diastime90old=diastime90;
}
 else {diastime90=0;}}


// NEU for GesamtDIAstole 90 starts here *****************************************************************
 if (diastime90old>diastime90){
	diastime90abs=diastime90old;
	diastime90old=0;
	dias90=Array.concat(dias90, diastime90abs);
}
 else {diastime90abs="";}
// NEU for GesamtDIAstole 90 ends here ******************************************************************* 


// ************************** Calculation of peak times starts here ***************************


if (diastime>0 || systime>0){
	peaktime=peaktime+1/fps;
	peaktimeold=peaktime;

}
 else {peaktime=0;}

if(systime==(1/fps)){peaktime=(1/fps);}
 

// NEU for Gesamtpeakzeit starts here *****************************************************************

if (peaktimeold>peaktime){
	peaktimeabs=peaktimeold;
	peaktimeold=0;
	btimeuser=Array.concat(btimeuser, peaktimeabs);
}
 else {peaktimeabs="";}

// NEU for Gesamtpeakzeit ends here ******************************************************************* 



if (diastime10>0 || systime10>0){
	peaktime10=peaktime10+1/fps;
	peaktime10old=peaktime10;
}
 else {peaktime10=0;}

if(systime10==(1/fps)){peaktime10=(1/fps);}

// NEU for Gesamtpeakzeit 10 starts here *****************************************************************

if (peaktime10old>peaktime10){
	peaktime10abs=peaktime10old;
	peaktime10old=0;
	btime10=Array.concat(btime10, peaktime10abs);
}
 else {peaktime10abs="";}

// NEU for Gesamtpeakzeit 10 ends here ******************************************************************* 


if (diastime50>0 || systime50>0){
	peaktime50=peaktime50+1/fps;
	peaktime50old=peaktime50;
}
 else {peaktime50=0;}

if(systime50==(1/fps)){peaktime50=(1/fps);}

// NEU for Gesamtpeakzeit 50 starts here *****************************************************************

if (peaktime50old>peaktime50){
	peaktime50abs=peaktime50old;
	peaktime50old=0;
	btime50=Array.concat(btime50, peaktime50abs);
}
 else {peaktime50abs="";}

// NEU for Gesamtpeakzeit 50 ends here ******************************************************************* 


if (diastime90>0 || systime90>0){
	peaktime90=peaktime90+1/fps;
	peaktime90old=peaktime90;
}
 else {peaktime90=0;}

if(systime90==(1/fps)){peaktime90=(1/fps);}

 // NEU for Gesamtpeakzeit 90 starts here *****************************************************************

if (peaktime90old>peaktime90){
	peaktime90abs=peaktime90old;
	peaktime90old=0;
	btime90=Array.concat(btime90, peaktime90abs);
}
 else {peaktime90abs="";}

// NEU for Gesamtpeakzeit 90 ends here ******************************************************************* 


// ************************** Calculation of peak times ends here ***************************


//******************** Calculation of the systoles and diastoles for the thresholds (user, 10, 50 and 90%) ends here *************************

btimeold=btimea;
btimea=btimea+(1/fps);


if (systimeabs==0) {
systimeabs="";
}


if (systime10abs==0) {
systime10abs="";
}


if (systime50abs==0) {
systime50abs="";
}


if (systime90abs==0) {
systime90abs="";
}


if(minima[min]==rr) {
print((rr+1) + "\t" + rr/fps + "\t" + movalues[rr] + "\t" + movalues[rr]-pmin + "\t" + ampNorm + "\t" + (movalues[rr+1]-movalues[rr]) + "\t"  + abs((movalues[rr+1]-movalues[rr])) + "\t" + values[rr] + "\t" + (values[rr]-speedmin) + "\t" + "0" + "\t" + "\t" + round(pmax+1) + "\t" + btimea + "\t" + "\t" + "\t" + (movalues[truncmin[ampl]]+(threshold*maxamplitudes[ampl])) + "\t" + peaktime + "\t" + peaktimeabs + "\t" + systime + "\t" + systimeabs + "\t" + diastime + "\t" + diastimeabs + "\t" + (movalues[truncmin[ampl]]+(thresh10*maxamplitudes[ampl])) + "\t" + peaktime10 + "\t" + peaktime10abs + "\t" + systime10 + "\t" + systime10abs + "\t" + diastime10 + "\t" + diastime10abs + "\t" + (movalues[truncmin[ampl]]+(thresh50*maxamplitudes[ampl])) + "\t" + peaktime50 + "\t" + peaktime50abs + "\t" + systime50 + "\t" + systime50abs + "\t" + diastime50 + "\t" + diastime50abs + "\t" + (movalues[truncmin[ampl]]+(thresh90*maxamplitudes[ampl])) + "\t" + peaktime90 + "\t" + peaktime90abs + "\t" + systime90 + "\t" + systime90abs + "\t" + diastime90 + "\t" + diastime90abs);


min=min+1;
if (min>minima.length-1){
	min=minima.length-1;
}

} else if (maxima[max]==rr) {
spacer="";
if (rr==0){btimea=0; spacer=0;}
print((rr+1) + "\t" + rr/fps + "\t" + movalues[rr] + "\t" + movalues[rr]-pmin + "\t" + ampNorm + "\t" + (movalues[rr+1]-movalues[rr]) + "\t" + abs((movalues[rr+1]-movalues[rr])) + "\t" + values[rr] + "\t" + (values[rr]-speedmin) + "\t" + round(pmax+1) + "\t" + maxamplitudes[ampl] + "\t" + "0" + "\t" + btimea + "\t" +spacer+ "\t"+ beats + "\t" + (movalues[truncmin[ampl]]+(threshold*maxamplitudes[ampl])) + "\t" + peaktime + "\t" + peaktimeabs + "\t" +  systime + "\t" + systimeabs + "\t" + diastime + "\t" + diastimeabs + "\t" + (movalues[truncmin[ampl]]+(thresh10*maxamplitudes[ampl])) + "\t" + peaktime10 + "\t" + peaktime10abs + "\t" + systime10 + "\t" + systime10abs + "\t" + diastime10 + "\t" + diastime10abs + "\t" + (movalues[truncmin[ampl]]+(thresh50*maxamplitudes[ampl])) + "\t" + peaktime50 + "\t" + peaktime50abs + "\t" + systime50 + "\t" + systime50abs + "\t" + diastime50 + "\t" + diastime50abs + "\t" + (movalues[truncmin[ampl]]+(thresh90*maxamplitudes[ampl])) + "\t" + peaktime90 + "\t" + peaktime90abs + "\t" + systime90 + "\t" + systime90abs + "\t" + diastime90 + "\t" + diastime90abs);
beattimes=Array.concat(beattimes,btimea);
btimea=0;
beats=beats+1;
max=max+1;
if (max>maxima.length-1){
	max=maxima.length-1;
}

} else {
print((rr+1) + "\t" + rr/fps + "\t" + movalues[rr] + "\t" + movalues[rr]-pmin + "\t" + ampNorm + "\t" + (movalues[rr+1]-movalues[rr]) + "\t" + abs((movalues[rr+1]-movalues[rr])) + "\t" + values[rr] + "\t" + (values[rr]-speedmin) + "\t" + "0" + "\t" + "\t" + "0" + "\t" + btimea + "\t" + btimeabs + "\t" + "\t"  + (movalues[truncmin[ampl]]+(threshold*maxamplitudes[ampl])) + "\t"  + peaktime + "\t" + peaktimeabs + "\t" + systime + "\t" + systimeabs + "\t" + diastime + "\t" + diastimeabs + "\t" + (movalues[truncmin[ampl]]+(thresh10*maxamplitudes[ampl])) + "\t" + peaktime10 + "\t" + peaktime10abs + "\t" + systime10 + "\t" + systime10abs + "\t" + diastime10 + "\t" + diastime10abs + "\t" + (movalues[truncmin[ampl]]+(thresh50*maxamplitudes[ampl])) + "\t" + peaktime50 + "\t" + peaktime50abs + "\t" + systime50 + "\t" + systime50abs + "\t" + diastime50 + "\t" + diastime50abs + "\t" + (movalues[truncmin[ampl]]+(thresh90*maxamplitudes[ampl])) + "\t" + peaktime90 + "\t" + peaktime90abs + "\t" + systime90 + "\t" + systime90abs + "\t" + diastime90 + "\t" + diastime90abs);
}

if (rr<movalues.length && ampl<truncmax.length-1){
	
if   (rr>=(truncmin[ampl+1])) {

	ampl=ampl+1;

}
}

// NEU for GesamtBeatzeit starts here *****************************************************************
 if (btimeold>btimea){
	btimeabs=btimeold+1/fps;
	btimeold=0;
}
 else {btimeabs="";}
// NEU for GesamtBeatzeit ends here ******************************************************************* 


// Hier ender der obige rr-loop

}


// ****************** Getting statistics from the arrays starts here *********************************

Array.getStatistics(beattimes, beattimesmin, beattimesmax, beattimesmean, beattimesstdDev);
Array.getStatistics(maxamplitudes, maxamplitudesmin, maxamplitudesmax, maxamplitudesmean, maxamplitudesstd);

Array.getStatistics(btimeuser, btimeusermin, btimeusermax, btimeusermean, btimeuserstd);
Array.getStatistics(btime10, btime10min, btime10max, btime10mean, btime10std);
Array.getStatistics(btime50, btime50min, btime50max, btime50mean, btime50std);
Array.getStatistics(btime90, btime90min, btime90max, btime90mean, btime90std);

Array.getStatistics(sysuser, sysusermin, sysusermax, sysusermean, sysuserstd);
Array.getStatistics(sys10, sys10min, sys10max, sys10mean, sys10std);
Array.getStatistics(sys50, sys50min, sys50max, sys50mean, sys50std);
Array.getStatistics(sys90, sys90min, sys90max, sys90mean, sys90std);

Array.getStatistics(diasuser, diasusermin, diasusermax, diasusermean, diasuserstd);
Array.getStatistics(dias10, dias10min, dias10max, dias10mean, dias10std);
Array.getStatistics(dias50, dias50min, dias50max, dias50mean, dias50std);
Array.getStatistics(dias90, dias90min, dias90max, dias90mean, dias90std);

frequencies=Array.copy(beattimes);
frequencies=Array.deleteValue(frequencies,0);

for (freq = 0; freq < frequencies.length; freq++) {
frequencies[freq]=1/frequencies[freq];	
}

Array.getStatistics(frequencies, freqmin, freqmax, freqmean, freqstd);


// ****************** Getting statistics from the arrays ends here **********************


// **************** Printing the final statistics with the first and last events starts here ******************

print(" ");
print("Statistics INCLUDING the first and last event");
print(" ");

print("Beats counted: " + "\t" + maxima.length);
print(" ");

print("\t" + "Min" + "\t" + "Max" + "\t" + "Mean" + "\t" + "StdDev");

print("Beattimes [sec]" + "\t" + beattimesmin + "\t" + beattimesmax + "\t" + beattimesmean + "\t" + beattimesstdDev);
print("Frequency [1/sec]" + "\t" + freqmin + "\t" + freqmax + "\t" + freqmean + "\t" + freqstd);

print("Amplitudes [a.u.] " + "\t" + maxamplitudesmin + "\t" + maxamplitudesmax + "\t" + maxamplitudesmean + "\t" + maxamplitudesstd);

print("Peaktimes user [sec] " + "\t" + btimeusermin + "\t" + btimeusermax + "\t" + btimeusermean + "\t" + btimeuserstd);
print("Systoles user [sec] " + "\t" + sysusermin + "\t" + sysusermax + "\t" + sysusermean + "\t" + sysuserstd);
print("Diastoles user [sec] " + "\t" + diasusermin + "\t" + diasusermax + "\t" + diasusermean + "\t" + diasuserstd);

print("Peaktimes Thr10% [sec]" + "\t" + btime10min + "\t" + btime10max + "\t" + btime10mean + "\t" + btime10std);
print("Systoles Thr10% [sec] " + "\t" + sys10min + "\t" + sys10max + "\t" + sys10mean + "\t" + sys10std);
print("Diastoles Thr10% [sec] " + "\t" + dias10min + "\t" + dias10max + "\t" + dias10mean + "\t" + dias10std);

print("Peaktimes Thr50% [sec]" + "\t" + btime50min + "\t" + btime50max + "\t" + btime50mean + "\t" + btime50std);
print("Systoles Thr50% [sec] " + "\t" + sys50min + "\t" + sys50max + "\t" + sys50mean + "\t" + sys50std);
print("Diastoles Thr50% [sec] " + "\t" + dias50min + "\t" + dias50max + "\t" + dias50mean + "\t" + dias50std);

print("Peaktimes Thr90% [sec]" + "\t" + btime90min + "\t" + btime90max + "\t" + btime90mean + "\t" + btime90std);
print("Systoles Thr90% [sec] " + "\t" + sys90min + "\t" + sys90max + "\t" + sys90mean + "\t" + sys90std);
print("Diastoles Thr90% [sec] " + "\t" + dias90min + "\t" + dias90max + "\t" + dias90mean + "\t" + dias90std);

print(" ");
print("Ratios:");
print(" ");
print("Systole/diastole [user] mean:" + "\t" + sysusermean/diasusermean);
print("Systole/diastole [Thr10%] mean:" + "\t" + sys10mean/dias10mean);
print("Systole/diastole [Thr50%] mean:" + "\t" + sys50mean/dias50mean);
print("Systole/diastole [Thr90%] mean:" + "\t" + sys90mean/dias90mean);
print(" ");
print("Amplitude mean/systole [user] mean:" + "\t" + maxamplitudesmean/sysusermean);
print("Amplitude mean/systole [Thr10%] mean:" + "\t" + maxamplitudesmean/sys10mean);
print("Amplitude mean/systole [Thr50%] mean:" + "\t" + maxamplitudesmean/sys50mean);
print("Amplitude mean/systole [Thr90%] mean:" + "\t" + maxamplitudesmean/sys90mean);
print(" ");
print("Amplitude mean/diastole [user] mean:" + "\t" + maxamplitudesmean/diasusermean);
print("Amplitude mean/diastole [Thr10%] mean:" + "\t" + maxamplitudesmean/dias10mean);
print("Amplitude mean/diastole [Thr50%] mean:" + "\t" + maxamplitudesmean/dias50mean);
print("Amplitude mean/diastole [Thr90%] mean:" + "\t" + maxamplitudesmean/dias90mean);
print(" ");
print("Amplitude mean/peaktime [user] mean:" + "\t" + maxamplitudesmean/btimeusermean);
print("Amplitude mean/peaktime [Thr10%] mean:" + "\t" + maxamplitudesmean/btime10mean);
print("Amplitude mean/peaktime [Thr50%] mean:" + "\t" + maxamplitudesmean/btime50mean);
print("Amplitude mean/peaktime [Thr90%] mean:" + "\t" + maxamplitudesmean/btime90mean);


// **************** Printing the final statistics with the first and last events ends here ******************


// **************** Printing the final statistics WITHOUT the first and last events starts here ******************


beattimesshort=Array.slice(beattimes, 1,beattimes.length-1);
maxamplitudesshort=Array.slice(maxamplitudes, 1,maxamplitudes.length-1);

btimeusershort=Array.slice(btimeuser, 1, btimeuser.length-1);
btime10short=Array.slice(btime10, 1, btime10.length-1);
btime50short=Array.slice(btime50, 1, btime50.length-1);
btime90short=Array.slice(btime90, 1, btime90.length-1);

sysusershort=Array.slice(sysuser, 1,sysuser.length-1);
sys10short=Array.slice(sys10, 1, sys10.length-1);
sys50short=Array.slice(sys50, 1, sys50.length-1);
sys90short=Array.slice(sys90, 1, sys90.length-1);


diasusershort=Array.slice(diasuser, 1, diasuser.length-1);
dias10short=Array.slice(dias10, 1, dias10.length-1);
dias50short=Array.slice(dias50, 1, dias50.length-1);
dias90short=Array.slice(dias90, 1, dias90.length-1);


Array.getStatistics(beattimesshort, beattimesshortmin, beattimesshortmax, beattimesshortmean, beattimesshortstdDev);
Array.getStatistics(maxamplitudesshort, maxamplitudesshortmin, maxamplitudesshortmax, maxamplitudesshortmean, maxamplitudesshortstd);

Array.getStatistics(btimeusershort, btimeusershortmin, btimeusershortmax, btimeusershortmean, btimeusershortstd);
Array.getStatistics(btime10short, btime10shortmin, btime10shortmax, btime10shortmean, btime10shortstd);
Array.getStatistics(btime50short, btime50shortmin, btime50shortmax, btime50shortmean, btime50shortstd);
Array.getStatistics(btime90short, btime90shortmin, btime90shortmax, btime90shortmean, btime90shortstd);

Array.getStatistics(sysusershort, sysusershortmin, sysusershortmax, sysusershortmean, sysusershortstd);
Array.getStatistics(sys10short, sys10shortmin, sys10shortmax, sys10shortmean, sys10shortstd);
Array.getStatistics(sys50short, sys50shortmin, sys50shortmax, sys50shortmean, sys50shortstd);
Array.getStatistics(sys90short, sys90shortmin, sys90shortmax, sys90shortmean, sys90shortstd);

Array.getStatistics(diasusershort, diasusershortmin, diasusershortmax, diasusershortmean, diasusershortstd);
Array.getStatistics(dias10short, dias10shortmin, dias10shortmax, dias10shortmean, dias10shortstd);
Array.getStatistics(dias50short, dias50shortmin, dias50shortmax, dias50shortmean, dias50shortstd);
Array.getStatistics(dias90short, dias90shortmin, dias90shortmax, dias90shortmean, dias90shortstd);


frequenciesshort=Array.copy(beattimesshort);
for (freqshort = 0; freqshort < frequenciesshort.length; freqshort++) {
frequenciesshort[freqshort]=1/frequenciesshort[freqshort];	
}

Array.getStatistics(frequenciesshort, freqshortmin, freqshortmax, freqshortmean, freqshortstd);
print(" ");
print("Statistics WITHOUT the first and last event");
print(" ");

print("Beats counted: " + "\t" + maxima.length-2);
print(" ");

print("\t" + "Min" + "\t" + "Max" + "\t" + "Mean" + "\t" + "StdDev");

print("Beattimes [sec]" + "\t" + beattimesshortmin + "\t" + beattimesshortmax + "\t" + beattimesshortmean + "\t" + beattimesshortstdDev);
print("Frequency [1/sec]" + "\t" + freqshortmin + "\t" + freqshortmax + "\t" + freqshortmean + "\t" + freqshortstd);

print("Amplitudes [a.u.] " + "\t" + maxamplitudesshortmin + "\t" + maxamplitudesshortmax + "\t" + maxamplitudesshortmean + "\t" + maxamplitudesshortstd);

print("Peaktimes user [sec] " + "\t" + btimeusershortmin + "\t" + btimeusershortmax + "\t" + btimeusershortmean + "\t" + btimeusershortstd);
print("Systoles user [sec] " + "\t" + sysusershortmin + "\t" + sysusershortmax + "\t" + sysusershortmean + "\t" + sysusershortstd);
print("Diastoles user [sec] " + "\t" + diasusershortmin + "\t" + diasusershortmax + "\t" + diasusershortmean + "\t" + diasusershortstd);

print("Peaktimes Thr10% [sec]" + "\t" + btime10shortmin + "\t" + btime10shortmax + "\t" + btime10shortmean + "\t" + btime10shortstd);
print("Systoles Thr10% [sec] " + "\t" + sys10shortmin + "\t" + sys10shortmax + "\t" + sys10shortmean + "\t" + sys10shortstd);
print("Diastoles Thr10% [sec] " + "\t" + dias10shortmin + "\t" + dias10shortmax + "\t" + dias10shortmean + "\t" + dias10shortstd);

print("Peaktimes Thr50% [sec]" + "\t" + btime50shortmin + "\t" + btime50shortmax + "\t" + btime50shortmean + "\t" + btime50shortstd);
print("Systoles Thr50% [sec] " + "\t" + sys50shortmin + "\t" + sys50shortmax + "\t" + sys50shortmean + "\t" + sys50shortstd);
print("Diastoles Thr50% [sec] " + "\t" + dias50shortmin + "\t" + dias50shortmax + "\t" + dias50shortmean + "\t" + dias50shortstd);

print("Peaktimes Thr90% [sec]" + "\t" + btime90shortmin + "\t" + btime90shortmax + "\t" + btime90shortmean + "\t" + btime90shortstd);
print("Systoles Thr90% [sec] " + "\t" + sys90shortmin + "\t" + sys90shortmax + "\t" + sys90shortmean + "\t" + sys90shortstd);
print("Diastoles Thr90% [sec] " + "\t" + dias90shortmin + "\t" + dias90shortmax + "\t" + dias90shortmean + "\t" + dias90shortstd);

print(" ");
print("Ratios:");
print(" ");
print("Systole/diastole [user] mean:" + "\t" + sysusershortmean/diasusermean);
print("Systole/diastole [Thr10%] mean:" + "\t" + sys10shortmean/dias10shortmean);
print("Systole/diastole [Thr50%] mean:" + "\t" + sys50shortmean/dias50shortmean);
print("Systole/diastole [Thr90%] mean:" + "\t" + sys90shortmean/dias90shortmean);
print(" ");
print("Amplitude mean/systole [user] mean:" + "\t" + maxamplitudesshortmean/sysusershortmean);
print("Amplitude mean/systole [Thr10%] mean:" + "\t" + maxamplitudesshortmean/sys10shortmean);
print("Amplitude mean/systole [Thr50%] mean:" + "\t" + maxamplitudesshortmean/sys50shortmean);
print("Amplitude mean/systole [Thr90%] mean:" + "\t" + maxamplitudesshortmean/sys90shortmean);
print(" ");
print("Amplitude mean/diastole [user] mean:" + "\t" + maxamplitudesshortmean/diasusershortmean);
print("Amplitude mean/diastole [Thr10%] mean:" + "\t" + maxamplitudesshortmean/dias10shortmean);
print("Amplitude mean/diastole [Thr50%] mean:" + "\t" + maxamplitudesshortmean/dias50shortmean);
print("Amplitude mean/diastole [Thr90%] mean:" + "\t" + maxamplitudesshortmean/dias90shortmean);
print(" ");
print("Amplitude mean/peaktime [user] mean:" + "\t" + maxamplitudesshortmean/btimeusershortmean);
print("Amplitude mean/peaktime [Thr10%] mean:" + "\t" + maxamplitudesshortmean/btime10shortmean);
print("Amplitude mean/peaktime [Thr50%] mean:" + "\t" + maxamplitudesshortmean/btime50shortmean);
print("Amplitude mean/peaktime [Thr90%] mean:" + "\t" + maxamplitudesshortmean/btime90shortmean);
print(" ");

}else{print("\nProblematic cell skipped!\n"); SkippedCells=Array.concat(SkippedCells, strg);}

if (forceframe==true){
print("Ref. Frame forced: " + lowfrm);
}

if (forceframe==false){
print("Reference Frame: " + "\t" + lowfrm);
}


print("Framerate [1/s]:" + "\t" + fps);

// Hier endet die Option, damit keine leeren Arrays ausgewertet werden


// **************** Printing the final statistics WITHOUT the first and last events ends here ******************



//******************************Printing the analyzed data from the array ends here ****************************


//******************************Plotting the analyzed data starts here ************************************


allminima=newArray(movalues.length);
allmaxima=newArray(movalues.length);

Array.fill(allminima, 0);
Array.fill(allmaxima, 0);

for (allmax=0; allmax<maxima.length; allmax++){
	allmaxima[maxima[allmax]]=round(pmax+1);
	}


for (allmin=0; allmin<minima.length; allmin++){
	allminima[minima[allmin]]=round(pmax+1);
	}


times=newArray(movalues.length);

for (tt=0; tt<movalues.length; tt++) {
times[tt]=tt/fps;
}


print(" \n");
print(" \n");


wdh=20*slicenumber;

if (wdh>8000){
wdh=8000;
}


run("Profile Plot Options...", "width=wdh height=700 font=20 minimum=0 maximum=0 draw draw_ticks interpolate sub-pixel");

shortname=replace(baseName, "-diff", "");

Plot.create(shortname, "Time [sec]", "Amplitude [a.u.]", times, movalues);
setJustification("center");

Plot.addText(shortname, 0.5, 0);
Plot.addText("Amplitude (black); ", 0.1, 0);
Plot.addText("Maxima (red); ", 0.2, 0);
Plot.addText("Minima (green); ", 0.3, 0);
Plot.setColor("red"); 
Plot.add("line", times, allmaxima);
Plot.setColor("green");
Plot.add("line", times, allminima);
Plot.setColor("black");


Plot.show();
Plot.makeHighResolution(shortname, 5.0, "enable");
saveAs("Jpeg", dataDir+shortname+"-plot large.jpg");
close();


run("Profile Plot Options...", "width=1920 height=700 font=12 minimum=0 maximum=0 draw draw_ticks interpolate sub-pixel");
Plot.create(shortname, "Time [sec]", "Amplitude [a.u.]", times, movalues);

setJustification("center");

Plot.addText(shortname, 0.60, 0);
Plot.addText("Amplitude (black); ", 0.1, 0);
Plot.addText("Maxima (red); ", 0.27, 0);
Plot.addText("Minima (green); ", 0.42, 0);
Plot.setColor("red"); 
Plot.add("line", times, allmaxima);
Plot.setColor("green");
Plot.add("line", times, allminima);
Plot.setColor("black");

Plot.update();
Plot.makeHighResolution(shortname, 1.6, "enable");
saveAs("Jpeg", dataDir+shortname+"-plot small.jpg");
close();


//********************************* Plot Animation starts here, if the user selected it, cell is displayed synchronized with its amplitude **********************************

//****************************** The amplitude-plot is produced step by step and the isolated cell is merged with the according image until the whole video is finished **********************


if (vidout==true){

shortname=replace(baseName, "-diff", "");

Array.getStatistics(movalues, min, max, mean, std);

run("Profile Plot Options...", "width=1920 height=800 font=20 minimum=0 maximum="+round(max+1)+" draw draw_ticks interpolate sub-pixel");

for (p=1; p<slicenumber; p++){

Plot.create(shortname, "Time [sec]", "Amplitude [a.u.]", times, movalues);
Plot.setLimits((150/fps)+p/fps-(1/fps)-(150/fps), p/fps-(150/fps), 0, round(max+1));
setJustification("center");
Plot.addText(shortname, 0.5, 0.05);

Plot.update();

if (p==1) {
run("Duplicate...", "title=Plotanimated");
getDimensions(width, height, channels, slices, frames); 
w=width;
h=height;
}

setBatchMode(true);

selectWindow(shortname);

run("Duplicate...", " ");
run("Size...", "width=w height=h constrain average interpolation=Bilinear");
run("Copy");
run("Close");
selectWindow("Plotanimated");
run("Add Slice");
run("Paste");

}

setBatchMode(false);

selectWindow("Plotanimated");
setSlice(1);
run("Delete Slice");
run("Delete Slice");

open(isolDir+baseName+"-isolated"+filetype);

getDimensions(width, height, channels, slices, frames);

if (width>400){
run("Size...", "width=400 height=500 constrain average interpolation=Bilinear");
}

if ((width/height)>1.8) {
run("Rotate 90 Degrees Left");
}

selectWindow(baseName+"-isolated"+filetype);
setSlice(1);
run("Delete Slice");

run("Combine...", "stack1=["+baseName+"-isolated"+filetype+"]"+" stack2=Plotanimated");


selectWindow("Combined Stacks");

setSlice(nSlices);
run("Delete Slice");

run("AVI... ", "compression=JPEG frame=25 save=["+dataDir+shortname+" animated (25fps)"+filetype+"]");

}

// ************************** Plot animation ends here ******************************


// ****************************** Plotting the analyzed data ends here ************************************


// *********************************** Store the amplitudes as arrays for further processing starts here ******************************


movalues=Array.trim(movalues, movalues.length-1);

mostr="amplitudes=newArray(";

for (most=0; most<movalues.length; most++) {
if(most<movalues.length-1) {mostr=mostr + movalues[most] + ",";}
if(most==movalues.length-1) {mostr=mostr + movalues[most];}
}

mostr=mostr+");";

if (isOpen("Ampltudes")==false) {

amplwinname = "[Ampltudes]";
  run("New... ", "name=" + amplwinname + " type=Table");
  
}


print(amplwinname, baseName);

print(amplwinname, " ");

print(amplwinname, mostr);

print(amplwinname, " ");



// *********************************** Store the amplitudes as arrays for further processing ends here *****************************



while (nImages>0) { 
          selectImage(nImages); 
          close(); 
}


}
}
}


// **************************** Automatic plotting of the data ends here ***********************************


//*************************** Saving the extracted data starts here, setings, date, time and ImageJ-version are atttached ***********************************


dest=dataDir+"Results "+year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes+".txt";
dest2=dataDir+"Amplitudes only "+year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes+".txt";

selectWindow("Log");

print("***** Settings *****");
print(" \n");

if(batching==false || manualROIs==false){
print("Lower threshold:" + "\t" + thrslow);
print("Cellsize:" + "\t" + cellsize);
}


if(batching==true && manualROIs==false){
print("Batch List:");
print("Filename" + "\t" + "Size" + "\t" + "Threshold");

for (lst = 0; lst < batchsample.length; lst++) {
print(batchsample[lst] + "\t" + batchsize[lst] + "\t" + batchthr[lst]);	
}

print(" \n");
}


if(manualROIs==true){
print("Manual ROI-selection used");
print(" \n");
}


if(manualROIs==true){
print("ROI-List:");
print("Filename" + "\t" + "Cell#" + "\t" + "Ref-Frame" + "\t" + "ROI-File" + "\t" + "Diff-File");

for (lst = 0; lst < diffroisample.length; lst++) {
print(diffroisample[lst] + "\t" + diffroicells[lst] + "\t" + diffroirefframes[lst] + "\t" + diffrois[lst] + "\t" + difffiles[lst]);	
}

print(" \n");
}


print("[%] of Max recognized as beat:" + "\t" + asbeat*100);
print("Detection:" + "\t" + detection);
print("ImageJ-version:" + "\t" + getVersion());


if (smoother==true) {
print("Smoothing WAS applied");
}

if (smoother==false) {
print("NO smoothing applied");
}

print("Evaluation date and time:" + "\t" + year + "-" + MonthNames[month] + "-" + dayOfMonths + "-" + hours + "h" + minutes);

// Print the above skipped cells here...

print("\n\nSkipped cells:\n");

for (skpd=0; skpd<SkippedCells.length; skpd++) {
print(SkippedCells[skpd]);
}


saveAs("Text", dest); 


if (isOpen("Ampltudes")) {

selectWindow("Ampltudes");
saveAs("Text", dest2);
}




// *************************** Saving the plotted data ends here *********************************



// ********************** This closes the remaining open windows (if they are open at all) ***********************



if (isOpen("Ampltudes")) {
selectWindow("Ampltudes");
run("Close");
}


if (isOpen("B&C")) {
     selectWindow("B&C");
     run("Close");
}


if (isOpen("baseName*")) {
     selectWindow("baseName*");
     run("Close");
}


if (isOpen("Results")) {
     selectWindow("Results");
     run("Close");
}


if (isOpen("Log")) {
     selectWindow("Log");
     run("Close");
}


if (isOpen("ROI Manager")) {
     selectWindow("ROI Manager");
     run("Close");
}


if (isOpen("Summary")) {
     selectWindow("Summary");
     run("Close");
}


//********************** End of closing possible opened windows **************


}  


// **************** Evaluation ends here ****************************



//******************** Re-Evaluation starts here, extract the filenames and put the according amplitudes into an array for re-processing of the data *********************


if (option == "6. Re-Evaluation") {


pathfile=File.openDialog("Please choose the <Amplitudes only.txt> \nor <Amplitudes (selected).txt> file to be opened:");
data=File.openAsString(pathfile);
print(pathfile);
print("");

//***************** extract path from opened file start here ************************

strt=lastIndexOf(pathfile, "\\");
rmve=substring(pathfile, strt+1, lengthOf(pathfile)); 
dir=replace(pathfile, rmve, "");
rmve=replace(rmve, ".txt", "");

//***************** extract path from opened file ends here ************************


titles=newArray();
amplits=newArray();

lines=split(data,"\n");


//************** is it an amplitudes Only file, check starts here
ampltest="false";
atest=0;
while(ampltest=="false" && atest<lines.length){if(indexOf(lines[atest], "amplitudes=newArray(")<0){ampltest="false";}else{ampltest="true";}{atest++;}}
if (ampltest=="false") {exit("Sorry, but this seems not to be an" + "\n" + "<Amplitudes only>-File." + "\n" + "Please choose one.");}

//**************** is it an amplitudes only file, check ends here


count=0;
for (i = 0; i < lines.length; i+=4) {
titles=Array.concat(titles,lines[i]);	
count++;
}

count=0;
for (i = 2; i < lines.length; i+=4) {
amplits=Array.concat(amplits,lines[i]);	
count++;
}


for (runs = 0; runs < 500000; runs++) {
	


// ******************************* Please apply your settings here; you may also change the default-values *******************************

if (runs==0) {

Dialog.create("Please apply your parameters");

Dialog.addNumber("Detection", 20);
Dialog.addNumber("Threshold 1 [%]", 10);
Dialog.addNumber("Threshold 2 [%]", 20);
Dialog.addNumber("Threshold 3 [%]", 50);
Dialog.addNumber("Threshold 4 [%]", 90);
Dialog.addNumber("Framerate  [fps]", 120);

Dialog.show();
detection=Dialog.getNumber();
thresh0=Dialog.getNumber()/100;
thresh1=Dialog.getNumber()/100;
thresh2=Dialog.getNumber()/100;
thresh3=Dialog.getNumber()/100;
fps=Dialog.getNumber();

if(detection<1.1){detection=1.1;}

print("Applied Threshold 1: " + thresh0*100 + "%");
print("Applied Threshold 2: " + thresh1*100 + "%");
print("Applied Threshold 3: " + thresh2*100 + "%");
print("Applied Threshold 4: " + thresh3*100 + "%");
print("Applied Framerate: " + fps);
print("Applied Detection: " + detection);

}

// ******************************* Mark the previous settings starts here, settings are remembered for the next evaluation *******************************

if (runs>0) {
	
Dialog.create("Please apply your parameters");

Dialog.addNumber("Detection", detection);
Dialog.addNumber("Threshold 1 [%]", thresh0*100);
Dialog.addNumber("Threshold 2 [%]", thresh1*100);
Dialog.addNumber("Threshold 3 [%]", thresh2*100);
Dialog.addNumber("Threshold 4 [%]", thresh3*100);
Dialog.addNumber("Framerate  [fps]", fps);

Dialog.show();
detection=Dialog.getNumber();
thresh0=Dialog.getNumber()/100;
thresh1=Dialog.getNumber()/100;
thresh2=Dialog.getNumber()/100;
thresh3=Dialog.getNumber()/100;
fps=Dialog.getNumber();

if(detection<1.1){detection=1.1;}

print("Applied Threshold 1: " + thresh0*100 + "%");
print("Applied Threshold 2: " + thresh1*100 + "%");
print("Applied Threshold 3: " + thresh2*100 + "%");
print("Applied Threshold 4: " + thresh3*100 + "%");
print("Applied Framerate: " + fps);
print("Applied Detection: " + detection);

}

// ******************************* Mark the previous settings ends here *******************************

// ****************************************************** End of user-settings *******************************************



//************** Select your data and convert it into an array for further evaluation starts here **************


Dialog.create("Select your data");
Dialog.addChoice("Please select:", titles);
Dialog.show();
option=Dialog.getChoice();

print("");
print("Selected data: " + option);
print("");

elmt=0;
while (option!=titles[elmt]) {elmt++;}

amplitudes=amplits[elmt];
amplitudes=replace(amplitudes, "amplitudes=newArray", "");
amplitudes=replace(amplitudes, "\\);", "");
amplitudes=replace(amplitudes, "\\(", "");
amplitudes=split(amplitudes, ",");


for (pf=0; pf<amplitudes.length; pf++) {
aa=parseFloat(amplitudes[pf]);

if (isNaN(aa)) {
	aa = 0;
}

amplitudes[pf]=aa;
}

//*************** Select your data and convert it into an array for further evaluation ends here ******************

// ************ Here, Re-evaluation of the data with the applied parameters starts ********************



Array.getStatistics(amplitudes, pmin, pmax, pmean, pstdDev);

ampRange = pmax - pmin;

if (isNaN(ampRange)) {
	ampRange = 0;
}

if (ampRange < 0) {
	ampRange = 0;
}

detectDelta = 0;

if (detection > 0) {
	detectDelta = ampRange/detection;
}

maxima=Array.findMaxima(amplitudes, detectDelta);
minima=Array.findMinima(amplitudes, detectDelta);
Array.sort(maxima);
Array.sort(minima);

min=0;
max=0;
beats=1;
btimea=0;
btimeabs="";
btimeold=0;
beattimes=newArray();
threshold=thresh0;



//*************** Here, all the minima are paired with the according (following) maxima and the amplitudes are calculated **************************** 


truncmin=Array.copy(minima);
truncmax=Array.copy(maxima);

if(truncmin.length<1 || truncmax.length<1){
print(" ");
print("Sorry, no maxima/minima were detected with the applied settings!");
exit();
}

if (truncmax[0]<truncmin[0]){
truncmax=Array.slice(truncmax,1,truncmax.length);
}


if(truncmax.length>truncmin.length){
	truncmax=Array.slice(truncmax,0,truncmin.length);
}

if(truncmax.length<truncmin.length){
	truncmin=Array.slice(truncmin,0,truncmax.length);
}


maxamplitudes=newArray(truncmax.length);

for (www=0; www<truncmax.length; www++){
	maxamplitudes[www]=amplitudes[truncmax[www]]-amplitudes[truncmin[www]];
}

//********************* Printing of the data starts here *******************

// Create Arrays that contain the transition points before and after maxima for the different thresholds starts here

systuserstart=newArray(truncmax.length);
diastuserend=newArray(truncmax.length);

syst10start=newArray(truncmax.length);
diast10end=newArray(truncmax.length);

syst50start=newArray(truncmax.length);
diast50end=newArray(truncmax.length);

syst90start=newArray(truncmax.length);
diast90end=newArray(truncmax.length);


for (transition = 0; transition < truncmax.length; transition++) {

//amplitudes[truncmin[ampl]]+(thresh10*maxamplitudes[ampl]

//thresh0
dropleft=truncmax[transition];
dropright=truncmax[transition];
while(dropleft>0 && amplitudes[dropleft]>((maxamplitudes[transition])*thresh0)+amplitudes[truncmin[transition]]){dropleft=dropleft-1;}
while(dropright<amplitudes.length-1 && amplitudes[dropright]>((maxamplitudes[transition])*thresh0)+amplitudes[truncmin[transition]]){dropright++;}
systuserstart[transition]=dropleft;
diastuserend[transition]=dropright;

//thresh1
dropleft=truncmax[transition];
dropright=truncmax[transition];
while(dropleft>0 && amplitudes[dropleft]>((maxamplitudes[transition])*thresh1)+amplitudes[truncmin[transition]]){dropleft=dropleft-1;}
while(dropright<amplitudes.length-1 && amplitudes[dropright]>((maxamplitudes[transition])*thresh1)+amplitudes[truncmin[transition]]){dropright++;}
syst10start[transition]=dropleft;
diast10end[transition]=dropright;


//thresh2
dropleft=truncmax[transition];
dropright=truncmax[transition];
while(dropleft>0 && amplitudes[dropleft]>((maxamplitudes[transition])*thresh2)+amplitudes[truncmin[transition]]){dropleft=dropleft-1;}
while(dropright<amplitudes.length-1 && amplitudes[dropright]>((maxamplitudes[transition])*thresh2)+amplitudes[truncmin[transition]]){dropright++;}
syst50start[transition]=dropleft;
diast50end[transition]=dropright;

//thresh3
dropleft=truncmax[transition];
dropright=truncmax[transition];
while(dropleft>0 && amplitudes[dropleft]>((maxamplitudes[transition])*thresh3)+amplitudes[truncmin[transition]]){dropleft=dropleft-1;}
while(dropright<amplitudes.length-1 && amplitudes[dropright]>((maxamplitudes[transition])*thresh3)+amplitudes[truncmin[transition]]){dropright++;}
syst90start[transition]=dropleft;
diast90end[transition]=dropright;
	
}


// Create Arrays that contain the transition points before and after maxima for the different thresholds ends here



//********** defining necessary constants starts here ********************

ampl=0;

peaktime=0;
peaktimeabs=0;
peaktimeold=0;

peaktime10=0;
peaktime10abs=0;
peaktime10old=0;

peaktime50=0;
peaktime50abs=0;
peaktime50old=0;

peaktime90=0;
peaktime90abs=0;
peaktime90old=0;

systime=0;
systimeabs="";
systimeold=0;

diastime=0;
diastimeabs=0;
diastimeold=0;

systime10=0;
systime10abs="";
systime10old=0;

diastime10=0;
diastime10abs=0;
diastime10old=0;

systime50=0;
systime50abs="";
systime50old=0;

diastime50=0;
diastime50abs=0;
diastime50old=0;

systime90=0;
systime90abs="";
systime90old=0;

diastime90=0;
diastime90abs=0;
diastime90old=0;

sys10=newArray();
sys50=newArray();
sys90=newArray();
sysuser=newArray();

dias10=newArray();
dias50=newArray();
dias90=newArray();
diasuser=newArray();

btime10=newArray();
btime50=newArray();
btime90=newArray();
btimeuser=newArray();

thres0line=newArray(amplitudes.length-1);
thres1line=newArray(amplitudes.length-1);
thres2line=newArray(amplitudes.length-1);
thres3line=newArray(amplitudes.length-1);


//********** Defining necessary constants ends here ********************

// ************ Printing the headlines starts here ********************


print("Frame #" + "\t" + "Time [sec]" + "\t" + "Amplitude [a.u.]" + "\t" + "Amplitude baselined [a.u.]" + "\t" + "Amplitude baselined nomalized [a.u.]" + "\t" + "1st deriv. of amplitude" + "\t" + "Absol. 1st deriv. of amplitude" + "\t" + "Maxima [a.u.]" + "\t" + "Loc. Maxamplitudes [a.u.]" + "\t" + "Minima [a.u.]" + "\t" + "Since last beat [sec]" + "\t" + "Since last beat abs. time [sec]" + "\t" + "Sum of beats" + "\t" + "User threshold (" + thresh0*100 + "%) [a.u.]" + "\t" + "Peak time user [sec]" + "\t" + "Peak time user absolute [sec]" + "\t" + "Contract. interval (user) [sec]" + "\t" + "Contract. interval (user) absol. [sec]" + "\t" + "Relax. interval (user) [sec]" + "\t" + "Relax. interval (user) absol. [sec]" + "\t" + "Thr(" + thresh1*100 + "%) [a.u.]" + "\t" + "Peak time Thr(" + thresh1*100 + "%) [sec]" + "\t" + "Peak time Thr(" + thresh1*100 + "%) absol. [sec]" + "\t" + "Contract. interval Thr(" + thresh1*100 + "%) [sec]" + "\t" + "Contract. interval Thr(" + thresh1*100 + "%) absol. [sec]" + "\t" + "Relax. interval Thr(" + thresh1*100 + "%) [sec]" + "\t" + "Relax. interval Thr(" + thresh1*100 + "%) absol. [sec]" + "\t" + "Thr(" + thresh2*100 + "%) [a.u.]" + "\t" + "Peak time Thr(" + thresh2*100 + "%) [sec]" + "\t" + "Peak time Thr(" + thresh2*100 + "%) absol. [sec]" + "\t" + "Contract. interval Thr(" + thresh2*100 + "%) [sec]" + "\t" + "Contract. interval Thr(" + thresh2*100 + "%) absol. [sec]" + "\t" + "Relax. interval Thr(" + thresh2*100 + "%) [sec]" + "\t" + "Relax. interval Thr(" + thresh2*100 + "%) absol. [sec]" + "\t" + "Thr(" + thresh3*100 + "%) [a.u.]" + "\t" + "Peak time Thr(" + thresh3*100 + "%) [sec]" + "\t" + "Peak time Thr(" + thresh3*100 + "%) absol. [sec]" + "\t" + "Contract. interval Thr(" + thresh3*100 + "%) [sec]" + "\t" + "Contract. interval Thr(" + thresh3*100 + "%) absol. [sec]" + "\t" + "Relax. interval Thr(" + thresh3*100 + "%) [sec]" + "\t" + "Relax. interval Thr(" + thresh3*100 + "%) absol. [sec]");


// ************ Printing the headlines ends here

for (rr=0; rr<amplitudes.length-1; rr++){

ampNorm = 0;

if (ampRange > 0) {
	ampNorm = (amplitudes[rr]-pmin)/ampRange;
}

if (isNaN(ampNorm)) {
	ampNorm = 0;
}

//******************** Calculation of the systoles and diastoles for the thresholds (user, 10, 50 and 90%) starts here *************************


if (rr>systuserstart[ampl] && rr<truncmax[ampl]){
	systime=systime+1/fps; 
	systimeold=systime;
}
 else {systime=0;}

// NEU for Gesamtsystole starts here *****************************************************************
if (rr==truncmax[ampl] && systime==0 && systime<=systimeold){
	systimeabs=systimeold;
	sysuser=Array.concat(sysuser, systimeabs);
	
}
 else {systimeabs="";}
// NEU for Gesamtsystole ends here ******************************************************************* 

if (rr>=truncmax[ampl] && rr<diastuserend[ampl]){
	diastime=diastime+1/fps;
	diastimeold=diastime;

}
 else {diastime=0;}


// NEU for GesamtDIAstole starts here *****************************************************************
 if (diastimeold>diastime){
	diastimeabs=diastimeold;
	diastimeold=0;
        diasuser=Array.concat(diasuser, diastimeabs);
}
 else {diastimeabs="";}
// NEU for GesamtDIAstole ends here ******************************************************************* 


if (rr>syst10start[ampl] && rr<truncmax[ampl]){
	systime10=systime10+1/fps;
	systime10old=systime10;
}
 else {systime10=0;}

// NEU for Gesamtsystole 10 starts here *****************************************************************
if (rr==truncmax[ampl] && systime10==0 && systime10<=systime10old){
	systime10abs=systime10old;
	sys10=Array.concat(sys10, systime10abs);
	
}
 else {systime10abs="";}
// NEU for Gesamtsystole 10 ends here ******************************************************************* 



if (rr>=truncmax[ampl] && rr<diast10end[ampl]){
	diastime10=diastime10+1/fps;
	diastime10old=diastime10;
}
 else {diastime10=0;}



// NEU fuer GesamtDIAstole 10 starts here *****************************************************************
 if (diastime10old>diastime10){
	diastime10abs=diastime10old;
	diastime10old=0;
	dias10=Array.concat(dias10, diastime10abs);
}
 else {diastime10abs="";}
// NEU for GesamtDIAstole 10 ends here ******************************************************************* 

if (rr>syst50start[ampl] && rr<truncmax[ampl]){
	systime50=systime50+1/fps;
	systime50old=systime50;
}
 else {systime50=0;}

// NEU for Gesamtsystole 50 starts here *****************************************************************
if (rr==truncmax[ampl] && systime50==0 && systime50<=systime50old){
	systime50abs=systime50old;
	sys50=Array.concat(sys50, systime50abs);
	
}
 else {systime50abs="";}
// NEU for Gesamtsystole 50 ends here ******************************************************************* 

 
if (rr>1){
if (rr>=truncmax[ampl] && rr<diast50end[ampl]){
	diastime50=diastime50+1/fps;
	diastime50old=diastime50;
}
 else {diastime50=0;}}


// NEU fuer GesamtDIAstole 50 starts here *****************************************************************
 if (diastime50old>diastime50){
	diastime50abs=diastime50old;
	diastime50old=0;
	dias50=Array.concat(dias50, diastime50abs);
}
 else {diastime50abs="";}
// NEU for GesamtDIAstole 50 ends here ******************************************************************* 


if (rr>syst90start[ampl] && rr<truncmax[ampl]){
	systime90=systime90+1/fps;
	systime90old=systime90;
}
 else {systime90=0;}


// NEU for Gesamtsystole 90 starts here *****************************************************************
if (rr==truncmax[ampl] && systime90==0 && systime90<=systime90old){
	systime90abs=systime90old;
	sys90=Array.concat(sys90, systime90abs);
	
}
 else {systime90abs="";}
// NEU for Gesamtsystole 90 ends here ******************************************************************* 


if (rr>1){
if (rr>=truncmax[ampl] && rr<diast90end[ampl]){
	diastime90=diastime90+1/fps;
	diastime90old=diastime90;
}
 else {diastime90=0;}}


// NEU for GesamtDIAstole 90 starts here *****************************************************************
 if (diastime90old>diastime90){
	diastime90abs=diastime90old;
	diastime90old=0;
	dias90=Array.concat(dias90, diastime90abs);
}
 else {diastime90abs="";}
// NEU for GesamtDIAstole 90 ends here ******************************************************************* 


// ************************** Calculation of peak times starts here ***************************


if (diastime>0 || systime>0){
	peaktime=peaktime+1/fps;
	peaktimeold=peaktime;

}
 else {peaktime=0;}

if(systime==(1/fps)){peaktime=(1/fps);}

// NEU for Gesamtpeakzeit starts here *****************************************************************

if (peaktimeold>peaktime){
	peaktimeabs=peaktimeold;
	peaktimeold=0;
	btimeuser=Array.concat(btimeuser, peaktimeabs);
}
 else {peaktimeabs="";}

// NEU for Gesamtpeakzeit ends here ******************************************************************* 

if (diastime10>0 || systime10>0){
	peaktime10=peaktime10+1/fps;
	peaktime10old=peaktime10;
}
 else {peaktime10=0;}

if(systime10==(1/fps)){peaktime10=(1/fps);}

// NEU for Gesamtpeakzeit 10 starts here *****************************************************************

if (peaktime10old>peaktime10){
	peaktime10abs=peaktime10old;
	peaktime10old=0;
	btime10=Array.concat(btime10, peaktime10abs);
}
 else {peaktime10abs="";}

// NEU for Gesamtpeakzeit 10 ends here ******************************************************************* 

if (diastime50>0 || systime50>0){
	peaktime50=peaktime50+1/fps;
	peaktime50old=peaktime50;
}
 else {peaktime50=0;}

if(systime50==(1/fps)){peaktime50=(1/fps);}

// NEU for Gesamtpeakzeit 50 starts here *****************************************************************

if (peaktime50old>peaktime50){
	peaktime50abs=peaktime50old;
	peaktime50old=0;
	btime50=Array.concat(btime50, peaktime50abs);
}
 else {peaktime50abs="";}

// NEU for Gesamtpeakzeit 50 ends here ******************************************************************* 


if (diastime90>0 || systime90>0){
	peaktime90=peaktime90+1/fps;
	peaktime90old=peaktime90;
}
 else {peaktime90=0;}

if(systime90==(1/fps)){peaktime90=(1/fps);}

 // NEU for Gesamtpeakzeit 90 starts here *****************************************************************

if (peaktime90old>peaktime90){
	peaktime90abs=peaktime90old;
	peaktime90old=0;
	btime90=Array.concat(btime90, peaktime90abs);
}
 else {peaktime90abs="";}

// NEU for Gesamtpeakzeit 90 ends here ******************************************************************* 




// ************************** Calculation of peak times ends here ***************************



//******************** Calculation of the systoles and diastoles for the thresholds (user, 10, 50 and 90%) ends here *************************

btimeold=btimea;
btimea=btimea+(1/fps);



if (systimeabs==0) {
systimeabs="";
}


if (systime10abs==0) {
systime10abs="";
}


if (systime50abs==0) {
systime50abs="";
}


if (systime90abs==0) {
systime90abs="";
}


if(minima[min]==rr) {
print((rr+1) + "\t" + rr/fps + "\t" + amplitudes[rr] + "\t" + (amplitudes[rr]-pmin) + "\t" + ampNorm + "\t" + (amplitudes[rr+1]-amplitudes[rr]) + "\t"  + abs((amplitudes[rr+1]-amplitudes[rr])) + "\t" + "0" + "\t" + "\t" + round(pmax+1) + "\t" + btimea + "\t" + "\t" + "\t" + (amplitudes[truncmin[ampl]]+(threshold*maxamplitudes[ampl])) + "\t" + peaktime + "\t" + peaktimeabs + "\t" + systime + "\t" + systimeabs + "\t" + diastime + "\t" + diastimeabs + "\t" + (amplitudes[truncmin[ampl]]+(thresh1*maxamplitudes[ampl])) + "\t" + peaktime10 + "\t" + peaktime10abs + "\t" + systime10 + "\t" + systime10abs + "\t" + diastime10 + "\t" + diastime10abs + "\t" + (amplitudes[truncmin[ampl]]+(thresh2*maxamplitudes[ampl])) + "\t" + peaktime50 + "\t" + peaktime50abs + "\t" + systime50 + "\t" + systime50abs + "\t" + diastime50 + "\t" + diastime50abs + "\t" + (amplitudes[truncmin[ampl]]+(thresh3*maxamplitudes[ampl])) + "\t" + peaktime90 + "\t" + peaktime90abs + "\t" + systime90 + "\t" + systime90abs + "\t" + diastime90 + "\t" + diastime90abs);

thres0line[rr]=(amplitudes[truncmin[ampl]]+(threshold*maxamplitudes[ampl]));
thres1line[rr]=(amplitudes[truncmin[ampl]]+(thresh1*maxamplitudes[ampl]));
thres2line[rr]=(amplitudes[truncmin[ampl]]+(thresh2*maxamplitudes[ampl]));
thres3line[rr]=(amplitudes[truncmin[ampl]]+(thresh3*maxamplitudes[ampl]));


min=min+1;
if (min>minima.length-1){
	min=minima.length-1;
}


} else if (maxima[max]==rr) {
spacer="";
if (rr==0){btimea=0; spacer=0;}
print((rr+1) + "\t" + rr/fps + "\t" + amplitudes[rr] + "\t" + (amplitudes[rr]-pmin) + "\t" + ampNorm + "\t" + (amplitudes[rr+1]-amplitudes[rr]) + "\t" + abs((amplitudes[rr+1]-amplitudes[rr])) + "\t" + round(pmax+1) + "\t" + maxamplitudes[ampl] + "\t" + "0" + "\t" + btimea + "\t" +spacer+  "\t" + beats + "\t" + (amplitudes[truncmin[ampl]]+(threshold*maxamplitudes[ampl])) + "\t" + peaktime + "\t" + peaktimeabs + "\t" +  systime + "\t" + systimeabs + "\t" + diastime + "\t" + diastimeabs + "\t" + (amplitudes[truncmin[ampl]]+(thresh1*maxamplitudes[ampl])) + "\t" + peaktime10 + "\t" + peaktime10abs + "\t" + systime10 + "\t" + systime10abs + "\t" + diastime10 + "\t" + diastime10abs + "\t" + (amplitudes[truncmin[ampl]]+(thresh2*maxamplitudes[ampl])) + "\t" + peaktime50 + "\t" + peaktime50abs + "\t" + systime50 + "\t" + systime50abs + "\t" + diastime50 + "\t" + diastime50abs + "\t" + (amplitudes[truncmin[ampl]]+(thresh3*maxamplitudes[ampl])) + "\t" + peaktime90 + "\t" + peaktime90abs + "\t" + systime90 + "\t" + systime90abs + "\t" + diastime90 + "\t" + diastime90abs);
beattimes=Array.concat(beattimes,btimea);
btimea=0;
beats=beats+1;
max=max+1;


thres0line[rr]=(amplitudes[truncmin[ampl]]+(threshold*maxamplitudes[ampl]));
thres1line[rr]=(amplitudes[truncmin[ampl]]+(thresh1*maxamplitudes[ampl]));
thres2line[rr]=(amplitudes[truncmin[ampl]]+(thresh2*maxamplitudes[ampl]));
thres3line[rr]=(amplitudes[truncmin[ampl]]+(thresh3*maxamplitudes[ampl]));


if (max>maxima.length-1){
	max=maxima.length-1;
}
} else {
print((rr+1) + "\t" + rr/fps + "\t" + amplitudes[rr] + "\t" + (amplitudes[rr]-pmin) + "\t" + ampNorm + "\t" + (amplitudes[rr+1]-amplitudes[rr]) + "\t" + abs((amplitudes[rr+1]-amplitudes[rr])) + "\t" + "0" + "\t" + "\t" + "0" + "\t" + btimea + "\t" + btimeabs + "\t" + "\t"  + (amplitudes[truncmin[ampl]]+(threshold*maxamplitudes[ampl])) + "\t"  + peaktime + "\t" + peaktimeabs + "\t" + systime + "\t" + systimeabs + "\t" + diastime + "\t" + diastimeabs + "\t" + (amplitudes[truncmin[ampl]]+(thresh1*maxamplitudes[ampl])) + "\t" + peaktime10 + "\t" + peaktime10abs + "\t" + systime10 + "\t" + systime10abs + "\t" + diastime10 + "\t" + diastime10abs + "\t" + (amplitudes[truncmin[ampl]]+(thresh2*maxamplitudes[ampl])) + "\t" + peaktime50 + "\t" + peaktime50abs + "\t" + systime50 + "\t" + systime50abs + "\t" + diastime50 + "\t" + diastime50abs + "\t" + (amplitudes[truncmin[ampl]]+(thresh3*maxamplitudes[ampl])) + "\t" + peaktime90 + "\t" + peaktime90abs + "\t" + systime90 + "\t" + systime90abs + "\t" + diastime90 + "\t" + diastime90abs);

thres0line[rr]=(amplitudes[truncmin[ampl]]+(threshold*maxamplitudes[ampl]));
thres1line[rr]=(amplitudes[truncmin[ampl]]+(thresh1*maxamplitudes[ampl]));
thres2line[rr]=(amplitudes[truncmin[ampl]]+(thresh2*maxamplitudes[ampl]));
thres3line[rr]=(amplitudes[truncmin[ampl]]+(thresh3*maxamplitudes[ampl]));


}

if (rr<amplitudes.length && ampl<truncmax.length-1){
	
if   (rr>=(truncmin[ampl+1])) {

	ampl=ampl+1;

}

}


// NEU for GesamtBeatzeit starts here *****************************************************************
 if (btimeold>btimea){
	btimeabs=btimeold+1/fps;
	btimeold=0;
}
 else {btimeabs="";}
// NEU for GesamtBeatzeit ends here ******************************************************************* 

}


// ****************** Getting statistics from the arrays starts here *********************************

Array.getStatistics(beattimes, beattimesmin, beattimesmax, beattimesmean, beattimesstdDev);
Array.getStatistics(maxamplitudes, maxamplitudesmin, maxamplitudesmax, maxamplitudesmean, maxamplitudesstd);

Array.getStatistics(btimeuser, btimeusermin, btimeusermax, btimeusermean, btimeuserstd);
Array.getStatistics(btime10, btime10min, btime10max, btime10mean, btime10std);
Array.getStatistics(btime50, btime50min, btime50max, btime50mean, btime50std);
Array.getStatistics(btime90, btime90min, btime90max, btime90mean, btime90std);

Array.getStatistics(sysuser, sysusermin, sysusermax, sysusermean, sysuserstd);
Array.getStatistics(sys10, sys10min, sys10max, sys10mean, sys10std);
Array.getStatistics(sys50, sys50min, sys50max, sys50mean, sys50std);
Array.getStatistics(sys90, sys90min, sys90max, sys90mean, sys90std);

Array.getStatistics(diasuser, diasusermin, diasusermax, diasusermean, diasuserstd);
Array.getStatistics(dias10, dias10min, dias10max, dias10mean, dias10std);
Array.getStatistics(dias50, dias50min, dias50max, dias50mean, dias50std);
Array.getStatistics(dias90, dias90min, dias90max, dias90mean, dias90std);

frequencies=Array.copy(beattimes);
frequencies=Array.deleteValue(frequencies,0);

for (freq = 0; freq < frequencies.length; freq++) {
frequencies[freq]=1/frequencies[freq];	
}

Array.getStatistics(frequencies, freqmin, freqmax, freqmean, freqstd);


// ****************** Getting statistics from the arrays ends here **********************



// **************** Printing the final statistics with the first and last events starts here ******************

print(" ");
print("Statistics INCLUDING the first and last event");
print(" ");

print("Beats counted: " + "\t" + maxima.length);
print(" ");

print("\t" + "Min" + "\t" + "Max" + "\t" + "Mean" + "\t" + "StdDev");

print("Beattimes [sec]" + "\t" + beattimesmin + "\t" + beattimesmax + "\t" + beattimesmean + "\t" + beattimesstdDev);
print("Frequency [1/sec]" + "\t" + freqmin + "\t" + freqmax + "\t" + freqmean + "\t" + freqstd);

print("Amplitudes [a.u.] " + "\t" + maxamplitudesmin + "\t" + maxamplitudesmax + "\t" + maxamplitudesmean + "\t" + maxamplitudesstd);

print("Peaktimes user [sec] " + "\t" + btimeusermin + "\t" + btimeusermax + "\t" + btimeusermean + "\t" + btimeuserstd);
print("Systoles user [sec] " + "\t" + sysusermin + "\t" + sysusermax + "\t" + sysusermean + "\t" + sysuserstd);
print("Diastoles user [sec] " + "\t" + diasusermin + "\t" + diasusermax + "\t" + diasusermean + "\t" + diasuserstd);

print("Peaktimes Thr10% [sec]" + "\t" + btime10min + "\t" + btime10max + "\t" + btime10mean + "\t" + btime10std);
print("Systoles Thr10% [sec] " + "\t" + sys10min + "\t" + sys10max + "\t" + sys10mean + "\t" + sys10std);
print("Diastoles Thr10% [sec] " + "\t" + dias10min + "\t" + dias10max + "\t" + dias10mean + "\t" + dias10std);

print("Peaktimes Thr50% [sec]" + "\t" + btime50min + "\t" + btime50max + "\t" + btime50mean + "\t" + btime50std);
print("Systoles Thr50% [sec] " + "\t" + sys50min + "\t" + sys50max + "\t" + sys50mean + "\t" + sys50std);
print("Diastoles Thr50% [sec] " + "\t" + dias50min + "\t" + dias50max + "\t" + dias50mean + "\t" + dias50std);

print("Peaktimes Thr90% [sec]" + "\t" + btime90min + "\t" + btime90max + "\t" + btime90mean + "\t" + btime90std);
print("Systoles Thr90% [sec] " + "\t" + sys90min + "\t" + sys90max + "\t" + sys90mean + "\t" + sys90std);
print("Diastoles Thr90% [sec] " + "\t" + dias90min + "\t" + dias90max + "\t" + dias90mean + "\t" + dias90std);

print(" ");
print("Ratios:");
print(" ");
print("Systole/diastole [user] mean:" + "\t" + sysusermean/diasusermean);
print("Systole/diastole [Thr10%] mean:" + "\t" + sys10mean/dias10mean);
print("Systole/diastole [Thr50%] mean:" + "\t" + sys50mean/dias50mean);
print("Systole/diastole [Thr90%] mean:" + "\t" + sys90mean/dias90mean);
print(" ");
print("Amplitude mean/systole [user] mean:" + "\t" + maxamplitudesmean/sysusermean);
print("Amplitude mean/systole [Thr10%] mean:" + "\t" + maxamplitudesmean/sys10mean);
print("Amplitude mean/systole [Thr50%] mean:" + "\t" + maxamplitudesmean/sys50mean);
print("Amplitude mean/systole [Thr90%] mean:" + "\t" + maxamplitudesmean/sys90mean);
print(" ");
print("Amplitude mean/diastole [user] mean:" + "\t" + maxamplitudesmean/diasusermean);
print("Amplitude mean/diastole [Thr10%] mean:" + "\t" + maxamplitudesmean/dias10mean);
print("Amplitude mean/diastole [Thr50%] mean:" + "\t" + maxamplitudesmean/dias50mean);
print("Amplitude mean/diastole [Thr90%] mean:" + "\t" + maxamplitudesmean/dias90mean);
print(" ");
print("Amplitude mean/peaktime [user] mean:" + "\t" + maxamplitudesmean/btimeusermean);
print("Amplitude mean/peaktime [Thr10%] mean:" + "\t" + maxamplitudesmean/btime10mean);
print("Amplitude mean/peaktime [Thr50%] mean:" + "\t" + maxamplitudesmean/btime50mean);
print("Amplitude mean/peaktime [Thr90%] mean:" + "\t" + maxamplitudesmean/btime90mean);



// **************** Printing the final statistics with the first and last events ends here ******************



// **************** Printing the final statistics WITHOUT the first and last events starts here ******************


beattimesshort=Array.slice(beattimes, 1,beattimes.length-1);
maxamplitudesshort=Array.slice(maxamplitudes, 1,maxamplitudes.length-1);

btimeusershort=Array.slice(btimeuser, 1, btimeuser.length-1);
btime10short=Array.slice(btime10, 1, btime10.length-1);
btime50short=Array.slice(btime50, 1, btime50.length-1);
btime90short=Array.slice(btime90, 1, btime90.length-1);

sysusershort=Array.slice(sysuser, 1,sysuser.length-1);
sys10short=Array.slice(sys10, 1, sys10.length-1);
sys50short=Array.slice(sys50, 1, sys50.length-1);
sys90short=Array.slice(sys90, 1, sys90.length-1);


diasusershort=Array.slice(diasuser, 1, diasuser.length-1);
dias10short=Array.slice(dias10, 1, dias10.length-1);
dias50short=Array.slice(dias50, 1, dias50.length-1);
dias90short=Array.slice(dias90, 1, dias90.length-1);


Array.getStatistics(beattimesshort, beattimesshortmin, beattimesshortmax, beattimesshortmean, beattimesshortstdDev);
Array.getStatistics(maxamplitudesshort, maxamplitudesshortmin, maxamplitudesshortmax, maxamplitudesshortmean, maxamplitudesshortstd);

Array.getStatistics(btimeusershort, btimeusershortmin, btimeusershortmax, btimeusershortmean, btimeusershortstd);
Array.getStatistics(btime10short, btime10shortmin, btime10shortmax, btime10shortmean, btime10shortstd);
Array.getStatistics(btime50short, btime50shortmin, btime50shortmax, btime50shortmean, btime50shortstd);
Array.getStatistics(btime90short, btime90shortmin, btime90shortmax, btime90shortmean, btime90shortstd);

Array.getStatistics(sysusershort, sysusershortmin, sysusershortmax, sysusershortmean, sysusershortstd);
Array.getStatistics(sys10short, sys10shortmin, sys10shortmax, sys10shortmean, sys10shortstd);
Array.getStatistics(sys50short, sys50shortmin, sys50shortmax, sys50shortmean, sys50shortstd);
Array.getStatistics(sys90short, sys90shortmin, sys90shortmax, sys90shortmean, sys90shortstd);

Array.getStatistics(diasusershort, diasusershortmin, diasusershortmax, diasusershortmean, diasusershortstd);
Array.getStatistics(dias10short, dias10shortmin, dias10shortmax, dias10shortmean, dias10shortstd);
Array.getStatistics(dias50short, dias50shortmin, dias50shortmax, dias50shortmean, dias50shortstd);
Array.getStatistics(dias90short, dias90shortmin, dias90shortmax, dias90shortmean, dias90shortstd);


frequenciesshort=Array.copy(beattimesshort);
for (freqshort = 0; freqshort < frequenciesshort.length; freqshort++) {
frequenciesshort[freqshort]=1/frequenciesshort[freqshort];	
}

Array.getStatistics(frequenciesshort, freqshortmin, freqshortmax, freqshortmean, freqshortstd);
print(" ");
print("Statistics WITHOUT the first and last event");
print(" ");

print("Beats counted: " + "\t" + maxima.length-2);
print(" ");

print("\t" + "Min" + "\t" + "Max" + "\t" + "Mean" + "\t" + "StdDev");

print("Beattimes [sec]" + "\t" + beattimesshortmin + "\t" + beattimesshortmax + "\t" + beattimesshortmean + "\t" + beattimesshortstdDev);
print("Frequency [1/sec]" + "\t" + freqshortmin + "\t" + freqshortmax + "\t" + freqshortmean + "\t" + freqshortstd);

print("Amplitudes [a.u.] " + "\t" + maxamplitudesshortmin + "\t" + maxamplitudesshortmax + "\t" + maxamplitudesshortmean + "\t" + maxamplitudesshortstd);

print("Peaktimes user [sec] " + "\t" + btimeusershortmin + "\t" + btimeusershortmax + "\t" + btimeusershortmean + "\t" + btimeusershortstd);
print("Systoles user [sec] " + "\t" + sysusershortmin + "\t" + sysusershortmax + "\t" + sysusershortmean + "\t" + sysusershortstd);
print("Diastoles user [sec] " + "\t" + diasusershortmin + "\t" + diasusershortmax + "\t" + diasusershortmean + "\t" + diasusershortstd);

print("Peaktimes Thr10% [sec]" + "\t" + btime10shortmin + "\t" + btime10shortmax + "\t" + btime10shortmean + "\t" + btime10shortstd);
print("Systoles Thr10% [sec] " + "\t" + sys10shortmin + "\t" + sys10shortmax + "\t" + sys10shortmean + "\t" + sys10shortstd);
print("Diastoles Thr10% [sec] " + "\t" + dias10shortmin + "\t" + dias10shortmax + "\t" + dias10shortmean + "\t" + dias10shortstd);

print("Peaktimes Thr50% [sec]" + "\t" + btime50shortmin + "\t" + btime50shortmax + "\t" + btime50shortmean + "\t" + btime50shortstd);
print("Systoles Thr50% [sec] " + "\t" + sys50shortmin + "\t" + sys50shortmax + "\t" + sys50shortmean + "\t" + sys50shortstd);
print("Diastoles Thr50% [sec] " + "\t" + dias50shortmin + "\t" + dias50shortmax + "\t" + dias50shortmean + "\t" + dias50shortstd);

print("Peaktimes Thr90% [sec]" + "\t" + btime90shortmin + "\t" + btime90shortmax + "\t" + btime90shortmean + "\t" + btime90shortstd);
print("Systoles Thr90% [sec] " + "\t" + sys90shortmin + "\t" + sys90shortmax + "\t" + sys90shortmean + "\t" + sys90shortstd);
print("Diastoles Thr90% [sec] " + "\t" + dias90shortmin + "\t" + dias90shortmax + "\t" + dias90shortmean + "\t" + dias90shortstd);

print(" ");
print("Ratios:");
print(" ");
print("Systole/diastole [user] mean:" + "\t" + sysusershortmean/diasusermean);
print("Systole/diastole [Thr10%] mean:" + "\t" + sys10shortmean/dias10shortmean);
print("Systole/diastole [Thr50%] mean:" + "\t" + sys50shortmean/dias50shortmean);
print("Systole/diastole [Thr90%] mean:" + "\t" + sys90shortmean/dias90shortmean);
print(" ");
print("Amplitude mean/systole [user] mean:" + "\t" + maxamplitudesshortmean/sysusershortmean);
print("Amplitude mean/systole [Thr10%] mean:" + "\t" + maxamplitudesshortmean/sys10shortmean);
print("Amplitude mean/systole [Thr50%] mean:" + "\t" + maxamplitudesshortmean/sys50shortmean);
print("Amplitude mean/systole [Thr90%] mean:" + "\t" + maxamplitudesshortmean/sys90shortmean);
print(" ");
print("Amplitude mean/diastole [user] mean:" + "\t" + maxamplitudesshortmean/diasusershortmean);
print("Amplitude mean/diastole [Thr10%] mean:" + "\t" + maxamplitudesshortmean/dias10shortmean);
print("Amplitude mean/diastole [Thr50%] mean:" + "\t" + maxamplitudesshortmean/dias50shortmean);
print("Amplitude mean/diastole [Thr90%] mean:" + "\t" + maxamplitudesshortmean/dias90shortmean);
print(" ");
print("Amplitude mean/peaktime [user] mean:" + "\t" + maxamplitudesshortmean/btimeusershortmean);
print("Amplitude mean/peaktime [Thr10%] mean:" + "\t" + maxamplitudesshortmean/btime10shortmean);
print("Amplitude mean/peaktime [Thr50%] mean:" + "\t" + maxamplitudesshortmean/btime50shortmean);
print("Amplitude mean/peaktime [Thr90%] mean:" + "\t" + maxamplitudesshortmean/btime90shortmean);
print(" ");

print("Framerate [1/s]:" + "\t" + fps);

print("Detection:" + "\t" + detection);


 // **************** Printing the final statistics WITHOUT the first and last events ends here ******************

//******************************Printing the analyzed data from the array ends here ******************

//******************************Plotting the data starts here, thresholds are displayed, according images and numeric output can be saved ******************

allminima=newArray(amplitudes.length);
allmaxima=newArray(amplitudes.length);

Array.fill(allminima, 0);
Array.fill(allmaxima, 0);

for (allmax=0; allmax<maxima.length; allmax++){
	allmaxima[maxima[allmax]]=round(pmax+1);
	}


for (allmin=0; allmin<minima.length; allmin++){
	allminima[minima[allmin]]=round(pmax+1);
	}


times=newArray(amplitudes.length);

for (tt=0; tt<amplitudes.length; tt++) {
times[tt]=tt/fps;
}


run("Profile Plot Options...", "width=1920 height=700 font=10 minimum=pmin maximum=pmax draw draw_ticks interpolate sub-pixel");

Plot.create("Amplitudes", "Time [sec]", "Amplitude [a.u.]", times, amplitudes);
setJustification("center");
Plot.addText("Amplitude (black)", 0.1, 0);
Plot.addText("Maxima (red)", 0.2, 0);
Plot.addText("Minima (green)", 0.3, 0);
Plot.addText("Thr(" + 100*thresh0 + "%, orange)", 0.4, 0);
Plot.addText("Thr(" + 100*thresh1 + "%, cyan)", 0.55, 0);
Plot.addText("Thr(" + 100*thresh2 + "%, pink)", 0.7, 0);
Plot.addText("Thr(" + 100*thresh3 + "%, blue)", 0.85, 0);
Plot.addText("Det=" + detection, 0.95, 0);


Plot.setColor("red"); 
Plot.add("line", times, allmaxima);

Plot.setColor("green");
Plot.add("line", times, allminima);

Plot.setColor("orange");
Plot.setLineWidth(2);
Plot.add("line", times, thres0line);

Plot.setColor("cyan");
Plot.setLineWidth(2);
Plot.add("line", times, thres1line);

Plot.setColor("pink");
Plot.setLineWidth(2);
Plot.add("line", times, thres2line);

Plot.setColor("blue");
Plot.setLineWidth(2);
Plot.add("line", times, thres3line);

Plot.setLineWidth(1);
Plot.setColor("black");

Plot.show();


Plot.makeHighResolution("Amplitudes", 2.0, "enable");


//****************************** Plotting the data ends here ******************


print(" ");
print(" ");


//**************************** The user selects if the data are saved or not ********************

Dialog.create("Save the generated data and restart?");
Dialog.addMessage(">Cancel< aborts the whole macro" + "\n" + ">OK< starts over without saving" + "\n" + "Checking >Yes< and >OK< saves data and starts over");
Dialog.addCheckbox("Yes (save it)", false);
Dialog.show();
storeit = Dialog.getCheckbox();


if (storeit==true) {
reslts=getInfo("log");
File.append(reslts, dir + rmve + " re-evaluated " + year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + ".txt");	

saveAs("Jpeg", dir + option + " re-evaluated " + (runs+1) + " " + year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes+ ".jpg");
close();

}



//**************************** Select if data are saved or not starts here ********************

while (nImages>0) { 
          selectImage(nImages); 
          close(); 
}

print("\\Clear");

}



}

//******************** Re-Evaluation ends here *********************

 // ******************* Creation of a batch-list starts here ******************************************************************

 if (option == "2. Create a Batch List") {


filetype=".jpg";

names=newArray();
xcoord=newArray();
ycoord=newArray();

dir=getDirectory("Choose the directory containing the pretest-images"); 

list = getFileList(dir); 

Array.print(list);

jpgtest=0;
jpgfound="false";
while(jpgfound=="false" && jpgtest<list.length){if (endsWith(list[jpgtest], ".jpg")) {jpgfound="true";} {jpgtest++;}}

if(jpgfound=="false"){jpgfound="false";exit("There seem to be NO JPG-images in this folder...");}


a=0;

for (i=0; i<list.length; i++) { 
     if (endsWith(list[i], filetype)){ 
               print(i + ": " + dir+list[i]); 
             open(dir+list[i]); 
             

if(a==0){

run("RGB Color");
rename("panels");

if (isOpen(list[i])){
selectWindow(list[i]);
close();
}

selectWindow("panels");
getDimensions(width, height, channels, slices, frames);
makeRectangle(0, 0, width/12, height/12);
run("Duplicate...", "title=" + "["+"Please insert <SIZE>" + "]");

selectWindow("panels");

close();

Dialog.create("Please insert the value for <SIZE>");
Dialog.addNumber("Please insert <SIZE> as shown in the image: ", 0);
Dialog.addChoice("Select applied pretest setting:", newArray("LowMovement", "HighMovement"), "LowMovement");
Dialog.show();
sizelowerlimit = Dialog.getNumber();
option= Dialog.getChoice();

if (isOpen("Please insert <SIZE>")){
selectWindow("Please insert <SIZE>");
close();
}

	
open(dir+list[i]);	
a++;
	
	}


name=getTitle();
name2=replace(name, "-test.jpg", ".avi");
getDimensions(width, height, channels, slices, frames);

setTool("point");

getCursorLoc(x, y, z, modifiers);

while(modifiers!=16){
getCursorLoc(x, y, z, modifiers);
}

getCursorLoc(x, y, z, modifiers);

names=Array.concat(names,name2);
xcoord=Array.concat(xcoord,x);
ycoord=Array.concat(ycoord,y);

close();

print("\\Clear");


     }

}

print("\\Clear");

print("Title" + "\t" + "Size" + "\t" + "Threshold");

if (option=="HighMovement") {	
for (j = 0; j < names.length; j++) {
print(names[j] + "\t" + (sizelowerlimit+floor((12*xcoord[j]/width))*sizelowerlimit) + "\t" + round((243-(((243-127)/11)*floor(12*ycoord[j]/height)))));	
}
}

if (option=="LowMovement") {
for (j = 0; j < names.length; j++) {
print(names[j] + "\t" + (sizelowerlimit+floor((12*xcoord[j]/width))*sizelowerlimit) + "\t" + round((121-(11*floor(12*ycoord[j]/height)))));	
}
}


selectWindow("Log");
batchlist=dir+"batch.txt";
saveAs("Text", batchlist);

run("Close All");

run("Collect Garbage");

Dialog.create("Done!");
Dialog.addMessage("Batch List created!" + "\n" + "Please copy the list into your video-folder," + "\n" + "select <Batch>-option for evaluation.");
Dialog.show();
 
}

// ******************* Creation of a batch-list ends here ******************************************************************



// ******************* EXCLUSION of unwanted data starts here ******************************************************************

if (option == "5. Exclude Data") {

for (repeats = 0; repeats < 100000; repeats++) {


filetype1=".jpg";
filetype2=".txt";
excluded=newArray();
included=newArray();

dir=getDirectory("Please select the results-directory (<dataplots>)"); 

list = getFileList(dir); 

// ******** Find the txt-file containing the results and put them linewise into an array ****************

Array.print(list);

j=0;
found=0;

// Also remove an existing Results-final summary file

while (j < list.length && found==0) {
if (indexOf(list[j], "Results") >= 0) {
if (indexOf(list[j], "Results (selected)") < 0 && indexOf(list[j], "Results (final summary)") < 0){filestring=File.openAsString(dir + list[j]);
found=1;
}
}
j++;
}

if (found==0) {exit("Sorry, no Results-file was found.");}
	

results=split(filestring, "\n");

// Now do exactly the same again but for the Amplitudes-file

j=0;
found=0;

while (j < list.length && found==0) {
if (indexOf(list[j], "Amplitudes only") >= 0) {AmplitudesString=File.openAsString(dir + list[j]);
found=1;}
j++;
}

if (found==0) {exit("Sorry, no Amplitudes-file was found.");}

// First split the array at every new line
AmplArray=split(AmplitudesString, "\n");

// Now delete all of the elements that are only a single space
AmplArray=Array.deleteValue(AmplArray, " ");


// Now all of the necessary data are loaded into arrays


 // ********************* Remove all files that are NOT a small Amplitude-plot from the file-list ****************

for (k = 0; k < list.length; k++) {if ((indexOf(list[k], "fps)-plot small.jpg") <= 0)) {list[k]=0;}}

list=Array.deleteValue(list, 0);

// *********** Open only the small Amplitude-plots and select if the according data are EXCLUDED ***********


for (i=0; i<list.length; i++) { 
     if (endsWith(list[i], filetype1)){ 
               print(i + ": " + dir+list[i]); 
             open(dir+list[i]); 


name = indexOf(list[i], filetype1);
title = substring(list[i], 0, name);

Dialog.create("EXCLUDE this data?");
Dialog.addMessage(">Cancel< aborts the whole macro" + "\n" + ">OK< INCLUDE this data" + "\n" + "Checking >EXCLUDE!< and >OK< EXCLUDES this data!");
Dialog.addCheckbox("EXCLUDE!", false);
Dialog.show();
exclude = Dialog.getCheckbox();


title2=replace(title, "-plot small", "");

// Zuerst die Daten aus dem Results-File loeschen


if (exclude==true) {

excluded=Array.concat(excluded,title2);

if(indexOf(title2, "-diff-cell")<0){
title2=replace(title2, "-cell", "-diff-cell");
}

a=0;
while(indexOf(results[a], title2)<0) {a++;}

b=a+3;
while(indexOf(results[b], "-diff-cell")<0 && results[b]!="***** Settings *****") {b++;}

print("Delete elements " + a + " to " + b);

for (delete = a; delete < b; delete++) {results[delete]="removed";}
results=Array.deleteValue(results, "removed");

}



if (exclude==false) {
included=Array.concat(included,title2);
}


// And now also delete the Data from the Amplitudes Array
// The title2 is already correct to find the according headline

if (exclude==true) {

a=0;
while(indexOf(AmplArray[a], title2)<0) {a++;}
AmplArray[a]="delete";
AmplArray[a+1]="delete";
AmplArray=Array.deleteValue(AmplArray, "delete");
}



if (isOpen(title+filetype1)){
selectWindow(title+filetype1);
close();
     }
     
}

}


// Hier haben wir das Array results[], aus dem wir bestmmte Daten extrahieren wollen
// Die Elemente des Blocks beginnen mit "Statistics WITHOUT the first and last event" und enden mit "Framerate [1/s]:"
// Diese Elemente sollen mit den Titeln und Zellen ganz am Ende der Ausgabe aufgelistet werden

FinalSummary=newArray();

for (fisum = 0; fisum < results.length; fisum++) {

// Zuerst extrahieren wir die verbliebenen Ueberschriften
// Beginnt eine Zeile mit "Frame #", dann brauchen wir die Elemente DAVOR

	if(startsWith(results[fisum], "Frame #")){FinalSummary=Array.concat(FinalSummary, results[fisum-3]); 
		FinalSummary=Array.concat(FinalSummary, results[fisum-2]); 
		FinalSummary=Array.concat(FinalSummary, "\n");}

	if(startsWith(results[fisum], "Statistics WITHOUT the first and last event")){
		while(startsWith(results[fisum], "Framerate [1/s]:")==false && (fisum-1)<results.length){FinalSummary=Array.concat(FinalSummary, results[fisum]); fisum++;}
		if(startsWith(results[fisum], "Framerate [1/s]:")==true){FinalSummary=Array.concat(FinalSummary, results[fisum]);}
		FinalSummary=Array.concat(FinalSummary, "\n\n");
		}
	
}



// ****************** Print the remaining Results-Array and save it as text in the results folder **********

print("\\Clear");

for (i = 0; i < results.length; i++) {
print(results[i]);	
}

print("");
print("INCLUDED Data:");
print("");

for (i = 0; i < included.length; i++) {
print(included[i]);	
}


print("");
print("EXCLUDED Data:");
print("");

for (i = 0; i < excluded.length; i++) {
print(excluded[i]);	
}

print("");
print("*** Final Summary ******************************************************************************************");
print("");


for (i = 0; i < FinalSummary.length; i++) {
print(FinalSummary[i]);	
}


dest=dir+"Results (selected) "+year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes+".txt";
selectWindow("Log");
saveAs("Text", dest); 


print("\\Clear");
lineprinter=0;
SeparateResults=newArray();


for (sepprint = 0; sepprint < results.length; sepprint++) {

// Zuerst extrahieren wir die verbliebenen Ueberschriften
// Beginnt eine Zeile mit "Frame #", dann brauchen wir die Elemente DAVOR

	if(startsWith(results[sepprint], "Frame #")){SeparateResults=Array.concat(SeparateResults, results[sepprint-3]); 
		SeparateResults=Array.concat(SeparateResults, results[sepprint-2]); 
		SeparateResults=Array.concat(SeparateResults, "\n");
		lineprinter=sepprint;

// Moegliches Problem mit der Final Summary


while(startsWith(results[lineprinter], "Framerate [1/s]:")==false && (lineprinter-1<results.length)){
	SeparateResults=Array.concat(SeparateResults, results[lineprinter]); 
	lineprinter++;}
	
	}


if(startsWith(results[lineprinter], "Framerate [1/s]:")==true){SeparateResults=Array.concat(SeparateResults, results[lineprinter]);}

if(startsWith(results[lineprinter], "Framerate [1/s]:")==true && lineprinter-2<results.length){lineprinter++; sepprint=lineprinter;}

// Und nun das erstellte Einzelarray ausgeben und als Datei speichern

if(SeparateResults.length>0){

for (prn = 0; prn < SeparateResults.length; prn++) {
print(SeparateResults[prn]);
}
}

// Hier nehmen wir den entsprechenen Dateinamen und speichern das File

if(SeparateResults.length>0){

dest=dir+toString(SeparateResults[1])+" "+year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes+".txt";
selectWindow("Log");
saveAs("Text", dest); 

print("\\Clear");

SeparateResults=newArray();

}	
	
}




// This here saves the included Results again as separate file


print("\\Clear");


print("");
print("*** Final Summary ******************************************************************************************");
print("");


for (i = 0; i < FinalSummary.length; i++) {
print(FinalSummary[i]);	
}


dest=dir+"Results (final summary) "+year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes+".txt";
selectWindow("Log");
saveAs("Text", dest); 


// This here saves the selected Amplitudes into a single file

print("\\Clear");

for (i = 0; i < AmplArray.length; i++) {
print(AmplArray[i]+"\n");	
}

dest=dir+"Amplitudes (selected) "+year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes+".txt";
selectWindow("Log");
saveAs("Text", dest); 


// And now all the amplitudes are written into separate files

for (i = 0; i < AmplArray.length; i++) {
print("\\Clear");
print(AmplArray[i]+"\n");
print(AmplArray[i+1]+"\n");	

dest=dir+AmplArray[i]+" (Amplitude) "+year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes+".txt";
selectWindow("Log");
saveAs("Text", dest);
if(i<AmplArray.length-1){i++;} 

}



run("Close All");

run("Collect Garbage");

}

}

// ******************* EXCLUSION of unwanted data ends here ******************************************************************


// ************************************* DATA EXTRACTION for Statistics starts here

if (option == "7. Data Extraction") {

for (repeats = 0; repeats < 1000000; repeats++) {

// ****************** Header for date and time starts here


run("Colors...", "foreground=black background=black selection=yellow");
run("Set Measurements...", "area mean standard modal min centroid center perimeter bounding fit shape feret's integrated median skewness kurtosis area_fraction stack limit display redirect=None   decimal=3");
run("Input/Output...", "jpeg=90 gif=-1 file=.txt use_file copy_column copy_row save_column save_row");

getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
MonthNames = newArray("Jan","Feb","Mar","Apr","May","Jun","Jul","Aug","Sep","Oct","Nov","Dec"); 

if (hour<10) {hours = "0"+hour;}
else {hours=hour;}
if (minute<10) {minutes = "0"+minute;}
else {minutes=minute;}
if (second<10) {seconds = "0"+second;}
else {seconds=second;}
if (month<10) {months = "0"+(month+1);}
else {months=month+1;}
if (dayOfMonth<10) {dayOfMonths = "0"+dayOfMonth;}
else {dayOfMonths=dayOfMonth;}

// ****************** Header for date and time ends here

// Read the Data-File 

// extract correct path and filename
	
pathfile=File.openDialog("Please choose a <Results>-file to be opened for extraction:");

print(pathfile);

data=File.openAsString(pathfile);

strt=lastIndexOf(pathfile, "\\");
dir=substring(pathfile, 0, strt+1);

filename=substring(pathfile, strt+1, lengthOf(pathfile));
filename=replace(filename, ".txt", "");



// Neuer Code fuer die Extraktion START hier


// --- Zeilenenden zuerst normalisieren ---
data = replace(data, "\r\n", "\n");
data = replace(data, "\r", "\n");

// --- Funktionen für Tab-Ersetzung ---
function tabs(n) {
    s = "";
    for (i = 0; i < n; i++) s = s + "\t";
    return s;
}
function repNoNL(n) {
    s = "\t";
    for (i = 1; i < n; i++) s = s + "gap\t";
    return s;
}
function repNL(n) {
    s = "";
    for (i = 0; i < n; i++) s = s + "\tgap";
    s = s + "\n";
    return s;
}

// --- Lücken (Tabs) bis Länge 35 in "gap" umwandeln ---
for (n = 35; n >= 2; n--) {
    data = replace(data, tabs(n) + "\n", repNL(n));
    data = replace(data, tabs(n), repNoNL(n));
}

// --- Sonderfall: genau ein fehlendes Feld am Zeilenende ---
data = replace(data, "\t\n", "\tgap\n");

// --- NaN durch -1 ersetzen ---
data = replace(data, "\tNaN", "\t-1");

// --- Splitten ---
lines = split(data, "\n");

// --- Tab-Zählfunktion ---
function countTabs(s) {
    c = 0;
    for (k = 0; k < lengthOf(s); k++) if (substring(s, k, k+1) == "\t") c++;
    return c;
}

Headline = lines[3];

// --- Zeilen filtern (nur mit Ziffern und >= 40 Spalten) ---
newLines = newArray(lines.length);
j = 0;
for (i = 0; i < lines.length; i++) {
    line = lines[i];
    if (matches(line, "^[0-9].*")) {
        splittest = split(line, "\t");
        if (splittest.length >= 40) newLines[j++] = line;
    }
}
newLines = Array.slice(newLines, 0, j);

// --- Fehlende Spalten auffüllen ---
expectedCols = countTabs(Headline) + 1;
expectedTabs = expectedCols - 1;
fixed = newArray(newLines.length);
for (i = 0; i < newLines.length; i++) {
    line = newLines[i];
    tcnt = countTabs(line);
    while (tcnt < expectedTabs) {
        line += "\tgap";
        tcnt++;
    }
    fixed[i] = line;
}
lines = fixed;

// --- Arrays für Ausgabe vorbereiten ---
maxamplitudes = newArray(lines.length); sincelastbeatabs = newArray(lines.length);
peakuserabs = newArray(lines.length); systuserabs = newArray(lines.length); diasuserabs = newArray(lines.length);
peak10abs = newArray(lines.length); syst10abs = newArray(lines.length); dias10abs = newArray(lines.length);
peak50abs = newArray(lines.length); syst50abs = newArray(lines.length); dias50abs = newArray(lines.length);
peak90abs = newArray(lines.length); syst90abs = newArray(lines.length); dias90abs = newArray(lines.length);
FinalMaxima = newArray(lines.length);
FrameNumbers = newArray(lines.length); Times = newArray(lines.length);
AllMinima = newArray(lines.length); AllMaxima = newArray(lines.length);

// --- Maxima finden ---
maxCount = 0;
for (dist = 0; dist < lines.length; dist++) {
    SingleData = split(lines[dist], "\t");
    if (parseFloat(SingleData[9]) > 0) {
        AllMaxima[maxCount++] = dist;
    }
}
AllMaxima = Array.slice(AllMaxima, 0, maxCount);

// --- Kontraktionen verarbeiten ---
finalCount = 0;
for (max = 0; max < AllMaxima.length-1; max++) {
    Start = AllMaxima[max];
    Stop = AllMaxima[max+1];

    Tempmaxamplitudes = -1; Tempsincelastbeatabs = -1;
    Temppeakuserabs = -1; Tempsystuserabs = -1; Tempdiasuserabs = -1;
    Temppeak10abs = -1; Tempsyst10abs = -1; Tempdias10abs = -1;
    Temppeak50abs = -1; Tempsyst50abs = -1; Tempdias50abs = -1;
    Temppeak90abs = -1; Tempsyst90abs = -1; Tempdias90abs = -1;
 
    for (range = Start; range < Stop; range++) {
        SingleData = split(lines[range], "\t");

        if (Tempmaxamplitudes < 0 && indexOf(SingleData[10], "gap") < 0) Tempmaxamplitudes = SingleData[10];
        if (Tempsincelastbeatabs < 0 && indexOf(SingleData[13], "gap") < 0) Tempsincelastbeatabs = SingleData[13];
        if (Temppeakuserabs < 0 && indexOf(SingleData[17], "gap") < 0) Temppeakuserabs = SingleData[17];
        if (Tempsystuserabs < 0 && indexOf(SingleData[19], "gap") < 0) Tempsystuserabs = SingleData[19];
        if (Tempdiasuserabs < 0 && indexOf(SingleData[21], "gap") < 0) Tempdiasuserabs = SingleData[21];
        if (Temppeak10abs < 0 && indexOf(SingleData[24], "gap") < 0) Temppeak10abs = SingleData[24];
        if (Tempsyst10abs < 0 && indexOf(SingleData[26], "gap") < 0) Tempsyst10abs = SingleData[26];
        if (Tempdias10abs < 0 && indexOf(SingleData[28], "gap") < 0) Tempdias10abs = SingleData[28];
        if (Temppeak50abs < 0 && indexOf(SingleData[31], "gap") < 0) Temppeak50abs = SingleData[31];
        if (Tempsyst50abs < 0 && indexOf(SingleData[33], "gap") < 0) Tempsyst50abs = SingleData[33];
        if (Tempdias50abs < 0 && indexOf(SingleData[35], "gap") < 0) Tempdias50abs = SingleData[35];
        if (Temppeak90abs < 0 && indexOf(SingleData[38], "gap") < 0) Temppeak90abs = SingleData[38];
        if (Tempsyst90abs < 0 && indexOf(SingleData[40], "gap") < 0) Tempsyst90abs = SingleData[40];
        if (Tempdias90abs < 0 && indexOf(SingleData[42], "gap") < 0) Tempdias90abs = SingleData[42];
    }



    if (Tempmaxamplitudes > -1 && Tempsincelastbeatabs > 0 && Temppeakuserabs > -1 && Tempsystuserabs > -1 && Tempdiasuserabs > -1 &&
        Temppeak10abs > -1 && Tempsyst10abs > -1 && Tempdias10abs > -1 && Temppeak50abs > -1 && Tempsyst50abs > -1 && Tempdias50abs > -1 &&
        Temppeak90abs > -1 && Tempsyst90abs > -1 && Tempdias90abs > -1) {
        

// Hier müssen noch weitere Optionen hin; eine Option ist die Summenbildung aus Systole und Diastole; weicht die zu sehr ab, dann raus mit der Zeile!

RandDatensatz = 0;



if (abs(parseFloat(Temppeakuserabs) - (parseFloat(Tempsystuserabs) + parseFloat(Tempdiasuserabs))) > parseFloat(0.15)) { RandDatensatz = 1; }
if (abs(parseFloat(Temppeak10abs)  - (parseFloat(Tempsyst10abs)  + parseFloat(Tempdias10abs)))  > parseFloat(0.15)) { RandDatensatz = 1; }
if (abs(parseFloat(Temppeak50abs)  - (parseFloat(Tempsyst50abs)  + parseFloat(Tempdias50abs)))  > parseFloat(0.15)) { RandDatensatz = 1; }
if (abs(parseFloat(Temppeak90abs)  - (parseFloat(Tempsyst90abs)  + parseFloat(Tempdias90abs)))  > parseFloat(0.15)) { RandDatensatz = 1; }

if(RandDatensatz<1){

        FinalMaxima[finalCount] = Start + 1;
        maxamplitudes[finalCount] = Tempmaxamplitudes;
        sincelastbeatabs[finalCount] = Tempsincelastbeatabs;
        peakuserabs[finalCount] = Temppeakuserabs;
        systuserabs[finalCount] = Tempsystuserabs;
        diasuserabs[finalCount] = Tempdiasuserabs;
        peak10abs[finalCount] = Temppeak10abs;
        syst10abs[finalCount] = Tempsyst10abs;
        dias10abs[finalCount] = Tempdias10abs;
        peak50abs[finalCount] = Temppeak50abs;
        syst50abs[finalCount] = Tempsyst50abs;
        dias50abs[finalCount] = Tempdias50abs;
        peak90abs[finalCount] = Temppeak90abs;
        syst90abs[finalCount] = Tempsyst90abs;
        dias90abs[finalCount] = Tempdias90abs;
        finalCount++;
}
    
    }
}

// --- Arrays kürzen ---
FinalMaxima = Array.slice(FinalMaxima, 0, finalCount);
maxamplitudes = Array.slice(maxamplitudes, 0, finalCount);
sincelastbeatabs = Array.slice(sincelastbeatabs, 0, finalCount);
peakuserabs = Array.slice(peakuserabs, 0, finalCount);
systuserabs = Array.slice(systuserabs, 0, finalCount);
diasuserabs = Array.slice(diasuserabs, 0, finalCount);
peak10abs = Array.slice(peak10abs, 0, finalCount);
syst10abs = Array.slice(syst10abs, 0, finalCount);
dias10abs = Array.slice(dias10abs, 0, finalCount);
peak50abs = Array.slice(peak50abs, 0, finalCount);
syst50abs = Array.slice(syst50abs, 0, finalCount);
dias50abs = Array.slice(dias50abs, 0, finalCount);
peak90abs = Array.slice(peak90abs, 0, finalCount);
syst90abs = Array.slice(syst90abs, 0, finalCount);
dias90abs = Array.slice(dias90abs, 0, finalCount);


// //Bevor wir mit diesen Daten irgendwas rechnen, muessen die alle geparsefloated werden!!!

// Hilfsfunktion: wandelt alle Elemente eines Arrays in Float
function convertToFloat(arr) {
    for (i = 0; i < arr.length; i++) {
        arr[i] = parseFloat(arr[i]);
    }
    return arr;
}

// Jetzt für alle deine Arrays anwenden
FinalMaxima       = convertToFloat(FinalMaxima);
maxamplitudes     = convertToFloat(maxamplitudes);
sincelastbeatabs  = convertToFloat(sincelastbeatabs);
peakuserabs       = convertToFloat(peakuserabs);
systuserabs       = convertToFloat(systuserabs);
diasuserabs       = convertToFloat(diasuserabs);
peak10abs         = convertToFloat(peak10abs);
syst10abs         = convertToFloat(syst10abs);
dias10abs         = convertToFloat(dias10abs);
peak50abs         = convertToFloat(peak50abs);
syst50abs         = convertToFloat(syst50abs);
dias50abs         = convertToFloat(dias50abs);
peak90abs         = convertToFloat(peak90abs);
syst90abs         = convertToFloat(syst90abs);
dias90abs         = convertToFloat(dias90abs);


// Neuer Code fuer die Extraktion ENDE hier


// Neue Statistik und Bildausgabe
// Aus den obigen Datenarrays direkt Abbildungen fertigen

// =================================================================
// 1. ALLGEMEINE EINSTELLUNGEN UND DATEN-INITIALISIERUNG
// =================================================================
PlotBoxHeight = 800;
PlotBoxWidth = 1350;
Schriftgroesse = 25;


// Prompt user for y-axis labels

if(repeats<1){

Dialog.create("Y-Axis Labels (just define them once)");
Dialog.addString("Label for Panel 1 (MaxAmp):", "Max. amplitude [a.u.]", 50);
Dialog.addString("Label for Panel 2 (Beat):", "Time between contractions [s]", 50);
Dialog.addString("Label for Panel 3 (Other):", "Systolic and diastolic times for the thresholds [s]", 50);
Dialog.show();
yLabel1 = Dialog.getString();
yLabel2 = Dialog.getString();
yLabel3 = Dialog.getString();

}

newImage("Multi-Panel BoxPlot", "RGB", PlotBoxWidth, PlotBoxHeight, 1);
setFont("SansSerif", Schriftgroesse);
setBackgroundColor(255, 255, 255);

// Array-Namen für die Beschriftung
ArrayNamen = newArray("MaxAmp", "Beat", "UserPeak", "UserSys", "UserDia", "10%Peak", "10%Sys", "10%Dia", "50%Peak", "50%Sys", "50%Dia", "90%Peak", "90%Sys", "90%Dia");

// =================================================================
// 2. STATISTIK-BERECHNUNG (GETRENNT FÜR JEDES PANEL)
// =================================================================

// --- Statistik für Panel 1: MaxAmp ---
Array.getStatistics(maxamplitudes, min, max, mean, stdDev);
Means1 = newArray(1);
Means1[0] = mean;
StdDevs1 = newArray(1);
StdDevs1[0] = stdDev;
AbsMaxNorm1 = mean + stdDev;

// --- Statistik für Panel 2: Beat ---
Array.getStatistics(sincelastbeatabs, min, max, mean, stdDev);
Means2 = newArray(1);
Means2[0] = mean;
StdDevs2 = newArray(1);
StdDevs2[0] = stdDev;
AbsMaxNorm2 = mean + stdDev;

// --- Statistik für Panel 3: Restliche Parameter ---
Means3 = newArray();
StdDevs3 = newArray();
AbsMaxNorm3 = 0;

Array.getStatistics(peakuserabs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(systuserabs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(diasuserabs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(peak10abs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(syst10abs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(dias10abs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(peak50abs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(syst50abs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(dias50abs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(peak90abs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(syst90abs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}
Array.getStatistics(dias90abs, min, max, mean, stdDev); Means3=Array.concat(Means3,mean); StdDevs3=Array.concat(StdDevs3,stdDev); if((mean+stdDev)>AbsMaxNorm3){AbsMaxNorm3=mean+stdDev;}



// =================================================================
// 3. AUFRUFEN DER ZEICHENFUNKTION FÜR JEDES PANEL
// =================================================================
selectWindow("Multi-Panel BoxPlot");

zeichnePanel(40, Means1, StdDevs1, Array.slice(ArrayNamen, 0, 1), AbsMaxNorm1, 1);
zeichnePanel(240, Means2, StdDevs2, Array.slice(ArrayNamen, 1, 2), AbsMaxNorm2, 2);
zeichnePanel(440, Means3, StdDevs3, Array.slice(ArrayNamen, 2), AbsMaxNorm3, 3);


// =================================================================
// 4. DEFINITION DER WIEDERVERWENDBAREN ZEICHENFUNKTION
// =================================================================
function zeichnePanel(xOffset, panelMeans, panelStdDevs, panelArrayNamen, panelAbsMaxNorm, panelID) {
    yPadding = 200;
    plotHeight = PlotBoxHeight - yPadding;

    // Workaround for ceil() using floor()
    if (panelAbsMaxNorm <= 0) panelAbsMaxNorm = 1; // Avoid division by zero
    tempVal = panelAbsMaxNorm;
    if (tempVal < 1) {
        step = 0.1;
    } else if (tempVal < 10) {
        step = 1;
    } else {
        step = 10;
    }
    panelMaxY = (floor(tempVal / step) + 1) * step; // Mimics ceil behavior

    Normierungsfaktor = plotHeight / panelMaxY;

    barWidth = 30;
    if (panelMeans.length > 1) {
        barSpacing = 40;
    } else {
        barSpacing = 0;
    }
    startX = xOffset + 60;

    setColor(0,0,0);
    setLineWidth(2);
    panelWidth = (panelMeans.length * (barWidth + barSpacing)) - barSpacing + 20;
    if (panelMeans.length == 1) {
        panelWidth = barWidth + 20;
    }
        
    drawLine(startX - 15, yPadding / 2, startX + panelWidth, yPadding / 2); // Top line
    drawLine(startX - 15, plotHeight + (yPadding / 2), startX + panelWidth, plotHeight + (yPadding / 2)); // Bottom line
    drawLine(startX - 10, yPadding / 2, startX - 10, plotHeight + (yPadding / 2)); // Left line
    drawLine(startX + panelWidth, yPadding / 2, startX + panelWidth, plotHeight + (yPadding / 2)); // Right line

    // Draw vertical y-axis label
    setFont("SansSerif", Schriftgroesse);
    if (panelID == 1) {label = yLabel1; LabelPosY=30; totalLabelHeight = lengthOf(label)*(Schriftgroesse*0.82); LabelPosX=PlotBoxHeight/2-totalLabelHeight/3;}
    else if (panelID == 2) {label = yLabel2; LabelPosY=220; totalLabelHeight = lengthOf(label)*(Schriftgroesse*0.82);  LabelPosX=PlotBoxHeight/2-totalLabelHeight/3;}
    else {label = yLabel3; LabelPosY=420; totalLabelHeight = lengthOf(label)*(Schriftgroesse*0.82); LabelPosX=PlotBoxHeight/2-totalLabelHeight/4;}
    
    run("Rotate 90 Degrees Right");
    drawString(label, LabelPosX, LabelPosY);  
    run("Rotate 90 Degrees Left");

    setFont("SansSerif", Schriftgroesse - 10);
    for (j = 0; j < panelMeans.length; j++) {
        xPos = startX + j * (barWidth + barSpacing);
        meanHeight = panelMeans[j] * Normierungsfaktor;
        stdDevHeight = panelStdDevs[j] * Normierungsfaktor;
        yPos = plotHeight - meanHeight + (yPadding / 2);

        if (panelID == 3) {
            colorIndex = j + 2;
        } else {
            colorIndex = panelID - 1;
        }

        if(colorIndex>=2 && colorIndex<=4){setColor(255,0,0);}
        else if(colorIndex>=5 && colorIndex<=7){setColor(0,200,0);}
        else if(colorIndex>=8 && colorIndex<=10){setColor(0,0, 255);}
        else if(colorIndex>=11 && colorIndex<=13){setColor(255,128, 0);}
        else if(colorIndex==1){setColor(0,128,255);}
        else{setColor(128,128,128);}

        fillRect(xPos, yPos, barWidth, meanHeight);

        setColor(0,0,0);
        drawRect(xPos, yPos, barWidth, meanHeight);

        stdDevTopY = yPos - stdDevHeight;
        drawLine(xPos + barWidth/2, yPos, xPos + barWidth/2, stdDevTopY);
        drawLine(xPos, stdDevTopY, xPos + barWidth, stdDevTopY);

        if(j%2==0){drawString(panelArrayNamen[j], xPos-Schriftgroesse/2, plotHeight + 100+Schriftgroesse);}else{drawString(panelArrayNamen[j], xPos-Schriftgroesse/2, plotHeight + 100+(2*Schriftgroesse));}
    }

    setFont("SansSerif", Schriftgroesse - 5);
    for (i = 0; i <= 10; i++) {
        val = panelMaxY * (i / 10.0);
        yTickPos = plotHeight + (yPadding / 2) - (plotHeight * (i / 10.0));
        // Replace ternary operator with if/else if
        if (panelMaxY < 1) {
            decimals = 2;
        } else if (panelMaxY < 10) {
            decimals = 1;
        } else {
            decimals = 0;
        }
        drawString(d2s(val, decimals), xOffset + 5, yTickPos + (Schriftgroesse / 3));
        drawLine(startX - 10, yTickPos, startX - 5, yTickPos);
    }
}


// Erstellten Plot speichern und dann schliessen

selectWindow("Multi-Panel BoxPlot");
saveAs("Jpeg", dir+"Extracted results Plot "+filename+".jpg");
close("Multi-Panel BoxPlot");

// Ende der neuen Bildausgabe



// =====================
// AXIS LABELS (edit here)
// =====================
xAxisLabels = newArray(
    "Max. amplitude [a.u.]",
    "Time between contractions [s]",
    "Peak time user absolute [s]",
    "Systolic time user absolute [s]",
    "Diastolic time user absolute [s]",
    "Peak time 10% threshold [s]",
    "Systolic time 10% threshold [s]",
    "Diastolic time 10% threshold [s]",
    "Peak time 50% threshold [s]",
    "Systolic time 50% threshold [s]",
    "Diastolic time 50% threshold [s]",
    "Peak time 90% threshold [s]",
    "Systolic time 90% threshold [s]",
    "Diastolic time 90% threshold [s]"
);

yAxisLabelDefault = "Frequency [count]"; // Y-Achse

// =====================
// HISTOGRAMM MIT ACHSENBESCHRIFTUNGEN
// =====================
function drawHistogramWithLabels(values, title, xAxisLabel, yAxisLabel) {
    bins = 20;
    Array.getStatistics(values, vmin, vmax, vmean, vsd);
    if (vmin==vmax) { vmin = vmin - 1e-9; vmax = vmax + 1e-9; }
    binWidth = (vmax - vmin) / bins;

    // Histogrammdaten
    h = newArray(bins); for (i=0;i<bins;i++) h[i]=0;
    for (i = 0; i < values.length; i++) {
        b = floor((values[i] - vmin) / binWidth);
        if (b < 0) b = 0; if (b >= bins) b = bins - 1;
        h[b]++;
    }

    // Canvas
    W = 900; H = 650;
    newImage(title, "RGB white", W, H, 1);
    setFont("SansSerif", 12);
    setColor(0,0,0);

    // Ränder und Plotfläche
    marginL=80; marginR=40; marginT=50; marginB=110;
    plotW = W - marginL - marginR;
    plotH = H - marginT - marginB;

    // Achsen
    setLineWidth(2);
    drawRect(marginL, marginT, plotW, plotH);
    // Y-Skalierung
    Array.getStatistics(h, hmin, hmax, hmean, hsd);
    if (hmax<1) hmax=1;
    scaleY = plotH / hmax;
    barW = plotW / bins;

    // ======= NEU: Balkenfarbe je Parameter wählen (nur Farbe, keine Logik geändert) =======
    function BalkenFarbeFestlegen(){
    if (indexOf(xAxisLabel, "Max. amplitude") >= 0) {setColor(128,128,128);}           // Mittelgrau
    else if (indexOf(xAxisLabel, "Time between contractions") >= 0) {setColor(0,128,255);} // Hellblau
    else if (indexOf(xAxisLabel, "user") >= 0 || indexOf(xAxisLabel, "User") >= 0) {setColor(255,0,0);} // Rot
    else if (indexOf(xAxisLabel, "10%") >= 0) {setColor(0,200,0);}                       // Grün
    else if (indexOf(xAxisLabel, "50%") >= 0) {setColor(0,0,255);}                       // Blau
    else if (indexOf(xAxisLabel, "90%") >= 0) {setColor(255,128,0);}                     // Orange
    }
    
    // ======= ENDE NEU =======

    // Balken + X-Werte (Bin-Mitte)
    for (b = 0; b < bins; b++) {
        bh = h[b] * scaleY;
        x = marginL + b * barW;
        y = marginT + plotH - bh;

        BalkenFarbeFestlegen();                // <— hier die gewählte Farbe verwenden
        fillRect(x+1, y, barW-2, bh);
        setColor(0,0,0);
        drawRect(x+1, y, barW-2, bh);

        // Bin-Mitte beschriften
        xm = vmin + (b+0.5)*binWidth;
        drawString(d2s(xm, 2), x+2, marginT + plotH + 25);
    }

    // X-Achsenlabel
    setFont("SansSerif", 20);
    drawString(xAxisLabel, marginL + (plotW/2) - (getStringWidth(xAxisLabel)/2), H - 40);

    // Y-Achsenlabel (vertikal, via Rotation)
    run("Rotate 90 Degrees Right");
    setFont("SansSerif", 20);
    drawString(yAxisLabel, (getWidth()/2) - (getStringWidth(yAxisLabel)/2), 50);
    run("Rotate 90 Degrees Left");

    // Titelinfo
    setFont("SansSerif", 16);
    drawString("n="+values.length+", mean="+d2s(vmean,3)+", sd="+d2s(vsd,3),
               marginL, marginT - 15);


title2=replace(title, "Histogram: ", "");

saveAs("Jpeg", dir+"Histogram "+ title2+".jpg");

selectWindow(title);
close();

}


// =====================
// AUFRUFE FÜR ALLE 14 PARAMETER
// =====================
// (nach deiner convertToFloat-Phase aufrufen)
drawHistogramWithLabels(maxamplitudes,    "Histogram: " + xAxisLabels[0],  xAxisLabels[0],  yAxisLabelDefault);
drawHistogramWithLabels(sincelastbeatabs, "Histogram: " + xAxisLabels[1],  xAxisLabels[1],  yAxisLabelDefault);

drawHistogramWithLabels(peakuserabs,      "Histogram: " + xAxisLabels[2],  xAxisLabels[2],  yAxisLabelDefault);
drawHistogramWithLabels(systuserabs,      "Histogram: " + xAxisLabels[3],  xAxisLabels[3],  yAxisLabelDefault);
drawHistogramWithLabels(diasuserabs,      "Histogram: " + xAxisLabels[4],  xAxisLabels[4],  yAxisLabelDefault);

drawHistogramWithLabels(peak10abs,        "Histogram: " + xAxisLabels[5],  xAxisLabels[5],  yAxisLabelDefault);
drawHistogramWithLabels(syst10abs,        "Histogram: " + xAxisLabels[6],  xAxisLabels[6],  yAxisLabelDefault);
drawHistogramWithLabels(dias10abs,        "Histogram: " + xAxisLabels[7],  xAxisLabels[7],  yAxisLabelDefault);

drawHistogramWithLabels(peak50abs,        "Histogram: " + xAxisLabels[8],  xAxisLabels[8],  yAxisLabelDefault);
drawHistogramWithLabels(syst50abs,        "Histogram: " + xAxisLabels[9],  xAxisLabels[9],  yAxisLabelDefault);
drawHistogramWithLabels(dias50abs,        "Histogram: " + xAxisLabels[10], xAxisLabels[10], yAxisLabelDefault);

drawHistogramWithLabels(peak90abs,        "Histogram: " + xAxisLabels[11], xAxisLabels[11], yAxisLabelDefault);
drawHistogramWithLabels(syst90abs,        "Histogram: " + xAxisLabels[12], xAxisLabels[12], yAxisLabelDefault);
drawHistogramWithLabels(dias90abs,        "Histogram: " + xAxisLabels[13], xAxisLabels[13], yAxisLabelDefault);




// Und nun der Scatterplot

// =====================
// LABELS (edit here to match your style)
// =====================


xLabelSys = "Systolic time [s]";
yLabelDia = "Diastolic time [s]";

// =====================
// SCATTER: Systole vs Diastole (equal scale + diagonal)
// =====================
function scatterSysDia(sysArr, diaArr, title, xAxisLabel, yAxisLabel) {
    n = minOf(sysArr.length, diaArr.length);
    if (n <= 0) return;

    // Bereich mit gleichem Maßstab (X und Y gemeinsam)
    Array.getStatistics(sysArr, smin, smax, smean, ssd);
    Array.getStatistics(diaArr, dmin, dmax, dmean, dsd);
    xmin = minOf(smin, dmin);
    xmax = maxOf(smax, dmax);
    if (xmin == xmax) { xmin = xmin - 1e-9; xmax = xmax + 1e-9; }

    // Canvas
    W = 900; H = 700;
    marginL = 90; marginR = 40; marginT = 60; marginB = 110;
    plotW = W - marginL - marginR;
    plotH = H - marginT - marginB;

    newImage(title, "RGB white", W, H, 1);
    setColor(0,0,0);
    setLineWidth(2);

    // Rahmen/Achsen
    drawRect(marginL, marginT, plotW, plotH);

    // Diagonale (y=x, gleicher Maßstab)
    x1 = marginL;                y1 = marginT + plotH;  // (xmin,xmin)
    x2 = marginL + plotW;        y2 = marginT;          // (xmax,xmax)
    setColor(200,0,0);
    drawLine(x1, y1, x2, y2);
    setColor(0,0,0);

    // Ticks & numerische Skala (5 Teilstriche)
    nt = 5;
    step = (xmax - xmin) / nt;
    if (step <= 0) step = 1e-3;

    // Dezimalstellen wie bei dir (grobe Heuristik)
    if (xmax - xmin < 1) decimals = 2;
    else if (xmax - xmin < 10) decimals = 1;
    else decimals = 0;

    setFont("SansSerif", 16);
    for (t = 0; t <= nt; t++) {
        val = xmin + t * step;

        // X-Tick
        px = marginL + ( (val - xmin) / (xmax - xmin) ) * plotW;
        drawLine(px, marginT + plotH, px, marginT + plotH + 6);
        drawString(d2s(val, decimals), px - 12, marginT + plotH + 26);

        // Y-Tick (gleicher Wertebereich)
        py = marginT + plotH - ( (val - xmin) / (xmax - xmin) ) * plotH;
        drawLine(marginL - 6, py, marginL, py);
        drawString(d2s(val, decimals), marginL - 60, py + 6);
    }

    // Punkte (kleine Kreuze)
    setLineWidth(1);
    for (i = 0; i < n; i++) {
        vx = sysArr[i]; vy = diaArr[i];
        px = marginL + ( (vx - xmin) / (xmax - xmin) ) * plotW;
        py = marginT + plotH - ( (vy - xmin) / (xmax - xmin) ) * plotH; // gleicher Maßstab
        drawLine(px-2, py-2, px+2, py+2);
        drawLine(px-2, py+2, px+2, py-2);
    }

    // X-Achsenlabel
    setFont("SansSerif", 20);
    drawString(xAxisLabel, marginL + (plotW/2) - (getStringWidth(xAxisLabel)/2), H - 40);

    // Y-Achsenlabel (vertikal wie in deinem Code)
    run("Rotate 90 Degrees Right");
    setFont("SansSerif", 20);
    drawString(yAxisLabel, (getWidth()/2) - (getStringWidth(yAxisLabel)/2), 30);
    run("Rotate 90 Degrees Left");

    // Infozeile (n)
    setFont("SansSerif", 16);
    drawString("n = " + n, marginL, marginT - 15);
}



// =====================
// AUFRUFE der Scatterplots fuer die 4 Thresholds (4 Schwellen)
// =====================

scatterSysDia(systuserabs, diasuserabs,
              "Sys vs Dia (User Thr)", xLabelSys + " (User Thr)", yLabelDia + " (User Thr)");
saveAs("Jpeg", dir+"ScatterPlot Sys vs Dia (User Thr)"+".jpg");

scatterSysDia(syst10abs, dias10abs,
              "Sys vs Dia (Thr10%)", xLabelSys + " (Thr10%)", yLabelDia + " (Thr10%)");
saveAs("Jpeg", dir+"ScatterPlot Sys vs Dia (Thr10%)"+".jpg");

scatterSysDia(syst50abs, dias50abs,
              "Sys vs Dia (Thr50%)", xLabelSys + " (Thr50%)", yLabelDia + " (Thr50%)");
saveAs("Jpeg", dir+"ScatterPlot Sys vs Dia (Thr50%)"+".jpg");

scatterSysDia(syst90abs, dias90abs,
              "Sys vs Dia (Thr90%)", xLabelSys + " (Thr90%)", yLabelDia + " (Thr90%)");
saveAs("Jpeg", dir+"ScatterPlot Sys vs Dia (Thr90%)"+".jpg");

close("*");



// =====================
// 4) CORRELATION MATRIX (PEARSON-r) + HEATMAP
// =====================

// Kurze Labels für die Matrix (Reihenfolge = Datenarrays unten)
corrLabels = newArray(
  "MaxAmp","Beat",
  "UserPeak","UserSys","UserDia",
  "10Peak","10Sys","10Dia",
  "50Peak","50Sys","50Dia",
  "90Peak","90Sys","90Dia"
);

// --- Zugriff auf deine Arrays ohne Arrays-von-Arrays ---
function getLen(idx) {
  if (idx==0)  return maxamplitudes.length;
  if (idx==1)  return sincelastbeatabs.length;

  if (idx==2)  return peakuserabs.length;
  if (idx==3)  return systuserabs.length;
  if (idx==4)  return diasuserabs.length;

  if (idx==5)  return peak10abs.length;
  if (idx==6)  return syst10abs.length;
  if (idx==7)  return dias10abs.length;

  if (idx==8)  return peak50abs.length;
  if (idx==9)  return syst50abs.length;
  if (idx==10) return dias50abs.length;

  if (idx==11) return peak90abs.length;
  if (idx==12) return syst90abs.length;
  if (idx==13) return dias90abs.length;
  return 0;
}
function getVal(idx, k) {
  if (idx==0)  return maxamplitudes[k];
  if (idx==1)  return sincelastbeatabs[k];

  if (idx==2)  return peakuserabs[k];
  if (idx==3)  return systuserabs[k];
  if (idx==4)  return diasuserabs[k];

  if (idx==5)  return peak10abs[k];
  if (idx==6)  return syst10abs[k];
  if (idx==7)  return dias10abs[k];

  if (idx==8)  return peak50abs[k];
  if (idx==9)  return syst50abs[k];
  if (idx==10) return dias50abs[k];

  if (idx==11) return peak90abs[k];
  if (idx==12) return syst90abs[k];
  if (idx==13) return dias90abs[k];
  return NaN;
}

// Pearson-r zwischen zwei Datensätzen (über minimale gemeinsame Länge)
function pearsonIdx(i, j) {
  nA = getLen(i);
  nB = getLen(j);
  if (nA == 0 || nB == 0) return NaN; // Schutz vor leeren Arrays
  n = minOf(nA, nB);
  if (n < 2) return NaN;

  // Mittelwerte
  sx = 0.0; sy = 0.0; validCount = 0;
  for (k = 0; k < n; k++) {
    valX = getVal(i, k);
    valY = getVal(j, k);
    if (valX == valX && valY == valY) { // Prüft, ob nicht NaN
      sx += valX;
      sy += valY;
      validCount++;
    }
  }
  if (validCount < 2) return NaN;
  mx = sx / validCount; my = sy / validCount;

  // Kovarianz & Varianzen
  num = 0; dx = 0; dy = 0;
  for (k = 0; k < n; k++) {
    valX = getVal(i, k);
    valY = getVal(j, k);
    if (valX == valX && valY == valY) { // Prüft, ob nicht NaN
      vx = valX - mx;
      vy = valY - my;
      num += vx * vy;
      dx += vx * vx;
      dy += vy * vy;
    }
  }
  den = sqrt(dx * dy);
  if (den == 0) return NaN;
  return num / den;
}

// Farbabbildung r∈[-1,1] → (blau-weiß-rot)
function rgbFromR(r) {
  if (r!=r) r = 0;           // NaN → 0
  t = (r + 1) / 2;           // 0..1
  R = floor(255 * t);
  G = floor(255 * (1 - abs(r)));
  B = floor(255 * (1 - t));
  return newArray(R, G, B);
}

// Heatmap zeichnen & optional speichern
function drawCorrHeatmap(labels, title, outPath) {
  m = labels.length;

  // r-Matrix flach anlegen
  rflat = newArray(m * m);
  for (i = 0; i < m; i++) {
    for (j = 0; j < m; j++) {
      rflat[i * m + j] = pearsonIdx(i, j);
    }
  }

  // Canvasgröße
  cell = 46;                     // Zellgröße (anpassbar)
  margin = 120;
  W = margin + m * cell + margin;
  H = margin + m * cell + margin;

  newImage(title, "RGB white", W, H, 1);
  setFont("SansSerif", 14);

  // Zellen zeichnen
  for (i = 0; i < m; i++) {
    for (j = 0; j < m; j++) {
      r = rflat[i * m + j];
      rgb = rgbFromR(r);
      setColor(rgb[0], rgb[1], rgb[2]);
      x = margin + j * cell;
      y = margin + i * cell;
      fillRect(x, y, cell, cell);
      setColor(0,0,0);
      drawRect(x, y, cell, cell);

      // r-Wert beschriften
      setFont("SansSerif", 14);
      setColor(0,0,0);
      drawString(d2s(r, 2), x + 6, y + cell/2 + 4);
    }
  }

  // Row-Labels links
  setFont("SansSerif", 16);
  for (i = 0; i < m; i++) {
    drawString(labels[i], margin - 10 - getStringWidth(labels[i]),
               margin + i * cell + cell * 0.65);
  }

  // Column-Labels oben (hochkant)
  setFont("SansSerif", 16);
  
  run("Rotate 90 Degrees Left");
  
  labels2=Array.copy(labels);
  labels2=Array.reverse(labels2);
  
  for (j = 0; j < m; j++) {
    tx = margin+15  + j * cell + cell * 0.35; // X-Position: Mitte der Zelle
    ty = margin -85; // Y-Position: oberhalb der Matrix
    drawString(labels2[j], ty, tx); // Nach Rotation: X/Y getauscht   
  }

run("Rotate 90 Degrees Right");

  // Rahmen um gesamte Matrix
  setColor(0,0,0); setLineWidth(2);
  drawRect(margin, margin, m * cell, m * cell);

  // Legende (-1..1)
  lx = margin; ly = margin + m * cell + 40; lw = m * cell; lh = 15;
  for (p = 0; p <= lw; p++) {
    r = (p / lw) * 2 - 1;    // -1..1
    rgb = rgbFromR(r);
    setColor(rgb[0], rgb[1], rgb[2]);
    drawLine(lx + p, ly, lx + p, ly + lh);
  }
  setColor(0,0,0); setLineWidth(1);
  drawRect(lx, ly, lw, lh);
  setFont("SansSerif", 14);
  drawString("-1", lx - 10, ly + lh + 18);
  drawString("0",  lx + lw/2 - 4, ly + lh + 18);
  drawString("1",  lx + lw - 4,   ly + lh + 18);

  // Titel
  setFont("SansSerif", 18);
  drawString(title, margin, margin - 90);

  // speichern
  if (outPath != "") saveAs("Jpeg", outPath);
  close("*");
}

// ===== Aufruf =====
drawCorrHeatmap(corrLabels, "Correlation heatmap (Pearson r)", dir + "CorrHeatmap_" + filename + ".jpg");


// --- Finale Datenausgabe ---

print("\\Clear");
print("Loc. Maxamplitude [a.u]\tSince last beat abs. time [sec]\tPeak time user absolute [sec]\tContract. interval (user) absol. [sec]\tRelax. interval (user) absol. [sec]\tPeak time Thr(10%) absol. [sec]\tContract. interval Thr(10%) absol. [sec]\tRelax. interval Thr(10%) absol. [sec]\tPeak time Thr(50%) absol. [sec]\tContract. interval Thr(50%) absol. [sec]\tRelax. interval Thr(50%) absol. [sec]\tPeak time Thr(90%) absol. [sec]\tContract. interval Thr(90%) absol. [sec]\tRelax. interval Thr(90%) absol. [sec]");

for (prn = 0; prn < FinalMaxima.length; prn++) {
    print(maxamplitudes[prn] + "\t" + sincelastbeatabs[prn] + "\t" +
          peakuserabs[prn] + "\t" + systuserabs[prn] + "\t" + diasuserabs[prn] + "\t" +
          peak10abs[prn] + "\t" + syst10abs[prn] + "\t" + dias10abs[prn] + "\t" +
          peak50abs[prn] + "\t" + syst50abs[prn] + "\t" + dias50abs[prn] + "\t" +
          peak90abs[prn] + "\t" + syst90abs[prn] + "\t" + dias90abs[prn]);
}


extract=getInfo("log");

File.saveString(extract, dir + "Extracted results (eng) "+ filename + ".txt");

extract=replace(extract, ".", ",");
extract=replace(extract, "\\[a,u\\]", "[a.u]");

File.saveString(extract, dir + "Extracted results (ger) "+ filename + ".txt");



// ***** The COMPLETE DATA EXTRACTION ends here

}

}

// ************************************* DATA EXTRACTION for Statistics ends here

// ************************************ Manual ROI selection starts here

if (option == "3. Manual ROI selection") {

filetype=".avi";

imagename=newArray();
imagenorois=newArray();
manualroiref=newArray();
origrois=newArray();
difffiles=newArray();
diffrois=newArray();

run("Colors...", "foreground=black background=black selection=yellow");
run("Set Measurements...", "area mean standard modal min centroid center perimeter bounding fit shape feret's integrated median skewness kurtosis area_fraction stack limit display redirect=None decimal=5");
run("Input/Output...", "jpeg=85 gif=-1 file=.txt use_file copy_column copy_row save_column save_row");

getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
MonthNames = newArray("Jan","Feb","Mar","Apr","May","Jun","Jul","Aug","Sep","Oct","Nov","Dec"); 

if (hour<10) {hours = "0"+hour;}
else {hours=hour;}
if (minute<10) {minutes = "0"+minute;}
else {minutes=minute;}
if (month<10) {months = "0"+(month+1);}
else {months=month+1;}
if (dayOfMonth<10) {dayOfMonths = "0"+dayOfMonth;}
else {dayOfMonths=dayOfMonth;}


//*********************** Global Settings end here *************************


// *********************** Also select the reference frames?

Dialog.create("Also select Referenceframes?");
Dialog.addCheckbox("Also select a ReferenceFrame for every cell?", true);
Dialog.show();
  
alsorefframes = Dialog.getCheckbox();

//*********************** Sellect the Folder containing the videos and create a subfolder *************************

dir=getDirectory("Please choose the directory containing your videos");

evalDir=dir + "\manrois "+year+"-"+MonthNames[month]+"-"+dayOfMonths+" "+hours+"h"+minutes+"\\";  
File.makeDirectory(evalDir); 

list = getFileList(dir); 



// ******************************************************* Hier kommt der Filecountdown ******************************************

filecounter=0;

for (filecnt=0; filecnt<list.length; filecnt++) {
if (endsWith(list[filecnt], filetype)){filecounter++;}
}



// ****************** Main Loop ********************************************************

for (z=0; z<list.length; z++) {

if (endsWith(list[z], filetype)){
               
if (File.exists(dir+list[z])==true){	
		
run("AVI...", "open=[" + dir+list[z] + "] use convert");

name = indexOf(list[z], filetype);
title = substring(list[z], 0, name);

roiManager("reset");
selectWindow(title+filetype);
framerate=round(Stack.getFrameRate());

filecounter=filecounter-1;

// Please select now the according reference frame for every single ROI

if (alsorefframes==true){

slicenumber=nSlices+1;
setSlice(1);
roiManager("Show All with labels");
waitForUser( "Select the ROI(s)","Please outline the ROI(s) and press <t>-button to add them to the" + "\n" + "ROI-Manager. Finish with <Okay> in THIS window\nFilesremain (about):"+filecounter);
run("Select None");
setSlice(1);

if(roiManager("count")==0){imagenorois=Array.concat(imagenorois,title+".avi");}

if (roiManager("count")>0) {

imagename=Array.concat(imagename, title);

if (roiManager("count")==1) {
difftitle=title+"-diff-cell 01 ("+framerate+"fps)";
roiManager("Save", evalDir+title+"-diff-cell 01 ("+framerate+"fps)"+".roi");
roiManager("Save", evalDir+title+".roi");
origrois=Array.concat(origrois, title+".roi");
roiManager("select", 0);

setSlice(1);
waitForUser( "Select Referenceframe","Please select the Referenceframe (use the slider)" + "\n" + "FOR CELL " + "1" + " and click >OK<");
forcedframe=getSliceNumber();
setSlice(1);

manualroiref=Array.concat(manualroiref, title + ".avi" + "\t" + "1" + "\t" + forcedframe + "\t" + difftitle + ".roi" + "\t" + difftitle+".avi");

}

if (roiManager("count")>1) { 
roiManager("Save", evalDir + title + ".zip");
origrois=Array.concat(origrois, title+".zip");	
for (roicount=0; roicount<roiManager("count"); roicount++){	
if(roicount<9){roiManager("Save", evalDir + title + "-diff-cell 0" + (roicount+1) + " (" + framerate + "fps)" + ".roi");}
if(roicount>=9){roiManager("Save", evalDir + title + "-diff-cell " + (roicount+1) + " (" + framerate + "fps)" + ".roi");}
if(roicount<9){difftitle=title + "-diff-cell 0" + (roicount+1) + " (" + framerate + "fps)";}
if(roicount>=9){difftitle=title + "-diff-cell " + (roicount+1) + " (" + framerate + "fps)";}

roiManager("select", roicount);
setSlice(1);
waitForUser( "Select Referenceframe","Please select the Referenceframe (use the slider)" + "\n" + "FOR CELL " + (roicount+1) + " and click >OK<");
forcedframe=getSliceNumber();
setSlice(1);

manualroiref=Array.concat(manualroiref, title + ".avi" + "\t" + (roicount+1) + "\t" + forcedframe + "\t" + difftitle + ".roi" + "\t" + difftitle+".avi");
	
	}
}

}

}

if (alsorefframes==false){

slicenumber=nSlices+1;
setSlice(1);
roiManager("Show All with labels");
waitForUser( "Select the ROI(s)","Please outline the ROI(s) and press <t>-button to add them to the" + "\n" + "ROI-Manager. Finish with <Okay> in THIS window\nFilesremain="+filecounter);
run("Select None");
setSlice(1);

if(roiManager("count")==0){imagenorois=Array.concat(imagenorois,title+".avi");}
	
if (roiManager("count")>0) {
imagename=Array.concat(imagename, title);

if (roiManager("count")==1) { 
difftitle=title+"-diff-cell 01 ("+framerate+"fps)";
origrois=Array.concat(origrois, title+".roi");	
roiManager("select", 0);	
roiManager("Save", evalDir+title+".roi");
manualroiref=Array.concat(manualroiref, title + ".avi" + "\t" + "1" + "\t" + "N/A" + "\t" + title + "-cell 01" + ".roi" + "\t" + difftitle+".avi");
}

if (roiManager("count")>1) {
roiManager("Save", evalDir + title + ".zip");
origrois=Array.concat(origrois, title+".zip"); 
for (roicount=0; roicount<roiManager("count"); roicount++){	
	
if(roicount<9){roiManager("Save", evalDir + title + "-cell 0" + (roicount+1) + ".roi");}
if(roicount>=9){roiManager("Save", evalDir + title + "-cell " + (roicount+1) + ".roi");}
if(roicount<9){difftitle=title + "-diff-cell 0" + (roicount+1) + " (" + framerate + "fps)";}
if(roicount>=9){difftitle=title + "-diff-cell " + (roicount+1) + " (" + framerate + "fps)";}

if(roicount<9){manualroiref=Array.concat(manualroiref, title + ".avi" + "\t" + (roicount+1) + "\t" + "N/A" + "\t" + title + "-cell 0" + (roicount+1) + " (" + framerate + "fps)" + ".roi" + "\t" + difftitle+".avi");}
if(roicount>9){manualroiref=Array.concat(manualroiref, title + ".avi" + "\t" + (roicount+1) + "\t" + "N/A" + "\t" + title + "-cell " + (roicount+1) + " (" + framerate + "fps)" + ".roi" + "\t" + difftitle+".avi");}

}	
}
}
}

run("Close All");

run("Collect Garbage");

}
}
}


// print ROIList for the diff-files

print("\\Clear");

print("Filename" + "\t" + "Cell#" + "\t" + "RefFrame" + "\t" + "ROI-file" + "\t" + "Diff-File");

for (roiref = 0; roiref < manualroiref.length; roiref++) {
print(manualroiref[roiref]);
}

if(imagenorois.length>0){
print("\n");
print("Videos without ROI(s) assigned:");
for (noroi = 0; noroi < imagenorois.length; noroi++) {
print(imagenorois[noroi]);	
}
}

selectWindow("Log");
saveAs("Text", evalDir+"diffroilist.txt");

// print ROIList for the originals

print("\\Clear");

print("Filename" + "\t" + "ROI-file");

for (roiref = 0; roiref < imagename.length; roiref++) {
print(imagename[roiref]+".avi" + "\t" + origrois[roiref]);
}

if(imagenorois.length>0){
print("\n");
print("Videos without ROI(s) assigned:");
for (noroi = 0; noroi < imagenorois.length; noroi++) {
print(imagenorois[noroi]);	
}
}

selectWindow("Log");
saveAs("Text", evalDir+"roilist.txt");

run("Close All");
run("Collect Garbage");

if (isOpen("Results")) {
     selectWindow("Results");
     run("Close");
}

if (isOpen("Log")) {
     selectWindow("Log");
     run("Close");
}

if (isOpen("ROI Manager")) {
     selectWindow("ROI Manager");
     run("Close");
}


}



// ************************************ Manual ROI selection ends here

if (option == "8. Extraction for Statistics") {


// Final Exraction from a <Results (final summary)>-file

// Loop this function

for (j = 0; j < 1000000; j++) {

// Define the parameters to be extracted (only once per session)

if(j<1){
labels=newArray("Peaktime Thr10%", "Systole Thr10%", "Diastole Thr10%", "Peaktime user", "Systole user", "Diastole user", "Peaktime Thr50%", "Systole Thr50%", "Diastole Thr50%", "Peaktime Thr90%", "Systole Thr90%", "Diastole Thr90%");
defaults=newArray(labels.length);
defaults=Array.fill(defaults, true);

Dialog.create("Select parameters to extract");

// Headline in blue color
Dialog.addMessage("Please select (only once) the paramaters to be extracted", 12, "#0000ff");

Dialog.addCheckbox("Filenames", true);
Dialog.addCheckbox("Beats counted", true);
Dialog.addCheckbox("Amplitudes", true);
Dialog.addCheckbox("BeatTimes", true);
Dialog.addCheckbox("Frequencies", true);

// The necessary Arrays for checkboxes and their initial states have to be defined above

Dialog.addCheckboxGroup(4,3,labels,defaults);

Dialog.show();

// Grab the Checkboxes via Array

// Arrays fuer Checkbox-Kategorien und Optionen

categories = newArray("Filenames", "Beats counted", "Amplitudes", "BeatTimes", "Frequencies", "PeakTime10", "SystoleTime10", "DiastoleTime10", "PeakTimeUser", "SystoleTimeUser", "DiastoleTimeUser", "PeakTime50", "SystoleTime50", "DiastoleTime50", "PeakTime90", "SystoleTime90", "DiastoleTime90");



// Ergebnisse speichern
results = newArray(categories.length);

// Checkboxen abrufen
for (i = 0; i < categories.length; i++) {
    results[i] = Dialog.getCheckbox();
}



}


// Complete data extraction from Final Summary Results

dir=getDirectory("Please choose directory containing the <Results (final summary)>-file (<dataplots>-folder");

//pathfile=File.openDialog("Please choose a <Results (final summary)>-file to be opened for extraction:");

list = getFileList(dir); 

// here we extrcat the matching Headline from the Path of the file


// Position des interessanten Abschnitts finden
vidsIndex = indexOf(dir, "\\VidsMovement");
if (vidsIndex != -1) {
    // Den Teil vor "\VidsMovement" extrahieren
    beforeVids = substring(dir, 0, vidsIndex);

    // Den letzten Backslash vor "\VidsMovement" finden
    lastSlashIndex = lastIndexOf(beforeVids, "\\");

    // Verzeichnistitel extrahieren (zwischen dem letzten Backslash und "\VidsMovement")
    if (lastSlashIndex != -1) {
        DataTitle = substring(beforeVids, lastSlashIndex + 1, vidsIndex);
    } else {
        DataTitle = ""; // Falls kein Backslash gefunden wird, leer lassen
    }
} else {
    DataTitle = ""; // Falls "\VidsMovement" nicht gefunden wird, leer lassen
}


// Und nun oeffnen wir den Datensatz

for (lst = 0; lst < list.length; lst++) {
if(startsWith(list[lst], "Results (final summary) ")){data=File.openAsString(dir+list[lst]);}
}

// Feedback if there is NO Results (final summary)


Daten=split(data, "\n");

// Here we create the according new data arays that are overwritten for the next session *********************************************

FileNames=newArray();
BeatsCounted=newArray();
Amplitudes=newArray();
BeatTimes=newArray();
Frequencies=newArray();
PeakTimes10=newArray(); Systoles10=newArray(); Diastoles10=newArray();
PeakTimesUser=newArray(); SystolesUser=newArray(); DiastolesUser=newArray();
PeakTimes50=newArray(); Systoles50=newArray(); Diastoles50=newArray();
PeakTimes90=newArray(); Systoles90=newArray(); Diastoles90=newArray();


// Hier extrahieren wir die einzelen Arrays ******************************************************

// der User muss angeben koennen, welche Stats genau er will und welche nicht


for (i = 0; i < Daten.length; i++) {

if(startsWith(Daten[i], "Statistics WITHOUT the first and last event") && i>=3){FileNames=Array.concat(FileNames,Daten[i-3]);}

if(startsWith(Daten[i], "Beats counted:")){BeatsCounted=Array.concat(BeatsCounted,Daten[i]);}

if(startsWith(Daten[i], "Amplitudes [a.u.]")){Amplitudes=Array.concat(Amplitudes,Daten[i]);}
if(startsWith(Daten[i], "Beattimes [sec]")){BeatTimes=Array.concat(BeatTimes,Daten[i]);}
if(startsWith(Daten[i], "Frequency [1/sec]")){Frequencies=Array.concat(Frequencies,Daten[i]);}

if(startsWith(Daten[i], "Peaktimes Thr10% [sec]")){PeakTimes10=Array.concat(PeakTimes10,Daten[i]);}
if(startsWith(Daten[i], "Systoles Thr10% [sec]")){Systoles10=Array.concat(Systoles10,Daten[i]);}
if(startsWith(Daten[i], "Diastoles Thr10% [sec]")){Diastoles10=Array.concat(Diastoles10,Daten[i]);}

if(startsWith(Daten[i], "Peaktimes user [sec]")){PeakTimesUser=Array.concat(PeakTimesUser,Daten[i]);}
if(startsWith(Daten[i], "Systoles user [sec]")){SystolesUser=Array.concat(SystolesUser,Daten[i]);}
if(startsWith(Daten[i], "Diastoles user [sec]")){DiastolesUser=Array.concat(DiastolesUser,Daten[i]);}

if(startsWith(Daten[i], "Peaktimes Thr50% [sec]")){PeakTimes50=Array.concat(PeakTimes50,Daten[i]);}
if(startsWith(Daten[i], "Systoles Thr50% [sec]")){Systoles50=Array.concat(Systoles50,Daten[i]);}
if(startsWith(Daten[i], "Diastoles Thr50% [sec]")){Diastoles50=Array.concat(Diastoles50,Daten[i]);}

if(startsWith(Daten[i], "Peaktimes Thr90% [sec]")){PeakTimes90=Array.concat(PeakTimes90,Daten[i]);}
if(startsWith(Daten[i], "Systoles Thr90% [sec]")){Systoles90=Array.concat(Systoles90,Daten[i]);}
if(startsWith(Daten[i], "Diastoles Thr90% [sec]")){Diastoles90=Array.concat(Diastoles90,Daten[i]);}


}



// ************************



print("\\Clear");


// Wenn alles ausgewaehlt ist

if(results[0]==true && results[1]==true && results[2]==true && results[3]==true && results[4]==true && results[5]==true && results[6]==true && results[7]==true && results[8]==true && results[9]==true && results[10]==true && results[11]==true && results[12]==true && results[13]==true && results[14]==true && results[15]==true && results[16]==true){

for (i = 0; i < Amplitudes.length; i++) {
print("\t"+FileNames[i]+"\t"+BeatsCounted[i]+"\t"+Amplitudes[i]+"\t"+BeatTimes[i]+"\t"+Frequencies[i]+"\t"+PeakTimes10[i]+"\t"+Systoles10[i]+"\t"+Diastoles10[i]+"\t"+PeakTimesUser[i]+"\t"+SystolesUser[i]+"\t"+DiastolesUser[i]+"\t"+PeakTimes50[i]+"\t"+Systoles50[i]+"\t"+Diastoles50[i]+"\t"+PeakTimes90[i]+"\t"+Systoles90[i]+"\t"+Diastoles90[i]);
}
}else{

for (i = 0; i < Amplitudes.length; i++) {
printLine="\t";

if(results[0]==true){printLine+=FileNames[i]+"\t";}
if(results[1]==true){printLine+=BeatsCounted[i]+"\t";}
if(results[2]==true){printLine+=Amplitudes[i]+"\t";}
if(results[3]==true){printLine+=BeatTimes[i]+"\t";}
if(results[4]==true){printLine+=Frequencies[i]+"\t";}
if(results[5]==true){printLine+=PeakTimes10[i]+"\t";}
if(results[6]==true){printLine+=Systoles10[i]+"\t";} 
if(results[7]==true){printLine+=Diastoles10[i]+"\t";}
if(results[8]==true){printLine+=PeakTimesUser[i]+"\t";}
if(results[9]==true){printLine+=SystolesUser[i]+"\t";}
if(results[10]==true){printLine+=DiastolesUser[i]+"\t";}
if(results[11]==true){printLine+=PeakTimes50[i]+"\t";}
if(results[12]==true){printLine+=Systoles50[i]+"\t";} 
if(results[13]==true){printLine+=Diastoles50[i]+"\t";}
if(results[14]==true){printLine+=PeakTimes90[i]+"\t";}
if(results[15]==true){printLine+=Systoles90[i]+"\t";}
if(results[16]==true){printLine+=Diastoles90[i];}

print(printLine);
}

}


// Wenn nur einzelne ausgewaehlt sind


printout=getInfo("log");


printout=replace(printout, ".", ",");

printout=replace(printout, "Beats counted: 	", "");

printout=replace(printout, "Amplitudes \\[a.u.\\]", "");

printout=replace(printout, "Beattimes \\[sec\\]", "");
printout=replace(printout, "Frequency \\[1/sec\\]", "");


printout=replace(printout, "Peaktimes Thr10% \\[sec\\]", "");
printout=replace(printout, "Systoles Thr10% \\[sec\\]", "");
printout=replace(printout, "Diastoles Thr10% \\[sec\\]", "");

printout=replace(printout, "Peaktimes user \\[sec\\]", "");
printout=replace(printout, "Systoles user \\[sec\\]", "");
printout=replace(printout, "Diastoles user \\[sec\\]", "");

printout=replace(printout, "Peaktimes Thr50% \\[sec\\]", "");
printout=replace(printout, "Systoles Thr50% \\[sec\\]", "");
printout=replace(printout, "Diastoles Thr50% \\[sec\\]", "");


printout=replace(printout, "Peaktimes Thr90% \\[sec\\]", "");
printout=replace(printout, "Systoles Thr90% \\[sec\\]", "");
printout=replace(printout, "Diastoles Thr90% \\[sec\\]", "");


print("\\Clear");

// Hier kommt das entsprechende Verzeichnis
print(DataTitle);

// Und nun die Headlines ausgeben


if(results[0]==true && results[1]==true && results[2]==true && results[3]==true && results[4]==true && results[5]==true && results[6]==true && results[7]==true && results[8]==true && results[9]==true && results[10]==true && results[11]==true && results[12]==true && results[13]==true && results[14]==true){
print("\tFilenames\tBeats counted [N]\t\tAmplitudes [au]\tAmplitudes [au]\tAmplitudes [au]\tAmplitudes [au]\t\tBeatTimes [s]\tBeatTimes [s]\tBeatTimes [s]\tBeatTimes [s]\t\tFrequencies [1/s]\tFrequencies [1/s]\tFrequencies [1/s]\tFrequencies [1/s]\t\tPeakTimes10% [s]\tPeakTimes10% [s]\tPeakTimes10% [s]\tPeakTimes10% [s]\t\tSystoles10% [s]\tSystoles10% [s]\tSystoles10% [s]\tSystoles10% [s]\t\tDiastoles10% [s]\tDiastoles10% [s]\tDiastoles10% [s]\tDiastoles10% [s]\t\tPeakTimesUser [s]\tPeakTimesUser [s]\tPeakTimesUser [s]\tPeakTimesUser [s]\t\tSystolesUser [s]\tSystolesUser [s]\tSystolesUser [s]\tSystolesUser [s]\t\tDiastolesUser [s]\tDiastolesUser [s]\tDiastolesUser [s]\tDiastolesUser [s]\t\tPeakTimes50% [s]\tPeakTimes50% [s]\tPeakTimes50% [s]\tPeakTimes50% [s]\t\tSystoles50% [s]\tSystoles50% [s]\tSystoles50% [s]\tSystoles50% [s]\t\tDiastoles50% [s]\tDiastoles50% [s]\tDiastoles50% [s]\tDiastoles50% [s]\t\tPeakTimes90% [s]\tPeakTimes90% [s]\tPeakTimes90% [s]\tPeakTimes90% [s]\t\tSystoles90% [s]\tSystoles90% [s]\tSystoles90% [s]\tSystoles90% [s]\t\tDiastoles90% [s]\tDiastoles90% [s]\tDiastoles90% [s]\tDiastoles90% [s]");
print("\t\t\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev\t\tMin\tMax\tMean\tStdDev");
}else{

// Headlines anhand der Auswahl zusammensetzen

HeadLine01="";
HeadLine02="";

if(results[0]==true){HeadLine01+="\tFilenames"; HeadLine02+="\t";}
if(results[1]==true){HeadLine01+="\tBeats counted [N]\t"; HeadLine02+="\t\t";}
if(results[2]==true){HeadLine01+="\tAmplitudes [au]\tAmplitudes [au]\tAmplitudes [au]\tAmplitudes [au]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[3]==true){HeadLine01+="\tBeatTimes [s]\tBeatTimes [s]\tBeatTimes [s]\tBeatTimes [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[4]==true){HeadLine01+="\tFrequencies [1/s]\tFrequencies [1/s]\tFrequencies [1/s]\tFrequencies [1/s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[5]==true){HeadLine01+="\tPeakTimes10% [s]\tPeakTimes10% [s]\tPeakTimes10% [s]\tPeakTimes10% [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[6]==true){HeadLine01+="\tSystoles10% [s]\tSystoles10% [s]\tSystoles10% [s]\tSystoles10% [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[7]==true){HeadLine01+="\tDiastoles10% [s]\tDiastoles10% [s]\tDiastoles10% [s]\tDiastoles10% [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[8]==true){HeadLine01+="\tPeakTimesUser [s]\tPeakTimesUser [s]\tPeakTimesUser [s]\tPeakTimesUser [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[9]==true){HeadLine01+="\tSystolesUser [s]\tSystolesUser [s]\tSystolesUser [s]\tSystolesUser [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[10]==true){HeadLine01+="\tDiastolesUser [s]\tDiastolesUser [s]\tDiastolesUser [s]\tDiastolesUser [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[11]==true){HeadLine01+="\tPeakTimes50% [s]\tPeakTimes50% [s]\tPeakTimes50% [s]\tPeakTimes50% [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[12]==true){HeadLine01+="\tSystoles50% [s]\tSystoles50% [s]\tSystoles50% [s]\tSystoles50% [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[13]==true){HeadLine01+="\tDiastoles50% [s]\tDiastoles50% [s]\tDiastoles50% [s]\tDiastoles50% [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[14]==true){HeadLine01+="\tPeakTimes90% [s]\tPeakTimes90% [s]\tPeakTimes90% [s]\tPeakTimes90% [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[15]==true){HeadLine01+="\tSystoles90% [s]\tSystoles90% [s]\tSystoles90% [s]\tSystoles90% [s]\t"; HeadLine02+="\tMin\tMax\tMean\tStdDev\t";}
if(results[16]==true){HeadLine01+="\tDiastoles90% [s]\tDiastoles90% [s]\tDiastoles90% [s]\tDiastoles90% [s]"; HeadLine02+="\tMin\tMax\tMean\tStdDev";}

print(HeadLine01);
print(HeadLine02);

}

print(printout);

selectWindow("Log");
saveAs("Text", dir+DataTitle+"_Results Final Summary for Stats (GER) "+ year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + ".txt");


AllData=getInfo("log");
AllData=replace(AllData, ",", ".");

print("\\Clear");

print(AllData);

selectWindow("Log");
saveAs("Text", dir+DataTitle+"_Results Final Summary for Stats (ENG) "+ year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + ".txt");


if (isOpen("Log")) {
     selectWindow("Log");
     run("Close");
}


// Ask the user for the next folder to process

}

}


// Statistics for the selected/included samples of a single experiment

if (option == "9. Statistics for selected Samples") {

// Zuerst oeffnen wir ein Results (selected)-File

// VORSICHT! Noch mal sehr genau nachsehen, welche Arrays ueberschrieben werden und welche dauerhaft bleiben!

// Wenn weniger als 7 Kontraktionen vorliegen, haengt er sich auf, weil spaeter Arrays nicht korrekt definiert werden; das muss sauberer uebergangen werden!

for (LoopIt = 0; LoopIt < 1000000; LoopIt++) {


print("\\Clear");

// Daten

getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
MonthNames = newArray("Jan","Feb","Mar","Apr","May","Jun","Jul","Aug","Sep","Oct","Nov","Dec"); 

if (hour<10) {hours = "0"+hour;}
else {hours=hour;}
if (minute<10) {minutes = "0"+minute;}
else {minutes=minute;}
if (month<10) {months = "0"+(month+1);}
else {months=month+1;}
if (dayOfMonth<10) {dayOfMonths = "0"+dayOfMonth;}
else {dayOfMonths=dayOfMonth;}



// Nun noch die extrahieren und berechneten Daten speichern!

// Das sind die Namen der ausgewerteten Zellen; die werden nur einmal ausgelesen
Cells=newArray();

// Das ist die Zeile, in der die entsprechenden Daten der Einzelzelle beginnen
CellsDataStart=newArray();

// FIX: Merkt sich, welche Zellen später wirklich in ANOVA/Heatmaps enthalten sind
UsedInANOVA = newArray();   // wird nach dem Einlesen von Cells initialisiert

// Alle Arrays fuer die finale ANOVA-Analyse *******************************************

ANOVAAmplitude=newArray();
 ANOVAContThr10=newArray();
 ANOVAContUser=newArray();
 ANOVAContThr50=newArray();
 ANOVAContThr90=newArray();

ANOVARelThr10=newArray();
 ANOVARelUser=newArray();
 ANOVARelThr50=newArray();
 ANOVARelThr90=newArray();
 GroupSizes = newArray();

// Ende der ANOVA-Arrays ****************************************

pathfile="";

while(pathfile==0 || pathfile==""){pathfile=File.openDialog("Please choose the <Results (selected)_Date.txt> \n File to be opened:");
}

dataDir=File.getDirectory(pathfile);

AnalyzedFile=File.getNameWithoutExtension(pathfile);

// Hier einen Folder fuer die Ergebnisse sonst wird das alles sehr unuebersichtlich

FinalStatisticsDirectory=dataDir+ "\Statistics_"+year+"-"+MonthNames[month]+"-"+dayOfMonths+"_"+hours+"h"+minutes+"\\";

File.makeDirectory(FinalStatisticsDirectory);


data=File.openAsString(pathfile);
print(pathfile);
print("");

// Nun zerlegen wir das Ergebnisfile in einzelne Lines / Zeilen, indem wir die Zeilenumbrueche verwenden

Lines=split(data, "\n\r");

// Nun extrahieren wir eine Liste mit allen untersuchten Zellen daraus

// Cells => Name der Einzelzelle
// CellsDataStart hier faengt der eigentliche Datensatz besagter Zelle an

for (i = 0; i < Lines.length; i++) {
if(i>1 && startsWith(Lines[i], "Frame #\tTime [sec]\tAmplitude [a.u.]\tAmplitude baselined [a.u.]")){

// Hier steht der Name der Zelle
Cells=Array.concat(Cells,Lines[i-2]);

// In dieser Zeile beginnen die Daten der Zelle
CellsDataStart=Array.concat(CellsDataStart, (i+1));
	}
}

// Und das hier ist die komplette Liste mit Name und Startzeile, die ich zur Uebersicht ausgebe

for (i = 0; i < Cells.length; i++) {
print("Name: "+Cells[i] + "___ Start: "+CellsDataStart[i] + "_____ i :"+i);
}

// FIX: UsedInANOVA passend zur Anzahl Cells initialisieren
UsedInANOVA = newArray(Cells.length);
for (i = 0; i < Cells.length; i++) UsedInANOVA[i] = 0;



// Hier gehen wir nun ALLE Zellen durch!

// Start des uebergeordneten Loops hier


for (cls = 0; cls < Cells.length; cls++) {

print("\n\n\n"+Cells[cls]+"\t Datensatz \t"+(cls+1));


// Das hier wird immer frisch und neu definiert
MainParameters=newArray();

// Hier lesen wir den aktuellen Namen der verarbeiteten Einzelzelle ein
CurrentSampleName=Cells[cls];

// Wir extrahieren solange, bis die Zeile aus keinen Unterelementen mehr besteht!
// Haben wir bei der letzten Einzelzelle nur eine Startzeile, dann lesen wir bis zum Ende des Lines-Arrays

StartLine=CellsDataStart[cls];
if(cls<CellsDataStart.length-1){StopLine=CellsDataStart[cls+1];}else{StopLine=Lines.length;}

// Problem, die Tabs werden zusammen mit leeren Elementen allesamt komplett geloescht und die Werte verschieben sich!
// Also ersetzen wir Doppeltabs \t\t durch \t@EMPTY@\t

for (i = StartLine; i < StopLine; i++) {

while (indexOf(Lines[i], "\t\t") >= 0) {
    Lines[i] = replace(Lines[i], "\t\t", "\t@EMPTY@\t");
}

// Zeile in ein Array aus Parametern zerlegen; das ist alles, was extrahiert wird, davon benoetigen wir Folgende

// Wir brauchen aus jeder Zeile die folgenden Elemente wenn sie eine Zahl sind
/*  0, Frames
 *  1, Times
 * 10, LocMaxAmplitude
 * 19 Kontraktionszeit 20% User
 * 21 Relaxation User 20% User
 * 26 Kontrationszeit 10%
 * 28 Relaxationszeit 10%
 * 33 Contraktionszeit 50%
 * 35 Relaxationszeit 50%
 * 40 Kontraktionszeit 90%
 * 42 Relaxationszeit 90%
 */
 
 // Diese Parameter beschreiben eine Kontraktion und werden nun vereinzelt und in die entsprechenden Arrays sortiert

Parameter=split(Lines[i], "\t\n\r");

// Haben wir das Ende des aktuellen Datensatzes erreicht, also die erste Zeile der statistischen Auswertung danach, 
// dann brechen wir den Lese-Loop ab!
// Okay, hier lesen wir es in der Reihenfolge ein wie es im Datensatz steht

if(Parameter[0]=="Statistics INCLUDING the first and last event"){break;}

// Nur nach Parametern suchen, wenn das Zeilenarray ueberhaupt lang genug ist
if(Parameter.length>10){
	if(Parameter[10]>0 && Parameter[10]!="@EMPTY@"){MainParameters=Array.concat(MainParameters, Parameter[0]+"\t"+Parameter[1]+"\t"+Parameter[10]+"\t"+"Max");}
	
	if(Parameter[19]>0 && Parameter[19]!="@EMPTY@"){MainParameters=Array.concat(MainParameters, Parameter[0]+"\t"+Parameter[1]+"\t"+Parameter[19]+"\t"+"ContThrUser");}
	if(Parameter[21]>0 && Parameter[21]!="@EMPTY@"){MainParameters=Array.concat(MainParameters, Parameter[0]+"\t"+Parameter[1]+"\t"+Parameter[21]+"\t"+"RelThrUser");}
	
	if(Parameter[26]>0 && Parameter[26]!="@EMPTY@"){MainParameters=Array.concat(MainParameters, Parameter[0]+"\t"+Parameter[1]+"\t"+Parameter[26]+"\t"+"ContThr10%");}
	if(Parameter[28]>0 && Parameter[28]!="@EMPTY@"){MainParameters=Array.concat(MainParameters, Parameter[0]+"\t"+Parameter[1]+"\t"+Parameter[28]+"\t"+"RelThr10%");}
	
	if(Parameter[33]>0 && Parameter[33]!="@EMPTY@"){MainParameters=Array.concat(MainParameters, Parameter[0]+"\t"+Parameter[1]+"\t"+Parameter[33]+"\t"+"ContThr50%");}
	if(Parameter[35]>0 && Parameter[35]!="@EMPTY@"){MainParameters=Array.concat(MainParameters, Parameter[0]+"\t"+Parameter[1]+"\t"+Parameter[35]+"\t"+"RelThr50%");}
	
	if(Parameter[40]>0 && Parameter[40]!="@EMPTY@"){MainParameters=Array.concat(MainParameters, Parameter[0]+"\t"+Parameter[1]+"\t"+Parameter[40]+"\t"+"ContThr90%");}
	if(Parameter.length>42){if(Parameter[42]>0 && Parameter[42]!="@EMPTY@"){MainParameters=Array.concat(MainParameters, Parameter[0]+"\t"+Parameter[1]+"\t"+Parameter[42]+"\t"+"RelThr90%");}}
}

}


// Okay, hier gehen wir die MainParameters durch und flippen ContThr10% mit ContThrUser

// Dazu brauchen wir ein Backup der mMinparameters:

MainParametersBackup=Array.copy(MainParameters);


for (i = 0; i < MainParameters.length-1; i++) {
ZerlegteZeile1=split(MainParameters[i], "\t\n\r");
ZerlegteZeile2=split(MainParameters[i+1], "\t\n\r");

// Zeilen tauschen die Plaetze, wenn die Bedingungen stimmen

if(ZerlegteZeile1[3]=="ContThrUser" && ZerlegteZeile2[3]=="ContThr10%"){
	MainParameters[i]=MainParametersBackup[i+1];
	MainParameters[i+1]=MainParametersBackup[i];
	}

}

// Okay, besagter Tausch scheint soweit zu funktionieren


// Und nun beschneiden wir das Array, wenn Datensaetze nicht vollstaendig sind

// Test, ob der erste Datensatz vollstaendig ist Erstes und zweites Maximum identifizieren

// Ist der erste Wert ein Maximum, dann loeschen wir den sofort

// Wir haben nun folgendes Format: Frame /t Zeit /t Wert /t Kontraktionsteil

// Maximum gefolgt von den 8 Werten, welche die Kontraktion beschreiben => Ein kompletter Datensatz

// Nun wollen wir alles loeschen, das VOR dem ersten KOMPLETTEN Datensatz steht!

// Definiere die Reihenfolge der Parameter, die einen vollständigen Datensatz ausmachen


CorrectOrder = newArray("Max", "ContThr10%", "ContThrUser", "ContThr50%", "ContThr90%", "RelThr90%", "RelThr50%", "RelThrUser", "RelThr10%");



// Extrahiere den Datentyp aus MainParameters
DataType = newArray();

for (i = 0; i < MainParameters.length; i++) {
    Einzeldaten = split(MainParameters[i], "\t\n\r");
    if (Einzeldaten.length > 3) {
        DataType = Array.concat(DataType, Einzeldaten[3]);
    }
}



// Problem: Es ist jedoch moeglich, dass der Datensatz durch 9 Teilbar ist und dennoch Fragmente enthaelt;
// Neue Idee um einen vollstaendigen Datensatz zu identifizieren!
// Zuerst loeschen wir alles VOR dem ersten MAX, denn das KANN kein vollstaendiger Datensatz sein!



// Annahme: MainParameters, DataType und CorrectOrder sind bereits definiert.
// CorrectOrder = newArray("Max", "ContThrUser", "ContThr10%", "ContThr50%", "ContThr90%", "RelThr90%", "RelThr50%", "RelThrUser", "RelThr10%");

// Groesse eines kompletten Datensatzes
blockSize = CorrectOrder.length;

// Neue Arrays fuer die gefilterten, vollstaendigen Datensaetze
NewMainParameters = newArray();
NewDataType = newArray();

// Durchlaufe DataType, um komplette Datensaetze zu finden (auch "mittendrin")
i = 0;
while (i <= DataType.length - blockSize) {
    isComplete = true;
    // Ueberpruefe, ob ab Index i ein kompletter Datensatz beginnt:
    for (j = 0; j < blockSize; j++) {
        if (DataType[i+j] != CorrectOrder[j]) {
            isComplete = false;
            break;
        }
    }
    if (isComplete) {
        // Kompletten Block in die neuen Arrays uebernehmen:
        for (j = 0; j < blockSize; j++) {
            NewMainParameters = Array.concat(NewMainParameters, newArray(MainParameters[i+j]));
            NewDataType = Array.concat(NewDataType, newArray(DataType[i+j]));
        }
        // Weiterspringen um Ueberschneidungen zu vermeiden:
        i += blockSize;
    } else {
        // Andernfalls zum naechsten Element gehen:
        i++;
    }
}



// Ueberschreibe die Originalarrays mit den gefilterten, vollstaendigen Datensaetzen
MainParameters = NewMainParameters;
DataType = NewDataType;

// XXX Das hier ist nur zum Testen...ob der Datensatz korrekt beschnitten wurde


if(MainParameters.length%9>0){
	
	print("\\Clear");
	print("Hier passt etwas nicht"); 
	print(MainParameters.length);
	print("Cls= "+cls);
	
	// Checkfinder Testarray drucken
	print("OriginalArray:");
	
	for (test = 0; test < Checkfinder.length; test++) {
	print(Checkfinder[test]);
	}
	
	print("BeschnittenesArray:");
	// Beschnittenes Array drucken
	for (test = 0; test < MainParameters.length; test++) {
	print(MainParameters[test]);
	}

AllData=getInfo("log");
AllData=replace(AllData, ".", ",");

print("\\Clear");

print(AllData);

	exit();
	}


// Und nun den finalen Datensatz ausgeben; das scheint soweit zu passen

//for (i = 0; i < MainParameters.length; i++) {print(MainParameters[i]);}

// Die Arrays von oben erstellen, damit man alle Parameter der Kontraktionen getrennt hat?
// Ja, das ist besser! Also durchgehen und einsortieren!


// Nur ausfuehren, wenn mindestens 7 Kontraktionen vorliegen! Also wenn 
// Mainparameters mindestens 7*9 = 63 Elemente beinhaltet


// Hier fehlt das ELSE!

if(MainParameters.length>=63){

// ******************* Das hier sind die Datenarrays, jeweils frisch erstellen **************

LocMaxAmplitudes=newArray();
 MaxTimes=newArray();
 MaxFrames=newArray();

ContractionThr10=newArray(); 
RelaxationThr10=newArray();
 ContractionThrUser=newArray();
 RelaxationThrUser=newArray();
ContractionThr50=newArray();
 RelaxationThr50=newArray(); 
 ContractionThr90=newArray();
 RelaxationThr90=newArray();

//***************************************************************

for (i = 0; i < MainParameters.length; i++) {
dats=split(MainParameters[i], "\t\n\r");

if(dats[3]=="Max"){LocMaxAmplitudes=Array.concat(LocMaxAmplitudes, parseFloat(dats[2])); MaxTimes=Array.concat(MaxTimes, parseFloat(dats[1])); MaxFrames=Array.concat(MaxFrames, parseInt(dats[0]));}

if(dats[3]=="ContThr10%"){ContractionThr10=Array.concat(ContractionThr10, parseFloat(dats[2]));}
if(dats[3]=="ContThrUser"){ContractionThrUser=Array.concat(ContractionThrUser, parseFloat(dats[2]));}
if(dats[3]=="ContThr50%"){ContractionThr50=Array.concat(ContractionThr50, parseFloat(dats[2]));}
if(dats[3]=="ContThr90%"){ContractionThr90=Array.concat(ContractionThr90, parseFloat(dats[2]));}
if(dats[3]=="RelThr90%"){RelaxationThr90=Array.concat(RelaxationThr90, parseFloat(dats[2]));}
if(dats[3]=="RelThr50%"){RelaxationThr50=Array.concat(RelaxationThr50, parseFloat(dats[2]));}
if(dats[3]=="RelThrUser"){RelaxationThrUser=Array.concat(RelaxationThrUser, parseFloat(dats[2]));}
if(dats[3]=="RelThr10%"){RelaxationThr10=Array.concat(RelaxationThr10, parseFloat(dats[2]));}

}


// Hier zur kontrolle User-abnickbar die Laenge aller erstellten Arrays ausgeben!
// Der Datensatz wurde oben bereits beschnitten, die Datensaetze sollten somit vollstaendig sein!!

// Wenn es hier kein problem gibt, werden Elemente dann spaeter geloescht???

testlaenge=MaxTimes.length;


//print("\\Clear");

// Hier werden zur Sicherheit die Arraylaengen ausgegeben



// Das hier gibt genau einmal die Main-Parameters aus (Frame, Zeit, Wert (Zeit oder Amplitude) und Typ)
// Eigentlich brauchen wir das fuer jede Zelle


// Aus diesem Datensatz sollte nun die Amplitudenkurve vernuenftig reproduzierbar sein!


if(cls==0){
for (i = 0; i < MainParameters.length; i++) {
print(MainParameters[i]);
}
}


// Das hier greift, sollten die Parameter-Arrays NICHT allesamt gleich lang sein!

if(MaxTimes.length!=testlaenge || MaxFrames.length!=testlaenge || ContractionThr10.length!=testlaenge || 
RelaxationThr10.length!=testlaenge || ContractionThrUser.length!=testlaenge || RelaxationThrUser.length!=testlaenge || 
ContractionThr50.length!=testlaenge || RelaxationThr50.length!=testlaenge || ContractionThr90.length!=testlaenge || 
RelaxationThr90.length!=testlaenge || LocMaxAmplitudes.length!=testlaenge){

print("\\Clear");

print("Hier passen die Laengen der Arrays nicht!");

print(testlaenge+"\n");
print(Cells[cls]);
print(MaxTimes.length); print(MaxFrames.length); print(ContractionThr10.length); 
print(RelaxationThr10.length); print(ContractionThrUser.length); print(RelaxationThrUser.length); 
print(ContractionThr50.length); print(RelaxationThr50.length); print(ContractionThr90.length); 
print(RelaxationThr90.length);

// Nun alles zu Kontrolle ausgeben

for (i = 0; i < MainParameters.length; i++) {
print(MainParameters[i]);
}

exit();

}


// Und nun genau diese Daten in die Uebergeordneten Arrays fuer den ANOVA rein; 
// Einfach jeweils anhaengen und in ein Counter-Array die jeweilige Laenge der Datensaetze fuer die Einzelzellen

ANOVAAmplitude=Array.concat(ANOVAAmplitude,LocMaxAmplitudes);
 ANOVAContThr10=Array.concat(ANOVAContThr10,ContractionThr10);
ANOVAContUser=Array.concat(ANOVAContUser,ContractionThrUser);
 ANOVAContThr50=Array.concat(ANOVAContThr50,ContractionThr50);
ANOVAContThr90=Array.concat(ANOVAContThr90,ContractionThr90);
 ANOVARelThr10=Array.concat(ANOVARelThr10,RelaxationThr10);
ANOVARelUser=Array.concat(ANOVARelUser,RelaxationThrUser);
 ANOVARelThr50=Array.concat(ANOVARelThr50,RelaxationThr50);
ANOVARelThr90=Array.concat(ANOVARelThr90,RelaxationThr90);
 GroupSizes=Array.concat(GroupSizes,parseInt(LocMaxAmplitudes.length));
 
 // FIX: Diese Zelle ist gültig und wurde in ANOVA aufgenommen
UsedInANOVA[cls] = 1;

//*********************************************************************************** 


// print("\n\n\n");
// Headlines
// print(CurrentSampleName+"\n");
// Das hier in ein Datenarray, das uns alle extrahierten Parameter anzeigt

//print("\\Clear");


// Okay, folgendes Problem: Die Werte, die als Ref Frame gesetzt wurden, reichen bis auf Null und die folgende Amplitude ist SEHR
// viel hoeher als die anderen => Ansatz; wir bilden eine Baseline als Mittelwert, welche sich aus dem Punkten ergibt, 
// welche NICHT innerhalb einer Kontraktion liegen


// Hier die Arrays fuer unsere Statistiken innerhalb der Zelle

SquaredSumDifferences=newArray(RelaxationThr10.length);
 SquaredSumRatios=newArray(RelaxationThr10.length);
SumRelativeRatios=newArray(RelaxationThr10.length);
 Variances=newArray(RelaxationThr10.length);


//print("\n\nSum of changes^2 over time: Sum((F0-Fi)^2)");
//print("\nFrame\tMaxTime\tContraction#\tChangeSummary");

// Mehrdimensionale Abweichung zur ersten Kontraktion; euklidische Distanz

for (i = 0; i < RelaxationThr10.length; i++) {

val=sqrt((ContractionThr10[i]-ContractionThr10[0])*(ContractionThr10[i]-ContractionThr10[0])+ 
(ContractionThrUser[i]-ContractionThrUser[0])*(ContractionThrUser[i]-ContractionThrUser[0]) +
(ContractionThr50[i]-ContractionThr50[0])*(ContractionThr50[i]-ContractionThr50[0])+ 
(ContractionThr90[i]-ContractionThr90[0])*(ContractionThr90[i]-ContractionThr90[0]) +
(LocMaxAmplitudes[i]-LocMaxAmplitudes[0])*(LocMaxAmplitudes[i]-LocMaxAmplitudes[0])+ 
(RelaxationThr90[i]-RelaxationThr90[0])*(RelaxationThr90[i]-RelaxationThr90[0]) +
(RelaxationThr50[i]-RelaxationThr50[0])*(RelaxationThr50[i]-RelaxationThr50[0]) +
(RelaxationThrUser[i]-RelaxationThrUser[0])*(RelaxationThrUser[i]-RelaxationThrUser[0]) +
(RelaxationThr10[i]-RelaxationThr10[0])*(RelaxationThr10[i]-RelaxationThr10[0]));

//print(MaxFrames[i] + "\t" + MaxTimes[i] + "\t" + (i+1) + "\t"+ val);

SquaredSumDifferences[i]=val;

}


//print("\n\nCumulative Ratio of change^2 over time: Sum((Fi/F0)^2)");
//print("\nFrame\tMaxTime\tContraction#\tChangeSummary");

// "Relativ normierte euklidische Distanz zur ersten Kontraktion" oder "Relativer Kontraktionsabstand zur ersten Messung" oder 
// "Normierte Mehrparameter-Abweichung zur ersten Kontraktion"


for (i = 0; i < RelaxationThr10.length; i++) {

val=sqrt((ContractionThr10[i]/ContractionThr10[0])*(ContractionThr10[i]/ContractionThr10[0])+ 
(ContractionThrUser[i]/ContractionThrUser[0])*(ContractionThrUser[i]/ContractionThrUser[0]) +
(ContractionThr50[i]/ContractionThr50[0])*(ContractionThr50[i]/ContractionThr50[0])+ 
(ContractionThr90[i]/ContractionThr90[0])*(ContractionThr90[i]/ContractionThr90[0]) +
(LocMaxAmplitudes[i]/LocMaxAmplitudes[0])*(LocMaxAmplitudes[i]/LocMaxAmplitudes[0])+ 
(RelaxationThr90[i]/RelaxationThr90[0])*(RelaxationThr90[i]/RelaxationThr90[0]) +
(RelaxationThr50[i]/RelaxationThr50[0])*(RelaxationThr50[i]/RelaxationThr50[0]) +
(RelaxationThrUser[i]/RelaxationThrUser[0])*(RelaxationThrUser[i]/RelaxationThrUser[0]) +
(RelaxationThr10[i]/RelaxationThr10[0])*(RelaxationThr10[i]/RelaxationThr10[0]));

//print(MaxFrames[i] + "\t" + MaxTimes[i] + "\t" + (i+1) + "\t"+ val);

SquaredSumRatios[i]=val;

}

// Chat GPT 4o-Vorschlaege, zeigt durchschnittliche prozentuale Aenderungen, ohne dass grosse Werte dominieren,
// Keine Uebergewichtung durch das Quadrieren.

// Das hier in Excel eher linear fitten

//print("\n\nCululative relative Ratio changes over time: Sum((Fi-F0)/F0)/9");
//print("\nFrame\tMaxTime\tContraction#\tMeanChange");

// "Mittlere relative Abweichung der Kontraktionsparameter zur ersten Messung" oder 
// "Durchschnittliche normierte Abweichung zur ersten Kontraktion" oder "Mittlere absolute relative Veraenderung der Kontraktionsparameter"


for (i = 0; i < RelaxationThr10.length; i++) {

    MeanChange = (abs((ContractionThr10[i] - ContractionThr10[0]) / ContractionThr10[0]) +
                  abs((ContractionThrUser[i] - ContractionThrUser[0]) / ContractionThrUser[0]) +
                  abs((ContractionThr50[i] - ContractionThr50[0]) / ContractionThr50[0]) +
                  abs((ContractionThr90[i] - ContractionThr90[0]) / ContractionThr90[0]) +
                  abs((LocMaxAmplitudes[i] - LocMaxAmplitudes[0]) / LocMaxAmplitudes[0]) +
                  abs((RelaxationThr90[i] - RelaxationThr90[0]) / RelaxationThr90[0]) +
                  abs((RelaxationThr50[i] - RelaxationThr50[0]) / RelaxationThr50[0]) +
                  abs((RelaxationThrUser[i] - RelaxationThrUser[0]) / RelaxationThrUser[0]) +
                  abs((RelaxationThr10[i] - RelaxationThr10[0]) / RelaxationThr10[0])) / 9;

   // print(MaxFrames[i] + "\t" + MaxTimes[i] + "\t" + (i+1) + "\t" + MeanChange);

SumRelativeRatios[i]=MeanChange;
    
}

// Falls du sehen willst, wie unterschiedlich sich die Parameter verändern, 
// kannst du die Standardabweichung der normierten Parameter berechnen:
// Varianz ueber die Zeit

// Das hier in Excel eher quadratisch, exponentiell oder log fitten

// print("\n\nVariances of changes over time Sqrt(1/9*Sum(Fi/F0-Mittelwerti)^2)");
// print("\nFrame\tMaxTime\tContraction#\tVarianzen");

// "Standardabweichung der normierten Kontraktionsparameter zur ersten Messung" oder
// "Streuung der normierten Kontraktionsparameter" oder
// "Mittlere normierte Abweichung und Streuung der Kontraktionsparameter"


for (i = 0; i < RelaxationThr10.length; i++) {

    Mean = ((ContractionThr10[i] / ContractionThr10[0]) +
            (ContractionThrUser[i] / ContractionThrUser[0]) +
            (ContractionThr50[i] / ContractionThr50[0]) +
            (ContractionThr90[i] / ContractionThr90[0]) +
            (LocMaxAmplitudes[i] / LocMaxAmplitudes[0]) +
            (RelaxationThr90[i] / RelaxationThr90[0]) +
            (RelaxationThr50[i] / RelaxationThr50[0]) +
            (RelaxationThrUser[i] / RelaxationThrUser[0]) +
            (RelaxationThr10[i] / RelaxationThr10[0])) / 9;

    Variance = ((pow((ContractionThr10[i] / ContractionThr10[0]) - Mean, 2)) +
                (pow((ContractionThrUser[i] / ContractionThrUser[0]) - Mean, 2)) +
                (pow((ContractionThr50[i] / ContractionThr50[0]) - Mean, 2)) +
                (pow((ContractionThr90[i] / ContractionThr90[0]) - Mean, 2)) +
                (pow((LocMaxAmplitudes[i] / LocMaxAmplitudes[0]) - Mean, 2)) +
                (pow((RelaxationThr90[i] / RelaxationThr90[0]) - Mean, 2)) +
                (pow((RelaxationThr50[i] / RelaxationThr50[0]) - Mean, 2)) +
                (pow((RelaxationThrUser[i] / RelaxationThrUser[0]) - Mean, 2)) +
                (pow((RelaxationThr10[i] / RelaxationThr10[0]) - Mean, 2))) / 9;

    StdDev = sqrt(Variance);

    // print(MaxFrames[i] + "\t" + MaxTimes[i] + "\t" + (i+1) + "\t" + StdDev);
    
    Variances[i]=StdDev;
}



// Hier erstellen wir einen DatenPlot


// Arrays fuer Y-Achsenbeschriftungen und Plot-Titel
yLabels = newArray("Squared Sum Differences [a.u.]", "Squared Sum Ratios [a.u.]", "Sum Relative Ratios [a.u.]", "Variances [a.u.]");

// Array fuer die Farben
colors = newArray("red", "blue", "#ff00ff", "#008080");

// Annahme: Die Arrays SquaredSumDifferences, SquaredSumRatios, SumRelativeRatios, Variances
// und MaxTimes sind bereits definiert und haben jeweils die gleiche Laenge.

nData = SquaredSumDifferences.length; // Laenge eines einzelnen Datensatzes

// Alle 4 Datensaetze zu einem langen Array zusammenfuegen
allData = Array.concat(SquaredSumDifferences, SquaredSumRatios, SumRelativeRatios, Variances);

// Schleife ueber die 4 Datensaetze bei denen wir nur die geplotteten Daten und die Farben aendern

// Loop ueber die 4 Datensaetze
for(i = 0; i < 4; i++) {
    // Fuer jeden Datensatz wird der entsprechende Abschnitt aus dem zusammengefuegten Array extrahiert
    start = i * nData;
    end   = start + nData;
    subData = Array.slice(allData, start, end);
    
    // Plot-Optionen setzen
    run("Profile Plot Options...", "width=400 height=400 font=15 minimum=0 maximum=0 draw draw_ticks interpolate sub-pixel");
    shortname = Cells[cls]; // Zellenkurzname
    
    // Plot erstellen: X = MaxTimes, Y = aktueller Datensatz (subData)
    Plot.create(shortname, "Time [sec]", yLabels[i], MaxTimes, subData);
    setJustification("center");
    Plot.addText(shortname, 0.5, 0);
    
    Plot.setLineWidth(1); // Linienstaerke
    

    // Punkte

Plot.setColor("red", "red"); // Farbe der Punkte
Plot.add("circle", MaxTimes, subData);

//Linie

Plot.setColor(colors[i]);
Plot.setLineWidth(1);
Plot.add("line",MaxTimes, subData);

    Plot.show();
    // Optional: Plot.makeHighResolution(...) oder speichern
}



// Bilder erstellen (einzelnes Montage-Bild aus den vier Unterplots)

run("Images to Stack", "use");
run("Make Montage...", "columns=2 rows=2 scale=1");


// Amplitudenplot

// Annahme: Die folgenden Arrays sind bereits definiert:
// MaxTimes, ContractionThr10, ContractionThrUser, ContractionThr50, ContractionThr90,
// LocMaxAmplitudes, RelaxationThr10, RelaxationThrUser, RelaxationThr50, RelaxationThr90

userPerc = 0.2;  // Benutzerdefinierter Schwellenwert (z.B. 70%)

// Anzahl der Kontraktionsevents
nEvents = MaxTimes.length;

// Pro Event gibt es 9 Punkte:
// 4 Punkte in der Kontraktionsphase (vor dem Maximum),
// 1 Punkt fuer das Maximum,
// 4 Punkte in der Relaxationsphase (nach dem Maximum)
pointsPerEvent = 9;
totalPoints = nEvents * pointsPerEvent;

// Arrays zur Aufnahme aller Zeit- und Amplitudenwerte
allTimes = newArray(totalPoints);
allAmplitudes = newArray(totalPoints);


k = 0;
for (i = 0; i < nEvents; i++) {

    // Kontraktionsphase (Zeit = MaxTimes - Threshold):
    // 10%
    allTimes[k] = MaxTimes[i] - ContractionThr10[i];
    allAmplitudes[k] = 0.1 * LocMaxAmplitudes[i];
    k++;

    // userdefiniert
    allTimes[k] = MaxTimes[i] - ContractionThrUser[i];
    allAmplitudes[k] = userPerc * LocMaxAmplitudes[i];
    k++;

    // 50%
    allTimes[k] = MaxTimes[i] - ContractionThr50[i];
    allAmplitudes[k] = 0.5 * LocMaxAmplitudes[i];
    k++;

    // 90%
    allTimes[k] = MaxTimes[i] - ContractionThr90[i];
    allAmplitudes[k] = 0.9 * LocMaxAmplitudes[i];
    k++;

    // Maximum
    allTimes[k] = MaxTimes[i];
    allAmplitudes[k] = 1.0 * LocMaxAmplitudes[i];
    k++;

    // Relaxationsphase (Zeit = MaxTimes + Threshold):
    // 90%
    allTimes[k] = MaxTimes[i] + RelaxationThr90[i];
    allAmplitudes[k] = 0.9 * LocMaxAmplitudes[i];
    k++;

    // 50%
    allTimes[k] = MaxTimes[i] + RelaxationThr50[i];
    allAmplitudes[k] = 0.5 * LocMaxAmplitudes[i];
    k++;

    // userdefiniert
    allTimes[k] = MaxTimes[i] + RelaxationThrUser[i];
    allAmplitudes[k] = userPerc * LocMaxAmplitudes[i];
    k++;

    // 10%
    allTimes[k] = MaxTimes[i] + RelaxationThr10[i];
    allAmplitudes[k] = 0.1 * LocMaxAmplitudes[i];
    k++;
}

// Profile Plot Options setzen
run("Profile Plot Options...", "width=902 height=200 font=15 minimum=0 maximum=0 draw draw_ticks interpolate sub-pixel");

// Plot erstellen und anzeigen
Plot.create("Herzmuskel Kontraktion", "Time [sec]", "Amplitude", allTimes, allAmplitudes);

// Punkte

Plot.setColor("red", "red"); // Farbe der Punkte
Plot.add("circle", allTimes, allAmplitudes);

//Linie

Plot.setColor("blue");
Plot.setLineWidth(1);
Plot.add("line",allTimes, allAmplitudes);


setJustification("center");

Plot.show();

close("Stack");


run("Combine...", "stack1=[Herzmuskel Kontraktion] stack2=Montage combine");


saveAs("jpg", FinalStatisticsDirectory+shortname+"_Statistics.jpg");
close("Stack");
run("Close All");



// *********************************** datenPlots Ende


/*
Da ImageJ-Macro-Java keine Matrix-Operationen oder Eigenvektor-Berechnung unterstützt, 
kann ich keine echte PCA durchführen.
Stattdessen: Ich berechne eine vereinfachte Hauptkomponente, indem ich die Änderungen 
aller Parameter entlang einer Summenachse abbilde.

// Das hier in Excel eher linear oder polynomisch (2. oder 3. Ordnung) fitten

*/

// Hier die Arrays fuer die einzelnen stat. Analysen

VereinfachteHauptkomponenten=newArray(RelaxationThr10.length);
 Intervals=newArray(RelaxationThr10.length);
Frequenzen=newArray(RelaxationThr10.length);
 Velocities=newArray(RelaxationThr10.length);
Accelerations=newArray(RelaxationThr10.length); 
CorrelationOfParameters=newArray(RelaxationThr10.length);
ClusterAnalyse=newArray(RelaxationThr10.length); 
BewegteMittel=newArray(RelaxationThr10.length);

// Diese Arrays mit "NoData" fuellen und das dann spaeter durch "" ersetzen!


for (i = 0; i < RelaxationThr10.length; i++) {
VereinfachteHauptkomponenten[i]="NoData";
 Intervals[i]="NoData";
 Frequenzen[i]="NoData";
 Velocities[i]="NoData";
Accelerations[i]="NoData";
 CorrelationOfParameters[i]="NoData";
 ClusterAnalyse[i]="NoData";
 BewegteMittel[i]="NoData";
}


//print("\n\nPCA (Hauptkomponentenanalyse)");
//print("\nFrame\tMaxTime\tContraction#\tVereinfachte Hauptkomponente");

for (i = 0; i < RelaxationThr10.length; i++) {

    PC1 = ((ContractionThr10[i] - ContractionThr10[0]) +
           (ContractionThrUser[i] - ContractionThrUser[0]) +
           (ContractionThr50[i] - ContractionThr50[0]) +
           (ContractionThr90[i] - ContractionThr90[0]) +
           (LocMaxAmplitudes[i] - LocMaxAmplitudes[0]) +
           (RelaxationThr90[i] - RelaxationThr90[0]) +
           (RelaxationThr50[i] - RelaxationThr50[0]) +
           (RelaxationThrUser[i] - RelaxationThrUser[0]) +
           (RelaxationThr10[i] - RelaxationThr10[0])) / 9;

    //print(MaxFrames[i] + "\t" + MaxTimes[i] + "\t" + (i+1) + "\t" + PC1);
    VereinfachteHauptkomponenten[i]=PC1;
}

//print("\n\nZeitabstände zwischen den Peaks (Schlagdauer) und Frequenz");
//print("\nMaxFrames\tMaxTimes\tContraction#\tInterval\tFrequency");

// Berechne Zeitabstaende zwischen den Peaks (Schlagdauer) und Frequenz
for (i = 1; i < MaxTimes.length; i++) {
    Interval = MaxTimes[i] - MaxTimes[i-1];
    Frequency = 1 / Interval;
    
    //print(MaxFrames[i] + "\t" + MaxTimes[i] + "\t" + (i+1) + "\t" + Interval + "\t" + Frequency);
    Intervals[i]=Interval;
    Frequenzen[i]=Frequency;
}


// Geschwindigkeit und Beschleunigung der Kontraktionen

//print("\n\nGeschwindigkeit und Beschleunigung der Kontraktionen");
//print("\nMaxFrames\tMaxTimes\tContraction#\tVelocity\tAcceleration");

for (i = 2; i < MaxTimes.length; i++) {
    Velocity = (MaxTimes[i] - MaxTimes[i-1]);  // Erste Ableitung (Geschwindigkeit)
    Acceleration = (Velocity - (MaxTimes[i-1] - MaxTimes[i-2]));  // Zweite Ableitung (Beschleunigung)

    //print(MaxFrames[i] + "\t" + MaxTimes[i] + "\t" + (i+1) + "\t" + Velocity + "\t" + Acceleration);
    Velocities[i]=Velocity;
    Accelerations[i]=Acceleration;
}


// Ziel: Prueft, ob sich Parameter synchron oder unabhaengig verändern.
// Vereinfachung: ImageJ kann keine Pearson-Korrelation berechnen, 
// daher nutze ich eine Differenzmethode, um Trends zu vergleichen.

//print("\n\nKorrelation zwischen Parametern");
//print("\nMaxFrames\tMaxTimes\tContraction#\tCorrelationEstimate");


for (i = 0; i < RelaxationThr10.length; i++) {
    CorrelationEstimate = ((ContractionThr10[i] - ContractionThr10[0]) * (RelaxationThr10[i] - RelaxationThr10[0])) +
                          ((ContractionThrUser[i] - ContractionThrUser[0]) * (RelaxationThrUser[i] - RelaxationThrUser[0])) +
                          ((ContractionThr50[i] - ContractionThr50[0]) * (RelaxationThr50[i] - RelaxationThr50[0])) +
                          ((ContractionThr90[i] - ContractionThr90[0]) * (RelaxationThr90[i] - RelaxationThr90[0]));

    //print(MaxFrames[i] + "\t" + MaxTimes[i] + "\t" + (i+1) + "\t" + CorrelationEstimate);
    CorrelationOfParameters[i]=CorrelationEstimate;
}


// Clusteranalyse der Kontraktionen (einfache Gruppierung)

//Teilt Kontraktionen in verschiedene Gruppen ein, basierend auf Amplitude und Dauer

//print("\n\nClusteranalyse der Kontraktionen (einfache Gruppierung)");
//print("\nMaxFrames\tMaxTimes\tContraction#\tCluster");


for (i = 0; i < RelaxationThr10.length; i++) {
    if (LocMaxAmplitudes[i] > 1.2 * LocMaxAmplitudes[0] && MaxTimes[i] > 1.2 * MaxTimes[0]) {
        Cluster = 1;  // Hohe Amplitude, lange Kontraktion
    } else if (LocMaxAmplitudes[i] < 0.8 * LocMaxAmplitudes[0] && MaxTimes[i] < 0.8 * MaxTimes[0]) {
        Cluster = 2;  // Niedrige Amplitude, schnelle Kontraktion
    } else {
        Cluster = 3;  // Normale Kontraktion
    }

    //print(MaxFrames[i] + "\t" + MaxTimes[i] + "\t" + (i+1) + "\t" + Cluster);
    ClusterAnalyse[i]=Cluster;
}


// Phasenraum-Trajektorien (einfache Darstellung)

// Ziel: Stellt die Zellkontraktionen als Bewegungstrajektorie dar.
// Vereinfachung: Keine 3D-Plots in ImageJ, daher speichere ich Amplitude vs. Dauer.

/*

print("\n\nPhasenraum-Trajektorien (einfache Darstellung)");
print("\nLocMaxAmplitudes\tMaxTimes");

for (i = 0; i < RelaxationThr10.length; i++) {
    print(LocMaxAmplitudes[i] + "\t" + MaxTimes[i]);
}

*/

// Gleitender Mittelwert zur Trendanalyse
// Entfernt Rauschen und zeigt langsame Trends in den Daten.


//print("\n\nGleitender Mittelwert zur Trendanalyse");
//print("\nMaxFrames\tMaxTimes\tContraction#\tMovingAvg");


window = 5;  // Anzahl der Kontraktionen im Mittelwert

for (i = window; i < RelaxationThr10.length - window; i++) {
    Sum = 0;
    for (j = -window; j <= window; j++) {
        Sum += LocMaxAmplitudes[i + j];
    }
    MovingAvg = Sum / (2 * window + 1);

    //print(MaxFrames[i] + "\t" + MaxTimes[i] + "\t" + (i+1) + "\t" + MovingAvg);
    BewegteMittel[i]=MovingAvg;
}



// Hier nochmal die Kumulative, platzsparende Ausgabe der obigen Berechnungen


// Zuerst alle "NoData"-Elemente durch "" ersetzen, damit die Spalten stimmen!

for (i = 0; i < RelaxationThr10.length; i++) {
if(VereinfachteHauptkomponenten[i]=="NoData"){VereinfachteHauptkomponenten[i]="";}
if(Intervals[i]=="NoData"){Intervals[i]="";}
if(Frequenzen[i]=="NoData"){Frequenzen[i]="";}
if(Velocities[i]=="NoData"){Velocities[i]="";}
if(Accelerations[i]=="NoData"){Accelerations[i]="";}
if(CorrelationOfParameters[i]=="NoData"){CorrelationOfParameters[i]="";}
if(ClusterAnalyse[i]=="NoData"){ClusterAnalyse[i]="";}
if(BewegteMittel[i]=="NoData"){BewegteMittel[i]="";}
}


//************************************** Ab Hier wird ALLES gedruckt!!! ***************************************


// Kumulative Ausgabe aller vergleichenden Berechnungen

print("\n\nAll parameters over time\t\t\t\t\t\t\t\t\t\t\t\t\tDeviation from first contraction over time\t\t\t\t\t\t\t\t\t\tDifferences of ALL parameters from first Frame");
// print("Frame\tMaxTime\tContraction#\tContrThr10%\tContrThrUser\tContrThr50%\tContrThr90%\tMaximum\tRelaxThr90%\tRelaxThr50%\tRelaxThrUser\tRelaxThr10%\t\tContrThr10%\tContrThrUser\tContrThr50%\tContrThr90%\tMaximum\tRelaxThr90%\tRelaxThr50%\tRelaxThrUser\tRelaxThr10%\t\tSquaredSumDifferences\tSquaredSumRatios\tSumRelativeRatios\tVarianzen\t\tVereinfachteHauptkomponente\tInterval\tFrequenz\tVelocity\tAcceleration\tCorrelation of Parameters\tClusteranalysis\tMovingAverage");

print("Frame\tMaxTime\tContraction#\tContrThr10%\tContrThrUser\tContrThr50%\tContrThr90%\tMaximum\tRelaxThr90%\tRelaxThr50%\tRelaxThrUser\tRelaxThr10%\t\tContrThr10%\tContrThrUser\tContrThr50%\tContrThr90%\tMaximum\tRelaxThr90%\tRelaxThr50%\tRelaxThrUser\tRelaxThr10%\t\tEuclidean distance\tRelative Euclidean distance\tMean absolute relative change\tStandard Deviation of Normalized Parameters\t\tSimplified Principal Component\tInterval\tInter-beat Interval & Frequency\tVelocity\tAcceleration\tCorrelation Estmate\tCluster Analysis\tMoving Average");



// Das hier druckt alle Parameter ueber die Zeit hinweg! Das muss nach hinten, damit wir zuvor alle noetigen Berechnungen anstellen, um das alles in EINE Tabelle zu bekommen
// Das wird sonst einfach nur Chaos!

for (i = 0; i < RelaxationThr10.length; i++) {
print(MaxFrames[i] +"\t"+ 
		MaxTimes[i] +"\t"+ 
		(i+1) + "\t"+ 
		ContractionThr10[i] +"\t"+ 
		ContractionThrUser[i] +"\t"+ 
		ContractionThr50[i] +"\t"+ 
		ContractionThr90[i] +"\t"+ 
		LocMaxAmplitudes[i] +"\t"+ 
		RelaxationThr90[i] +"\t"+ 
		RelaxationThr50[i] +"\t"+ 
		RelaxationThrUser[i] +"\t"+ 
		RelaxationThr10[i] +"\t\t"+
          (ContractionThr10[i]-ContractionThr10[0]) + "\t" + 
          (ContractionThrUser[i]-ContractionThrUser[0]) + "\t" + 
          (ContractionThr50[i]-ContractionThr50[0]) + "\t" + 
          (ContractionThr90[i]-ContractionThr90[0]) + "\t" + 
          (LocMaxAmplitudes[i]-LocMaxAmplitudes[0]) + "\t" + 
          (RelaxationThr90[i]-RelaxationThr90[0]) + "\t" + 
          (RelaxationThr50[i]-RelaxationThr50[0]) + "\t" + 
          (RelaxationThrUser[i]-RelaxationThrUser[0]) + "\t" + 
          (RelaxationThr10[i]-RelaxationThr10[0]) +"\t\t"+
          SquaredSumDifferences[i] +"\t"+ 
          SquaredSumRatios[i] +"\t"+ 
          SumRelativeRatios[i] +"\t"+ 
          Variances[i]+"\t\t"+
          VereinfachteHauptkomponenten[i] +"\t"+ 
          Intervals[i] +"\t"+ 
          Frequenzen[i] +"\t"+ 
          Velocities[i] +"\t"+ 
          Accelerations[i] +"\t"+ 
          CorrelationOfParameters[i] +"\t"+ 
          ClusterAnalyse[i] +"\t"+ 
          BewegteMittel[i]);

}

//Okay soweit; und nun die notwendigen Berechnungen; was machen wir mit den Parametern?

// Sollte hier nicht auch der 

// Hier endet der if(MainParameters.length>=63)-Loop

}


// ****************************** Ende der kompletten Datenausgabe!!!

// Hier endet der Cell-Loop!!
}


// Hier sind nun alle Statistikdaten fuer alle Einzezellen ausgegeben, die speichern wir ENG und GER

selectWindow("Log");

saveAs("Text", FinalStatisticsDirectory+ "Results Final Summary for Stats "+ year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + " (ENG).txt");

AllData=getInfo("log");
AllData=replace(AllData, ".", ",");

print("\\Clear");

print(AllData);

selectWindow("Log");
saveAs("Text", FinalStatisticsDirectory+ "Results Final Summary for Stats "+ year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + " (GER).txt");


// Hier geht es mit den Heat-Maps weiter!

// Hier beschneiden wir ueberfluessige Teile des Probennamens

for (i = 0; i < Cells.length; i++) {
		
Cells[i]=replace(Cells[i], "mjpeg-diff-", "");

fpsDeletePos2 = indexOf(Cells[i], "fps)");

if(fpsDeletePos2>=0){

fpsDeletePos1 = indexOf(Cells[i], "fps)");
while(((indexOf(Cells[i], "(", fpsDeletePos1)))<0 && fpsDeletePos1>0){fpsDeletePos1--;}
print(fpsDeletePos1);
if(fpsDeletePos1>0){Cells[i]=substring(Cells[i], 0, fpsDeletePos1) + substring(Cells[i], fpsDeletePos2 + lengthOf("fps)"), lengthOf(Cells[i]));}
}

}


// Nun moechte ich Gruppen erstellen und die Zellen eines Videos uebersichtlich zusammenfassen
// Alles vor "_Cell " gibt den namen des Videos an! 

EinzelVideos=newArray();
NeuesVideo="";
VideoSeperatorTics=newArray(Cells.length);

print("\\Clear");

for (i = 0; i < Cells.length; i++) {
	
	// Hier endet der eigentliche Name des Videos
VideoNameEnde = indexOf(Cells[i], "_cell ");

// Taucht ein anderer also neuer Name auf, dann wird der an das Array angehaengt

if(NeuesVideo!=substring(Cells[i], 0, VideoNameEnde)){
	EinzelVideos=Array.concat(EinzelVideos,substring(Cells[i], 0, VideoNameEnde)); 
	NeuesVideo=substring(Cells[i], 0, VideoNameEnde); VideoSeperatorTics[i]="Tick";}else{VideoSeperatorTics[i]="NoTick";}
}

// Nun sind die Namen des Arrays Cells tatsaechlich veraendert!
// Und wir haben ein Array so lang wie Cells, welches die Information Tick oder NoTick enthaelt

// FIX: Labels/Ticks auf die Zellen beschränken, die wirklich in ANOVA gelandet sind
CellsANOVA = newArray();
VideoSeperatorTicsANOVA = newArray();

for (i = 0; i < Cells.length; i++) {
    if (UsedInANOVA[i] == 1) {
        CellsANOVA = Array.concat(CellsANOVA, Cells[i]);
        VideoSeperatorTicsANOVA = Array.concat(VideoSeperatorTicsANOVA, VideoSeperatorTics[i]);
    }
}


// Oben haben wir die Schriftausrichtung veraendert, das wieder auf left setzen

setJustification("left");


//Wir erstellen eine Heat-Map der Signifikanzen

// Alle Daten sind ausgegeben...

// Hier nun die finale statistische Auswertung via ANOVA
// Das hier sollte separat fuer jede einzelne Zelle erstellt werden


// ---------------- Vor dem ANOVA-Loop ----------------
// Initialisiere ein Array, um die in der ANOVA-Schleife verwendeten statName-Werte zu speichern:
heatmapNames = newArray();


for (FinStats = 0; FinStats < 9; FinStats++) {

    if (FinStats == 0) { dataArray = Array.copy(ANOVAContThr10); statName = "ContThr10%"; }
    if (FinStats == 1) { dataArray = Array.copy(ANOVAContUser);  statName = "ContUser"; }
    if (FinStats == 2) { dataArray = Array.copy(ANOVAContThr50); statName = "ContThr50%"; }
    if (FinStats == 3) { dataArray = Array.copy(ANOVAContThr90); statName = "ContThr90%"; }
    if (FinStats == 4) { dataArray = Array.copy(ANOVAAmplitude); statName = "Amplituden"; }
    if (FinStats == 5) { dataArray = Array.copy(ANOVARelThr90); statName = "RelThr90%"; }
    if (FinStats == 6) { dataArray = Array.copy(ANOVARelThr50); statName = "RelThr50%"; }
    if (FinStats == 7) { dataArray = Array.copy(ANOVARelUser);  statName = "RelUser"; }
    if (FinStats == 8) { dataArray = Array.copy(ANOVARelThr10); statName = "RelThr10%"; }
    
    print("\n\nStatistik für " + statName + "\n\n");

    // ----------------------------
    // ANOVA-Berechnungen
    // ----------------------------
    numGroups = GroupSizes.length;   // Anzahl der Gruppen (z. B. 3)
    totalN = dataArray.length;       // Anzahl der Messwerte (hier 63)

    // Berechnung der Gruppenmittelwerte:
    groupMeans = newArray(numGroups);
    totalSum = 0;
    startIndex = 0;
    for (i = 0; i < numGroups; i++) {
        sum = 0;
        size = GroupSizes[i];
        for (j = 0; j < size; j++) {
            sum += dataArray[startIndex + j];
        }
        groupMeans[i] = sum / size;
        totalSum += sum;
        startIndex += size;
    }
    grandMean = totalSum / totalN;

    // Berechnung der Sum of Squares:
    SSB = 0;
    SSW = 0;
    startIndex = 0;
    for (i = 0; i < numGroups; i++) {
        SSB += GroupSizes[i] * pow(groupMeans[i] - grandMean, 2);
        size = GroupSizes[i];
        for (j = 0; j < size; j++) {
            SSW += pow(dataArray[startIndex + j] - groupMeans[i], 2);
        }
        startIndex += size;
    }
    dfBetween = numGroups - 1;
    dfWithin = totalN - numGroups;
    MSB = SSB / dfBetween;
    MSW = SSW / dfWithin;
    F = MSB / MSW;

    // Kritischer F-Wert dynamisch bestimmen (5% Signifikanzniveau)
    Fcritical = getFCritical(dfBetween, dfWithin);

    print("\n\n### ANOVA-Ergebnisse für " + statName + " ###");
    print("Gesamtmittelwert: " + grandMean);
    print("SSB: " + SSB);
    print("SSW: " + SSW);
    print("dfBetween: " + dfBetween + ", dfWithin: " + dfWithin);
    print("MSB: " + MSB + ", MSW: " + MSW);
    print("F-Wert: " + F);
    print("Fkritisch: " + Fcritical);

    if (F > Fcritical) {
        interpretation = "Das Ergebnis ist signifikant (p <= 0.05, Unterschiede zwischen Gruppen vorhanden).";
    } else {
        interpretation = "Das Ergebnis ist nicht signifikant (kein statistisch signifikanter Unterschied).";
    }
    print("Interpretation: " + interpretation + "\n");

    // --------------------------------------------------
    // Erstelle die pairwise Vergleichs-Matrix fuer die Gruppen
    // (hier: Berechnung der Bonferroni t-Werte)
    // --------------------------------------------------
    matrix = newArray(numGroups * numGroups);
    for (i = 0; i < numGroups; i++) {
        for (j = 0; j < numGroups; j++) {
            if (i == j) {
                // Diagonale: Vergleich derselben Gruppe (kann als 0 belassen werden)
                matrix[i * numGroups + j] = 0;
            } else if (i < j) {
                meanDiff = abs(groupMeans[i] - groupMeans[j]);
                pooledSE = sqrt(MSW * (1.0 / GroupSizes[i] + 1.0 / GroupSizes[j]));
                tValue = meanDiff / pooledSE;
                matrix[i * numGroups + j] = tValue;
                matrix[j * numGroups + i] = tValue; // Symmetrie
            }
        }
    }
    // --------------------------------------------------
    // Erstelle eine Heatmap, die die paarweisen Vergleichswerte der Gruppen darstellt.
    // Jede Zelle entspricht einem Gruppenpaar; je hoeher der t-Wert, desto heller.
    // --------------------------------------------------
    createComparisonHeatmap(matrix, numGroups, statName, CellsANOVA, VideoSeperatorTicsANOVA);
    
    // Speichere den aktuell verwendeten statName in unserem Array:
    heatmapNames = Array.concat(heatmapNames, statName);
    
    // --- Posthoc-Tests ---
    
    bonferroniTest(groupMeans, GroupSizes, MSW, CellsANOVA, dfWithin);
	tukeyHSD(groupMeans, GroupSizes, MSW, CellsANOVA, dfWithin);

}


// ***********************************************************************
// Nun: Composite-Analyse aller 9 Parameter
// Es wird fuer jeden Messwert (z. B. jede Herzmuskelzelle) aus den 9 Parametern
// zunaechst eine Normierung vorgenommen (auf 0 bis 1) und anschliessend der Durchschnitt
// dieser normierten Werte berechnet. So entsteht ein zusammengesetzter Index,
// der als "Summenversenderung" interpretiert werden kann.
// ***********************************************************************

print("\n\n### Composite analysis of ALL parameters combined ###\n");

// Annahme: Alle Parameter-Arrays haben die gleiche Laenge (totalN)
totalN = ANOVAContThr10.length;

// Normiere jeden Parameter separat (Funktion normalizeArray)
norm1 = normalizeArray(ANOVAContThr10);
 norm2 = normalizeArray(ANOVAContUser);
 norm3 = normalizeArray(ANOVAContThr50);
norm4 = normalizeArray(ANOVAContThr90);
 norm5 = normalizeArray(ANOVAAmplitude);
 norm6 = normalizeArray(ANOVARelThr90);
norm7 = normalizeArray(ANOVARelThr50);
 norm8 = normalizeArray(ANOVARelUser);
 norm9 = normalizeArray(ANOVARelThr10);

// Berechne fuer jeden Messwert den Durchschnitt der 9 normierten Werte
compositeData = newArray(totalN);
for (i = 0; i < totalN; i++) {
    compositeData[i] = (norm1[i] + norm2[i] + norm3[i] + norm4[i] + norm5[i] +
                        norm6[i] + norm7[i] + norm8[i] + norm9[i]) / 9;
}
statName = "Composite";

// ANOVA fuer den Composite-Index:
numGroups = GroupSizes.length;
totalSum = 0;
startIndex = 0;
groupMeans = newArray(numGroups);
for (i = 0; i < numGroups; i++) {
    sum = 0;
    size = GroupSizes[i];
    for (j = 0; j < size; j++) {
        sum += compositeData[startIndex + j];
    }
    groupMeans[i] = sum / size;
    totalSum += sum;
    startIndex += size;
}
grandMean = totalSum / totalN;

// Sum of Squares
SSB = 0;
SSW = 0;
startIndex = 0;
for (i = 0; i < numGroups; i++) {
    SSB += GroupSizes[i] * pow(groupMeans[i] - grandMean, 2);
    size = GroupSizes[i];
    for (j = 0; j < size; j++) {
        SSW += pow(compositeData[startIndex + j] - groupMeans[i], 2);
    }
    startIndex += size;
}
dfBetween = numGroups - 1;
dfWithin = totalN - numGroups;
MSB = SSB / dfBetween;
MSW = SSW / dfWithin;
F = MSB / MSW;
Fcritical = getFCritical(dfBetween, dfWithin);

print("\n\n### ANOVA-Ergebnisse für " + statName + " ###");
print("Gesamtmittelwert: " + grandMean);
print("SSB: " + SSB);
print("SSW: " + SSW);
print("dfBetween: " + dfBetween + ", dfWithin: " + dfWithin);
print("MSB: " + MSB + ", MSW: " + MSW);
print("F-Wert: " + F);
print("Fkritisch: " + Fcritical);

if (F > Fcritical) {
    interpretation = "Das Ergebnis ist signifikant (p <= 0.05, Unterschiede zwischen Gruppen vorhanden).";
} else {
    interpretation = "Das Ergebnis ist nicht signifikant (kein statistisch signifikanter Unterschied).";
}
print("Interpretation: " + interpretation + "\n");

// Erstelle die pairwise Vergleichsmatrix fuer den Composite-Index:
matrix = newArray(numGroups * numGroups);
for (i = 0; i < numGroups; i++) {
    for (j = 0; j < numGroups; j++) {
        if (i == j) {
            matrix[i * numGroups + j] = 0;
        } else if (i < j) {
            meanDiff = abs(groupMeans[i] - groupMeans[j]);
            pooledSE = sqrt(MSW * (1.0 / GroupSizes[i] + 1.0 / GroupSizes[j]));
            tValue = meanDiff / pooledSE;
            matrix[i * numGroups + j] = tValue;
            matrix[j * numGroups + i] = tValue;
        }
    }
}

createComparisonHeatmap(matrix, numGroups, statName, CellsANOVA, VideoSeperatorTicsANOVA);
bonferroniTest(groupMeans, GroupSizes, MSW, CellsANOVA, dfWithin);
tukeyHSD(groupMeans, GroupSizes, MSW, CellsANOVA, dfWithin);


// --------------------------------------------------
// Funktionen
// --------------------------------------------------

// Bonferroni-Posthoc-Test (Ausgabe in der Konsole)
function bonferroniTest(groupMeans, GroupSizes, MSW, labels, dfWithin) {
    print("\n\n### Bonferroni-Posthoc-Test ###");
    // Korrigiere das Signifikanzniveau fuer die Mehrfachvergleiche:
    numGroups = groupMeans.length;
	alpha_corrected = 0.05 / ((numGroups * (numGroups - 1)) / 2);
	tCritical = getTCritical(dfWithin, alpha_corrected);

    for (i = 0; i < numGroups; i++) {
        for (j = i + 1; j < numGroups; j++) {
            meanDiff = abs(groupMeans[i] - groupMeans[j]);
            pooledSE = sqrt(MSW * (1.0 / GroupSizes[i] + 1.0 / GroupSizes[j]));
            tValue = meanDiff / pooledSE;
            if (tValue > tCritical) {  // Dynamisch berechneter kritischer t-Wert
                print("Vergleich Gruppe " + labels[i] + " vs Gruppe " + labels[j] +
                      ": t-Wert = " + tValue + " (kritisch: " + tCritical + ") => Signifikant (Bonferroni)");
            }
        }
    }
}

// Tukey-HSD-Posthoc-Test (Ausgabe in der Konsole)
function tukeyHSD(groupMeans, GroupSizes, MSW, labels, dfWithin) {
    print("\n\n### Tukey-HSD-Posthoc-Test ###");
    // Kritischen q-Wert anhand der Anzahl der Gruppen und dfWithin berechnen (alpha = 0.05)
    numGroups = groupMeans.length;
	qCritical = getQCritical(numGroups, dfWithin);

    for (i = 0; i < numGroups; i++) {
        for (j = i + 1; j < numGroups; j++) {
            meanDiff = abs(groupMeans[i] - groupMeans[j]);
            pooledSE = sqrt(MSW * 0.5 * (1.0 / GroupSizes[i] + 1.0 / GroupSizes[j]));
            qValue = meanDiff / pooledSE;
            if (qValue > qCritical) {
                print("Vergleich Gruppe " + labels[i] + " vs Gruppe " + labels[j] +
                      ": q-Wert = " + qValue + " (kritisch: " + qCritical + ") => Signifikant (Tukey-HSD)");
            }
        }
    }
}

// Funktion zur Bestimmung des kritischen F-Werts
function getFCritical(dfBetween, dfWithin) {
    // Diese Werte sind Naeherungswerte aus Standard-F-Verteilungstabellen (alpha = 0.05).
    if (dfBetween == 1) {
        if (dfWithin <= 10) return 7.70;
        else if (dfWithin <= 20) return 6.89;
        else if (dfWithin <= 30) return 6.59;
        else if (dfWithin <= 60) return 6.38;
        else if (dfWithin <= 120) return 6.27;
        else return 6.20;
    } else if (dfBetween == 2) {
        if (dfWithin <= 10) return 4.74;
        else if (dfWithin <= 20) return 3.55;
        else if (dfWithin <= 30) return 3.21;
        else if (dfWithin <= 60) return 3.15;
        else if (dfWithin <= 120) return 3.10;
        else return 3.08;
    } else if (dfBetween == 3) {
        if (dfWithin <= 10) return 5.41;
        else if (dfWithin <= 20) return 4.11;
        else if (dfWithin <= 30) return 3.74;
        else if (dfWithin <= 60) return 3.57;
        else if (dfWithin <= 120) return 3.50;
        else return 3.48;
    } else if (dfBetween == 4) {
        if (dfWithin <= 10) return 6.39;
        else if (dfWithin <= 20) return 4.68;
        else if (dfWithin <= 30) return 4.25;
        else if (dfWithin <= 60) return 4.07;
        else if (dfWithin <= 120) return 4.00;
        else return 3.98;
    } else {
        // Fallback: Bei dfBetween > 4 werden hier die Werte von dfBetween = 2 als Naeherung verwendet.
        if (dfWithin <= 10) return 4.74;
        else if (dfWithin <= 20) return 3.55;
        else if (dfWithin <= 30) return 3.21;
        else if (dfWithin <= 60) return 3.15;
        else if (dfWithin <= 120) return 3.10;
        else return 3.08;
    }
}

// Funktion zur Berechnung des kritischen t-Werts für den Bonferroni-Test
// df: Freiheitsgrade (dfWithin); alpha: korrigiertes Signifikanzniveau für den Vergleich
function getTCritical(df, alpha) {
    // Berechne den Schwellenwert: tail probability = 1 - alpha/2.
    tailProb = 1 - alpha/2;
    if(tailProb < 0.98) { // entspricht ungefaehr einem zweiseitigen Test mit alpha ≈ 0.05
        if (df <= 10) return 2.228;
        else if (df <= 20) return 2.086;
        else if (df <= 30) return 2.042;
        else if (df <= 60) return 2.000;
        else if (df <= 120) return 1.980;
        else return 1.960;
    } else if(tailProb < 0.993) { // entspricht ungefaehr alpha ≈ 0.01
        if (df <= 10) return 3.169;
        else if (df <= 20) return 2.845;
        else if (df <= 30) return 2.750;
        else if (df <= 60) return 2.660;
        else if (df <= 120) return 2.626;
        else return 2.600;
    } else { // entspricht ungefaehr alpha ≈ 0.005
        if (df <= 10) return 3.581;
        else if (df <= 20) return 3.355;
        else if (df <= 30) return 3.291;
        else if (df <= 60) return 3.210;
        else if (df <= 120) return 3.182;
        else return 3.160;
    }
}

// Funktion zur Berechnung des kritischen q-Werts für Tukey-HSD (α = 0.05)
function getQCritical(numGroups, dfWithin) {
    // Die kritischen q-Werte haengen von der Anzahl der Gruppen (k) und den Freiheitsgraden (dfWithin) ab.
    if(numGroups == 3) {
        if(dfWithin <= 10) return 4.04;
        else if(dfWithin <= 20) return 3.80;
        else if(dfWithin <= 30) return 3.70;
        else if(dfWithin <= 60) return 3.55;
        else if(dfWithin <= 120) return 3.50;
        else return 3.34;
    } else if(numGroups == 4) {
        if(dfWithin <= 10) return 4.32;
        else if(dfWithin <= 20) return 4.00;
        else if(dfWithin <= 30) return 3.90;
        else if(dfWithin <= 60) return 3.75;
        else if(dfWithin <= 120) return 3.70;
        else return 3.63;
    } else if(numGroups == 5) {
        if(dfWithin <= 10) return 4.48;
        else if(dfWithin <= 20) return 4.20;
        else if(dfWithin <= 30) return 4.10;
        else if(dfWithin <= 60) return 3.95;
        else if(dfWithin <= 120) return 3.90;
        else return 3.84;
    } else {
        // Fallback für numGroups > 5: Verwende den Wert für 5 Gruppen als Naeherung
        if(dfWithin <= 10) return 4.48;
        else if(dfWithin <= 20) return 4.20;
        else if(dfWithin <= 30) return 4.10;
        else if(dfWithin <= 60) return 3.95;
        else if(dfWithin <= 120) return 3.90;
        else return 3.84;
    }
}

// Funktion zur Erstellung der Heatmap für die gruppenweisen Vergleiche
// Es wird ein numGroups x numGroups-Raster erzeugt; jede Zelle (10x10 Pixel)
// wird mit einem Grauwert gefuellt, der anhand des Vergleichswerts (hier t-Wert) normiert wird.
function createComparisonHeatmap(matrix, numGroups, statName, labels, videoTicks) {
    cellSize = 10;
    margin = 180;  // Platz fuer Beschriftungen oben und links
    gap = 20;      // Abstand zwischen Heatmap und Colorbar
    colorBarWidth = 25; // Breite des Farbverlaufs
    
    imgWidth = numGroups * cellSize;
    imgHeight = numGroups * cellSize;

    // Neues Bild: zusätzlich margin-Bereich links, oben und rechts (fuer Colorbar)
    totalWidth = imgWidth + margin + gap + colorBarWidth;
    totalHeight = imgHeight + margin;
   
    // Die totalWidth+20 ergeben einen breiteren rechten Rand
    newImage("All Cells Heatmap - " + statName, "8-bit white", totalWidth+20, totalHeight, 1);

    // Ermittle Minimum und Maximum der Matrixwerte
    minVal = matrix[0];
    maxVal = matrix[0];
    for (i = 0; i < numGroups * numGroups; i++) {
        if (matrix[i] < minVal) minVal = matrix[i];
        if (matrix[i] > maxVal) maxVal = matrix[i];
    }
    range = maxVal - minVal;
    if (range == 0) range = 1;

    // Zeichne die Heatmapzellen – verschoben um den margin (links und oben)
    for (i = 0; i < numGroups; i++) {
        for (j = 0; j < numGroups; j++) {
            x = margin + j * cellSize;
            y = margin + i * cellSize;
            value = matrix[i * numGroups + j];
            norm = (value - minVal) / range;  // Normierung auf 0 bis 1
            gray = round(norm * 255);           // 0 = dunkel, 255 = hell
            setColor(gray, gray, gray);
            makeRectangle(x, y, cellSize, cellSize);
            run("Fill");
        }
    }
    
    // Ausgabe der paarweisen t-Werte (ohne Dopplungen)
    for (i = 0; i < numGroups; i++) {
        for (j = i+1; j < numGroups; j++) {
            print(labels[i]+"\t to \t" +labels[j] + "\tt-value: \t"+matrix[i * numGroups + j]);
        }
    }
    
    // Optional: Kontrastverbesserung (anpassen oder entfernen, falls der LUT-Effekt nicht gewuenscht ist)
    run("Enhance Contrast", "saturated=0.35");
    
    // --- Beschriftung hinzufuegen ---
    setFont("Arial", 10);
    setColor("black");

    // Horizontal: Spaltennamen oben (ueber den Heatmap-Zellen)
    run("Rotate 90 Degrees Left");
    for (j = 0; j < numGroups; j++) {
         yPos = 72 + j * cellSize + cellSize/2;
         //xPos = 30;
         //drawString(Cells[Cells.length - j - 1], xPos+getStringWidth(Cells[Cells.length - j - 1]), yPos);
         drawString(labels[labels.length - j - 1], margin-getStringWidth(labels[labels.length - j - 1])-10, yPos);
	if(videoTicks[videoTicks.length - j - 1] == "Tick"){drawLine(margin-10, yPos-3, margin, yPos-3);}
	if(j==0){drawLine(margin-10, yPos-3-cellSize, margin, yPos-3-cellSize);}

         
    }
     
    run("Rotate 90 Degrees Right");
    
    // Vertikal: Reihenamen links
    for (i = 0; i < numGroups; i++) {
         //xPos = 5;
         yPos = margin + i * cellSize + cellSize/2 + 5;
         //drawString(Cells[i], xPos, yPos);
         drawString(labels[i], margin-getStringWidth(labels[i])-10, yPos);
	if(videoTicks[i] == "Tick"){drawLine(margin-10, yPos-cellSize, margin, yPos-cellSize);}
	if(i == videoTicks.length-1){drawLine(margin-10, yPos, margin, yPos);}

    }
    
        
    
    // --- Farbverlauf (Colorbar) rechts neben der Heatmap ---
    colorBarX = margin + imgWidth + gap;
    for (y = margin; y < margin + imgHeight; y++) {
         norm = 1 - (y - margin) / imgHeight;
         intensity = round(norm * 255);
         setColor(intensity, intensity, intensity);
         makeRectangle(colorBarX, y, colorBarWidth, 1);
         run("Fill");
    }
    
    // Tickmarken und Beschriftungen (10 Unterteilungen)
    numTicks = 10;
    setFont("Arial", 15, "bold");
    setColor("black");
    for (t = 0; t <= numTicks; t++) {
         frac = t / numTicks;
         yTick = margin + (1 - frac) * imgHeight;
         setColor("black");
         drawLine(colorBarX, yTick, colorBarX - 5, yTick);
         valueTick = minVal + frac * (maxVal - minVal);
         valueRounded = round(valueTick * 100) / 100;
         drawString(valueRounded, 10 + colorBarX - colorBarWidth/2, yTick + 3);
    }

    // Titel des Bildes
    
    TitleFontSize=25;
    setFont("Arial", TitleFontSize, "bold");
    setColor("black");
    drawString(statName+"\nt-value", 25, 4*TitleFontSize);
    
}


// --------------------------------------------------------------------
// Funktion zur Normierung eines Arrays (auf Werte zwischen 0 und 1)
// --------------------------------------------------------------------
function normalizeArray(arr) {
    minVal = arr[0];
    maxVal = arr[0];
    for (k = 0; k < arr.length; k++) {
        if (arr[k] < minVal) minVal = arr[k];
        if (arr[k] > maxVal) maxVal = arr[k];
    }
    diff = maxVal - minVal;
    if (diff == 0) diff = 1; // Division durch 0 vermeiden
    normArr = newArray(arr.length);
    for (k = 0; k < arr.length; k++) {
        normArr[k] = (arr[k] - minVal) / diff;
    }
    return normArr;
}


// Die Bilder zeigen den t-Wert an; Der t-Wert misst, wie groß der Unterschied zwischen den 
// Mittelwerten zweier Gruppen im Verhaeltnis zur Streuung (Variabilität) innerhalb dieser Gruppen ist. Konkret berechnet sich der t-Wert hier als:
//


// Problem: Wir haben hier lauter einzelne Bilder, die womoeglich in keiner sinnvollen Reihenflge in den Stack gebracht werden.
// Alle Namen liegen in folgendem Array: heatmapNames

// Wir nehmen das erste Bild und erstellen einen Stack


// Das hier kann ggf. geloescht werden!!!
SaveNameArray=newArray("ContThr10%","ContUser","ContThr50%","ContThr90%","Amplituden","RelThr90%","RelThr50%","RelUser","RelThr10%", "Composite");


selectWindow("All Cells Heatmap - "+toString(SaveNameArray[0]));
getDimensions(width, height, channels, slices, frames);

newImage("Stack", "8-bit white", width, height, SaveNameArray.length);

// FIX: Stack hat SaveNameArray.length Slices (nSlices aus getDimensions() war vom Einzelbild = 1!)
for (i = 1; i <= SaveNameArray.length; i++) {
  
 // === Hier erfolgt aktuell die Neuzuordnung von statName aus SaveNameArray ===
    // statName = SaveNameArray[i-1];
    // === Loesung: Diese Zeile entfernen oder auskommentieren, um den urspruenglichen statName zu erhalten ===
   
   // Einzelbild auswaehlen in der richtigen Reihenfolge die wir am Ende benoetigen
   
selectWindow("All Cells Heatmap - "+toString(SaveNameArray[i-1]));  	
run("Select All");
run("Copy");

// Und das nun in den Stack rein

selectImage("Stack");
setSlice(i);
run("Paste");
selectWindow("All Cells Heatmap - "+toString(SaveNameArray[i-1]));  
close();
  	
}


// Alle Enzelbilder sind nun zu, Stack selektieren und Heatmap-Filder drauf

selectImage("Stack");

// Der "Red Hot"-LUT laesst Schwarz und Weiss unveraendert und veraendert nur die Graustufen:
run("Fire");


// Jetzt den Stack durchgehen und die Bilder einzeln speichern!
   
   
   // Problem: ImageJ wechselt bisweilen den Frame nicht! 

for (i = 1; i <= SaveNameArray.length; i++) {
    
    setSlice(i);
    
    // Das hier ist tatsachlich noetig, damit ImageJ weiterschaltet und den Slice wechselt! 
    // Anonsten macht er das bisweilen einfach nicht
    // While funktioniert nicht, also machen wir einen Loop draus
    
    for (setAgain = 0; setAgain < 100; setAgain++) {setSlice(i); wait(1);}
   
  
// print(i + "_"+SaveNameArray[i-1]);
 // === Hier erfolgt aktuell die Neuzuordnung von statName aus SaveNameArray ===
    // statName = SaveNameArray[i-1];
    // === Loesung: Diese Zeile entfernen oder auskommentieren, um den urspruenglichen statName zu erhalten ===
    
  saveAs("jpg", FinalStatisticsDirectory + SaveNameArray[i-1] + "_ANOVA-Heatmap.jpg");
  	
}


Array.print(SaveNameArray);

run("Make Montage...", "columns=5 rows=2 scale=1");

// Dieses Montage jetzt direkt speichern!

selectWindow("Montage");

saveAs("jpg", FinalStatisticsDirectory+"_ANOVA-All Parameters.jpg");


// Und nun alle Bilder schliessen

close("*");


// Nun die gedruckten Daten!
// Alle Daten kopieren und . durch , ersetzen


// Hier sind nun alle Statistikdaten fuer alle Einzezellen ausgegeben, die speichern wir ENG und GER

selectWindow("Log");

saveAs("Text", FinalStatisticsDirectory+ "Results ANOVA all Cells "+ year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + " (ENG).txt");

AllData=getInfo("log");
AllData=replace(AllData, ".", ",");

print("\\Clear");

print(AllData);

selectWindow("Log");
saveAs("Text", FinalStatisticsDirectory+ "Results ANOVA all Cells "+ year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + " (GER).txt");

}

}


// Overall-Statistics for ALL of the selected/included samples of ALL single experiment


if (option == "10. Overall Statistics (for cells)") {



    // ============================================================
    // ZUERST: Statistikfunktion aus Stufe 10 (2.0.33)
    // DANACH: Heatmaps/DifferenceMaps aus 2.0.30 für Stufe 10
    // Datenverarbeitung in den jeweiligen Blöcken unverändert belassen
    // ============================================================

    // ============================================================
    // ANOVA PREPARATION & DATA INGESTION (ImageJ Macro)
    // - Locates the LATEST version per folder via File.lastModified()
    // - Matches: *_Results Final Summary for Stats (ENG).txt
    // - Interactive Group Assignment (e.g., Control vs. Stressed)
    // - Flattened data export (Probe_ID + Group + Raw Data)
    // ============================================================



    run("Colors...", "foreground=black background=black selection=yellow");
    
    // 1. Get Date and Time for Filenames
    getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
    MonthNames = newArray("Jan","Feb","Mar","Apr","May","Jun","Jul","Aug","Sep","Oct","Nov","Dec"); 
    if (hour<10) {hours = "0"+hour;} else {hours=hour;}
    if (minute<10) {minutes = "0"+minute;} else {minutes=minute;}
    if (month<10) {months = "0"+(month+1);} else {months=month+1;}
    if (dayOfMonth<10) {dayOfMonths = "0"+dayOfMonth;} else {dayOfMonths=dayOfMonth;}

    // 2. Select Root Folder
    rootDir = getDirectory("Select Root Folder containing ALL samples");
    if (rootDir == "") exit("Aborted.");
    rootDir = replace(rootDir, "\\", "/");
    if (!endsWith(rootDir, "/")) rootDir += "/";

    // 3. Recursive Search (Stack-based)
    stack = newArray(rootDir);
    // IMPORTANT: include rootDir itself, not only subfolders
    FoundFolders = newArray(rootDir);
    waitForUser("Search", "Click <OK> to start scanning subfolders...");
    

    idx = 0;
    while (idx < stack.length) {
        current = stack[idx];
        if (!endsWith(current, "/")) current += "/";
        items = getFileList(current);
        for (i = 0; i < items.length; i++) {
            if (endsWith(items[i], "/")) {
                folder = current + items[i];
                FoundFolders = Array.concat(FoundFolders, folder);
                stack = Array.concat(stack, folder);
            }
        }
        idx++;
    }

    // 4. Collect ALL matching files per folder (no "latest" filtering)
FoundStatFiles = newArray();

for (i = 0; i < FoundFolders.length; i++) {
    dir = FoundFolders[i];
    if (!endsWith(dir, "/")) dir += "/";

    Candidates = getFileList(dir);

    for (j = 0; j < Candidates.length; j++) {
        cName = Candidates[j];

        // Only files (not folders) + match pattern + .txt
        if (!endsWith(cName, "/") &&
            indexOf(cName, "_Results Final Summary for Stats (ENG)") >= 0 &&
            endsWith(cName, ".txt")) {

            FoundStatFiles = Array.concat(FoundStatFiles, dir + cName);
        }
    }
}

// Optional: remove duplicates (safety)

/*

FoundStatFiles = Array.sort(FoundStatFiles); // ImageJ returns sorted array, but we keep it explicit
FoundStatFilesUnique = newArray();
last = "";
for (i = 0; i < FoundStatFiles.length; i++) {
    if (FoundStatFiles[i] != last) {
        FoundStatFilesUnique = Array.concat(FoundStatFilesUnique, FoundStatFiles[i]);
        last = FoundAggregate by Probe_IDStatFiles[i];
    }
}

FoundStatFiles = FoundStatFilesUnique;
*/

nFiles = FoundStatFiles.length;
if (nFiles == 0) exit("No matching '_Results Final Summary for Stats (ENG)' files found.");




    nFiles = FoundStatFiles.length;
    if (nFiles == 0) exit("No matching '_Results Final Summary for Stats' files found.");
    Array.sort(FoundStatFiles);

    // 5. Define Groups for ANOVA
    Dialog.create("ANOVA: Define Groups");
    Dialog.addNumber("Number of groups:", 2);
    Dialog.show();
    nGroups = round(Dialog.getNumber());
    if (nGroups < 1) nGroups = 1;

    groupNames = newArray(nGroups);
    Dialog.create("ANOVA: Group Names");
    for (g = 0; g < nGroups; g++) {
        Dialog.addString("Group name " + (g+1) + ":", "Group_"+(g+1));
    }
    Dialog.show();
    for (g = 0; g < nGroups; g++) {
        nm = Dialog.getString();
        if (nm == "") nm = "Group_"+(g+1);
        groupNames[g] = nm;
    }

    // 6. Interactive Assignment (Chunked Dialogs)
    choiceList = Array.concat(groupNames, "Exclude");
    assignments = newArray(nFiles);
    for (a = 0; a < nFiles; a++) assignments[a] = groupNames[0]; // Default to first group

    CHUNK = 20; 
    for (start = 0; start < nFiles; start += CHUNK) {
        stop = start + CHUNK; 
        if (stop > nFiles) stop = nFiles;
        
        Dialog.create("Assign Groups (" + (start+1) + "-" + stop + "/" + nFiles + ")");
        for (i = start; i < stop; i++) {
            fullPath = FoundStatFiles[i];
            rootLen  = lengthOf(rootDir);
            // Show only relative path to keep dialog readable
            if (lengthOf(fullPath) > rootLen) {
                displayPath = substring(fullPath, rootLen);
            } else {
                displayPath = fullPath;
            }
            // The "" + ensures everything is treated as a string to avoid numeric errors
            label = "" + (i + 1) + ") " + displayPath;
            Dialog.addChoice(label, choiceList, assignments[i]);
        }
        Dialog.show();
        for (i = start; i < stop; i++) {
            assignments[i] = Dialog.getChoice();
        }
    }

    // 7. Data Ingestion & Flattening
    AllDataRows = newArray();
    ColumnHeadline = "";

    for (i = 0; i < nFiles; i++) {
        group = assignments[i];
        if (group == "Exclude") continue;

        DatenString = File.openAsString(FoundStatFiles[i]);
        DatenSet = split(DatenString, "\r\n");

        // Cell (0,0) as Probe ID
        FirstLineParts = split(DatenSet[0], "\t");
        probeID = FirstLineParts[0];

        // Store Header from the first valid file processed (Row index 1)
        if (ColumnHeadline == "" && DatenSet.length > 1) {
            ColumnHeadline = "Probe_ID\tGroup_Assignment\t" + DatenSet[1];
        }

        // Process actual data rows (starting row index 3)
        for (row = 3; row < DatenSet.length; row++) {
            parts = split(DatenSet[row], "\t");
            // Basic validation: row must contain data
            if (parts.length > 20 && lengthOf(parts[0]) > 2) {
                // Prepend Probe Name and assigned Group
                fullRow = probeID + "\t" + group + "\t" + DatenSet[row];
                AllDataRows = Array.concat(AllDataRows, fullRow);
            }
        }
    }

    // 8. Save Final ANOVA Table
    outDir = getDirectory("Choose Output Folder for ANOVA files");
    if (outDir == "") outDir = rootDir;
    
    // Ab hier werden nun die Daten vorbereitet wir extrahieren nun nur die Mittelwerte der jeweiligen Parameter, Minima, maxima, Stabw bleiben aussen vor

ExtraktionsArray=newArray(0,1,2,3,6,10,14,18,22,26,30,34,38,42,46,50,54,58,62);


// Build ANOVA-ready mean table, but exclude cell rows with invalid numeric values.
// This prevents NaN / Infinity rows from entering ANOVA_Ready_Data LONG and downstream exports.

DatenArrayMittelwerte = newArray();

Clean_ExcludedRows = 0;
Clean_ExcludedRowsText = "Excluded_Row\tReason\tOriginal_Row\n";

for (splt = 0; splt < AllDataRows.length; splt++) {

    DatenArray = split(AllDataRows[splt], "\t\n\r");

    // Keep the existing cleanup logic
    DatenArray = Array.deleteValue(DatenArray, "");
    DatenArray = Array.deleteValue(DatenArray, " ");

    TempString = "";
    Clean_RowOK = 1;
    Clean_BadToken = "";
    Clean_BadColumn = "";

    for (att = 0; att < ExtraktionsArray.length; att++) {

        Clean_Token = "";

        if (DatenArray.length > ExtraktionsArray[att]) {
            Clean_Token = DatenArray[ExtraktionsArray[att]];
        }

        if (att > 0) TempString += "\t";
        TempString += Clean_Token;

        // Columns 0-2 are metadata:
        // 0 Probe_ID
        // 1 Group_Assignment
        // 2 Filename
        //
        // Column 3 and all following columns must be valid numeric values.
        if (att >= 3) {

            Clean_TestVal = parseFloat(Clean_Token);

            if (Clean_Token == "") Clean_RowOK = 0;
            if (Clean_Token == " ") Clean_RowOK = 0;
            if (Clean_Token == "NaN") Clean_RowOK = 0;
            if (Clean_Token == "nan") Clean_RowOK = 0;
            if (Clean_Token == "N/A") Clean_RowOK = 0;
            if (Clean_Token == "NA") Clean_RowOK = 0;
            if (Clean_Token == "Infinity") Clean_RowOK = 0;
            if (Clean_Token == "-Infinity") Clean_RowOK = 0;
            if (Clean_Token == "Inf") Clean_RowOK = 0;
            if (Clean_Token == "-Inf") Clean_RowOK = 0;

            if (isNaN(Clean_TestVal)) {
                Clean_RowOK = 0;
            }

            if (Clean_RowOK == 0 && Clean_BadToken == "") {
                Clean_BadToken = Clean_Token;
                Clean_BadColumn = "" + att;
            }
        }
    }

    if (Clean_RowOK == 1) {

        print(TempString);
        DatenArrayMittelwerte = Array.concat(DatenArrayMittelwerte, TempString);

    } else {

        Clean_ExcludedRows++;
        Clean_ExcludedRowsText += (splt + 1) + "\tColumn_" + Clean_BadColumn + " bad token: " + Clean_BadToken + "\t" + AllDataRows[splt] + "\n";
    }
}
        

FinalDataHeadline="Probe_ID\tGroup_Assignment\tFilenames\tBeats counted [N]\tAmplitudes mean [au]\tBeatTimes mean [s]\tFrequencies mean [1/s]\tPeakTimes10% mean [s]\tSystoles10% mean [s]\tDiastoles10% mean [s]\tPeakTimesUser mean [s]\tSystolesUser mean [s]\tDiastolesUser mean [s]\tPeakTimes50% mean [s]\tSystoles50% mean [s]\tDiastoles50% mean [s]\tPeakTimes90% mean [s]\tSystoles90% mean [s]\tDiastoles90% mean [s]";

FinalDataArray=newArray(DatenArrayMittelwerte.length);
    
    finalText = FinalDataHeadline + "\n";
    for (r = 0; r < DatenArrayMittelwerte.length; r++) {
        finalText += DatenArrayMittelwerte[r] + "\n";
        FinalDataArray[r]=DatenArrayMittelwerte[r];
    }

    

fileNameBase = "ANOVA_Ready_Data_" + year + "-" + MonthNames[month] + "-" + dayOfMonths;

// Save English version (dot)
File.saveString(finalText, outDir + fileNameBase + " LONG (ENG).txt");

// Save German version (comma)
germanText = replace(finalText, ".", ",");
File.saveString(germanText, outDir + fileNameBase + " LONG (GER).txt");

// Save report of excluded invalid rows, if any
if (Clean_ExcludedRows > 0) {
    File.saveString(Clean_ExcludedRowsText, outDir + fileNameBase + " EXCLUDED_INVALID_ROWS (ENG).txt");
    File.saveString(replace(Clean_ExcludedRowsText, ".", ","), outDir + fileNameBase + " EXCLUDED_INVALID_ROWS (GER).txt");
}


    print("\\Clear");
    print("--- ANOVA Preparation Finished ---");
    print("Processed Files: " + FoundStatFiles.length);
    print("Total Data Rows: " + AllDataRows.length);
    print("Output Path: " + outDir);
    
 waitForUser("Success", "ANOVA table created with " + DatenArrayMittelwerte.length + " valid rows.\nExcluded invalid rows: " + Clean_ExcludedRows + "\nFiles saved as (ENG) and (GER).");



// *********************** Normalisierung START ***********************************



// ============================================================
// ADD-ON: WIDE-ONLY NORMALIZATION TO USER-DEFINED CONTROL MEDIAN
// ImageJ Macro SAFE / no Java collections / no nested arrays
//
// Creates WIDE files only:
//
// 1) Ratio-normalized BLOCK-WIDE file
//    ratio = raw_cell_mean / median(control_cell_means in same experiment parent folder)
//
// 2) LOG2-normalized BLOCK-WIDE file
//    log2 = log(ratio) / log(2)
//
// 3) Reference table with all used control medians
// 4) Warning table
//
// IMPORTANT:
// - NO normalized LONG files are written.
// - Beats counted [N] is kept unchanged and is NOT normalized.
// - Only mean parameter columns are normalized.
// - Normalization is performed separately within each biological/experimental parent folder.
// - The user-defined control group is selected from groupNames.
// - The output preserves parent folders so the user can see which animal/experiment each block belongs to.
// - Output layout: Control block on the left, empty separator, treated groups on the right.
// - Existing Function 10 code outside this add-on is not modified.
// ============================================================


// ------------------------------------------------------------
// 0) Select reference/control group
// ------------------------------------------------------------

Dialog.create("Normalization: Reference group");
Dialog.addChoice("Control/reference group:", groupNames, groupNames[0]);
Dialog.show();

Norm_ControlGroup = Dialog.getChoice();


// ------------------------------------------------------------
// 1) Safe output directory and filename date
// ------------------------------------------------------------

Norm_outDir = replace(outDir, "\\", "/");
if (!endsWith(Norm_outDir, "/")) Norm_outDir += "/";

Norm_rootDir = replace(rootDir, "\\", "/");
if (!endsWith(Norm_rootDir, "/")) Norm_rootDir += "/";

// Use the already validated Function-10 filename base.
// This prevents "_NaN" in normalization filenames.
Norm_DateStamp = replace(fileNameBase, "ANOVA_Ready_Data_", "");

// ------------------------------------------------------------
// 2) Headers
// ------------------------------------------------------------

Norm_HeadParts = split(FinalDataHeadline, "\t");
Norm_nCols = Norm_HeadParts.length;

// Expected layout:
// 0 Probe_ID
// 1 Group_Assignment
// 2 Filenames
// 3 Beats counted [N]
// 4... mean parameters
Norm_firstParamCol = 4;
Norm_nParams = Norm_nCols - Norm_firstParamCol;

Norm_RatioHeadline = "";
Norm_Log2Headline  = "";

for (Norm_h = 0; Norm_h < Norm_nCols; Norm_h++) {

    if (Norm_h > 0) {
        Norm_RatioHeadline += "\t";
        Norm_Log2Headline  += "\t";
    }

    if (Norm_h < Norm_firstParamCol) {
        Norm_RatioHeadline += Norm_HeadParts[Norm_h];
        Norm_Log2Headline  += Norm_HeadParts[Norm_h];
    } else {
        Norm_RatioHeadline += Norm_HeadParts[Norm_h] + " ratio_raw_div_ControlMedian";
        Norm_Log2Headline  += Norm_HeadParts[Norm_h] + " log2_raw_div_ControlMedian";
    }
}


// ------------------------------------------------------------
// 3) Re-ingest stat files with path provenance
//
// This is necessary because FinalDataArray no longer contains
// the original file path / experimental parent folder.
//
// Critical parent-folder logic:
//
// root/T1/Control/VidsMovement.../diffMov/.../file.txt
// root/T1/H2O2 01/VidsMovement.../diffMov/.../file.txt
// root/T1/H2O2 02/VidsMovement.../diffMov/.../file.txt
//
// must all become:
//
// parentKey = root/T1/
//
// Therefore:
// 1) remove generated MYOCYTER result folders from the path
//    e.g. VidsMovement..., diffMov, dataplots
// 2) get the biological sample/treatment folder
//    e.g. root/T1/Control/
// 3) use its direct parent as experimental parent
//    e.g. root/T1/
// ------------------------------------------------------------

Norm_RawDataArray = newArray();
Norm_RowParents   = newArray();

Norm_ParentKeys    = newArray();
Norm_ParentDisplay = newArray();

Norm_WarningsText = "Warning_Type\tParent_Folder\tParameter\tDetails\n";

Norm_WarnShortRows = 0;
Norm_WarnBadRaw = 0;
Norm_WarnNoMedianCells = 0;
Norm_WarnLogNonPositive = 0;

for (Norm_i = 0; Norm_i < nFiles; Norm_i++) {

    Norm_group = assignments[Norm_i];
    if (Norm_group == "Exclude") continue;

    Norm_filePath = replace(FoundStatFiles[Norm_i], "\\", "/");

    // --------------------------------------------------------
    // First get the directory containing the stats file
    // --------------------------------------------------------

    Norm_lastSlash = -1;
    for (Norm_c = 0; Norm_c < lengthOf(Norm_filePath); Norm_c++) {
        if (substring(Norm_filePath, Norm_c, Norm_c + 1) == "/") {
            Norm_lastSlash = Norm_c;
        }
    }

    if (Norm_lastSlash >= 0) {
        Norm_fileDir = substring(Norm_filePath, 0, Norm_lastSlash + 1);
    } else {
        Norm_fileDir = Norm_rootDir;
    }

    // --------------------------------------------------------
    // Cut away generated MYOCYTER result folders.
    // Most reliable marker: "/VidsMovement"
    // Fallback markers: "/diffMov", "/dataplots"
    // --------------------------------------------------------

    Norm_cut = indexOf(Norm_filePath, "/VidsMovement");

    if (Norm_cut < 0) Norm_cut = indexOf(Norm_filePath, "/diffMov");
    if (Norm_cut < 0) Norm_cut = indexOf(Norm_filePath, "/dataplots");

    if (Norm_cut >= 0) {
        // root/T1/Control/VidsMovement... -> root/T1/Control/
        Norm_sampleDir = substring(Norm_filePath, 0, Norm_cut + 1);
    } else {
        // Fallback: use the directory of the stats file
        Norm_sampleDir = Norm_fileDir;
    }

    if (!endsWith(Norm_sampleDir, "/")) Norm_sampleDir += "/";

    // --------------------------------------------------------
    // If videos were inside an additional folder named AVI/Videos,
    // step one level up to the treatment/sample folder.
    //
    // root/T1/Control/AVI/VidsMovement... -> root/T1/Control/
    // --------------------------------------------------------

    Norm_sampleNoSlash = Norm_sampleDir;
    if (endsWith(Norm_sampleNoSlash, "/")) {
        Norm_sampleNoSlash = substring(Norm_sampleNoSlash, 0, lengthOf(Norm_sampleNoSlash) - 1);
    }

    Norm_lastSlashSample = -1;
    for (Norm_c3 = 0; Norm_c3 < lengthOf(Norm_sampleNoSlash); Norm_c3++) {
        if (substring(Norm_sampleNoSlash, Norm_c3, Norm_c3 + 1) == "/") {
            Norm_lastSlashSample = Norm_c3;
        }
    }

    Norm_lastFolderName = "";
    if (Norm_lastSlashSample >= 0) {
        Norm_lastFolderName = substring(Norm_sampleNoSlash, Norm_lastSlashSample + 1, lengthOf(Norm_sampleNoSlash));
    }

    Norm_isVideoFolder = 0;
    if (Norm_lastFolderName == "AVI") Norm_isVideoFolder = 1;
    if (Norm_lastFolderName == "avi") Norm_isVideoFolder = 1;
    if (Norm_lastFolderName == "Video") Norm_isVideoFolder = 1;
    if (Norm_lastFolderName == "video") Norm_isVideoFolder = 1;
    if (Norm_lastFolderName == "Videos") Norm_isVideoFolder = 1;
    if (Norm_lastFolderName == "videos") Norm_isVideoFolder = 1;

    if (Norm_isVideoFolder == 1) {
        if (Norm_lastSlashSample >= 0) {
            Norm_sampleDir = substring(Norm_sampleNoSlash, 0, Norm_lastSlashSample + 1);
        }
    }

    // --------------------------------------------------------
    // Now get the direct parent of the biological sample/treatment folder.
    // root/T1/Control/ -> root/T1/
    // --------------------------------------------------------

    Norm_sampleNoSlash = Norm_sampleDir;
    if (endsWith(Norm_sampleNoSlash, "/")) {
        Norm_sampleNoSlash = substring(Norm_sampleNoSlash, 0, lengthOf(Norm_sampleNoSlash) - 1);
    }

    Norm_lastSlashParent = -1;
    for (Norm_c4 = 0; Norm_c4 < lengthOf(Norm_sampleNoSlash); Norm_c4++) {
        if (substring(Norm_sampleNoSlash, Norm_c4, Norm_c4 + 1) == "/") {
            Norm_lastSlashParent = Norm_c4;
        }
    }

    if (Norm_sampleDir == Norm_rootDir) {
        Norm_parentKey = Norm_rootDir;
    } else {
        if (Norm_lastSlashParent >= 0) {
            Norm_parentKey = substring(Norm_sampleNoSlash, 0, Norm_lastSlashParent + 1);
        } else {
            Norm_parentKey = Norm_rootDir;
        }
    }

    // Safety catch: do not go above selected root directory
    if (indexOf(Norm_sampleDir, Norm_rootDir) == 0 && indexOf(Norm_parentKey, Norm_rootDir) != 0) {
        Norm_parentKey = Norm_rootDir;
    }

    if (!endsWith(Norm_parentKey, "/")) Norm_parentKey += "/";

    // Short display path relative to root
    if (indexOf(Norm_parentKey, Norm_rootDir) == 0) {
        Norm_parentDisp = substring(Norm_parentKey, lengthOf(Norm_rootDir), lengthOf(Norm_parentKey));
        if (Norm_parentDisp == "") Norm_parentDisp = "[root]";
    } else {
        Norm_parentDisp = Norm_parentKey;
    }

    // Add parent folder to unique list if not present
    Norm_parentExists = 0;
    for (Norm_pp = 0; Norm_pp < Norm_ParentKeys.length; Norm_pp++) {
        if (Norm_ParentKeys[Norm_pp] == Norm_parentKey) {
            Norm_parentExists = 1;
        }
    }

    if (Norm_parentExists == 0) {
        Norm_ParentKeys    = Array.concat(Norm_ParentKeys, Norm_parentKey);
        Norm_ParentDisplay = Array.concat(Norm_ParentDisplay, Norm_parentDisp);
    }

    // --------------------------------------------------------
    // Read and parse file
    // --------------------------------------------------------

    Norm_DatenString = File.openAsString(Norm_filePath);
    Norm_DatenString = replace(Norm_DatenString, "\r\n", "\n");
    Norm_DatenString = replace(Norm_DatenString, "\r", "\n");
    Norm_DatenSet = split(Norm_DatenString, "\n");

    if (Norm_DatenSet.length < 4) {
        Norm_WarningsText += "FILE_TOO_SHORT\t" + Norm_parentDisp + "\tALL\t" + Norm_filePath + "\n";
        continue;
    }

    Norm_FirstLineParts = split(Norm_DatenSet[0], "\t");
    Norm_probeID = Norm_FirstLineParts[0];

    // Process actual data rows
    for (Norm_row = 3; Norm_row < Norm_DatenSet.length; Norm_row++) {

        Norm_parts = split(Norm_DatenSet[Norm_row], "\t");

        if (Norm_parts.length > 20 && lengthOf(Norm_parts[0]) > 2) {

            Norm_fullRow = Norm_probeID + "\t" + Norm_group + "\t" + Norm_DatenSet[Norm_row];

            Norm_DatenArray = split(Norm_fullRow, "\t\n\r");
            Norm_DatenArray = Array.deleteValue(Norm_DatenArray, "");
            Norm_DatenArray = Array.deleteValue(Norm_DatenArray, " ");

            // Highest extraction index is 62
            if (Norm_DatenArray.length > 62) {

                // ----------------------------------------------------
// Build extracted row AND validate it before inclusion.
//
// Rule:
// If ANY numeric value required for normalization is NaN,
// empty, Infinity, -Infinity, or not parseable as number,
// the WHOLE cell row is excluded from normalization.
//
// Columns in extracted row:
// 0 Probe_ID              text
// 1 Group_Assignment     text
// 2 Filenames            text
// 3 Beats counted [N]    numeric but NOT normalized
// 4... mean parameters   numeric and normalized
// ----------------------------------------------------

Norm_TempString = "";
Norm_RowIsValid = 1;
Norm_BadToken = "";
Norm_BadColumn = "";

for (Norm_att = 0; Norm_att < ExtraktionsArray.length; Norm_att++) {

    Norm_token = "";

    if (Norm_DatenArray.length > ExtraktionsArray[Norm_att]) {
        Norm_token = Norm_DatenArray[ExtraktionsArray[Norm_att]];
    }

    if (Norm_att > 0) Norm_TempString += "\t";
    Norm_TempString += Norm_token;

    // Validate all numeric columns from Beats counted [N] onward.
    // Metadata columns 0-2 are allowed to be text.
    if (Norm_att >= 3) {

        Norm_testToken = Norm_token;

        if (Norm_testToken == "") Norm_RowIsValid = 0;
        if (Norm_testToken == " ") Norm_RowIsValid = 0;
        if (Norm_testToken == "NaN") Norm_RowIsValid = 0;
        if (Norm_testToken == "nan") Norm_RowIsValid = 0;
        if (Norm_testToken == "N/A") Norm_RowIsValid = 0;
        if (Norm_testToken == "NA") Norm_RowIsValid = 0;
        if (Norm_testToken == "Infinity") Norm_RowIsValid = 0;
        if (Norm_testToken == "-Infinity") Norm_RowIsValid = 0;
        if (Norm_testToken == "Inf") Norm_RowIsValid = 0;
        if (Norm_testToken == "-Inf") Norm_RowIsValid = 0;

        Norm_testVal = parseFloat(Norm_testToken);

        if (isNaN(Norm_testVal)) {
            Norm_RowIsValid = 0;
        }

        if (Norm_RowIsValid == 0 && Norm_BadToken == "") {
            Norm_BadToken = Norm_testToken;
            Norm_BadColumn = "" + Norm_att;
        }
    }
}

if (Norm_RowIsValid == 1) {

    Norm_RawDataArray = Array.concat(Norm_RawDataArray, Norm_TempString);
    Norm_RowParents   = Array.concat(Norm_RowParents, Norm_parentKey);

} else {

    Norm_WarnBadRaw++;
    Norm_WarningsText += "ROW_EXCLUDED_BAD_NUMERIC_VALUE\t" + Norm_parentDisp + "\tColumn_" + Norm_BadColumn + "\tBad token: " + Norm_BadToken + " | Row: " + Norm_DatenSet[Norm_row] + "\n";
}

            } else {
                Norm_WarnShortRows++;
                Norm_WarningsText += "ROW_TOO_SHORT\t" + Norm_parentDisp + "\tALL\t" + Norm_DatenSet[Norm_row] + "\n";
            }
        }
    }
}


// ------------------------------------------------------------
// 4) Calculate control medians per parent folder and parameter
// ------------------------------------------------------------

Norm_nRows    = Norm_RawDataArray.length;
Norm_nParents = Norm_ParentKeys.length;

Norm_Medians   = newArray(Norm_nParents * Norm_nParams);
Norm_MedianOK  = newArray(Norm_nParents * Norm_nParams);
Norm_ControlNs = newArray(Norm_nParents * Norm_nParams);

Norm_ReferenceText = "Parent_Folder\tControl_Group\tParameter\tN_Control_Cells\tControl_Median\tStatus\n";

if (Norm_nRows == 0) {

    Norm_WarningsText += "NO_ROWS\tALL\tALL\tNo rows available for normalization.\n";
    print("NORMALIZATION skipped: no rows available.");

} else {

    for (Norm_pp = 0; Norm_pp < Norm_nParents; Norm_pp++) {

        Norm_parentKey2  = Norm_ParentKeys[Norm_pp];
        Norm_parentDisp2 = Norm_ParentDisplay[Norm_pp];

        for (Norm_param = 0; Norm_param < Norm_nParams; Norm_param++) {

            Norm_col = Norm_firstParamCol + Norm_param;
            Norm_vals = newArray();

            for (Norm_r = 0; Norm_r < Norm_nRows; Norm_r++) {

                if (Norm_RowParents[Norm_r] == Norm_parentKey2) {

                    Norm_cells = split(Norm_RawDataArray[Norm_r], "\t");

                    if (Norm_cells.length > Norm_col) {

                        Norm_grp = Norm_cells[1];

                        if (Norm_grp == Norm_ControlGroup) {

                            Norm_val = parseFloat(Norm_cells[Norm_col]);

                            if (!isNaN(Norm_val)) {
                                Norm_vals = Array.concat(Norm_vals, Norm_val);
                            }
                        }
                    }
                }
            }

            Norm_flatIdx = Norm_pp * Norm_nParams + Norm_param;
            Norm_ControlNs[Norm_flatIdx] = Norm_vals.length;

            if (Norm_vals.length > 0) {

                Array.sort(Norm_vals);

                Norm_N = Norm_vals.length;
                Norm_mid = floor(Norm_N / 2);

                // even number of values
                if (2 * Norm_mid == Norm_N) {
                    Norm_median = (Norm_vals[Norm_mid - 1] + Norm_vals[Norm_mid]) / 2;
                }

                // odd number of values
                if (2 * Norm_mid != Norm_N) {
                    Norm_median = Norm_vals[Norm_mid];
                }

                Norm_Medians[Norm_flatIdx] = Norm_median;

                if (Norm_median > 0) {
                    Norm_MedianOK[Norm_flatIdx] = 1;
                    Norm_status = "OK";
                    Norm_medianText = "" + Norm_median;
                } else {
                    Norm_MedianOK[Norm_flatIdx] = 0;
                    Norm_status = "INVALID_MEDIAN_LE_ZERO";
                    Norm_medianText = "" + Norm_median;
                    Norm_WarningsText += "INVALID_CONTROL_MEDIAN\t" + Norm_parentDisp2 + "\t" + Norm_HeadParts[Norm_col] + "\tMedian <= 0\n";
                }

            } else {

                Norm_MedianOK[Norm_flatIdx] = 0;
                Norm_status = "NO_VALID_CONTROL_VALUES";
                Norm_medianText = "";

                Norm_WarningsText += "NO_CONTROL_MEDIAN\t" + Norm_parentDisp2 + "\t" + Norm_HeadParts[Norm_col] + "\tNo valid numeric values in selected control group\n";
            }

            Norm_ReferenceText += Norm_parentDisp2 + "\t" + Norm_ControlGroup + "\t" + Norm_HeadParts[Norm_col] + "\t" + Norm_ControlNs[Norm_flatIdx] + "\t" + Norm_medianText + "\t" + Norm_status + "\n";
        }
    }


    // --------------------------------------------------------
    // 5) Generate ratio-normalized and log2-normalized arrays in memory
    //    These arrays are NOT saved as LONG files.
    //    They are only used to create BLOCK-WIDE outputs.
    // --------------------------------------------------------

    Norm_RatioDataArray = newArray(Norm_nRows);
    Norm_Log2DataArray  = newArray(Norm_nRows);

    Norm_LogBase2 = log(2);

    for (Norm_r = 0; Norm_r < Norm_nRows; Norm_r++) {

        Norm_cells = split(Norm_RawDataArray[Norm_r], "\t");
        Norm_parentKeyRow = Norm_RowParents[Norm_r];

        // Find parent index
        Norm_pIdx = -1;
        for (Norm_pp = 0; Norm_pp < Norm_nParents; Norm_pp++) {
            if (Norm_ParentKeys[Norm_pp] == Norm_parentKeyRow) {
                Norm_pIdx = Norm_pp;
            }
        }

        // Copy metadata columns unchanged
        Norm_RatioRow = "";
        Norm_Log2Row  = "";

        for (Norm_meta = 0; Norm_meta < Norm_firstParamCol; Norm_meta++) {

            Norm_metaVal = "";
            if (Norm_cells.length > Norm_meta) {
                Norm_metaVal = Norm_cells[Norm_meta];
            }

            if (Norm_meta > 0) {
                Norm_RatioRow += "\t";
                Norm_Log2Row  += "\t";
            }

            Norm_RatioRow += Norm_metaVal;
            Norm_Log2Row  += Norm_metaVal;
        }

        // Normalize mean parameter columns only
        for (Norm_param = 0; Norm_param < Norm_nParams; Norm_param++) {

            Norm_col = Norm_firstParamCol + Norm_param;

            Norm_ratioText = "";
            Norm_log2Text  = "";

            if (Norm_cells.length > Norm_col) {

                Norm_rawVal = parseFloat(Norm_cells[Norm_col]);

                if (!isNaN(Norm_rawVal)) {

                    if (Norm_pIdx >= 0) {

                        Norm_flatIdx = Norm_pIdx * Norm_nParams + Norm_param;

                        if (Norm_MedianOK[Norm_flatIdx] == 1) {

                            Norm_med = Norm_Medians[Norm_flatIdx];

                            Norm_ratio = Norm_rawVal / Norm_med;
                            Norm_ratioText = d2s(Norm_ratio, 8);

                            if (Norm_ratio > 0) {
                                Norm_log2 = log(Norm_ratio) / Norm_LogBase2;
                                Norm_log2Text = d2s(Norm_log2, 8);
                            } else {
                                Norm_log2Text = "";
                                Norm_WarnLogNonPositive++;
                            }

                        } else {
                            Norm_ratioText = "";
                            Norm_log2Text = "";
                            Norm_WarnNoMedianCells++;
                        }

                    } else {
                        Norm_ratioText = "";
                        Norm_log2Text = "";
                        Norm_WarnNoMedianCells++;
                    }

                } else {
                    Norm_ratioText = "";
                    Norm_log2Text = "";
                    Norm_WarnBadRaw++;
                }

            } else {
                Norm_ratioText = "";
                Norm_log2Text = "";
                Norm_WarnBadRaw++;
            }

            Norm_RatioRow += "\t" + Norm_ratioText;
            Norm_Log2Row  += "\t" + Norm_log2Text;
        }

        Norm_RatioDataArray[Norm_r] = Norm_RatioRow;
        Norm_Log2DataArray[Norm_r]  = Norm_Log2Row;
    }


    // --------------------------------------------------------
    // 6) Save reference table
    // --------------------------------------------------------

    Norm_ReferenceFileBase = "Normalization_REFERENCES_ControlMedian_" + Norm_DateStamp;

    File.saveString(Norm_ReferenceText, Norm_outDir + Norm_ReferenceFileBase + " (ENG).txt");
    File.saveString(replace(Norm_ReferenceText, ".", ","), Norm_outDir + Norm_ReferenceFileBase + " (GER).txt");


    // --------------------------------------------------------
    // 7) Create BLOCK-WIDE outputs for ratio and log2 data
    //
    // Layout:
    // Experiment_Parent_Folder | Row_in_Parent |
    // Control metadata + all normalized Control parameters |
    // EMPTY separator column |
    // Treated group 1 metadata + all normalized parameters |
    // EMPTY separator column |
    // Treated group 2 metadata + all normalized parameters | ...
    //
    // This preserves the experimental/tier parent folders.
    // It also keeps Probe_ID, so folders such as Control, H2O2 01,
    // H2O2 02 remain visible in the WIDE table.
    // --------------------------------------------------------

    for (Norm_Mode = 0; Norm_Mode < 2; Norm_Mode++) {

        if (Norm_Mode == 0) {
            Norm_CurrentRows = Norm_RatioDataArray;
            Norm_CurrentHeadline = Norm_RatioHeadline;
            Norm_OutputFileBase = "Normalized_RATIO_raw_div_ControlMedian_BLOCKWIDE_ControlLeft_TreatedRight_" + Norm_DateStamp;
        }

        if (Norm_Mode == 1) {
            Norm_CurrentRows = Norm_Log2DataArray;
            Norm_CurrentHeadline = Norm_Log2Headline;
            Norm_OutputFileBase = "Normalized_LOG2_raw_div_ControlMedian_BLOCKWIDE_ControlLeft_TreatedRight_" + Norm_DateStamp;
        }

        Norm_WideHeadParts = split(Norm_CurrentHeadline, "\t");
        Norm_Wide_nCols = Norm_WideHeadParts.length;

        // --------------------------------------------------------
        // 7.1 Build header
        // --------------------------------------------------------

        Norm_WideText = "";
        Norm_WideText += "Experiment_Parent_Folder\tRow_in_Parent";

        // Control block: metadata
        Norm_WideText += "\t" + Norm_ControlGroup + "__Probe_ID";
        Norm_WideText += "\t" + Norm_ControlGroup + "__Filename";

        // Control block: values, starting with Beats counted [N]
        for (Norm_col = 3; Norm_col < Norm_Wide_nCols; Norm_col++) {

            Norm_WideColName = Norm_WideHeadParts[Norm_col];
            Norm_WideColName = replace(Norm_WideColName, "\r", " ");
            Norm_WideColName = replace(Norm_WideColName, "\n", " ");
            Norm_WideColName = replace(Norm_WideColName, "\t", " ");

            Norm_WideText += "\t" + Norm_WideColName + "__" + Norm_ControlGroup;
        }

        // Empty separator column between Control and treated cells
        Norm_WideText += "\t";

        // Treated/non-control group blocks
        for (Norm_g = 0; Norm_g < nGroups; Norm_g++) {

            if (groupNames[Norm_g] != Norm_ControlGroup) {

                Norm_WideText += "\t" + groupNames[Norm_g] + "__Probe_ID";
                Norm_WideText += "\t" + groupNames[Norm_g] + "__Filename";

                for (Norm_col = 3; Norm_col < Norm_Wide_nCols; Norm_col++) {

                    Norm_WideColName = Norm_WideHeadParts[Norm_col];
                    Norm_WideColName = replace(Norm_WideColName, "\r", " ");
                    Norm_WideColName = replace(Norm_WideColName, "\n", " ");
                    Norm_WideColName = replace(Norm_WideColName, "\t", " ");

                    Norm_WideText += "\t" + Norm_WideColName + "__" + groupNames[Norm_g];
                }

                // Empty separator column between treated groups
                Norm_WideText += "\t";
            }
        }

        Norm_WideText += "\n";


        // --------------------------------------------------------
        // 7.2 Write data parent-folder by parent-folder
        // --------------------------------------------------------

        for (Norm_pp = 0; Norm_pp < Norm_nParents; Norm_pp++) {

            Norm_parentKeyNow  = Norm_ParentKeys[Norm_pp];
            Norm_parentDispNow = Norm_ParentDisplay[Norm_pp];

            // Count Control rows for this parent
            Norm_controlCount = 0;

            for (Norm_i2 = 0; Norm_i2 < Norm_CurrentRows.length; Norm_i2++) {

                if (Norm_RowParents[Norm_i2] == Norm_parentKeyNow) {

                    Norm_tmpCells = split(Norm_CurrentRows[Norm_i2], "\t");

                    if (Norm_tmpCells.length > 1) {
                        if (Norm_tmpCells[1] == Norm_ControlGroup) {
                            Norm_controlCount++;
                        }
                    }
                }
            }

            // Count maximum rows among treated groups for this parent
            Norm_parentMaxN = Norm_controlCount;

            for (Norm_g = 0; Norm_g < nGroups; Norm_g++) {

                if (groupNames[Norm_g] != Norm_ControlGroup) {

                    Norm_groupCount = 0;

                    for (Norm_i2 = 0; Norm_i2 < Norm_CurrentRows.length; Norm_i2++) {

                        if (Norm_RowParents[Norm_i2] == Norm_parentKeyNow) {

                            Norm_tmpCells = split(Norm_CurrentRows[Norm_i2], "\t");

                            if (Norm_tmpCells.length > 1) {
                                if (Norm_tmpCells[1] == groupNames[Norm_g]) {
                                    Norm_groupCount++;
                                }
                            }
                        }
                    }

                    if (Norm_groupCount > Norm_parentMaxN) {
                        Norm_parentMaxN = Norm_groupCount;
                    }
                }
            }

            // If a parent has no rows, skip
            if (Norm_parentMaxN == 0) {
                Norm_WarningsText += "PARENT_SKIPPED_NO_ROWS\t" + Norm_parentDispNow + "\tALL\tNo rows in this parent folder\n";
                continue;
            }

            // ----------------------------------------------------
            // Write rows for this parent
            // ----------------------------------------------------

            for (Norm_rep = 0; Norm_rep < Norm_parentMaxN; Norm_rep++) {

                Norm_WideLine = "";
                Norm_WideLine += Norm_parentDispNow + "\t" + (Norm_rep + 1);

                // ------------------------------------------------
                // Control block: find rep-th Control row in this parent
                // ------------------------------------------------

                Norm_foundRow = "";
                Norm_foundCount = 0;

                for (Norm_i2 = 0; Norm_i2 < Norm_CurrentRows.length; Norm_i2++) {

                    if (Norm_RowParents[Norm_i2] == Norm_parentKeyNow) {

                        Norm_tmpCells = split(Norm_CurrentRows[Norm_i2], "\t");

                        if (Norm_tmpCells.length > 1) {

                            if (Norm_tmpCells[1] == Norm_ControlGroup) {

                                if (Norm_foundCount == Norm_rep && Norm_foundRow == "") {
                                    Norm_foundRow = Norm_CurrentRows[Norm_i2];
                                }

                                Norm_foundCount++;
                            }
                        }
                    }
                }

                if (Norm_foundRow != "") {

                    Norm_srcCells = split(Norm_foundRow, "\t");

                    // Probe_ID and Filename
                    if (Norm_srcCells.length > 0) Norm_WideLine += "\t" + Norm_srcCells[0];
                    else Norm_WideLine += "\t";

                    if (Norm_srcCells.length > 2) Norm_WideLine += "\t" + Norm_srcCells[2];
                    else Norm_WideLine += "\t";

                    // Values: Beats counted [N] plus normalized parameters
                    for (Norm_col = 3; Norm_col < Norm_Wide_nCols; Norm_col++) {

                        Norm_valText = "";

                        if (Norm_srcCells.length > Norm_col) {
                            Norm_valText = Norm_srcCells[Norm_col];
                        }

                        if (Norm_valText == "NaN") Norm_valText = "";
                        if (Norm_valText == "Infinity") Norm_valText = "";
                        if (Norm_valText == "-Infinity") Norm_valText = "";

                        Norm_WideLine += "\t" + Norm_valText;
                    }

                } else {

                    // Empty Control block
                    Norm_WideLine += "\t\t"; // Probe_ID + Filename

                    for (Norm_col = 3; Norm_col < Norm_Wide_nCols; Norm_col++) {
                        Norm_WideLine += "\t";
                    }
                }

                // Empty separator column
                Norm_WideLine += "\t";


                // ------------------------------------------------
                // Treated/non-control group blocks
                // ------------------------------------------------

                for (Norm_g = 0; Norm_g < nGroups; Norm_g++) {

                    if (groupNames[Norm_g] != Norm_ControlGroup) {

                        Norm_foundRow = "";
                        Norm_foundCount = 0;

                        for (Norm_i2 = 0; Norm_i2 < Norm_CurrentRows.length; Norm_i2++) {

                            if (Norm_RowParents[Norm_i2] == Norm_parentKeyNow) {

                                Norm_tmpCells = split(Norm_CurrentRows[Norm_i2], "\t");

                                if (Norm_tmpCells.length > 1) {

                                    if (Norm_tmpCells[1] == groupNames[Norm_g]) {

                                        if (Norm_foundCount == Norm_rep && Norm_foundRow == "") {
                                            Norm_foundRow = Norm_CurrentRows[Norm_i2];
                                        }

                                        Norm_foundCount++;
                                    }
                                }
                            }
                        }

                        if (Norm_foundRow != "") {

                            Norm_srcCells = split(Norm_foundRow, "\t");

                            // Probe_ID and Filename
                            if (Norm_srcCells.length > 0) Norm_WideLine += "\t" + Norm_srcCells[0];
                            else Norm_WideLine += "\t";

                            if (Norm_srcCells.length > 2) Norm_WideLine += "\t" + Norm_srcCells[2];
                            else Norm_WideLine += "\t";

                            // Values: Beats counted [N] plus normalized parameters
                            for (Norm_col = 3; Norm_col < Norm_Wide_nCols; Norm_col++) {

                                Norm_valText = "";

                                if (Norm_srcCells.length > Norm_col) {
                                    Norm_valText = Norm_srcCells[Norm_col];
                                }

                                if (Norm_valText == "NaN") Norm_valText = "";
                                if (Norm_valText == "Infinity") Norm_valText = "";
                                if (Norm_valText == "-Infinity") Norm_valText = "";

                                Norm_WideLine += "\t" + Norm_valText;
                            }

                        } else {

                            // Empty treated group block
                            Norm_WideLine += "\t\t"; // Probe_ID + Filename

                            for (Norm_col = 3; Norm_col < Norm_Wide_nCols; Norm_col++) {
                                Norm_WideLine += "\t";
                            }
                        }

                        // Empty separator column between treated groups
                        Norm_WideLine += "\t";
                    }
                }

                Norm_WideText += Norm_WideLine + "\n";
            }

            // Empty line after each parent folder block for readability
            Norm_WideText += "\n";
        }


        // --------------------------------------------------------
        // 7.3 Save BLOCK-WIDE output
        // --------------------------------------------------------

        File.saveString(Norm_WideText, Norm_outDir + Norm_OutputFileBase + " (ENG).txt");
        File.saveString(replace(Norm_WideText, ".", ","), Norm_outDir + Norm_OutputFileBase + " (GER).txt");
    }


    // --------------------------------------------------------
    // 8) Save warnings and print summary
    // --------------------------------------------------------

    Norm_WarningsText += "SUMMARY\tALL\tRows_processed\t" + Norm_nRows + "\n";
    Norm_WarningsText += "SUMMARY\tALL\tParent_folders_detected\t" + Norm_nParents + "\n";
    Norm_WarningsText += "SUMMARY\tALL\tShort_or_malformed_rows\t" + Norm_WarnShortRows + "\n";
    Norm_WarningsText += "SUMMARY\tALL\tBad_or_missing_raw_values\t" + Norm_WarnBadRaw + "\n";
    Norm_WarningsText += "SUMMARY\tALL\tCells_without_valid_control_median\t" + Norm_WarnNoMedianCells + "\n";
    Norm_WarningsText += "SUMMARY\tALL\tLog2_values_not_defined_ratio_le_zero\t" + Norm_WarnLogNonPositive + "\n";
    Norm_WarningsText += "SUMMARY\tALL\tSelected_control_group\t" + Norm_ControlGroup + "\n";

    Norm_WarningsFileBase = "Normalization_WARNINGS_ControlMedian_" + Norm_DateStamp;

    File.saveString(Norm_WarningsText, Norm_outDir + Norm_WarningsFileBase + " (ENG).txt");
    File.saveString(replace(Norm_WarningsText, ".", ","), Norm_outDir + Norm_WarningsFileBase + " (GER).txt");

    print("--- BLOCK-WIDE normalization to control median finished ---");
    print("Reference group: " + Norm_ControlGroup);
    print("Rows normalized: " + Norm_nRows);
    print("Parent folders detected: " + Norm_nParents);
    print("Output path: " + Norm_outDir);
}



// *********************** Normalisierung ENDE ***********************************





// Und nun einmal alles als WIDE exportieren

// ============================================================
// ADD-ON (ImageJ Macro SAFE): SINGLE WIDE FILE (ALL parameters × ALL groups)
// - NO arrays-of-arrays (ImageJ limitation)
// - Flat storage: GroupRowsFlat[startIndex[g] + r] = rowString
// - Output columns: <ParamName>__<GroupName>
// - Pads unequal N with blanks
// Uses: FinalDataHeadline, FinalDataArray, groupNames, nGroups, outDir, fileNameBase
// ============================================================

// local safe output dir (do not touch your existing outDir variable)
outDir2 = replace(outDir, "\\", "/");
if (!endsWith(outDir2, "/")) outDir2 += "/";

// headline split
Wide_HeadParts = split(FinalDataHeadline, "\t");
Wide_nCols = lengthOf(Wide_HeadParts);

// choose first parameter column (0 Probe_ID, 1 Group_Assignment, 2 Filenames, 3 Beats counted...)
Wide_firstValueCol = 3; // set to 4 if you want to skip "Beats counted [N]"

// ------------------------------------------------------------
// 1) Count rows per group
Wide_GroupCounts = newArray(nGroups);
for (g = 0; g < nGroups; g++) Wide_GroupCounts[g] = 0;

for (i = 0; i < lengthOf(FinalDataArray); i++) {
    Wide_rowStr = FinalDataArray[i];
    Wide_cells  = split(Wide_rowStr, "\t");
    Wide_grp    = Wide_cells[1]; // Group_Assignment

    Wide_gIdx = -1;
    for (gg = 0; gg < nGroups; gg++) {
        if (groupNames[gg] == Wide_grp) { Wide_gIdx = gg; break; }
    }
    if (Wide_gIdx >= 0) Wide_GroupCounts[Wide_gIdx]++;
}

// ------------------------------------------------------------
// 2) Build start indices into ONE flat array & compute maxN / totalN
Wide_StartIndex = newArray(nGroups);
Wide_FillPos    = newArray(nGroups);

Wide_totalN = 0;
Wide_maxN   = 0;

for (g = 0; g < nGroups; g++) {
    Wide_StartIndex[g] = Wide_totalN;     // start offset for group g
    Wide_FillPos[g]    = 0;               // will be used while filling
    Wide_totalN        = Wide_totalN + Wide_GroupCounts[g];
    if (Wide_GroupCounts[g] > Wide_maxN) Wide_maxN = Wide_GroupCounts[g];
}

if (Wide_totalN == 0) {
    print("WIDE export skipped: no rows found in FinalDataArray.");
} else {

    // Flat storage for row strings (size = sum of group counts)
    Wide_GroupRowsFlat = newArray(Wide_totalN);
    for (k = 0; k < Wide_totalN; k++) Wide_GroupRowsFlat[k] = ""; // avoid NaN

    // ------------------------------------------------------------
    // 3) Fill flat storage: GroupRowsFlat[startIndex[g] + r] = rowString
    for (i = 0; i < lengthOf(FinalDataArray); i++) {
        Wide_rowStr = FinalDataArray[i];
        Wide_cells  = split(Wide_rowStr, "\t");
        Wide_grp    = Wide_cells[1];

        Wide_gIdx = -1;
        for (gg = 0; gg < nGroups; gg++) {
            if (groupNames[gg] == Wide_grp) { Wide_gIdx = gg; break; }
        }
        if (Wide_gIdx < 0) continue;

        pos = Wide_StartIndex[Wide_gIdx] + Wide_FillPos[Wide_gIdx];
        Wide_GroupRowsFlat[pos] = Wide_rowStr;
        Wide_FillPos[Wide_gIdx]++;
    }

    // ------------------------------------------------------------
    // 4) Build ONE big WIDE table: columns = (parameters × groups)
    Wide_All = "";

    // Header line: <ParamName>__<GroupName>
    for (col = Wide_firstValueCol; col < Wide_nCols; col++) {

        Wide_param = Wide_HeadParts[col];
        // keep readable, but remove line breaks/tabs
        Wide_param = replace(Wide_param, "\r", " ");
        Wide_param = replace(Wide_param, "\n", " ");
        Wide_param = replace(Wide_param, "\t", " ");

        for (g = 0; g < nGroups; g++) {
            Wide_All += Wide_param + "__" + groupNames[g];
            if (!(col == Wide_nCols-1 && g == nGroups-1)) Wide_All += "\t";
        }
    }
    Wide_All += "\n";

    // Data rows: r = replicate index within each group (0..maxN-1)
    for (rrep = 0; rrep < Wide_maxN; rrep++) {

        Wide_line = "";

        for (col = Wide_firstValueCol; col < Wide_nCols; col++) {
            for (g = 0; g < nGroups; g++) {

                Wide_v = "";

                if (rrep < Wide_GroupCounts[g]) {
                    idxFlat = Wide_StartIndex[g] + rrep;
                    Wide_rowStr = Wide_GroupRowsFlat[idxFlat];

                    Wide_cells = split(Wide_rowStr, "\t");
                    if (col < lengthOf(Wide_cells)) Wide_v = Wide_cells[col];

                    // clean tokens that break stats import
                    if (Wide_v == "NaN" || Wide_v == "Infinity" || Wide_v == "-Infinity") Wide_v = "";
                }

                Wide_line += Wide_v;
                if (!(col == Wide_nCols-1 && g == nGroups-1)) Wide_line += "\t";
            }
        }

        Wide_All += Wide_line + "\n";
    }

    // ------------------------------------------------------------
    // 5) Save ONE file (ENG + GER)
    File.saveString(Wide_All, outDir2 + fileNameBase + "_WIDE_ALLPARAMS (ENG).txt");
    File.saveString(replace(Wide_All, ".", ","), outDir2 + fileNameBase + "_WIDE_ALLPARAMS (GER).txt");

    print("--- SINGLE WIDE export finished ---");
    print("Groups: " + nGroups + " | Max N (padded): " + Wide_maxN);
    print("Saved: " + outDir2 + fileNameBase + "_WIDE_ALLPARAMS (ENG/GER).txt");
}


// Und nun die statistische Untersuchung (ANOVA)


// ============================================================
// STATISTICS ADD-ON (ImageJ Macro SAFE, no arrays-of-arrays)
// Append THIS block under your existing code.
// Input: LONG file produced by your macro: ANOVA_Ready_Data_... (ENG/GER).txt
// Output: STATS_ttest__... and/or STATS_anova__... (ENG + GER)
// Pairwise in output file: ONLY significant pairs (raw or adjusted)
// ============================================================

// ---- Run now? ----
Dialog.create("Next Step: Statistics");
Dialog.addCheckbox("Run statistics now (t-test / ANOVA)?", true);
Dialog.show();
if (!Dialog.getCheckbox()) exit("Finished without statistics.");

// ---- Choose LONG file (ENG or GER) ----
ST_path = File.openDialog("Choose LONG file: ANOVA_Ready_Data_... LONG (ENG).txt");
if (ST_path=="") exit("Aborted.");

// ---- Start ----
ST_runStatsWizard(ST_path);


// ============================================================
// MAIN
// ============================================================


    // ============================================================
    // NACH DER STATISTIK: Heatmaps + DifferenceMaps
    // ============================================================

// ============================================================
// FINAL: Heatmaps + DifferenceMaps + sichere Datenspeicherung
// - Heatmaps bleiben wie sie sind (OHNE "Max" in den Heatmaps)
// - TXT-Reports: enthalten ALLE HeatMap-Daten + zusätzlich DifferenceMap-Daten
// - RowLabels rechts sichtbar
// - Calibration Bar rechts/unten, NICHT über der Heatmap, +70px tiefer
// - TXT-Reports werden direkt mit File.saveString() geschrieben (nicht über Log) -> nie leer
// ============================================================


run("Colors...", "foreground=black background=black selection=yellow");
run("Set Measurements...", "area mean standard modal min centroid center perimeter bounding fit shape feret's integrated median skewness kurtosis area_fraction stack limit display redirect=None decimal=9");
run("Input/Output...", "jpeg=90 gif=-1 file=.txt use_file copy_column copy_row save_column save_row");

getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
MonthNames = newArray("Jan","Feb","Mar","Apr","May","Jun","Jul","Aug","Sep","Oct","Nov","Dec"); 

if (hour<10) {hours = "0"+hour;} else {hours=hour;}
if (minute<10) {minutes = "0"+minute;} else {minutes=minute;}
if (month<10) {months = "0"+(month+1);} else {months=month+1;}
if (dayOfMonth<10) {dayOfMonths = "0"+dayOfMonth;} else {dayOfMonths=dayOfMonth;}

// 2. Reuse already selected Root Folder
if (rootDir == "") exit("Aborted.");
rootDir = replace(rootDir, "\\", "/");
if (!endsWith(rootDir, "/")) rootDir += "/";

// 3. Stack und Ergebnis-Array initialisieren
stack = newArray(rootDir);
FinalList = newArray();


// 4. Iterativer Loop: alle Unterordner sammeln
idx = 0;
while (idx < stack.length) {
    current = stack[idx];
    if (!endsWith(current, "/")) current += "/";
    items = getFileList(current);
    for (i = 0; i < items.length; i++) {
        name = items[i];
        if (endsWith(name, "/")) {
            folder = replace(current + name, "\\", "/");
            FinalList = Array.concat(FinalList, folder);
            stack     = Array.concat(stack, folder);
        }
    }
    idx++;
}

// 5. Stats-Files finden
FoundStatFiles = newArray();
for (i = 0; i < FinalList.length; i++) {
    Candidates = getFileList(FinalList[i]);
    for (j = 0; j < Candidates.length; j++) {
        if (startsWith(Candidates[j], "Results Final Summary for Stats ") && endsWith(Candidates[j], " (ENG).txt")) {
            FileToOpen = FinalList[i] + Candidates[j];
            FoundStatFiles = Array.concat(FoundStatFiles, FileToOpen);
        }
    }
}

if (FoundStatFiles.length == 0) exit("Keine 'Results Final Summary for Stats ... (ENG).txt' Files gefunden.");

Array.sort(FoundStatFiles);

// Labels / Namen
RowLabels = newArray(FoundStatFiles.length);
ResultsFileNames = newArray(FoundStatFiles.length);

// Dauerhafte Arrays (Means/StdDevs pro File)
ContrThr10ArrayMean=newArray(); ContrThr10ArrayStdDev=newArray();
ContrThrUserArrayMean=newArray(); ContrThrUserArrayStdDev=newArray();
ContrThr50ArrayMean=newArray(); ContrThr50ArrayStdDev=newArray();
ContrThr90ArrayMean=newArray(); ContrThr90ArrayStdDev=newArray();
MaximumArrayMean=newArray(); MaximumArrayStdDev=newArray();      // NUR TEXTREPORT (keine Heatmap)
RelaxThr90ArrayMean=newArray(); RelaxThr90ArrayStdDev=newArray();
RelaxThr50ArrayMean=newArray(); RelaxThr50ArrayStdDev=newArray();
RelaxThrUserArrayMean=newArray(); RelaxThrUserArrayStdDev=newArray();
RelaxThr10ArrayMean=newArray(); RelaxThr10ArrayStdDev=newArray();
OverallArrayMean=newArray(); OverallArrayStdDev=newArray();

// globale Arrays (alle Werte aller Kontraktionen)
ContrThr10ArrayAllValues=newArray(); 
ContrThrUserArrayAllValues=newArray(); 
ContrThr50ArrayAllValues=newArray(); 
ContrThr90ArrayAllValues=newArray(); 
MaximumArrayAllValues=newArray();         // NUR TEXTREPORT (keine Heatmap)
RelaxThr90ArrayAllValues=newArray(); 
RelaxThr50ArrayAllValues=newArray(); 
RelaxThrUserArrayAllValues=newArray(); 
RelaxThr10ArrayAllValues=newArray();
OverallArrayAllValues=newArray();

HeatMin = 1e30;
HeatMax = -1e30;
DiffMax = 0;

// Heatmap-Spalten (OHNE Max!)
Type = newArray("C10\n[s]","CUser","C50","C90","R90","R50","RUser","R10","Ovr");

// ============================================================
// 6. Alle Files einlesen + Stats berechnen
// ============================================================
for (opn = 0; opn < FoundStatFiles.length; opn++) {

    // Arrays pro File
    ContrThr10Array=newArray(); ContrThrUserArray=newArray(); ContrThr50Array=newArray();
    ContrThr90Array=newArray(); MaximumArray=newArray(); RelaxThr90Array=newArray();    
    RelaxThr50Array=newArray(); RelaxThrUserArray=newArray(); RelaxThr10Array=newArray();
    OverallArray=newArray();

    DatenString = File.openAsString(FoundStatFiles[opn]);
    ResultsFileNames[opn] = FoundStatFiles[opn];

    // Label direkt als Rückgabewert (kein globaler Tmp-String mehr)
    RowLabels[opn] = makeRowLabel(FoundStatFiles[opn]);

    DatenSet = split(DatenString, "\r\n");

    for (i = 0; i < DatenSet.length; i++) {
        ZeilenParameter = split(DatenSet[i], "\t");
        if (ZeilenParameter.length >= 20 && ZeilenParameter[0] != "Frame") {

            ContrThr10Array=Array.concat(ContrThr10Array, ZeilenParameter[3]);
            ContrThrUserArray=Array.concat(ContrThrUserArray, ZeilenParameter[4]);
            ContrThr50Array=Array.concat(ContrThr50Array, ZeilenParameter[5]);
            ContrThr90Array=Array.concat(ContrThr90Array, ZeilenParameter[6]);
            MaximumArray=Array.concat(MaximumArray, ZeilenParameter[7]); // NUR Textreport
            RelaxThr90Array=Array.concat(RelaxThr90Array, ZeilenParameter[8]);
            RelaxThr50Array=Array.concat(RelaxThr50Array, ZeilenParameter[9]);
            RelaxThrUserArray=Array.concat(RelaxThrUserArray, ZeilenParameter[10]);
            RelaxThr10Array=Array.concat(RelaxThr10Array, ZeilenParameter[11]);

            ovr = parseFloat(ZeilenParameter[3]) + parseFloat(ZeilenParameter[4]) + parseFloat(ZeilenParameter[5]) + parseFloat(ZeilenParameter[6])
                + parseFloat(ZeilenParameter[8]) + parseFloat(ZeilenParameter[9]) + parseFloat(ZeilenParameter[10]) + parseFloat(ZeilenParameter[11]);
            OverallArray = Array.concat(OverallArray, ovr);
        }
    }

    // globale Arrays erweitern
    ContrThr10ArrayAllValues=Array.concat(ContrThr10ArrayAllValues, ContrThr10Array);
    ContrThrUserArrayAllValues=Array.concat(ContrThrUserArrayAllValues, ContrThrUserArray);
    ContrThr50ArrayAllValues=Array.concat(ContrThr50ArrayAllValues, ContrThr50Array);
    ContrThr90ArrayAllValues=Array.concat(ContrThr90ArrayAllValues, ContrThr90Array);
    MaximumArrayAllValues=Array.concat(MaximumArrayAllValues, MaximumArray); // NUR Textreport
    RelaxThr90ArrayAllValues=Array.concat(RelaxThr90ArrayAllValues, RelaxThr90Array);
    RelaxThr50ArrayAllValues=Array.concat(RelaxThr50ArrayAllValues, RelaxThr50Array);
    RelaxThrUserArrayAllValues=Array.concat(RelaxThrUserArrayAllValues, RelaxThrUserArray);
    RelaxThr10ArrayAllValues=Array.concat(RelaxThr10ArrayAllValues, RelaxThr10Array);
    OverallArrayAllValues=Array.concat(OverallArrayAllValues, OverallArray);

    // Stats pro File
    Array.getStatistics(ContrThr10Array, min, max, mean, stdDev);
    ContrThr10ArrayMean=Array.concat(ContrThr10ArrayMean, mean);
    ContrThr10ArrayStdDev=Array.concat(ContrThr10ArrayStdDev, stdDev);

    Array.getStatistics(ContrThrUserArray, min, max, mean, stdDev);
    ContrThrUserArrayMean=Array.concat(ContrThrUserArrayMean, mean);
    ContrThrUserArrayStdDev=Array.concat(ContrThrUserArrayStdDev, stdDev);

    Array.getStatistics(ContrThr50Array, min, max, mean, stdDev);
    ContrThr50ArrayMean=Array.concat(ContrThr50ArrayMean, mean);
    ContrThr50ArrayStdDev=Array.concat(ContrThr50ArrayStdDev, stdDev);

    Array.getStatistics(ContrThr90Array, min, max, mean, stdDev);
    ContrThr90ArrayMean=Array.concat(ContrThr90ArrayMean, mean);
    ContrThr90ArrayStdDev=Array.concat(ContrThr90ArrayStdDev, stdDev);

    Array.getStatistics(RelaxThr90Array, min, max, mean, stdDev);
    RelaxThr90ArrayMean=Array.concat(RelaxThr90ArrayMean, mean);
    RelaxThr90ArrayStdDev=Array.concat(RelaxThr90ArrayStdDev, stdDev);

    Array.getStatistics(RelaxThr50Array, min, max, mean, stdDev);
    RelaxThr50ArrayMean=Array.concat(RelaxThr50ArrayMean, mean);
    RelaxThr50ArrayStdDev=Array.concat(RelaxThr50ArrayStdDev, stdDev);

    Array.getStatistics(RelaxThrUserArray, min, max, mean, stdDev);
    RelaxThrUserArrayMean=Array.concat(RelaxThrUserArrayMean, mean);
    RelaxThrUserArrayStdDev=Array.concat(RelaxThrUserArrayStdDev, stdDev);

    Array.getStatistics(RelaxThr10Array, min, max, mean, stdDev);
    RelaxThr10ArrayMean=Array.concat(RelaxThr10ArrayMean, mean);
    RelaxThr10ArrayStdDev=Array.concat(RelaxThr10ArrayStdDev, stdDev);

    Array.getStatistics(OverallArray, min, max, mean, stdDev);
    OverallArrayMean=Array.concat(OverallArrayMean, mean);
    OverallArrayStdDev=Array.concat(OverallArrayStdDev, stdDev);

    Array.getStatistics(MaximumArray, min, max, mean, stdDev); // NUR Textreport
    MaximumArrayMean=Array.concat(MaximumArrayMean, mean);
    MaximumArrayStdDev=Array.concat(MaximumArrayStdDev, stdDev);
}

// robust HeatMin/HeatMax über alle Heatmap-Spalten (OHNE Max!)
HeatVals = Array.concat(ContrThr10ArrayMean, ContrThrUserArrayMean);
HeatVals = Array.concat(HeatVals, ContrThr50ArrayMean);
HeatVals = Array.concat(HeatVals, ContrThr90ArrayMean);
HeatVals = Array.concat(HeatVals, RelaxThr90ArrayMean);
HeatVals = Array.concat(HeatVals, RelaxThr50ArrayMean);
HeatVals = Array.concat(HeatVals, RelaxThrUserArrayMean);
HeatVals = Array.concat(HeatVals, RelaxThr10ArrayMean);
HeatVals = Array.concat(HeatVals, OverallArrayMean);
Array.getStatistics(HeatVals, HeatMin, HeatMax, tmpMean, tmpStd);
if (HeatMax <= HeatMin) exit("HeatMax<=HeatMin -> Heatmap Range kaputt!");

// globale Means/StdDevs (Max NUR fürs Textfile)
Array.getStatistics(ContrThr10ArrayAllValues, min, max, ContrThr10mean, ContrThr10stdDev);
Array.getStatistics(ContrThrUserArrayAllValues, min, max, ContrThrUsermean, ContrThrUserstdDev);
Array.getStatistics(ContrThr50ArrayAllValues, min, max, ContrThr50mean, ContrThr50stdDev);
Array.getStatistics(ContrThr90ArrayAllValues, min, max, ContrThr90mean, ContrThr90stdDev);
Array.getStatistics(MaximumArrayAllValues, min, max, Maximummean, MaximumstdDev); // NUR Textfile
Array.getStatistics(RelaxThr90ArrayAllValues, min, max, RelaxThr90mean, RelaxThr90stdDev);
Array.getStatistics(RelaxThr50ArrayAllValues, min, max, RelaxThr50mean, RelaxThr50stdDev);
Array.getStatistics(RelaxThrUserArrayAllValues, min, max, RelaxThrUsermean, RelaxThrUserstdDev);
Array.getStatistics(RelaxThr10ArrayAllValues, min, max, RelaxThr10mean, RelaxThr10stdDev);
Array.getStatistics(OverallArrayAllValues, min, max, Overallmean, OverallstdDev);

// ============================================================
// 7. Report-Strings bauen (statt Log) -> sichere Speicherung
//    + enthält HeatMap-AllSamples Daten (inkl. Max NUR hier)
//    + enthält zusätzlich DifferenceMap-Daten
// ============================================================
ReportENG = "";
ReportENG += "HEATMAP: All Samples (Means/StdDevs)\n";
ReportENG += "Filename\tType\tC10 [s]\tCUser [s]\tC50 [s]\tC90 [s]\tMax [au]\tR90 [s]\tR50 [s]\tRUser [s]\tR10 [s]\tOvr [s]\n";

for (prn = 0; prn < ResultsFileNames.length; prn++) {
    ReportENG += ResultsFileNames[prn] + "\tMean\t"
        + ContrThr10ArrayMean[prn] + "\t" + ContrThrUserArrayMean[prn] + "\t" + ContrThr50ArrayMean[prn] + "\t" + ContrThr90ArrayMean[prn] + "\t"
        + MaximumArrayMean[prn] + "\t"
        + RelaxThr90ArrayMean[prn] + "\t" + RelaxThr50ArrayMean[prn] + "\t" + RelaxThrUserArrayMean[prn] + "\t" + RelaxThr10ArrayMean[prn] + "\t"
        + OverallArrayMean[prn] + "\n";

    ReportENG += "\tStdDev\t"
        + ContrThr10ArrayStdDev[prn] + "\t" + ContrThrUserArrayStdDev[prn] + "\t" + ContrThr50ArrayStdDev[prn] + "\t" + ContrThr90ArrayStdDev[prn] + "\t"
        + MaximumArrayStdDev[prn] + "\t"
        + RelaxThr90ArrayStdDev[prn] + "\t" + RelaxThr50ArrayStdDev[prn] + "\t" + RelaxThrUserArrayStdDev[prn] + "\t" + RelaxThr10ArrayStdDev[prn] + "\t"
        + OverallArrayStdDev[prn] + "\n\n";
}

ReportENG += "\nGlobal-Mean\t\t" + ContrThr10mean + "\t" + ContrThrUsermean + "\t" + ContrThr50mean + "\t" + ContrThr90mean + "\t" + Maximummean + "\t"
          + RelaxThr90mean + "\t" + RelaxThr50mean + "\t" + RelaxThrUsermean + "\t" + RelaxThr10mean + "\t" + Overallmean + "\n";

ReportENG += "Global-StdDev\t\t" + ContrThr10stdDev + "\t" + ContrThrUserstdDev + "\t" + ContrThr50stdDev + "\t" + ContrThr90stdDev + "\t" + MaximumstdDev + "\t"
          + RelaxThr90stdDev + "\t" + RelaxThr50stdDev + "\t" + RelaxThrUserstdDev + "\t" + RelaxThr10stdDev + "\t" + OverallstdDev + "\n";

// --------- NEU: DifferenceMap-Daten in denselben Report (OHNE Max) ---------
ReportENG += "\n\nDIFFERENCEMAP: ABS Diff to GlobalMean (inkl. Max)\n";
ReportENG += "Filename\tC10_absdiff\tCUser_absdiff\tC50_absdiff\tC90_absdiff\tMax_absdiff\tR90_absdiff\tR50_absdiff\tRUser_absdiff\tR10_absdiff\tOvr_absdiff\n";

for (prn = 0; prn < ResultsFileNames.length; prn++) {

    dC10   = abs(ContrThr10ArrayMean[prn]   - ContrThr10mean);
    dCUser = abs(ContrThrUserArrayMean[prn] - ContrThrUsermean);
    dC50   = abs(ContrThr50ArrayMean[prn]   - ContrThr50mean);
    dC90   = abs(ContrThr90ArrayMean[prn]   - ContrThr90mean);
    dMax  = abs(MaximumArrayMean[prn] - Maximummean);
    dR90   = abs(RelaxThr90ArrayMean[prn]   - RelaxThr90mean);
    dR50   = abs(RelaxThr50ArrayMean[prn]   - RelaxThr50mean);
    dRUser = abs(RelaxThrUserArrayMean[prn] - RelaxThrUsermean);
    dR10   = abs(RelaxThr10ArrayMean[prn]   - RelaxThr10mean);

    dOvr   = abs(OverallArrayMean[prn]      - Overallmean);

    ReportENG += ResultsFileNames[prn] + "\t"
              + dC10 + "\t" + dCUser + "\t" + dC50 + "\t" + dC90 + "\t"
              + dMax + "\t"
              + dR90 + "\t" + dR50 + "\t" + dRUser + "\t" + dR10 + "\t"
              + dOvr + "\n";
}

Report2ENG="";

// --------- NEU: DifferenceMap-Daten in denselben Report (OHNE Max) ---------
Report2ENG += "\n\nDIFFERENCEMAP: Diff to GlobalMean (inkl. Max)\n";
Report2ENG += "Filename\tC10_diff\tCUser_diff\tC50_diff\tC90_diff\tMax_diff\tR90_diff\tR50_diff\tRUser_diff\tR10_diff\tOvr_diff\n";

for (prn = 0; prn < ResultsFileNames.length; prn++) {

    d2C10   = (ContrThr10ArrayMean[prn]   - ContrThr10mean);
    d2CUser = (ContrThrUserArrayMean[prn] - ContrThrUsermean);
    d2C50   = (ContrThr50ArrayMean[prn]   - ContrThr50mean);
    d2C90   = (ContrThr90ArrayMean[prn]   - ContrThr90mean);
    d2Max  = (MaximumArrayMean[prn] - Maximummean);
    d2R90   = (RelaxThr90ArrayMean[prn]   - RelaxThr90mean);
    d2R50   = (RelaxThr50ArrayMean[prn]   - RelaxThr50mean);
    d2RUser = (RelaxThrUserArrayMean[prn] - RelaxThrUsermean);
    d2R10   = (RelaxThr10ArrayMean[prn]   - RelaxThr10mean);

    d2Ovr   = (OverallArrayMean[prn]      - Overallmean);

    Report2ENG += ResultsFileNames[prn] + "\t"
              + d2C10 + "\t" + d2CUser + "\t" + d2C50 + "\t" + d2C90 + "\t"
              + d2Max + "\t"
              + d2R90 + "\t" + d2R50 + "\t" + d2RUser + "\t" + d2R10 + "\t"
              + d2Ovr + "\n";
}


// ============================================================
// 8. HEATMAP (OHNE Max!)
// ============================================================
newImage("HeatMap", "32-bit black", 9, FoundStatFiles.length, 1);
selectWindow("HeatMap");

for (yy = 0; yy < FoundStatFiles.length; yy++) {
    setPixel(0, yy, parseFloat(ContrThr10ArrayMean[yy]));
    setPixel(1, yy, parseFloat(ContrThrUserArrayMean[yy]));
    setPixel(2, yy, parseFloat(ContrThr50ArrayMean[yy]));
    setPixel(3, yy, parseFloat(ContrThr90ArrayMean[yy]));
    setPixel(4, yy, parseFloat(RelaxThr90ArrayMean[yy]));
    setPixel(5, yy, parseFloat(RelaxThr50ArrayMean[yy]));
    setPixel(6, yy, parseFloat(RelaxThrUserArrayMean[yy]));
    setPixel(7, yy, parseFloat(RelaxThr10ArrayMean[yy]));
    setPixel(8, yy, parseFloat(OverallArrayMean[yy]));
}

setMinAndMax(HeatMin, HeatMax);
run("Fire");

// EINMAL skalieren -> HeatMap-1
HeatScaleH = FoundStatFiles.length * 50;
run("Scale...", "x=50 y=50 width=450 height="+HeatScaleH+" interpolation=None create");

// ab hier nur HeatMap-1
selectWindow("HeatMap-1");
setMinAndMax(HeatMin, HeatMax);
run("Fire");

// Breite/Höhe der eigentlichen Heatmap (ohne Margins)
getDimensions(HeatMapW0, HeatMapH0, channels, slices, frames); // HeatMapW0=450

// RightMargin: Platz für Labels + Platz für Bar rechts daneben
MaxLabelLen = 0;
for (i = 0; i < RowLabels.length; i++) if (lengthOf(RowLabels[i]) > MaxLabelLen) MaxLabelLen = lengthOf(RowLabels[i]);

BarW = 140; BarH = 120;
LabelW = MaxLabelLen * 7;
RightMargin = 30 + LabelW + 30 + BarW + 40;  // Label + Abstand + Bar + Luft
if (RightMargin < 600) RightMargin = 600;

TopMargin = 60;
BottomMargin = 240; // genug Platz für Bar, +70px tiefer

// Canvas erweitern
run("Canvas Size...", "width="+(HeatMapW0+RightMargin)+" height="+HeatMapH0+" position=Center-Left");
run("Canvas Size...", "width="+(HeatMapW0+RightMargin)+" height="+(HeatMapH0+TopMargin)+" position=Bottom-Left");
run("Canvas Size...", "width="+(HeatMapW0+RightMargin)+" height="+(HeatMapH0+TopMargin+BottomMargin)+" position=Top-Left");

// Calibration Bar: unten, aber rechts neben Labels (nicht über Heatmap)
BarX = HeatMapW0 + 20 + LabelW + 30;        // rechts von Labels
BarY = TopMargin + HeatScaleH + 70;         // +70px tiefer als "direkt unter Heatmap"
makeRectangle(BarX, BarY, BarW, BarH);

setMinAndMax(HeatMin, HeatMax);
run("Calibration Bar...", "location=[At Selection] fill=Black label=White number=6 decimal=2 font=12");

// nach Calibration Bar ist das neue Fenster "... with bar" aktiv
HeatFinalTitle = getTitle();
selectWindow(HeatFinalTitle);

// ab hier RGB für Text/Lines
run("RGB Color");

// Header
setFont("Arial black", 12);
setColor(255,255,255);
HeaderY = 40;
for (i = 0; i < Type.length; i++) drawString(Type[i], 10 + i*50, HeaderY);

// Trennlinie zwischen Kontraktion (4 Spalten) und Relaxation: 4*50=200
setLineWidth(3);
drawLine(200, TopMargin, 200, TopMargin + HeatScaleH);

// RowLabels rechts (X basiert auf HeatMapW0!)
LabelX = HeatMapW0 + 10;
setFont("Arial", 12);
setColor(255,255,0);
LabelY0 = TopMargin + 35;
for (i = 0; i < RowLabels.length; i++) {
    lab = RowLabels[i];
    if (lab == "" || lab == " ") lab = ResultsFileNames[i];
    drawString(lab, LabelX, LabelY0 + 50*i);
}

// speichern: immer FINAL-Fenster
saveAs("jpg", rootDir + "HeatMap all Samples_" + year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + ".jpg");

// ============================================================
// 9. DIFFERENCE MAP (OHNE Max!)
// ============================================================
newImage("DifferenceMap", "32-bit black", 9, ResultsFileNames.length, 1);
selectWindow("DifferenceMap");

DiffMax = 0;
for (yy = 0; yy < ResultsFileNames.length; yy++) {

    d = abs(ContrThr10ArrayMean[yy]-ContrThr10mean); setPixel(0, yy, d); if (d>DiffMax) DiffMax=d;
    d = abs(ContrThrUserArrayMean[yy]-ContrThrUsermean); setPixel(1, yy, d); if (d>DiffMax) DiffMax=d;
    d = abs(ContrThr50ArrayMean[yy]-ContrThr50mean); setPixel(2, yy, d); if (d>DiffMax) DiffMax=d;
    d = abs(ContrThr90ArrayMean[yy]-ContrThr90mean); setPixel(3, yy, d); if (d>DiffMax) DiffMax=d;

    d = abs(RelaxThr90ArrayMean[yy]-RelaxThr90mean); setPixel(4, yy, d); if (d>DiffMax) DiffMax=d;
    d = abs(RelaxThr50ArrayMean[yy]-RelaxThr50mean); setPixel(5, yy, d); if (d>DiffMax) DiffMax=d;
    d = abs(RelaxThrUserArrayMean[yy]-RelaxThrUsermean); setPixel(6, yy, d); if (d>DiffMax) DiffMax=d;
    d = abs(RelaxThr10ArrayMean[yy]-RelaxThr10mean); setPixel(7, yy, d); if (d>DiffMax) DiffMax=d;

    d = abs(OverallArrayMean[yy]-Overallmean); setPixel(8, yy, d); if (d>DiffMax) DiffMax=d;
}

setMinAndMax(0, DiffMax);
run("Fire");

// skalieren -> DifferenceMap-1
DiffScaleH = ResultsFileNames.length * 50;
run("Scale...", "x=50 y=50 width=450 height="+DiffScaleH+" interpolation=None create");

// ab hier nur DifferenceMap-1
selectWindow("DifferenceMap-1");
setMinAndMax(0, DiffMax);
run("Fire");

getDimensions(DiffMapW0, DiffMapH0, channels, slices, frames); // 450

TopMargin2 = 60;
BottomMargin2 = 240;

// Canvas
run("Canvas Size...", "width="+(DiffMapW0+RightMargin)+" height="+DiffMapH0+" position=Center-Left");
run("Canvas Size...", "width="+(DiffMapW0+RightMargin)+" height="+(DiffMapH0+TopMargin2)+" position=Bottom-Left");
run("Canvas Size...", "width="+(DiffMapW0+RightMargin)+" height="+(DiffMapH0+TopMargin2+BottomMargin2)+" position=Top-Left");

// Bar: unten + rechts neben Labels, +70px tiefer
BarX = DiffMapW0 + 20 + LabelW + 30;
BarY = TopMargin2 + DiffScaleH + 70;
makeRectangle(BarX, BarY, BarW, BarH);

setMinAndMax(0, DiffMax);
run("Calibration Bar...", "location=[At Selection] fill=Black label=White number=6 decimal=2 font=12");

DiffFinalTitle = getTitle();
selectWindow(DiffFinalTitle);
run("RGB Color");

// Header
setFont("Arial black", 12);
setColor(255,255,255);
HeaderY = 40;
for (i = 0; i < Type.length; i++) drawString(Type[i], 10 + i*50, HeaderY);

// Trennlinie
setLineWidth(3);
drawLine(200, TopMargin2, 200, TopMargin2 + DiffScaleH);

// RowLabels rechts
LabelX = DiffMapW0 + 10;
setFont("Arial", 12);
setColor(255,255,0);
LabelY0 = TopMargin2 + 35;
for (i = 0; i < RowLabels.length; i++) {
    lab = RowLabels[i];
    if (lab == "" || lab == " ") lab = ResultsFileNames[i];
    drawString(lab, LabelX, LabelY0 + 50*i);
}

saveAs("jpg", rootDir + "Differences to OverallMean_" + year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + ".jpg");

// ============================================================
// 10. TXT speichern (sicher, ohne Log)
// ============================================================

ReportENG=ReportENG+"\n"+Report2ENG;

File.saveString(ReportENG, rootDir+ "Final Overall Analysis "+ year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + " (ENG).txt");

ReportGER = replace(ReportENG, ".", ",");

File.saveString(ReportGER, rootDir+ "Final Overall Analysis "+ year+"-"+MonthNames[month]+"-"+dayOfMonths+"-"+hours+"h"+minutes + " (GER).txt");

// Cleanup
close("*");



// ============================================================
// Helper
// ============================================================


// ============================================================
// Helper für Heatmaps
// ============================================================
function makeRowLabel(fullPath) {

    // normalisieren
    p = replace(fullPath, "\\", "/");

    // alles ab "/VidsMovement" abschneiden (inkl. VidsMovement selbst)
    idx = indexOf(p, "/VidsMovement");
    if (idx >= 0) {
        label = substring(p, 0, idx);
    } else {
        // Fallback: Parent-Folder der Datei
        pos = lastIndexOf(p, "/");
        if (pos > 0) label = substring(p, 0, pos);
        else label = p;
    }

    // Trailing "/" entfernen
    while (endsWith(label, "/")) {
        label = substring(label, 0, lengthOf(label)-1);
    }

    return label;
}


// ============================================================
// Statistikfunktionen
// ============================================================
function ST_runStatsWizard(path) {

    txt = File.openAsString(path);
    if (txt=="") exit("File empty.");

    // normalize line endings
    txt = replace(txt, "\r", "");
    lines = split(txt, "\n");
    if (lengthOf(lines) < 2) exit("Not enough data lines.");

    header = lines[0];
    cols = split(header, "\t");
    if (lengthOf(cols) < 6) exit("Header too short. Please select the LONG file produced by the macro.");

    // find required columns
    probeCol = ST_findCol(cols, "Probe_ID");
    groupCol = ST_findCol(cols, "Group_Assignment");
    if (probeCol < 0 || groupCol < 0) {
        exit("Could not find columns 'Probe_ID' and 'Group_Assignment'. Select the LONG file produced by the macro.");
    }

    // --- Settings dialog ---
    Dialog.create("Statistics: Settings");
Dialog.addChoice("Unit of analysis:",
    newArray(
        "Aggregate by Probe_ID (mean per probe)",
        "Rows (each cell = replicate)"
    ),
    "Rows (each cell = replicate)"  // oder setz hier deinen Default
);
Dialog.addCheckbox("Include 'Beats counted [N]' as parameter", true);
Dialog.addNumber("Alpha (significance threshold):", 0.05);
Dialog.addDirectory("Save results to folder (optional; empty = no files):", "");
Dialog.show();

    unitChoice   = Dialog.getChoice();
    includeBeats = Dialog.getCheckbox();
    alpha        = Dialog.getNumber();
    outDir       = Dialog.getString();

    if (outDir!="") {
        outDir = replace(outDir, "\\", "/");
        if (!endsWith(outDir, "/")) outDir = outDir + "/";
    }

    // Determine first parameter column in LONG file:
    // 0 Probe_ID | 1 Group_Assignment | 2 Filenames | 3 Beats counted [N] | 4.. parameters
    firstValueCol = 3;
    if (!includeBeats) firstValueCol = 4;

    if (lengthOf(cols) <= firstValueCol) exit("No parameter columns found (firstValueCol=" + firstValueCol + ").");

    // Build param name list (dynamic)
    P = lengthOf(cols) - firstValueCol;
    paramNames = newArray(P);
    for (p=0; p<P; p++) paramNames[p] = cols[firstValueCol + p];

    // ------------- Read data: row-level OR aggregated -------------
    groups = newArray(0);
    data   = newArray(0); // each row: tab-joined P numbers as strings ("NaN" allowed)

    if (startsWith(unitChoice, "Rows")) {

        for (i=1; i<lengthOf(lines); i++) {
            line = lines[i];
            if (line=="") continue;

            parts = split(line, "\t");
            if (lengthOf(parts) <= groupCol) continue;

            g = parts[groupCol];
            if (g=="") continue;

            // build P values row string (allow missing -> NaN)
            rowStr = "";
            for (p=0; p<P; p++) {
                colIdx = firstValueCol + p;
                raw = "";
                if (colIdx < lengthOf(parts)) raw = parts[colIdx];

                vStr = ST_toNumberStringOrNaN(raw); // "NaN" or "1.23"
                rowStr = rowStr + vStr;
                if (p < P-1) rowStr = rowStr + "\t";
            }

            groups = Array.concat(groups, g);
            data   = Array.concat(data, rowStr);
        }

    } else {
        // -------- Aggregate by Probe_ID: mean per probe within each group --------
        // key = group + "||" + probeID
        keys      = newArray(0);
        keyGroups = newArray(0);
        sumsFlat  = newArray(0); // keys.length * P
        cntsFlat  = newArray(0); // keys.length * P

        for (i=1; i<lengthOf(lines); i++) {
            line = lines[i];
            if (line=="") continue;

            parts = split(line, "\t");
            if (lengthOf(parts) <= groupCol || lengthOf(parts) <= probeCol) continue;

            g  = parts[groupCol];
            pr = parts[probeCol];
            if (g=="" || pr=="") continue;

            key = g + "||" + pr;

            // find key index (linear search)
            kIdx = -1;
            for (kk=0; kk<lengthOf(keys); kk++) {
                if (keys[kk] == key) { kIdx = kk; break; }
            }

            // create new key slot if needed
            if (kIdx < 0) {
                keys      = Array.concat(keys, key);
                keyGroups = Array.concat(keyGroups, g);

                // IMPORTANT: sums/cnts must start at 0 (NOT NaN)
                tmpS = ST_zeroArray(P);
                tmpC = ST_zeroArray(P);
                sumsFlat = Array.concat(sumsFlat, tmpS);
                cntsFlat = Array.concat(cntsFlat, tmpC);

                kIdx = lengthOf(keys) - 1;
            }

            // accumulate per parameter
            base = kIdx * P;
            for (p=0; p<P; p++) {
                colIdx = firstValueCol + p;
                raw = "";
                if (colIdx < lengthOf(parts)) raw = parts[colIdx];

                v = ST_parseFloatSafe(raw);
                if (v==v) {
                    sumsFlat[base + p] = sumsFlat[base + p] + v;
                    cntsFlat[base + p] = cntsFlat[base + p] + 1;
                }
            }
        }

        // convert to aggregated rows (means)
        for (kIdx=0; kIdx<lengthOf(keys); kIdx++) {
            base = kIdx * P;
            rowStr = "";

            for (p=0; p<P; p++) {
                if (cntsFlat[base+p] > 0) m = sumsFlat[base+p] / cntsFlat[base+p];
                else m = 0/0;

                rowStr = rowStr + ST_numOrNaNString(m);
                if (p < P-1) rowStr = rowStr + "\t";
            }

            groups = Array.concat(groups, keyGroups[kIdx]);
            data   = Array.concat(data, rowStr);
        }
    }

    if (lengthOf(groups) < 2) exit("Not enough usable data rows after parsing/aggregation.");

    // Unique groups in order of appearance
    uniq = ST_uniqueStrings(groups);
    k = lengthOf(uniq);
    if (k < 2) exit("Need at least 2 groups.");

    // N per group (units after chosen unit-of-analysis)
    groupNs = newArray(k);
    for (gi=0; gi<k; gi++) groupNs[gi] = ST_countString(groups, uniq[gi]);

    // ---------- Parameter selection ----------
    Dialog.create("Statistics: Parameters");
    Dialog.addChoice("Parameters:", newArray("All parameters", "Select parameters..."), "All parameters");
    Dialog.show();
    pickMode = Dialog.getChoice();

    useParam = newArray(P);
    for (p=0; p<P; p++) useParam[p] = 1;

    if (pickMode == "Select parameters...") {
        Dialog.create("Select parameters (checked = analyze)");
        for (p=0; p<P; p++) Dialog.addCheckbox(paramNames[p], true);
        Dialog.show();
        for (p=0; p<P; p++) {
            if (Dialog.getCheckbox()) useParam[p] = 1;
            else useParam[p] = 0;
        }
    }

    // build selected index list
    selIdx = newArray(0);
    selNames = newArray(0);
    for (p=0; p<P; p++) {
        if (useParam[p] == 1) {
            selIdx = Array.concat(selIdx, p);
            selNames = Array.concat(selNames, paramNames[p]);
        }
    }
    if (lengthOf(selIdx) < 1) exit("No parameters selected.");

    // ---------- Stats options depending on k ----------
if (k == 2) {

    Dialog.create("Mann-Whitney options (2 groups)");
    Dialog.addCheckbox("Continuity correction (recommended; Prism-like for large N)", true);
    Dialog.addChoice("Correction across selected parameters:",
        newArray("None","FDR (BH)","Holm"), "None");
    Dialog.addDirectory("Save results to folder (optional; empty = no files):", outDir);
    Dialog.show();

    MW_useCC     = Dialog.getCheckbox();
    method_param = Dialog.getChoice();
    outDir2      = Dialog.getString();

    if (outDir2!="") {
        outDir2 = replace(outDir2, "\\", "/");
        if (!endsWith(outDir2, "/")) outDir2 = outDir2 + "/";
    }

    ST_runMannWhitneyTests(data, groups, uniq, groupNs, selIdx, selNames,
                           alpha, method_param, MW_useCC,
                           path, unitChoice, includeBeats, outDir2);

} else {

    Dialog.create("Kruskal-Wallis options (k >= 3)");
Dialog.addChoice("Correction across selected parameters:",
    newArray("None","FDR (BH)","Holm"), "None");
Dialog.addChoice("Pairwise correction (within each parameter):",
    newArray("None","FDR (BH)","Holm"), "Holm");
Dialog.addDirectory("Save results to folder (optional; empty = no files):", outDir);
Dialog.show();

method_omni  = Dialog.getChoice();
method_pairs = Dialog.getChoice();
outDir2      = Dialog.getString();

if (outDir2!="") {
    outDir2 = replace(outDir2, "\\", "/");
    if (!endsWith(outDir2, "/")) outDir2 = outDir2 + "/";
}

ST_runKruskalWallis(data, groups, uniq, groupNs, selIdx, selNames,
                    alpha, method_omni, method_pairs,
                    path, unitChoice, includeBeats, outDir2);
    
    
}
  

    print("\nPlease, wait for the Heatmaps to be finished...");
}


// ============================================================
// Mann-Whitney U (k==2) per selected parameter
// - Two-sided p via Normal approximation (ties corrected)
// - Optional continuity correction (Prism-like for large N)
// - Optional correction across parameters (None / BH / Holm)
// ============================================================
function ST_runMannWhitneyTests(data, groups, uniq, groupNs, selIdx, selNames,
                                alpha, method_param, useCC,
                                inPath, unitChoice, includeBeats, outDir) {

    g1 = uniq[0];
    g2 = uniq[1];

    print("\\Clear");
    print("=== STATISTICS RESULTS ===");
    print("Input: " + inPath);
    print("Unit of analysis: " + unitChoice);
    incTxt = "ON"; if (!includeBeats) incTxt = "OFF";
    print("Include Beats counted as parameter: " + incTxt);
    print("Mode: Mann-Whitney (two groups), two-sided");
    print("Groups: " + g1 + " (N=" + groupNs[0] + ") vs " + g2 + " (N=" + groupNs[1] + ")");
        
    ccTxt = "OFF";
	if (useCC) ccTxt = "ON";
	print("Continuity correction: " + ccTxt);
    
    print("Alpha: " + alpha);
    print("Correction across selected parameters: " + method_param);
    print("");

    M = lengthOf(selIdx);
    pvals = newArray(M);

    // Header: keep param name EXACTLY as in file; other headers are just for readability
    hdr = "Param\tN1 ("+g1+")\tN2 ("+g2+")\tMean1 ("+g1+")\tMean2 ("+g2+")\tDiff(1-2)\tU\tz\tp(two-sided)\tP summary";
    print(hdr);

    for (ii=0; ii<M; ii++) {

        pIndex = selIdx[ii];
        name   = selNames[ii];

        a = ST_collectParamForGroup(data, groups, g1, pIndex);
        b = ST_collectParamForGroup(data, groups, g2, pIndex);

        n1 = lengthOf(a);
        n2 = lengthOf(b);

        m1 = ST_avg(a);
        m2 = ST_avg(b);
        diff = m1 - m2;

        // If not enough data
        if (n1<1 || n2<1) {
            U = 0/0; z = 0/0; pval = 0/0;
        } else {

            // Build combined arrays for ranking
            N = n1 + n2;
            vals = newArray(N);
            gIdx = newArray(N);

            for (i=0; i<n1; i++) { vals[i] = a[i]; gIdx[i] = 0; }
            for (j=0; j<n2; j++) { vals[n1+j] = b[j]; gIdx[n1+j] = 1; }

            rs = ST_rankSums(vals, gIdx, 2);     // rs[0]=R1, rs[1]=R2, rs[2]=tieSum
            R1 = rs[0];
            tieSum = rs[2];

            // U statistics
            U1 = R1 - (n1*(n1+1))/2.0;
            U2 = n1*n2 - U1;
            U  = U1; if (U2 < U) U = U2;         // Prism often reports the smaller U

            // Mean/Var of U with tie correction
            meanU = n1*n2/2.0;

            // Var(U) = n1*n2/12 * [ (N+1) - tieSum/(N*(N-1)) ]
            // tieSum = Σ(t^3 - t) over tie blocks
            if (N<=1 || (N-1)==0) {
                z = 0/0; pval = 0/0;
            } else {
                tc = tieSum / (N*(N-1));   // tie correction term
                varU = (n1*n2/12.0) * ((N+1) - tc);

                if (varU <= 0) {
                    z = 0/0; pval = 0/0;
                } else {
                    sd = sqrt(varU);

                    // continuity correction (two-sided) – approximate Prism behaviour for large N
                    cc = 0.0;
                    if (useCC) {
                        // U is usually <= meanU (because we take min(U1,U2)), so (U-meanU) is negative:
                        // use +0.5 in numerator (equivalent to subtracting -0.5*sign)
                        if (U < meanU) cc = 0.5;
                        else if (U > meanU) cc = -0.5;
                        else cc = 0.0;
                    }

                    z = (U - meanU + cc) / sd;
                    pval = ST_p_value_norm_two_sided(z);
                }
            }
        }

        pvals[ii] = pval;

        print(name+"\t"+n1+"\t"+n2+"\t"+ST_d4(m1)+"\t"+ST_d4(m2)+"\t"+ST_d4(diff)+"\t"+
              ST_d3(U)+"\t"+ST_d3(z)+"\t"+ST_pPrism(pval)+"\t"+ST_pSummaryPrism(pval));
    }

    // correction across parameters (optional)
    adj = newArray(0);
    doAdj = false;
    if (method_param=="FDR (BH)") { adj = ST_bh_fdr_nanaware(pvals); doAdj = true; }
    else if (method_param=="Holm") { adj = ST_holm_nanaware(pvals); doAdj = true; }

    if (doAdj) {
        print("");
        print("Adjusted p-values across selected parameters ("+method_param+"):");
        print("Param\tp\tp_adj\tAdj summary");
        for (ii=0; ii<M; ii++) {
            print(selNames[ii]+"\t"+ST_pPrism(pvals[ii])+"\t"+ST_pPrism(adj[ii])+"\t"+ST_pSummaryPrism(adj[ii]));
        }
    }

    // Save results
    if (outDir!="") {
        base = ST_baseNameNoExt(inPath);

        out = "Mode\tMann-Whitney (two groups), two-sided\n";
        out = out + "Input\t"+inPath+"\n";
        out = out + "Unit_of_analysis\t"+unitChoice+"\n";
        incTxt = "ON"; if (!includeBeats) incTxt = "OFF";
        out = out + "Include_Beats_counted\t"+incTxt+"\n";
        out = out + "Groups\t"+g1+" vs "+g2+"\n";
        
        ccTxt = "OFF";
		if (useCC) ccTxt = "ON";
		out = out + "Continuity_correction\t" + ccTxt + "\n";
        
        out = out + "Alpha\t"+alpha+"\n";
        out = out + "Correction_across_parameters\t"+method_param+"\n\n";

        out = out + hdr + "\n";

        for (ii=0; ii<M; ii++) {
            pIndex = selIdx[ii];
            name   = selNames[ii];

            a = ST_collectParamForGroup(data, groups, g1, pIndex);
            b = ST_collectParamForGroup(data, groups, g2, pIndex);

            n1 = lengthOf(a);
            n2 = lengthOf(b);
            m1 = ST_avg(a);
            m2 = ST_avg(b);
            diff = m1 - m2;

            if (n1<1 || n2<1) { U=0/0; z=0/0; pval=0/0; }
            else {
                N = n1 + n2;
                vals = newArray(N);
                gIdx = newArray(N);
                for (i=0;i<n1;i++){ vals[i]=a[i]; gIdx[i]=0; }
                for (j=0;j<n2;j++){ vals[n1+j]=b[j]; gIdx[n1+j]=1; }

                rs = ST_rankSums(vals, gIdx, 2);
                R1 = rs[0]; tieSum = rs[2];

                U1 = R1 - (n1*(n1+1))/2.0;
                U2 = n1*n2 - U1;
                U  = U1; if (U2 < U) U = U2;

                meanU = n1*n2/2.0;
                tc = tieSum / (N*(N-1));
                varU = (n1*n2/12.0) * ((N+1) - tc);

                if (varU<=0) { z=0/0; pval=0/0; }
                else {
                    sd = sqrt(varU);
                    cc=0.0;
                    if (useCC) {
                        if (U < meanU) cc = 0.5;
                        else if (U > meanU) cc = -0.5;
                    }
                    z = (U - meanU + cc) / sd;
                    pval = ST_p_value_norm_two_sided(z);
                }
            }

            out = out + name+"\t"+n1+"\t"+n2+"\t"+ST_d4(m1)+"\t"+ST_d4(m2)+"\t"+ST_d4(diff)+"\t"+
                  ST_d3(U)+"\t"+ST_d3(z)+"\t"+ST_pPrism(pval)+"\t"+ST_pSummaryPrism(pval)+"\n";
        }

        if (doAdj) {
            out = out + "\nAdjusted p-values across selected parameters ("+method_param+"):\n";
            out = out + "Param\tp\tp_adj\tAdj summary\n";
            for (ii=0; ii<M; ii++) {
                out = out + selNames[ii]+"\t"+ST_pPrism(pvals[ii])+"\t"+ST_pPrism(adj[ii])+"\t"+ST_pSummaryPrism(adj[ii])+"\n";
            }
        }


// Hier gibt es Probleme mit den runden Klammern

		base2=replace(base, "\\(ENG\\)", "");
		base2=replace(base2, "\\(GER\\)", "");
		
		
	
        File.saveString(out, outDir+"STATS_mannwhitney_"+base2+"(ENG).txt");
        File.saveString(replace(out, ".", ","), outDir+"STATS_mannwhitney_"+base2+"(GER).txt");
        print("\nSaved: "+outDir+"STATS_mannwhitney__"+base2+" (ENG/GER).txt");

        
    }
}



// ============================================================
// One-way ANOVA (k>=3) per selected parameter
// + optional pairwise Welch t-tests per parameter (with optional gatekeeping)
// Pairwise written to file: ONLY significant pairs (raw or adjusted)
// ============================================================

// ============================================================
// Kruskal-Wallis (k>=3) per selected parameter
// - Omnibus test only (no post-hoc) for “quick hint”
// - Two-sided p via Chi-square approx (ties corrected)
// - Optional correction across parameters (None / BH / Holm)
// ============================================================

function ST_runKruskalWallis(data, groups, uniq, groupNs, selIdx, selNames,
                             alpha, method_omni, method_pairs,
                             inPath, unitChoice, includeBeats, outDir) {

    k = lengthOf(uniq);
    M = lengthOf(selIdx);

    print("\\Clear");
    print("=== STATISTICS RESULTS ===");
    print("Input: " + inPath);
    print("Unit of analysis: " + unitChoice);
    incTxt = "ON"; if (!includeBeats) incTxt = "OFF";
    print("Include Beats counted as parameter: " + incTxt);
    print("Mode: Kruskal-Wallis (k=" + k + ") + pairwise Mann-Whitney");
    print("Alpha: " + alpha);
    print("Correction across selected parameters: " + method_omni);
    print("Pairwise correction within each parameter: " + method_pairs);
    print("");

    pvals = newArray(M);
    Hvals = newArray(M);
    Nvals = newArray(M);

    hdr = "Param\tk\tN\tH\tDF\tp(two-sided)\tP summary";
    print(hdr);

    // ------------------------------------------------------------
    // 1) Omnibus Kruskal-Wallis
    // ------------------------------------------------------------
    for (ii=0; ii<M; ii++) {

        pIndex = selIdx[ii];
        name   = selNames[ii];

        Ns = newArray(k);
        totalN = 0;

        for (gi=0; gi<k; gi++) {
            arr = ST_collectParamForGroup(data, groups, uniq[gi], pIndex);
            Ns[gi] = lengthOf(arr);
            totalN = totalN + Ns[gi];
        }

        if (totalN < k) {
            H = 0/0;
            df = k-1;
            pval = 0/0;
        } else {

            vals = newArray(totalN);
            gIdx = newArray(totalN);

            pos = 0;
            for (gi=0; gi<k; gi++) {
                arr = ST_collectParamForGroup(data, groups, uniq[gi], pIndex);
                for (j=0; j<lengthOf(arr); j++) {
                    vals[pos] = arr[j];
                    gIdx[pos] = gi;
                    pos++;
                }
            }

            rs = ST_rankSums(vals, gIdx, k);
            tieSum = rs[k];

            sumTerm = 0.0;
            for (gi=0; gi<k; gi++) {
                if (Ns[gi] > 0) sumTerm = sumTerm + (rs[gi]*rs[gi]) / Ns[gi];
            }

            N = totalN;
            H = (12.0/(N*(N+1))) * sumTerm - 3.0*(N+1);

            denom = 1.0;
            if ((N*N*N - N) != 0) denom = 1.0 - (tieSum / (N*N*N - N));
            if (denom > 0) H = H / denom;

            df = k - 1;
            pval = ST_p_value_chi2_right(H, df);
        }

        Hvals[ii] = H;
        pvals[ii] = pval;
        Nvals[ii] = totalN;

        print(name+"\t"+k+"\t"+totalN+"\t"+ST_d3(H)+"\t"+(k-1)+"\t"+ST_pPrism(pval)+"\t"+ST_pSummaryPrism(pval));
    }

    // ------------------------------------------------------------
    // 2) Korrektur über Parameter hinweg (Omnibus)
    // ------------------------------------------------------------
    adj = newArray(0);
    doAdj = false;

    if (method_omni=="FDR (BH)") {
        adj = ST_bh_fdr_nanaware(pvals);
        doAdj = true;
    } else if (method_omni=="Holm") {
        adj = ST_holm_nanaware(pvals);
        doAdj = true;
    }

    if (doAdj) {
        print("");
        print("Adjusted p-values across selected parameters ("+method_omni+"):");
        print("Param\tp\tp_adj\tAdj summary");
        for (ii=0; ii<M; ii++) {
            print(selNames[ii]+"\t"+ST_pPrism(pvals[ii])+"\t"+ST_pPrism(adj[ii])+"\t"+ST_pSummaryPrism(adj[ii]));
        }
    }

    // ------------------------------------------------------------
    // 3) Pairwise Mann-Whitney pro Parameter
    // ------------------------------------------------------------
    print("");
    print("Pairwise comparisons (Mann-Whitney), parameter-wise:");

    for (ii=0; ii<M; ii++) {

        pIndex = selIdx[ii];
        name   = selNames[ii];

        print("");
        print("# " + name);

        hdr2 = "GroupA\tGroupB\tN1\tN2\tMean1\tMean2\tDiff(1-2)\tU\tz\tp(two-sided)\tP summary";
        if (method_pairs!="None") {
            if (method_pairs=="FDR (BH)") hdr2 = hdr2 + "\tq(FDR)\tAdj summary";
            else hdr2 = hdr2 + "\tpHolm\tAdj summary";
        }
        print(hdr2);

        pair_pvals = newArray(0);
        pair_lines = newArray(0);

        for (gi=0; gi<k-1; gi++) {
            for (gj=gi+1; gj<k; gj++) {

                a = ST_collectParamForGroup(data, groups, uniq[gi], pIndex);
                b = ST_collectParamForGroup(data, groups, uniq[gj], pIndex);

                n1 = lengthOf(a);
                n2 = lengthOf(b);

                m1 = ST_avg(a);
                m2 = ST_avg(b);
                diff = m1 - m2;

                if (n1<1 || n2<1) {
                    U = 0/0;
                    z = 0/0;
                    pPair = 0/0;
                } else {
                    N = n1 + n2;
                    vals = newArray(N);
                    gIdx = newArray(N);

                    for (i=0; i<n1; i++) {
                        vals[i] = a[i];
                        gIdx[i] = 0;
                    }
                    for (j=0; j<n2; j++) {
                        vals[n1+j] = b[j];
                        gIdx[n1+j] = 1;
                    }

                    rs = ST_rankSums(vals, gIdx, 2);
                    R1 = rs[0];
                    tieSum = rs[2];

                    U1 = R1 - (n1*(n1+1))/2.0;
                    U2 = n1*n2 - U1;
                    U  = U1;
                    if (U2 < U) U = U2;

                    meanU = n1*n2/2.0;

                    if (N<=1 || (N-1)==0) {
                        z = 0/0;
                        pPair = 0/0;
                    } else {
                        tc = tieSum / (N*(N-1));
                        varU = (n1*n2/12.0) * ((N+1) - tc);

                        if (varU <= 0) {
                            z = 0/0;
                            pPair = 0/0;
                        } else {
                            sd = sqrt(varU);
                            z = (U - meanU) / sd;   // ohne continuity correction
                            pPair = ST_p_value_norm_two_sided(z);
                        }
                    }
                }

                baseLine = uniq[gi]+"\t"+uniq[gj]+"\t"+n1+"\t"+n2+"\t"+ST_d4(m1)+"\t"+ST_d4(m2)+"\t"+ST_d4(diff)+"\t"+ST_d3(U)+"\t"+ST_d3(z)+"\t"+ST_pPrism(pPair)+"\t"+ST_pSummaryPrism(pPair);

                if (method_pairs=="None") {
                    print(baseLine);
                } else {
                    pair_lines = Array.concat(pair_lines, baseLine);
                }

                pair_pvals = Array.concat(pair_pvals, pPair);
            }
        }

        if (method_pairs!="None") {
            if (method_pairs=="FDR (BH)") adjPairs = ST_bh_fdr_nanaware(pair_pvals);
            else adjPairs = ST_holm_nanaware(pair_pvals);

            for (idxPair=0; idxPair<lengthOf(pair_lines); idxPair++) {
                print(pair_lines[idxPair] + "\t" + ST_pPrism(adjPairs[idxPair]) + "\t" + ST_pSummaryPrism(adjPairs[idxPair]));
            }
        }
    }

    // ------------------------------------------------------------
    // 4) Speichern
    // ------------------------------------------------------------
    if (outDir!="") {
        base = ST_baseNameNoExt(inPath);
        
        base2=replace(base, "\\(ENG\\)", "");
		base2=replace(base2, "\\(GER\\)", "");

        out = "Mode\tKruskal-Wallis (k="+k+") + pairwise Mann-Whitney\n";
        out = out + "Input\t"+inPath+"\n";
        out = out + "Unit_of_analysis\t"+unitChoice+"\n";
        incTxt = "ON"; if (!includeBeats) incTxt = "OFF";
        out = out + "Include_Beats_counted\t"+incTxt+"\n";
        out = out + "Alpha\t"+alpha+"\n";
        out = out + "Correction_across_parameters\t"+method_omni+"\n";
        out = out + "Pairwise_correction_within_parameter\t"+method_pairs+"\n\n";

        out = out + hdr + "\n";
        for (ii=0; ii<M; ii++) {
            out = out + selNames[ii]+"\t"+k+"\t"+Nvals[ii]+"\t"+ST_d3(Hvals[ii])+"\t"+(k-1)+"\t"+ST_pPrism(pvals[ii])+"\t"+ST_pSummaryPrism(pvals[ii])+"\n";
        }

        if (doAdj) {
            out = out + "\nAdjusted p-values across selected parameters ("+method_omni+"):\n";
            out = out + "Param\tp\tp_adj\tAdj summary\n";
            for (ii=0; ii<M; ii++) {
                out = out + selNames[ii]+"\t"+ST_pPrism(pvals[ii])+"\t"+ST_pPrism(adj[ii])+"\t"+ST_pSummaryPrism(adj[ii])+"\n";
            }
        }

        out = out + "\nPairwise comparisons (Mann-Whitney), parameter-wise:\n";

        for (ii=0; ii<M; ii++) {

            pIndex = selIdx[ii];
            name   = selNames[ii];

            out = out + "\n# " + name + "\n";

            hdr2 = "GroupA\tGroupB\tN1\tN2\tMean1\tMean2\tDiff(1-2)\tU\tz\tp(two-sided)\tP summary";
            if (method_pairs!="None") {
                if (method_pairs=="FDR (BH)") hdr2 = hdr2 + "\tq(FDR)\tAdj summary";
                else hdr2 = hdr2 + "\tpHolm\tAdj summary";
            }
            out = out + hdr2 + "\n";

            pair_pvals = newArray(0);
            pair_lines = newArray(0);

            for (gi=0; gi<k-1; gi++) {
                for (gj=gi+1; gj<k; gj++) {

                    a = ST_collectParamForGroup(data, groups, uniq[gi], pIndex);
                    b = ST_collectParamForGroup(data, groups, uniq[gj], pIndex);

                    n1 = lengthOf(a);
                    n2 = lengthOf(b);

                    m1 = ST_avg(a);
                    m2 = ST_avg(b);
                    diff = m1 - m2;

                    if (n1<1 || n2<1) {
                        U = 0/0;
                        z = 0/0;
                        pPair = 0/0;
                    } else {
                        N = n1 + n2;
                        vals = newArray(N);
                        gIdx = newArray(N);

                        for (i=0; i<n1; i++) {
                            vals[i] = a[i];
                            gIdx[i] = 0;
                        }
                        for (j=0; j<n2; j++) {
                            vals[n1+j] = b[j];
                            gIdx[n1+j] = 1;
                        }

                        rs = ST_rankSums(vals, gIdx, 2);
                        R1 = rs[0];
                        tieSum = rs[2];

                        U1 = R1 - (n1*(n1+1))/2.0;
                        U2 = n1*n2 - U1;
                        U  = U1;
                        if (U2 < U) U = U2;

                        meanU = n1*n2/2.0;

                        if (N<=1 || (N-1)==0) {
                            z = 0/0;
                            pPair = 0/0;
                        } else {
                            tc = tieSum / (N*(N-1));
                            varU = (n1*n2/12.0) * ((N+1) - tc);

                            if (varU <= 0) {
                                z = 0/0;
                                pPair = 0/0;
                            } else {
                                sd = sqrt(varU);
                                z = (U - meanU) / sd;
                                pPair = ST_p_value_norm_two_sided(z);
                            }
                        }
                    }

                    baseLine = uniq[gi]+"\t"+uniq[gj]+"\t"+n1+"\t"+n2+"\t"+ST_d4(m1)+"\t"+ST_d4(m2)+"\t"+ST_d4(diff)+"\t"+ST_d3(U)+"\t"+ST_d3(z)+"\t"+ST_pPrism(pPair)+"\t"+ST_pSummaryPrism(pPair);

                    if (method_pairs=="None") {
                        out = out + baseLine + "\n";
                    } else {
                        pair_lines = Array.concat(pair_lines, baseLine);
                    }

                    pair_pvals = Array.concat(pair_pvals, pPair);
                }
            }

            if (method_pairs!="None") {
                if (method_pairs=="FDR (BH)") adjPairs = ST_bh_fdr_nanaware(pair_pvals);
                else adjPairs = ST_holm_nanaware(pair_pvals);

                for (idxPair=0; idxPair<lengthOf(pair_lines); idxPair++) {
                    out = out + pair_lines[idxPair] + "\t" + ST_pPrism(adjPairs[idxPair]) + "\t" + ST_pSummaryPrism(adjPairs[idxPair]) + "\n";
                }
            }
        }


		base2=replace(base, "\\(ENG\\)", "");
		base2=replace(base2, "\\(GER\\)", "");

        File.saveString(out, outDir+"STATS_kruskalwallis_"+base2+" (ENG).txt");
        File.saveString(replace(out, ".", ","), outDir+"STATS_kruskalwallis_"+base2+" (GER).txt");
        print("\nSaved: "+outDir+"STATS_kruskalwallis__"+base2+" (ENG/GER).txt");

    }
}


// ============================================================
// HELPERS
// ============================================================

function ST_findCol(cols, name) {
    for (i=0; i<lengthOf(cols); i++) if (cols[i]==name) return i;
    return -1;
}

function ST_zeroArray(n) {
    a = newArray(n);
    for (ii=0; ii<n; ii++) a[ii] = 0;
    return a;
}

function ST_uniqueStrings(arr) {
    u = newArray(0);
    for (i=0; i<lengthOf(arr); i++) {
        s = arr[i];
        found = false;
        for (j=0; j<lengthOf(u); j++) if (u[j]==s) {found=true; break;}
        if (!found) u = Array.concat(u, s);
    }
    return u;
}

function ST_countString(arr, s) {
    c = 0;
    for (i=0; i<lengthOf(arr); i++) if (arr[i]==s) c = c + 1;
    return c;
}

// convert raw field to numeric string "x.y" or "NaN"
// IMPORTANT: must return NUMERIC (or NaN) to avoid "Numeric return value expected"
function ST_toNumberStringOrNaN(raw) {
    return ST_parseFloatSafe(raw); // numeric value or NaN (0/0)
}


function ST_numOrNaNString(v) {
    if (v==v) return ""+v;
    return "NaN";
}

// robust parseFloat: supports comma decimals; strips spaces; maps Infinity/blank -> NaN
function ST_parseFloatSafe(raw) {
    if (raw=="") return 0/0;
    s = "" + raw;
    s = replace(s, " ", "");
    s = replace(s, ",", ".");
    if (s=="NaN" || s=="Infinity" || s=="-Infinity") return 0/0;
    v = parseFloat(s);
    return v;
}

// collect parameter values for a group from data rows (tab-joined numeric strings)
function ST_collectParamForGroup(data, groups, g, pIndex) {
    out = newArray(0);
    for (i=0; i<lengthOf(data); i++) {
        if (groups[i]!=g) continue;
        fields = split(data[i], "\t");
        if (pIndex >= lengthOf(fields)) continue;

        v = ST_parseFloatSafe(fields[pIndex]); // <-- FIX
        if (v==v) out = Array.concat(out, v);
    }
    return out;
}


// ---------- basic stats ----------
function ST_avg(a) {
    if (lengthOf(a)==0) return 0/0;
    s=0;
    for (i=0;i<lengthOf(a);i++) s = s + a[i];
    return s/lengthOf(a);
}
function ST_variance(a, unbiased) {
    n=lengthOf(a);
    if (n<2) return 0/0;
    m=ST_avg(a);
    ss=0;
    for (i=0;i<n;i++) ss = ss + (a[i]-m)*(a[i]-m);
    denom = n;
    if (unbiased) denom = n-1;
    return ss/denom;
}
function ST_weightedMean(means, Ns) {
    num=0; den=0;
    for (i=0;i<lengthOf(means);i++) {
        if (Ns[i]>0 && means[i]==means[i]) {
            num = num + means[i]*Ns[i];
            den = den + Ns[i];
        }
    }
    if (den>0) return num/den;
    return 0/0;
}
function ST_welchDF(s1,n1,s2,n2) {
    a = s1/n1 + s2/n2;
    b = (s1*s1)/(n1*n1*(n1-1)) + (s2*s2)/(n2*n2*(n2-1));
    return a*a / b;
}

// ---------- p-values via incomplete beta ----------
function ST_p_value_t_two_sided(t, df) {
    x = df / (df + t*t);
    return ST_betai(0.5*df, 0.5, x);
}
function ST_p_value_f_right(F, df1, df2) {
    x = df2 / (df2 + df1*F);
    return ST_betai(0.5*df2, 0.5*df1, x);
}
function ST_betai(a,b,x) {
    if (x<=0) return 0;
    if (x>=1) return 1;
    bt = exp(ST_gammln(a+b) - ST_gammln(a) - ST_gammln(b) + a*log(x) + b*log(1.0 - x));
    if (x < (a+1.0)/(a+b+2.0)) return bt*ST_betacf(a,b,x)/a;
    else return 1.0 - bt*ST_betacf(b,a,1.0-x)/b;
}
function ST_betacf(a,b,x) {
    MAXIT=200;
    EPS=3.0e-7;
    FPMIN=1.0e-30;
    qab=a+b; qap=a+1.0; qam=a-1.0;
    c=1.0;
    d=1.0 - qab*x/qap;
    if (abs(d)<FPMIN) d=FPMIN;
    d=1.0/d;
    h=d;
    for (m=1; m<=MAXIT; m++) {
        m2=2*m;
        aa = m*(b-m)*x/((qam+m2)*(a+m2));
        d = 1.0 + aa*d;
        if (abs(d)<FPMIN) d=FPMIN;
        d=1.0/d;
        c = 1.0 + aa/c;
        if (abs(c)<FPMIN) c=FPMIN;
        h = h * d * c;

        aa = -(a+m)*(qab+m)*x/((a+m2)*(qap+m2));
        d = 1.0 + aa*d;
        if (abs(d)<FPMIN) d=FPMIN;
        d=1.0/d;
        c = 1.0 + aa/c;
        if (abs(c)<FPMIN) c=FPMIN;
        del = d*c;
        h = h * del;
        if (abs(del-1.0) < EPS) break;
    }
    return h;
}
function ST_gammln(xx) {
    cof = newArray(76.18009172947146,-86.50532032941677,24.01409824083091,
                   -1.231739572450155,0.001208650973866179,-5.395239384953e-6);
    x=xx; y=xx;
    tmp = x + 5.5;
    tmp = tmp - (x + 0.5)*log(tmp);
    ser = 1.000000000190015;
    for (j=0; j<6; j++) { y = y + 1.0; ser = ser + cof[j]/y; }
    return -tmp + log(2.5066282746310005*ser/x);
}

// ---------- multiple testing ----------
function ST_bh_fdr(pvals) {
    m = lengthOf(pvals);
    idx = newArray(m);
    for (i=0;i<m;i++) idx[i]=i;
    for (i=0;i<m-1;i++) {
        imin=i;
        for (j=i+1;j<m;j++) if (pvals[idx[j]] < pvals[idx[imin]]) imin=j;
        tmp=idx[i]; idx[i]=idx[imin]; idx[imin]=tmp;
    }
    q = newArray(m);
    minQ = 1.0;
    for (r=m-1; r>=0; r--) {
        i = idx[r];
        val = pvals[i]*m/(r+1);
        if (val<minQ) minQ=val;
        if (minQ<1.0) q[i]=minQ; else q[i]=1.0;
    }
    return q;
}
function ST_bh_fdr_nanaware(pvals) {
    idxValid = newArray(0);
    pvValid  = newArray(0);
    for (i=0;i<lengthOf(pvals);i++) if (pvals[i]==pvals[i]) {
        idxValid = Array.concat(idxValid, i);
        pvValid  = Array.concat(pvValid, pvals[i]);
    }
    out = newArray(lengthOf(pvals));
    for (i=0;i<lengthOf(out);i++) out[i]=0/0;
    if (lengthOf(pvValid)==0) return out;
    adjValid = ST_bh_fdr(pvValid);
    for (k2=0;k2<lengthOf(idxValid);k2++) out[idxValid[k2]] = adjValid[k2];
    return out;
}
function ST_holm(pvals) {
    m = lengthOf(pvals);
    idx = newArray(m);
    for (i=0;i<m;i++) idx[i]=i;
    for (i=0;i<m-1;i++) {
        imin=i;
        for (j=i+1;j<m;j++) if (pvals[idx[j]] < pvals[idx[imin]]) imin=j;
        tmp=idx[i]; idx[i]=idx[imin]; idx[imin]=tmp;
    }
    padj_sorted = newArray(m);
    for (r=0; r<m; r++) {
        i = idx[r];
        val = pvals[i] * (m - r);
        if (val>1.0) val = 1.0;
        padj_sorted[r] = val;
    }
    for (r=1; r<m; r++) {
        if (padj_sorted[r] < padj_sorted[r-1]) padj_sorted[r] = padj_sorted[r-1];
    }
    padj = newArray(m);
    for (r=0; r<m; r++) {
        i = idx[r];
        padj[i] = padj_sorted[r];
    }
    return padj;
}
function ST_holm_nanaware(pvals) {
    idxValid = newArray(0);
    pvValid  = newArray(0);
    for (i=0;i<lengthOf(pvals);i++) if (pvals[i]==pvals[i]) {
        idxValid = Array.concat(idxValid, i);
        pvValid  = Array.concat(pvValid, pvals[i]);
    }
    out = newArray(lengthOf(pvals));
    for (i=0;i<lengthOf(out);i++) out[i]=0/0;
    if (lengthOf(pvValid)==0) return out;
    adjValid = ST_holm(pvValid);
    for (k2=0;k2<lengthOf(idxValid);k2++) out[idxValid[k2]] = adjValid[k2];
    return out;
}

// ---------- formatting ----------
function ST_d3(v) { return "" + round(v*1000)/1000; }
function ST_sci(v) {
    if (v!=v) return "NA";
    if (v==0) return "0";
    e = floor(log(abs(v))/log(10));
    m = v / pow(10,e);
    return "" + ST_d3(m) + "e" + e;
}
function ST_sigStars(p) {
    if (p!=p) return "NA";
    if (p <= 0.0001) return "****";
    if (p <= 0.001)  return "***";
    if (p <= 0.01)   return "**";
    if (p <= 0.05)   return "*";
    return "ns";
}

// filename helper (no lastIndexOf; manual scan)
function ST_baseNameNoExt(path) {
    p = replace(path, "\\", "/");
    last = -1;
    for (i=0; i<lengthOf(p); i++) {
        if (substring(p, i, i+1)=="/") last = i;
    }
    name = p;
    if (last >= 0) name = substring(p, last+1);

    // strip trailing ".txt"
    if (endsWith(name, ".txt")) name = substring(name, 0, lengthOf(name)-4);
    return name;
}


// ============================================================
// RANKS (ties handled): returns array length (k+1)
// [0..k-1] = rank sums per group, [k] = tieSum = Σ(t^3 - t)
// NOTE: ImageJ macro '&&' may not short-circuit reliably -> avoid vals[j+1] access in condition
// ============================================================
function ST_rankSums(vals, gIdx, k) {

    // Sort vals asc with parallel gIdx
    ST_sort2(vals, gIdx);

    rankSums = newArray(k);
    for (ii=0; ii<k; ii++) rankSums[ii] = 0.0;

    tieSum = 0.0;

    N = lengthOf(vals);
    r = 1.0; // IMPORTANT: float rank counter

    i = 0;
    while (i < N) {

        j = i;

        // SAFE tie-scan (no short-circuit assumptions!)
        while (true) {
            if (j + 1 >= N) break;
            if (vals[j + 1] != vals[i]) break;
            j++;
        }

        t = j - i + 1;

        // average rank for ties: (r + (r+t-1))/2
        avgRank = (r + (r + t - 1.0)) / 2.0;  // IMPORTANT: float math

        for (m=i; m<=j; m++) {
            gi = gIdx[m];
            if (gi >= 0 && gi < k) rankSums[gi] = rankSums[gi] + avgRank;
        }

        if (t > 1) tieSum = tieSum + (t*t*t - t);

        r = r + t;      // r stays float
        i = j + 1;
    }

    out = newArray(k+1);
    for (ii=0; ii<k; ii++) out[ii] = rankSums[ii];
    out[k] = tieSum;
    return out;
}


// ============================================================
// Iterative quicksort for numeric array vals with parallel gIdx
// ============================================================
function ST_sort2(vals, gIdx) {
    n = lengthOf(vals);
    if (n < 2) return;

    // stack for segments
    stackLo = newArray(n);
    stackHi = newArray(n);
    top = 0;
    stackLo[0] = 0;
    stackHi[0] = n-1;

    while (top >= 0) {
        lo = stackLo[top];
        hi = stackHi[top];
        top--;

        i = lo;
        j = hi;
        pivot = vals[floor((lo+hi)/2)];

        while (i <= j) {
            while (vals[i] < pivot) i++;
            while (vals[j] > pivot) j--;
            if (i <= j) {
                tmp = vals[i]; vals[i] = vals[j]; vals[j] = tmp;
                tmg = gIdx[i]; gIdx[i] = gIdx[j]; gIdx[j] = tmg;
                i++; j--;
            }
        }

        if (lo < j) { top++; stackLo[top] = lo; stackHi[top] = j; }
        if (i < hi) { top++; stackLo[top] = i;  stackHi[top] = hi; }
    }
}

// ============================================================
// Normal approx p-value (two-sided) from z
// p = 2 * (1 - Phi(|z|)) = 2 * SF(|z|)
// ============================================================
function ST_p_value_norm_two_sided(z) {
    if (z!=z) return 0/0;
    az = abs(z);
    sf = ST_norm_sf(az);
    p = 2.0 * sf;
    if (p > 1.0) p = 1.0;
    return p;
}

// survival function SF(z) for standard normal (z>=0)
// Abramowitz-Stegun approximation (fast, good enough for stats output)
function ST_norm_sf(z) {
    if (z < 0) z = -z;

    p = 0.2316419;
    b1 = 0.319381530;
    b2 = -0.356563782;
    b3 = 1.781477937;
    b4 = -1.821255978;
    b5 = 1.330274429;

    t = 1.0 / (1.0 + p*z);
    poly = ((((b5*t + b4)*t + b3)*t + b2)*t + b1)*t;

    // phi(z) = exp(-z^2/2)/sqrt(2*pi)
    phi = exp(-0.5*z*z) / 2.5066282746310002;

    // SF ≈ phi * poly
    return phi * poly;
}

// ============================================================
// Chi-square right-tail p-value: p = P(Chi^2_df >= x)
// p = gammq(df/2, x/2)
// ============================================================
function ST_p_value_chi2_right(x, df) {
    if (x!=x) return 0/0;
    if (x < 0) return 1.0;
    a = df/2.0;
    xx = x/2.0;
    return ST_gammq(a, xx);
}

// Regularized upper incomplete gamma Q(a,x)
function ST_gammq(a, x) {
    if (x < 0 || a <= 0) return 0/0;
    if (x < a + 1.0) {
        // Q = 1 - P (series)
        return 1.0 - ST_gser(a, x);
    } else {
        // Q directly (continued fraction)
        return ST_gcf(a, x);
    }
}

// Series representation of P(a,x)
function ST_gser(a, x) {
    ITMAX = 200;
    EPS = 3.0e-7;

    gln = ST_gammln(a);
    if (x <= 0) return 0.0;

    ap = a;
    sum = 1.0 / a;
    del = sum;

    for (n=1; n<=ITMAX; n++) {
        ap = ap + 1.0;
        del = del * x / ap;
        sum = sum + del;
        if (abs(del) < abs(sum)*EPS) break;
    }

    return sum * exp(-x + a*log(x) - gln);
}

// Continued fraction representation of Q(a,x)
function ST_gcf(a, x) {
    ITMAX = 200;
    EPS = 3.0e-7;
    FPMIN = 1.0e-30;

    gln = ST_gammln(a);

    b = x + 1.0 - a;
    c = 1.0 / FPMIN;
    d = 1.0 / b;
    h = d;

    for (i=1; i<=ITMAX; i++) {
        an = -i * (i - a);
        b = b + 2.0;
        d = an * d + b;
        if (abs(d) < FPMIN) d = FPMIN;
        c = b + an / c;
        if (abs(c) < FPMIN) c = FPMIN;
        d = 1.0 / d;
        del = d * c;
        h = h * del;
        if (abs(del - 1.0) < EPS) break;
    }

    return exp(-x + a*log(x) - gln) * h;
}

// ============================================================
// Formatting helpers (Prism-ish p printing)
// ============================================================
function ST_d3(v) { return "" + round(v*1000)/1000; }
function ST_d4(v) { return "" + round(v*10000)/10000; }

function ST_pPrism(p) {
    if (p!=p) return "NA";
    if (p < 0.0001) return "<0.0001";
    // show 4 decimals like Prism often does
    return "" + (round(p*10000)/10000);
}

function ST_pSummaryPrism(p) {
    if (p!=p) return "NA";
    if (p <= 0.0001) return "Yes (****)";
    if (p <= 0.001)  return "Yes (***)";
    if (p <= 0.01)   return "Yes (**)";
    if (p <= 0.05)   return "Yes (*)";
    return "ns";
}




}


// =======================
// 11) Prepare for ANOVA
// =======================
if (option=="11. Prepare data for ANOVA (contractions)") {

   // =======================
   // 11) Prepare for ANOVA
   // =======================

    // --- 1) Choose main folder (""-check only) ---
    startDir = getDirectory("Choose the main folder (recursive search)");
    if (startDir=="") exit("Aborted.");

    // Normalize paths
    startDir = replace(startDir, "\\", "/");
    if (!endsWith(startDir, "/")) startDir += "/";

    print("\\Clear");
    print("Searching… please wait.\n");
    print("Root directory: " + startDir+"\n");

    // --- 2) Iterative folder scan (stack) ---
    // per folder: keep the newest file whose name contains "Extracted results (eng)"
    foundPaths = newArray(0);

    stack = newArray(startDir);
    idx = 0;
    while (idx < stack.length) {
        current = stack[idx];
        if (!endsWith(current, "/")) current += "/";

        items = getFileList(current);

        // ""-variant only: empty folder -> continue
        if (items.length==0) {
            print("WARNING: No access/empty: " + current);
            idx++;
            continue;
        }

        bestPath = "";
        bestKey  = -1;

        for (i = 0; i < items.length; i++) {
            name = items[i];

            if (endsWith(name, "/")) {
                folder = current + name;
                folder = replace(folder, "\\", "/");
                stack = Array.concat(stack, folder);
            } else {
                if (indexOf(name, "Extracted results (eng)") != -1) {
                    path = current + name;
                    // last modification time as key (millis since 1970)
                    k = File.lastModified(path) + 0; // numeric
                    if (k > bestKey) { bestKey = k; bestPath = path; }
                }
            }
        }

        if (bestPath != "") {
            foundPaths = Array.concat(foundPaths, newArray(bestPath));
        }

        idx++;
    }

    nFiles = foundPaths.length;
    if (nFiles == 0) exit("No files found whose filename contains \"Extracted results (eng)\".");

    // --- 2a) Preview list of found files + RELATIVE FOLDER ---
    print("\n--- FOUND FILES (newest per directory) ---\n");
    for (i=0; i<nFiles; i++) {
        rel = relFolderFromBase(startDir, foundPaths[i]);
        print( (i+1)+": "+foundPaths[i] + "\n    Folder (relative): " + rel );
    }
    print("\n--- END OF LIST ---\n");

    // Optional: save the list as TXT before continuing
    Dialog.create("Found files – preview");
    Dialog.addMessage("Found: "+nFiles+" file(s).\nFull list is printed in the console.");
    Dialog.addCheckbox("Save list as TXT", true);
    Dialog.addDirectory("Target folder:", startDir);
    Dialog.addChoice("Continue with group assignment?", newArray("Yes","Cancel"), "Yes");
    Dialog.show();
    saveList = Dialog.getCheckbox();
    listDir  = Dialog.getString();
    goNext   = Dialog.getChoice();

    if (saveList) {
        
        listText=getInfo("log");
        
        File.saveString(listText, listDir + "FOUND_files.txt");
        print("List saved: " + listDir + "FOUND_files.txt");
    }
    if (goNext=="Cancel") exit("Canceled after preview list.");

    // --- 3) Number of groups + names ---
    Dialog.create("Define groups");
    Dialog.addNumber("Number of groups:", 2);
    Dialog.show();
    nGroups = round(Dialog.getNumber());
    if (nGroups < 1) nGroups = 1;

    Dialog.create("Group names");
    groupNames = newArray(nGroups);
    for (g = 0; g < nGroups; g++) {
        Dialog.addString("Group name " + (g+1) + ":", "Group_"+(g+1));
    }
    Dialog.show();
    for (g = 0; g < nGroups; g++) {
        nm = Dialog.getString();
        if (nm == "") nm = "Group_"+(g+1);
        groupNames[g] = nm;
    }

    // Choice list incl. Exclude
    choiceList = newArray(nGroups + 1);
    for (g = 0; g < nGroups; g++) choiceList[g] = groupNames[g];
    choiceList[nGroups] = "Exclude";

    // --- 4) Interactive assignment (chunked) ---
    assignments = newArray(nFiles);
    for (i = 0; i < nFiles; i++) assignments[i] = groupNames[0];

    CHUNK = 20;
    for (start = 0; start < nFiles; start += CHUNK) {
        stop = start + CHUNK; if (stop > nFiles) stop = nFiles;

        Dialog.create("Assignment (" + (start+1) + "–" + stop + " / " + nFiles + ")");
        for (i = start; i < stop; i++) {
            // Label with RELATIVE FOLDER + FILENAME
            rel = relFolderFromBase(startDir, foundPaths[i]);  // e.g., "58/AVI/VidsMovement .../dataplots/"
            fname = basename(foundPaths[i]);                   // e.g., "Extracted results (eng) Results (selected) ..."
            label = "" + (i+1) + ") " + rel + fname;
            Dialog.addChoice(label, choiceList, assignments[i]);
        }
        Dialog.show();
        for (i = start; i < stop; i++) {
            assignments[i] = Dialog.getChoice();
        }
    }

    // --- 5) Get header line (once) ---
    header = "";
    for (i = 0; i < nFiles; i++) {
        if (assignments[i] != "Exclude") { header = readHeaderLine(foundPaths[i]); break; }
    }
    if (header == "") header = readHeaderLine(foundPaths[0]);
    if (header == "") exit("Could not read header line.");

    // --- 6) Output folder ---
    outDir = getDirectory("Choose output folder (empty = use main folder)");
    if (outDir=="") outDir = startDir;
    outDir = replace(outDir, "\\", "/");
    if (!endsWith(outDir, "/")) outDir += "/";

    // --- 7) Write group files ---
    groupCounts = newArray(nGroups);
    for (g = 0; g < nGroups; g++) groupCounts[g] = 0;

    for (g = 0; g < nGroups; g++) {
        groupTitle = groupNames[g];
        outName = "Group_" + sanitizeFileName(groupTitle) + "_merged (ENG).txt";
        outPath = outDir + outName;
        
        outName2 = "Group_" + sanitizeFileName(groupTitle) + "_merged (GER).txt";
        outPath2 = outDir + outName2;

        outText = groupTitle + "\n" + header + "\n";

        for (i = 0; i < nFiles; i++) {
            if (assignments[i] == groupTitle) {
                body = readBody(foundPaths[i]);
                if (body != "") {
                    if (!endsWith(body, "\n")) body = body + "\n";
                    outText += body;
                    groupCounts[g]++;
                }
            }
        }

        File.saveString(outText, outPath);
        outText2=replace(outText, ".", ",");
        File.saveString(outText2, outPath2);
        print("Group \"" + groupTitle + "\": " + groupCounts[g] + " file(s) -> " + outPath);
    }

    // --- 8) Combined file (optional) ---
    makeCombined = true;
    if (makeCombined) {
        comboHeader = "Group\t" + header;
        combo = comboHeader + "\n";
        rowsAdded = 0;

        for (i = 0; i < nFiles; i++) {
            grp = assignments[i];
            if (grp == "Exclude") continue;
            body = readBody(foundPaths[i]);
            if (body != "") {
                body = replace(body, "\r", "");
                lines = split(body, "\n");
                for (k = 0; k < lines.length; k++) {
                    line = lines[k];
                    if (line == "") continue;
                    combo += grp + "\t" + line + "\n";
                    rowsAdded++;
                }
            }
        }

        comboPath = outDir + "ALL_groups_MERGED (ENG).txt";
        File.saveString(combo, comboPath);
        
        comboPath2 = outDir + "ALL_groups_MERGED (GER).txt";
        combo2=replace(combo, ".", ",");
        File.saveString(combo2, comboPath2);
        
        print("Combined file: " + rowsAdded + " row(s) -> " + comboPath);
    }

    print("Done.");



// =======================
// Helper functions (IJ1)
// =======================

// Relative folder path: difference between base (main folder) and file folder
function relFolderFromBase(base, filePath) {
    b = replace(base, "\\", "/");
    if (!endsWith(b, "/")) b += "/";
    dir = dirname(filePath);
    dir = replace(dir, "\\", "/");
    if (startsWith(dir, b)) {
        rel = substring(dir, lengthOf(b));
        if (rel=="") rel = "."; // directly in main folder
        return rel;
    }
    // Fallback: no common prefix found -> return folder
    return dir;
}

// Folder name from path
function dirname(p) {
    pp = replace(p, "\\", "/");
    n = lengthOf(pp);
    last = -1;
    for (k = 0; k < n; k++) {
        ch = substring(pp, k, k+1);
        if (ch == "/") last = k;
    }
    if (last >= 0) return substring(pp, 0, last+1);
    return "";
}

// File name from path
function basename(p) {
    n = lengthOf(p);
    last = -1;
    for (k = 0; k < n; k++) {
        ch = substring(p, k, k+1);
        if (ch == "/" || ch == "\\") last = k;
    }
    if (last >= 0) return substring(p, last+1);
    return p;
}

// Read first line (header) only
function readHeaderLine(path) {
    txt = File.openAsString(path);
    txt = replace(txt, "\r", "");
    nl = indexOf(txt, "\n");
    if (nl < 0) return trim(txt);
    return trim(substring(txt, 0, nl));
}

// Return body without first line (header)
function readBody(path) {
    txt = File.openAsString(path);
    txt = replace(txt, "\r", "");
    nl = indexOf(txt, "\n");
    if (nl < 0) return "";
    return substring(txt, nl+1);
}

// Make a filesystem-safe name
function sanitizeFileName(s) {
    t = s;
    bad = newArray("\\", "/", ":", "*", "?", "\"", "<", ">", "|");
    for (i=0; i<bad.length; i++) t = replace(t, bad[i], "_");
    t = replace(t, " ", "_");
    t = replace(t, "\t", "_");
    return t;
}

}


// Conduct ANOVA

// =====================================================================
// Stats from merged file (IJ1-only)
// Input: "ALL_groups_MERGED (ENG).txt"  (col0 = Group, cols1..14 = values)
// - 2 groups  -> Welch t-test per parameter
// - >=3 groups -> One-way ANOVA per parameter + pairwise Welch t-tests
// - p-values via incomplete beta (betai) implementation
// - Multiple testing options: None / FDR (BH) / Holm
// - Gatekeeping option: pairwise only if omnibus is significant at alpha=0.05
// - Outputs: Log + TXT (ENG) and TXT (GER, decimal comma)
// - Significance stars (Prism style): ns, *, **, ***, ****
// - No use of `null` and no ternary operator (IJ1-safe)
// =====================================================================


if (option=="12. Apply ANOVA (contractions)") {	

runStats(); // entry point

function runStats() {
    // --- Pick merged file ---
    path = File.openDialog("Choose 'ALL_groups_MERGED (ENG).txt'");
    if (path=="") exit("Aborted.");

    txt = File.openAsString(path);
    if (txt=="") exit("File empty.");

    // Normalize line endings and parse
    txt = replace(txt, "\r", "");
    lines = split(txt, "\n");
    if (lines.length < 2) exit("Not enough data lines.");

    header = lines[0];
    cols = split(header, "\t");
    if (cols.length < 15) exit("Header should be: Group + 14 columns.");

    // Parameter names (14: cols 1..14)
    paramNames = newArray(14);
    for (j=0; j<14; j++) paramNames[j] = cols[j+1];

    // Read data (group + 14 numeric values)
    groups = newArray(0);
    data = newArray(0); // store each row as tab-joined 14 numbers

    for (i=1; i<lines.length; i++) {
        line = lines[i];
        if (line=="") continue;
        parts = split(line, "\t");
        if (parts.length < 15) continue;

        // NEU (synchron)
	g = parts[0];

	rowVals = newArray(14);
	ok = true;
	for (j=0; j<14; j++) {
   	 v = replace(parts[j+1], ",", ".");
   	 if (v=="") { ok=false; break; }
    	rowVals[j] = parseFloat(v);
	}
	if (!ok) continue;

	// erst NACH erfolgreichem Parsen beides append
	groups = appendStr(groups, g);
	data   = appendStr(data, joinNumbers(rowVals, "\t"));

    }

    // Unique groups (in order of appearance)
    uniq = uniqueStrings(groups);
    k = uniq.length;
    if (k < 2) exit("Need at least 2 groups in data.");

    // Options (methods for corrections + optional save dir + gatekeeping)
    Dialog.create("Statistics Options");
    Dialog.addChoice("Omnibus correction (across 14 parameters):",
                     newArray("None","FDR (BH)","Holm"), "FDR (BH)");
    Dialog.addChoice("Pairwise correction (within each parameter):",
                     newArray("None","FDR (BH)","Holm"), "FDR (BH)");
    Dialog.addCheckbox("Gatekeep pairwise by omnibus significance (alpha = 0.05)", true);
    Dialog.addDirectory("Save results to folder (leave empty = no file):", "");
    Dialog.show();
    method_omni  = Dialog.getChoice();
    method_pairs = Dialog.getChoice();
    gatekeepPairs = Dialog.getCheckbox();
    outDir = Dialog.getString();
    if (outDir!="") {
        outDir = replace(outDir, "\\", "/");
        if (!endsWith(outDir, "/")) outDir += "/";
    }

    print("\\Clear");
    print("=== Statistics on merged file ===");
    print("File: " + path);
    print("Groups detected ("+k+"): " + joinStrings(uniq, ", "));
    print("Omnibus correction: " + method_omni);
    print("Pairwise correction: " + method_pairs);
    gateTxt = "OFF";
    if (gatekeepPairs) gateTxt = "ON";
    print("Gatekeeping (pairwise only if omnibus sig @0.05): " + gateTxt);
    print("");

    if (k==2) {
        // =========================
        // Welch t-test (two groups)
        // =========================
        print("Mode: Welch t-test (two groups)\n");
        pvals = newArray(14); // omnibus == t-tests here

        // Header mit Gruppennamen in Klammern
        hdr2 = "Param\tN1 ("+uniq[0]+")\tN2 ("+uniq[1]+")\tMean1 ("+uniq[0]+")\tMean2 ("+uniq[1]+")\tDiff(2-1)\tt\tDF\tp(two-sided)\tsig(p)";
        print(hdr2);

        for (p=0; p<14; p++) {
            a = collectParamForGroup(data, groups, uniq[0], p);
            b = collectParamForGroup(data, groups, uniq[1], p);
            n1=a.length; n2=b.length;
            m1=avg(a); m2=avg(b);
            s1=variance(a, true); s2=variance(b, true);

            if (n1<2 || n2<2) {
                t  = 0/0; 
                df = 0/0; 
                pval = 0/0;
            } else {
                t  = (m2 - m1) / sqrt(s1/n1 + s2/n2);
                df = welchDF(s1,n1,s2,n2);
                pval = p_value_t_two_sided(abs(t), df);
            }
            pvals[p] = pval;
            print(paramNames[p]+"\t"+n1+"\t"+n2+"\t"+d3(m1)+"\t"+d3(m2)+"\t"+d3(m2-m1)+"\t"+d3(t)+"\t"+d3(df)+"\t"+sci(pval)+"\t"+sigStars(pval));
        }

        // --- Omnibus correction across the 14 parameters (ALWAYS array) ---
        if (method_omni=="FDR (BH)") {
            adj = bh_fdr_nanaware(pvals);
        } else if (method_omni=="Holm") {
            adj = holm_nanaware(pvals);
        } else {
            adj = newArray(0);
        }

        // Safety: align length if needed
        if (adj.length>0 && adj.length!=pvals.length) {
            adj2 = newArray(pvals.length);
            for (pp=0; pp<adj2.length; pp++) adj2[pp] = 0/0;
            for (pp=0; pp<adj.length && pp<adj2.length; pp++) adj2[pp] = adj[pp];
            adj = adj2;
        }

        if (adj.length>0) {
            print("");
            if (method_omni=="FDR (BH)") {
                print("FDR (Benjamini–Hochberg) across the 14 parameters:");
                print("Param\tp\tq(FDR)\tsig(q)");
                for (p=0; p<14; p++) print(paramNames[p]+"\t"+sci(pvals[p])+"\t"+sci(adj[p])+"\t"+sigStars(adj[p]));
            } else if (method_omni=="Holm") {
                print("Holm (FWER) across the 14 parameters:");
                print("Param\tp\tpHolm\tsig(pHolm)");
                for (p=0; p<14; p++) print(paramNames[p]+"\t"+sci(pvals[p])+"\t"+sci(adj[p])+"\t"+sigStars(adj[p]));
            }
        }

        // Save files (ENG + GER)
        if (outDir!="") {
            out = "Mode\tWelch t-test (two groups)\n";
            out += "Groups\t"+uniq[0]+" vs "+uniq[1]+"\n";
            out += "Omnibus correction\t"+method_omni+"\n";
            out += "Gatekeeping\tN/A (two groups)\n\n";
            // Header mit Gruppennamen in Klammern
            out += "Param\tN1 ("+uniq[0]+")\tN2 ("+uniq[1]+")\tMean1 ("+uniq[0]+")\tMean2 ("+uniq[1]+")\tDiff(2-1)\tt\tDF\tp(two-sided)\tsig(p)\n";
            for (p=0; p<14; p++) {
                a = collectParamForGroup(data, groups, uniq[0], p);
                b = collectParamForGroup(data, groups, uniq[1], p);
                n1=a.length; n2=b.length;
                m1=avg(a); m2=avg(b);
                s1=variance(a, true); s2=variance(b, true);
                if (n1<2 || n2<2) { t=0/0; df=0/0; pval=0/0; }
                else { t=(m2-m1)/sqrt(s1/n1+s2/n2); df=welchDF(s1,n1,s2,n2); pval=p_value_t_two_sided(abs(t),df); }
                out += paramNames[p]+"\t"+n1+"\t"+n2+"\t"+d3(m1)+"\t"+d3(m2)+"\t"+d3(m2-m1)+"\t"+d3(t)+"\t"+d3(df)+"\t"+sci(pval)+"\t"+sigStars(pval)+"\n";
            }
            File.saveString(out, outDir+"STATS_ttest (ENG).txt");
            out_de = replace(out, ".", ",");
            File.saveString(out_de, outDir+"STATS_ttest (GER).txt");
            print("\nSaved: "+outDir+"STATS_ttest (ENG).txt");
            print("Saved: "+outDir+"STATS_ttest (GER).txt");
        }

    } else {
        // ===========================================
        // One-way ANOVA + pairwise Welch t-tests
        // ===========================================
        print("Mode: One-way ANOVA (k="+k+" groups)\n");
        pvals_omni = newArray(14);

        print("Param\tk\tN\tDF1\tDF2\tF\tp\tsig(p)\teta^2");
        for (p=0; p<14; p++) {
            Ns = newArray(k);
            Ms = newArray(k);
            SSwithin = 0.0;
            Ntot = 0;

            // gather by group
            for (gi=0; gi<k; gi++) {
                arr = collectParamForGroup(data, groups, uniq[gi], p);
                Ns[gi] = arr.length;
                Ms[gi] = avg(arr);
                SSwithin += (arr.length-1) * variance(arr, true);
                Ntot += arr.length;
            }
            grandMean = weightedMean(Ms, Ns);
            SSbetween = 0.0;
            for (gi=0; gi<k; gi++) SSbetween += Ns[gi] * pow(Ms[gi]-grandMean, 2);
            SStotal = SSbetween + SSwithin;

            df1 = k - 1;
            df2 = Ntot - k;
            MSb = SSbetween / df1;
            MSw = SSwithin  / df2;
            F = MSb / MSw;
            pval = p_value_f_right(F, df1, df2);

            if (SStotal>0) eta2 = SSbetween / SStotal; else eta2 = 0;

            pvals_omni[p] = pval;
            print(paramNames[p]+"\t"+k+"\t"+Ntot+"\t"+df1+"\t"+df2+"\t"+d3(F)+"\t"+sci(pval)+"\t"+sigStars(pval)+"\t"+d3(eta2));
        }

        // --------- Omnibus correction (robust: always array) ----------
        adjOmni = newArray(pvals_omni.length);
        for (ii=0; ii<adjOmni.length; ii++) adjOmni[ii] = 0/0;
        doAdjOmni = false;

        if (method_omni=="FDR (BH)") {
            tmpAdjOmni = bh_fdr_nanaware(pvals_omni);
            doAdjOmni = true;
        } else if (method_omni=="Holm") {
            tmpAdjOmni = holm_nanaware(pvals_omni);
            doAdjOmni = true;
        } else {
            tmpAdjOmni = newArray(0); // None
        }
        for (ii=0; ii<tmpAdjOmni.length && ii<adjOmni.length; ii++) adjOmni[ii] = tmpAdjOmni[ii];

        if (doAdjOmni) {
            print("");
            if (method_omni=="FDR (BH)") {
                print("FDR (Benjamini–Hochberg) across the 14 omnibus p-values:");
                print("Param\tp\tq(FDR)\tsig(q)");
                for (p=0; p<14; p++) print(paramNames[p]+"\t"+sci(pvals_omni[p])+"\t"+sci(adjOmni[p])+"\t"+sigStars(adjOmni[p]));
            } else if (method_omni=="Holm") {
                print("Holm (FWER) across the 14 omnibus p-values:");
                print("Param\tp\tpHolm\tsig(pHolm)");
                for (p=0; p<14; p++) print(paramNames[p]+"\t"+sci(pvals_omni[p])+"\t"+sci(adjOmni[p])+"\t"+sigStars(adjOmni[p]));
            }
        }

        // For gatekeeping, decide which p-values to use for the check
        alpha = 0.05;
        useAdjForGate = false;
        if (doAdjOmni) useAdjForGate = true;

        // -------- Pairwise comparisons (Welch t-tests) --------
        print("\nPairwise comparisons (Welch t-tests), parameter-wise:");
        for (p=0; p<14; p++) {
            // Gatekeeping decision
            allowPairs = true;
            if (gatekeepPairs) {
                if (useAdjForGate) {
                    allowPairs = (adjOmni[p] <= alpha);
                } else {
                    allowPairs = (pvals_omni[p] <= alpha);
                }
            }

            if (!allowPairs) {
                print("\n# "+paramNames[p]);
                gateLabel = "raw";
                if (useAdjForGate) gateLabel = "corrected";
                print("Omnibus not significant at alpha=0.05 (" + gateLabel + "); pairwise comparisons skipped.");
                continue;
            }

            hdr = "GroupA\tGroupB\tN1\tN2\tMean1\tMean2\tDiff(2-1)\tt\tDF\tp\tsig(p)";
            if (method_pairs!="None") {
                if (method_pairs=="FDR (BH)") hdr = hdr + "\tq(FDR)\tsig(q)";
                else hdr = hdr + "\tpHolm\tsig(pHolm)";
            }

            print("\n# "+paramNames[p]);
            print(hdr);

            pair_pvals = newArray(0);
            pair_lines = newArray(0);

            for (gi=0; gi<k-1; gi++) {
                for (gj=gi+1; gj<k; gj++) {
                    a = collectParamForGroup(data, groups, uniq[gi], p);
                    b = collectParamForGroup(data, groups, uniq[gj], p);
                    n1=a.length; n2=b.length;
                    m1=avg(a); m2=avg(b);
                    s1=variance(a, true); s2=variance(b, true);

                    if (n1<2 || n2<2) { t=0/0; df=0/0; pval=0/0; }
                    else { t=(m2-m1)/sqrt(s1/n1 + s2/n2); df=welchDF(s1,n1,s2,n2); pval=p_value_t_two_sided(abs(t), df); }

                    baseLine = uniq[gi]+"\t"+uniq[gj]+"\t"+n1+"\t"+n2+"\t"+d3(m1)+"\t"+d3(m2)+"\t"+d3(m2-m1)+"\t"+d3(t)+"\t"+d3(df)+"\t"+sci(pval)+"\t"+sigStars(pval);
                    if (method_pairs=="None") {
                        print(baseLine);
                    } else {
                        pair_lines = appendStr(pair_lines, baseLine); // adjusted appended later
                    }
                    pair_pvals = appendNum(pair_pvals, pval);
                }
            }

            if (method_pairs!="None") {
                // Robust adjusted p-values array
                adjPairs = newArray(pair_pvals.length);
                for (idxPair=0; idxPair<adjPairs.length; idxPair++) adjPairs[idxPair] = 0/0;

                if (method_pairs=="FDR (BH)") {
                    tmpAdj = bh_fdr_nanaware(pair_pvals);
                } else {
                    tmpAdj = holm_nanaware(pair_pvals);
                }
                // copy safely
                for (idxPair=0; idxPair<tmpAdj.length && idxPair<adjPairs.length; idxPair++) adjPairs[idxPair] = tmpAdj[idxPair];

                for (idxPair=0; idxPair<pair_lines.length; idxPair++) {
                    print(pair_lines[idxPair] + "\t" + sci(adjPairs[idxPair]) + "\t" + sigStars(adjPairs[idxPair]));
                }
            }
        }

        // ------- Save to file -------
        if (outDir!="") {
            out = "Mode\tOne-way ANOVA (k="+k+")\n";
            out += "Groups\t"+joinStrings(uniq, ", ")+"\n";
            out += "Omnibus correction\t"+method_omni+"\n";
            out += "Pairwise correction\t"+method_pairs+"\n";
            gateTxtOut = "OFF";
            if (gatekeepPairs) gateTxtOut = "ON (alpha=0.05)";
            out += "Gatekeeping\t"+gateTxtOut+"\n\n";
            out += "Param\tk\tN\tDF1\tDF2\tF\tp\tsig(p)\teta^2\n";
            for (p=0; p<14; p++) {
                Ns = newArray(k);
                Ms = newArray(k);
                SSwithin = 0.0;
                Ntot = 0;
                for (gi=0; gi<k; gi++) {
                    arr = collectParamForGroup(data, groups, uniq[gi], p);
                    Ns[gi] = arr.length;
                    Ms[gi] = avg(arr);
                    SSwithin += (arr.length-1) * variance(arr, true);
                    Ntot += arr.length;
                }
                grandMean = weightedMean(Ms, Ns);
                SSbetween = 0.0;
                for (gi=0; gi<k; gi++) SSbetween += Ns[gi] * pow(Ms[gi]-grandMean, 2);
                SStotal = SSbetween + SSwithin;

                df1 = k - 1;
                df2 = Ntot - k;
                MSb = SSbetween / df1;
                MSw = SSwithin  / df2;
                F = MSb / MSw;
                pval = p_value_f_right(F, df1, df2);
                if (SStotal>0) eta2 = SSbetween / SStotal; else eta2 = 0;
                out += paramNames[p]+"\t"+k+"\t"+Ntot+"\t"+df1+"\t"+df2+"\t"+d3(F)+"\t"+sci(pval)+"\t"+sigStars(pval)+"\t"+d3(eta2)+"\n";
            }

            if (doAdjOmni) {
                if (method_omni=="FDR (BH)") {
                    out += "\nFDR (Benjamini–Hochberg) across 14 omnibus p-values\nParam\tp\tq(FDR)\nsig(q)\n";
                    for (p=0; p<14; p++) out += paramNames[p]+"\t"+sci(pvals_omni[p])+"\t"+sci(adjOmni[p])+"\t"+sigStars(adjOmni[p])+"\n";
                } else if (method_omni=="Holm") {
                    out += "\nHolm across 14 omnibus p-values\nParam\tp\tpHolm\tsig(pHolm)\n";
                    for (p=0; p<14; p++) out += paramNames[p]+"\t"+sci(pvals_omni[p])+"\t"+sci(adjOmni[p])+"\t"+sigStars(adjOmni[p])+"\n";
                }
            }

            // Pairwise section with gatekeeping
            out += "\nPairwise comparisons (Welch t-tests), parameter-wise\n";
            alpha = 0.05;
            useAdjForGate = false;
            if (doAdjOmni) useAdjForGate = true;

            for (p=0; p<14; p++) {
                allowPairs = true;
                if (gatekeepPairs) {
                    if (useAdjForGate) allowPairs = (adjOmni[p] <= alpha);
                    else allowPairs = (pvals_omni[p] <= alpha);
                }

                out += "\n# "+paramNames[p]+"\n";
                if (!allowPairs) {
                    gateLabel = "raw";
                    if (useAdjForGate) gateLabel = "corrected";
                    out += "Omnibus not significant at alpha=0.05 (" + gateLabel + "); pairwise comparisons skipped.\n";
                    continue;
                }

                hdr = "GroupA\tGroupB\tN1\tN2\tMean1\tMean2\tDiff(2-1)\tt\tDF\tp\tsig(p)";
                if (method_pairs!="None") {
                    if (method_pairs=="FDR (BH)") hdr = hdr + "\tq(FDR)\tsig(q)";
                    else hdr = hdr + "\tpHolm\tsig(pHolm)";
                }
                out += hdr + "\n";

                pair_pvals = newArray(0);
                pair_lines = newArray(0);

                for (gi=0; gi<k-1; gi++) {
                    for (gj=gi+1; gj<k; gj++) {
                        a = collectParamForGroup(data, groups, uniq[gi], p);
                        b = collectParamForGroup(data, groups, uniq[gj], p);
                        n1=a.length; n2=b.length;
                        m1=avg(a); m2=avg(b);
                        s1=variance(a, true); s2=variance(b, true);
                        if (n1<2 || n2<2) { t=0/0; df=0/0; pval=0/0; }
                        else { t=(m2-m1)/sqrt(s1/n1 + s2/n2); df=welchDF(s1,n1,s2,n2); pval=p_value_t_two_sided(abs(t), df); }
                        baseLine = uniq[gi]+"\t"+uniq[gj]+"\t"+n1+"\t"+n2+"\t"+d3(m1)+"\t"+d3(m2)+"\t"+d3(m2-m1)+"\t"+d3(t)+"\t"+d3(df)+"\t"+sci(pval)+"\t"+sigStars(pval);
                        if (method_pairs=="None") out += baseLine + "\n";
                        else pair_lines = appendStr(pair_lines, baseLine);
                        pair_pvals = appendNum(pair_pvals, pval);
                    }
                }
                if (method_pairs!="None") {
                    // Robust adjusted p-values array
                    adjPairs = newArray(pair_pvals.length);
                    for (idxPair=0; idxPair<adjPairs.length; idxPair++) adjPairs[idxPair] = 0/0;

                    if (method_pairs=="FDR (BH)") {
                        tmpAdj = bh_fdr_nanaware(pair_pvals);
                    } else {
                        tmpAdj = holm_nanaware(pair_pvals);
                    }
                    for (idxPair=0; idxPair<tmpAdj.length && idxPair<adjPairs.length; idxPair++) adjPairs[idxPair] = tmpAdj[idxPair];

                    for (idxPair=0; idxPair<pair_lines.length; idxPair++) {
                        out += pair_lines[idxPair] + "\t" + sci(adjPairs[idxPair]) + "\t" + sigStars(adjPairs[idxPair]) + "\n";
                    }
                }
            }

            File.saveString(out, outDir+"STATS_anova (ENG).txt");
            out_de = replace(out, ".", ",");
            File.saveString(out_de, outDir+"STATS_anova (GER).txt");
            print("\nSaved: "+outDir+"STATS_anova (ENG).txt");
            print("Saved: "+outDir+"STATS_anova (GER).txt");
        }
    }

    print("\nFinished.");
}

// =============================
// Helpers: parsing & collecting
// =============================
function uniqueStrings(arr) {
    u = newArray(0);
    for (i=0; i<arr.length; i++) {
        s = arr[i];
        found = false;
        for (j=0; j<u.length; j++) if (u[j]==s) {found=true; break;}
        if (!found) u = appendStr(u, s);
    }
    return u;
}
function appendStr(a, s) { return Array.concat(a, s); }
function appendNum(a, v) { return Array.concat(a, v); }
function joinStrings(a, sep) {
    if (a.length==0) return "";
    out = a[0];
    for (i=1; i<a.length; i++) out += sep + a[i];
    return out;
}
function joinNumbers(a, sep) {
    if (a.length==0) return "";
    out = ""+a[0];
    for (i=1; i<a.length; i++) out += sep + a[i];
    return out;
}
function collectParamForGroup(data, groups, g, pIndex) {
    out = newArray(0);
    for (i=0; i<data.length; i++) {
        if (groups[i]!=g) continue;
        fields = split(data[i], "\t");
        v = parseFloat(fields[pIndex]);
        if (v==v) out = Array.concat(out, v); // skip NaN
    }
    return out;
}

// =============================
// Basic stats
// =============================
function avg(a) {
    if (a.length==0) return 0/0;
    s=0; for (i=0;i<a.length;i++) s+=a[i];
    return s/a.length;
}
function variance(a, unbiased) {
    n=a.length; if (n<2) return 0/0;
    m=avg(a);
    ss=0; for (i=0;i<n;i++) ss+= (a[i]-m)*(a[i]-m);
    denom = n;
    if (unbiased) denom = n-1;
    return ss/denom;
}
function weightedMean(means, Ns) {
    num=0; den=0;
    for (i=0;i<means.length;i++) { num += means[i]*Ns[i]; den += Ns[i]; }
    if (den>0) return num/den;
    return 0/0;
}
function welchDF(s1,n1,s2,n2) {
    a = s1/n1 + s2/n2;
    b = (s1*s1)/(n1*n1*(n1-1)) + (s2*s2)/(n2*n2*(n2-1));
    return a*a / b;
}

// =============================
// p-values via incomplete beta
// =============================
function p_value_t_two_sided(t, df) {
    x = df / (df + t*t);
    return betai(0.5*df, 0.5, x);
}
function p_value_f_right(F, df1, df2) {
    x = df2 / (df2 + df1*F);
    return betai(0.5*df2, 0.5*df1, x);
}

// Regularized incomplete beta I_x(a,b)
function betai(a,b,x) {
    if (x<=0) return 0;
    if (x>=1) return 1;
    bt = exp(gammln(a+b) - gammln(a) - gammln(b) + a*log(x) + b*log(1.0 - x));
    if (x < (a+1.0)/(a+b+2.0)) return bt*betacf(a,b,x)/a;
    else return 1.0 - bt*betacf(b,a,1.0-x)/b;
}
function betacf(a,b,x) {
    MAXIT=200;
    EPS=3.0e-7;
    FPMIN=1.0e-30;
    qab=a+b; qap=a+1.0; qam=a-1.0;
    c=1.0;
    d=1.0 - qab*x/qap; if (abs(d)<FPMIN) d=FPMIN;
    d=1.0/d;
    h=d;
    for (m=1; m<=MAXIT; m++) {
        m2=2*m;
        aa = m*(b-m)*x/((qam+m2)*(a+m2));
        d = 1.0 + aa*d; if (abs(d)<FPMIN) d=FPMIN; d=1.0/d;
        c = 1.0 + aa/c; if (abs(c)<FPMIN) c=FPMIN;
        h *= d*c;
        aa = -(a+m)*(qab+m)*x/((a+m2)*(qap+m2));
        d = 1.0 + aa*d; if (abs(d)<FPMIN) d=FPMIN; d=1.0/d;
        c = 1.0 + aa/c; if (abs(c)<FPMIN) c=FPMIN;
        del = d*c;
        h *= del;
        if (abs(del-1.0) < EPS) break;
    }
    return h;
}
function gammln(xx) {
    cof = newArray(76.18009172947146,-86.50532032941677,24.01409824083091,
                   -1.231739572450155,0.001208650973866179,-5.395239384953e-6);
    x=xx; y=xx;
    tmp = x + 5.5;
    tmp -= (x + 0.5)*log(tmp);
    ser = 1.000000000190015;
    for (j=0; j<6; j++) { y += 1.0; ser += cof[j]/y; }
    return -tmp + log(2.5066282746310005*ser/x);
}

// =============================
// Multiple testing: BH-FDR & Holm
// =============================
function bh_fdr(pvals) {
    m = pvals.length;
    idx = newArray(m);
    for (i=0;i<m;i++) idx[i]=i;
    for (i=0;i<m-1;i++) {
        imin=i;
        for (j=i+1;j<m;j++) if (pvals[idx[j]] < pvals[idx[imin]]) imin=j;
        tmp=idx[i]; idx[i]=idx[imin]; idx[imin]=tmp;
    }
    q = newArray(m);
    minQ = 1.0;
    for (r=m-1; r>=0; r--) {
        i = idx[r];
        val = pvals[i]*m/(r+1);
        if (val<minQ) minQ=val;
        if (minQ<1.0) q[i]=minQ; else q[i]=1.0;
    }
    return q;
}
function bh_fdr_nanaware(pvals) {
    idxValid = newArray(0);
    pvValid  = newArray(0);
    for (i=0;i<pvals.length;i++) if (pvals[i]==pvals[i]) {
        idxValid = Array.concat(idxValid, i);
        pvValid  = Array.concat(pvValid, pvals[i]);
    }
    out = newArray(pvals.length);
    for (i=0;i<out.length;i++) out[i]=0/0;
    if (pvValid.length==0) return out;
    adjValid = bh_fdr(pvValid);
    for (k2=0;k2<idxValid.length;k2++) out[idxValid[k2]] = adjValid[k2];
    return out;
}
function holm(pvals) {
    m = pvals.length;
    idx = newArray(m);
    for (i=0;i<m;i++) idx[i]=i;
    for (i=0;i<m-1;i++) {
        imin=i;
        for (j=i+1;j<m;j++) if (pvals[idx[j]] < pvals[idx[imin]]) imin=j;
        tmp=idx[i]; idx[i]=idx[imin]; idx[imin]=tmp;
    }
    padj_sorted = newArray(m);
    for (r=0; r<m; r++) {
        i = idx[r];
        val = pvals[i] * (m - r);
        if (val>1.0) val = 1.0;
        padj_sorted[r] = val;
    }
    for (r=1; r<m; r++) {
        if (padj_sorted[r] < padj_sorted[r-1]) padj_sorted[r] = padj_sorted[r-1];
    }
    padj = newArray(m);
    for (r=0; r<m; r++) {
        i = idx[r];
        padj[i] = padj_sorted[r];
    }
    return padj;
}
function holm_nanaware(pvals) {
    idxValid = newArray(0);
    pvValid  = newArray(0);
    for (i=0;i<pvals.length;i++) if (pvals[i]==pvals[i]) {
        idxValid = Array.concat(idxValid, i);
        pvValid  = Array.concat(pvValid, pvals[i]);
    }
    out = newArray(pvals.length);
    for (i=0;i<out.length;i++) out[i]=0/0;
    if (pvValid.length==0) return out;
    adjValid = holm(pvValid);
    for (k2=0;k2<idxValid.length;k2++) out[idxValid[k2]] = adjValid[k2];
    return out;
}

// Unified adjuster (keine Pflichtnutzung; bleibt verfügbar)
function adjustByMethod(pvals, method) {
    if (method=="None") return newArray(0);
    if (method=="FDR (BH)") return bh_fdr_nanaware(pvals);
    if (method=="Holm") return holm_nanaware(pvals);
    return newArray(0);
}

// =============================
// Formatting & stars
// =============================
function d3(v) { return ""+round(v*1000)/1000; }
function sci(v) {
    if (v!=v) return "NA";
    if (v==0) return "0";
    e = floor(log(abs(v))/log(10));
    m = v / pow(10,e);
    return ""+d3(m)+"e"+e;
}
// Prism-style significance stars
function sigStars(p) {
    if (p!=p) return "NA";        // NaN
    if (p <= 0.0001) return "****";
    if (p <= 0.001)  return "***";
    if (p <= 0.01)   return "**";
    if (p <= 0.05)   return "*";
    return "ns";
}

}


if (option=="13. Comparison & visualization (single cells)") {	

// ============================================================
// QP ADD-ON (SELF-CONTAINED, SAFE TO APPEND / REPLACE)
// Quick bar-plots from STATS_mannwhitney OR STATS_kruskalwallis
//
// NEW:
// - Means + SD are always computed from the ANOVA_Ready LONG file
// - Stats file is used only for significance stars / brackets
// - User chooses BASELINE group (=100%), which is moved to the LEFT
// - Supports 2 groups (MW) and 3+ groups (KW pairwise stars)
//
// Output PNG:
//   _BASELINE_<group>_<MW/KW>_TIME_GRID_3x5.png
// ============================================================


// -----------------------------
// ENTRY: call at very end
// -----------------------------
QP_quickPlotsWizard();

function QP_quickPlotsWizard() {

    Dialog.create("Quick Visualization (MW / KW)");
    Dialog.addCheckbox("Create bar plot grid (means ± SD) + Prism stars now?", true);
    Dialog.show();
    if (!Dialog.getCheckbox()) return;

    QP_statsPath = File.openDialog("Select STATS_mannwhitney... or STATS_kruskalwallis... LONG (ENG).txt");
    if (QP_statsPath=="") return;

    QP_makeQuickBarPlots_fromStats(QP_statsPath);
}


// ============================================================
// CORE
// ============================================================
function QP_makeQuickBarPlots_fromStats(QP_statsPath) {

    QP_statsTxt = File.openAsString(QP_statsPath);
    if (QP_statsTxt=="") exit("Stats file is empty.");

    QP_statsTxt = replace(QP_statsTxt, "\r", "");
    QP_mode = QP_detectStatsMode(QP_statsTxt, QP_statsPath);
    if (QP_mode=="") exit("Could not detect stats mode. Expected Mann-Whitney or Kruskal-Wallis.");

    // normalize stats path first
    QP_statsPath = replace(QP_statsPath, "\\", "/");
    QP_outDir = QP_dirOf(QP_statsPath);

    // extract LONG path from stats file
    QP_longPath = QP_extractInputPathFromStats(QP_statsTxt);
    if (QP_longPath=="") {
        QP_longPath = File.openDialog("Could not find Input path in stats file.\nPlease select the matching ANOVA_Ready_Data ... LONG file manually.");
        if (QP_longPath=="") exit("Aborted.");
    }
    QP_longPath = replace(QP_longPath, "\\", "/");

    // resolve LONG path robustly
    QP_longPath = QP_resolveLongPath(QP_statsPath, QP_longPath);

    QP_base = QP_baseNameNoExt(QP_statsPath);
    QP_base = QP_cleanStatsBase(QP_base);

    // groups from LONG
    QP_groups = QP_getGroupsFromLong(QP_longPath);
    if (lengthOf(QP_groups) < 2)
        exit("LONG file must contain at least 2 groups in 'Group_Assignment'.");

    // baseline selection
    Dialog.create("Bar Order / Baseline");
    Dialog.addMessage("Detected groups from LONG file:\n" + QP_joinArray(QP_groups, ", ") + "\n\nSelect the BASELINE group.\nThis group will be LEFT and shown as 100%.");
    Dialog.addChoice("LEFT bar / baseline (=100%):", QP_groups, QP_groups[0]);
    Dialog.show();
    QP_baseline = Dialog.getChoice();

    QP_groupsOrdered = QP_reorderGroupsWithBaseline(QP_groups, QP_baseline);
    QP_nGroups = lengthOf(QP_groupsOrdered);

    // labels
    Dialog.create("Value Labels");
    Dialog.addCheckbox("Show value labels (absolute + %)?", true);
    Dialog.show();
    QP_showValueLabels = Dialog.getCheckbox();
    if (QP_showValueLabels) QP_showValueLabels = 1;
    else QP_showValueLabels = 0;

    // parameters
    QP_TimeParams = newArray(
        "PeakTimes10% mean [s]",   "Systoles10% mean [s]",   "Diastoles10% mean [s]",
        "PeakTimesUser mean [s]",  "SystolesUser mean [s]",  "DiastolesUser mean [s]",
        "PeakTimes50% mean [s]",   "Systoles50% mean [s]",   "Diastoles50% mean [s]",
        "PeakTimes90% mean [s]",   "Systoles90% mean [s]",   "Diastoles90% mean [s]"
    );

    QP_TimeLabels = newArray(
        "PeakTime Thr10%", "Syst Thr10%", "Diast Thr10%",
        "PeakTime UserThr","Syst UserThr","Diast UserThr",
        "PeakTime 50%", "Syst Thr50%", "Diast Thr50%",
        "PeakTime 90%", "Syst Thr90%", "Diast Thr90%"
    );

    QP_AmpParam  = "Amplitudes mean [au]";
    QP_BeatParam = "BeatTimes mean [s]";
    QP_FreqParam = "Frequencies mean [1/s]";

    QP_GridParams = QP_TimeParams;
    QP_GridParams = Array.concat(QP_GridParams, QP_AmpParam);
    QP_GridParams = Array.concat(QP_GridParams, QP_BeatParam);
    QP_GridParams = Array.concat(QP_GridParams, QP_FreqParam);

    QP_GridLabels = QP_TimeLabels;
    QP_GridLabels = Array.concat(QP_GridLabels, "Amplitude");
    QP_GridLabels = Array.concat(QP_GridLabels, "BeatTimes");
    QP_GridLabels = Array.concat(QP_GridLabels, "Frequencies");

    QP_nParams = lengthOf(QP_GridParams);

    // flattened matrices: [paramIndex * nGroups + groupIndex]
    QP_meansFlat = newArray(QP_nParams * QP_nGroups);
    QP_sdsFlat   = newArray(QP_nParams * QP_nGroups);
    QP_okFlags   = newArray(QP_nParams);

    for (QP_pi=0; QP_pi<QP_nParams; QP_pi++) {
        QP_res = QP_meanSdFromLong_groups(QP_longPath, QP_groupsOrdered, QP_GridParams[QP_pi]);
        QP_okFlags[QP_pi] = QP_res[0];

        for (QP_gi=0; QP_gi<QP_nGroups; QP_gi++) {
            QP_meansFlat[QP_pi*QP_nGroups + QP_gi] = QP_res[1 + QP_gi];
            QP_sdsFlat[QP_pi*QP_nGroups + QP_gi]   = QP_res[1 + QP_nGroups + QP_gi];
        }
    }

    QP_drawTimeGrid_generic(
        QP_outDir, QP_base, QP_mode, QP_baseline, QP_groupsOrdered,
        QP_GridLabels, QP_GridParams, QP_meansFlat, QP_sdsFlat, QP_okFlags,
        QP_statsTxt, QP_showValueLabels
    );

    print("Quick plots saved to: " + QP_outDir);
}


// ============================================================
// DRAWING
// ============================================================
function QP_drawTimeGrid_generic(QP_outDir, QP_base, QP_mode, QP_baseline, QP_groupsOrdered,
                                 QP_labels, QP_params, QP_meansFlat, QP_sdsFlat, QP_okFlags,
                                 QP_statsTxt, QP_showLabels) {

    QP_W = 1400;
    QP_H = 1300;

    QP_title = "QP_TIME_GRID_3x5";
    newImage(QP_title, "RGB white", QP_W, QP_H, 1);

    // colors: baseline first = warm red, then blue/green/violet/ochre...
    QP_cR = newArray(200,  70,  80, 150, 220, 100);
    QP_cG = newArray( 90, 110, 170, 100, 150, 120);
    QP_cB = newArray( 90, 200,  90, 210,  70, 180);

    // header
    setColor(0,0,0);
    setFont("SansSerif", 26, "antialiased");
    drawString("Parameters (means ± SD)", 30, 35);

    // legend
    setFont("SansSerif", 24, "antialiased");
    QP_drawLegendMulti(40, 40, QP_groupsOrdered, QP_cR, QP_cG, QP_cB);

    // grid geometry
    QP_gridX = 30;
    QP_gridY = 95;
    QP_gridW = QP_W - 60;
    QP_gridH = QP_H - 130;

    QP_cols = 3;
    QP_rows = 5;
    QP_cellW = QP_gridW / QP_cols;
    QP_cellH = QP_gridH / QP_rows;

    // grid lines
    setColor(220,220,220);
    setLineWidth(1);
    for (QP_cc=0; QP_cc<=QP_cols; QP_cc++) {
        QP_x = QP_gridX + QP_cc*QP_cellW;
        makeLine(QP_x, QP_gridY, QP_x, QP_gridY+QP_gridH);
        run("Draw");
    }
    for (QP_rr=0; QP_rr<=QP_rows; QP_rr++) {
        QP_y = QP_gridY + QP_rr*QP_cellH;
        makeLine(QP_gridX, QP_y, QP_gridX+QP_gridW, QP_y);
        run("Draw");
    }

    QP_nGroups = lengthOf(QP_groupsOrdered);

    // fill cells
    QP_idx = 0;
    for (QP_rr=0; QP_rr<QP_rows; QP_rr++) {
        for (QP_cc=0; QP_cc<QP_cols; QP_cc++) {

            QP_cellX = QP_gridX + QP_cc*QP_cellW;
            QP_cellY = QP_gridY + QP_rr*QP_cellH;

            if (QP_idx < lengthOf(QP_labels) && QP_okFlags[QP_idx]==1) {

                QP_meansOne = newArray(QP_nGroups);
                QP_sdsOne   = newArray(QP_nGroups);

                for (QP_gi=0; QP_gi<QP_nGroups; QP_gi++) {
                    QP_meansOne[QP_gi] = QP_meansFlat[QP_idx*QP_nGroups + QP_gi];
                    QP_sdsOne[QP_gi]   = QP_sdsFlat[QP_idx*QP_nGroups + QP_gi];
                }

                if (QP_mode=="MW")
                    QP_sigPairs = QP_getSigPairsForParam_MW(QP_statsTxt, QP_params[QP_idx], QP_groupsOrdered);
                else
                    QP_sigPairs = QP_getSigPairsForParam_KW(QP_statsTxt, QP_params[QP_idx], QP_groupsOrdered);

                QP_unit = " s";
                QP_absDigits = 4;
                QP_pctDigits = 1;

                if (QP_idx==12) {
                    QP_unit = " au";
                    QP_absDigits = 3;
                } else if (QP_idx==14) {
                    QP_unit = " 1/s";
                    QP_absDigits = 4;
                }

                QP_drawMiniBars(
                    QP_cellX, QP_cellY, QP_cellW, QP_cellH,
                    QP_labels[QP_idx],
                    QP_groupsOrdered, QP_meansOne, QP_sdsOne, QP_sigPairs,
                    QP_cR, QP_cG, QP_cB,
                    QP_showLabels, QP_unit, QP_absDigits, QP_pctDigits
                );
            }

            QP_idx++;
        }
    }

    QP_baseTag = QP_safeToken(QP_baseline);
    saveAs("PNG", QP_outDir + QP_base + "_BASELINE_" + QP_baseTag + "_" + QP_mode + "_TIME_GRID_3x5.png");
    close();
}


function QP_drawLegendBox(QP_x, QP_y, QP_r,QP_g,QP_b, QP_text) {

    QP_yShift = 8;
    QP_box = 18;
    QP_y2  = QP_y + QP_yShift;

    setColor(QP_r,QP_g,QP_b);
    makeRectangle(QP_x, QP_y2, QP_box, QP_box);
    run("Fill");

    setColor(0,0,0);
    makeRectangle(QP_x, QP_y2, QP_box, QP_box);
    run("Draw");

    drawString(QP_text, QP_x + QP_box + 10, QP_y2 + QP_box + 5);
}

function QP_drawLegendMulti(QP_x, QP_y, QP_groupNames, QP_cR, QP_cG, QP_cB) {
    QP_dx = 230;
    for (QP_i=0; QP_i<lengthOf(QP_groupNames); QP_i++) {
        QP_drawLegendBox(
            QP_x + QP_i*QP_dx, QP_y,
            QP_cR[QP_i % lengthOf(QP_cR)],
            QP_cG[QP_i % lengthOf(QP_cG)],
            QP_cB[QP_i % lengthOf(QP_cB)],
            QP_groupNames[QP_i]
        );
    }
}


// Generic mini bar plot: n bars + upward SD + multiple Prism-like brackets + abs/% labels
function QP_drawMiniBars(QP_cellX, QP_cellY, QP_cellW, QP_cellH,
                         QP_label,
                         QP_groupNames, QP_means, QP_sds, QP_sigPairs,
                         QP_cR, QP_cG, QP_cB,
                         QP_showLabels, QP_unitSuffix, QP_absDigits, QP_pctDigits) {

    QP_n = lengthOf(QP_groupNames);

    // margins
    QP_L = 40; QP_R = 14; QP_T = 30; QP_B = 34;

    QP_plotX = QP_cellX + QP_L;
    QP_plotY = QP_cellY + QP_T;
    QP_plotW = QP_cellW - QP_L - QP_R;
    QP_plotH = QP_cellH - QP_T - QP_B;
    QP_y0 = QP_plotY + QP_plotH;

    // sanitize + max
    QP_vmax = 0;
    for (QP_i=0; QP_i<QP_n; QP_i++) {
        if (QP_sds[QP_i] != QP_sds[QP_i]) QP_sds[QP_i] = 0;
        if (QP_means[QP_i] != QP_means[QP_i]) QP_means[QP_i] = 0;
        if (QP_means[QP_i] < 0) QP_means[QP_i] = 0;
        if (QP_means[QP_i] + QP_sds[QP_i] > QP_vmax) QP_vmax = QP_means[QP_i] + QP_sds[QP_i];
    }
    if (QP_vmax <= 0) QP_vmax = 1;

    QP_sigCount = QP_countSignificantPairs(QP_sigPairs);
    QP_yMax = QP_vmax * (1.18 + 0.12*QP_sigCount);
    if (QP_yMax <= 0) QP_yMax = 1;

    // axis
    setColor(0,0,0);
    setLineWidth(2);
    makeLine(QP_plotX, QP_y0, QP_plotX+QP_plotW, QP_y0);
    run("Draw");

    // label
    setFont("SansSerif", 22, "antialiased");
    drawString(QP_label, QP_cellX + 8, QP_cellY + 28);

    // x positions
    QP_xs = newArray(QP_n);
    QP_barW = QP_plotW / (QP_n * 3.2);
    if (QP_barW > 42) QP_barW = 42;
    if (QP_barW < 12) QP_barW = 12;

    for (QP_i=0; QP_i<QP_n; QP_i++) {
        QP_xs[QP_i] = QP_plotX + QP_plotW * (QP_i + 1) / (QP_n + 1);
    }

    // bars + SD
    setLineWidth(2);
    for (QP_i=0; QP_i<QP_n; QP_i++) {

        QP_h = (QP_means[QP_i] / QP_yMax) * QP_plotH;
        QP_y = QP_y0 - QP_h;

        setColor(
            QP_cR[QP_i % lengthOf(QP_cR)],
            QP_cG[QP_i % lengthOf(QP_cG)],
            QP_cB[QP_i % lengthOf(QP_cB)]
        );
        makeRectangle(QP_xs[QP_i] - QP_barW/2, QP_y, QP_barW, QP_h);
        run("Fill");

        setColor(0,0,0);
        makeRectangle(QP_xs[QP_i] - QP_barW/2, QP_y, QP_barW, QP_h);
        run("Draw");

        QP_sdH = (QP_sds[QP_i] / QP_yMax) * QP_plotH;
        QP_wTop = QP_y - QP_sdH;

        makeLine(QP_xs[QP_i], QP_y, QP_xs[QP_i], QP_wTop);
        run("Draw");
        makeLine(QP_xs[QP_i]-8, QP_wTop, QP_xs[QP_i]+8, QP_wTop);
        run("Draw");
    }

    // significance brackets
    if (lengthOf(QP_sigPairs) > 0 && QP_sigPairs[0] > 0) {

        QP_tick = 8;
        QP_drawn = 0;

        for (QP_pi=0; QP_pi<QP_sigPairs[0]; QP_pi++) {

            QP_pos = 1 + 3*QP_pi;
            QP_i1 = round(QP_sigPairs[QP_pos]);
            QP_i2 = round(QP_sigPairs[QP_pos+1]);
            QP_pv = QP_sigPairs[QP_pos+2];

            QP_stars = QP_starsOnly(QP_pv);
            if (QP_stars=="") continue;

            if (QP_i1 > QP_i2) {
                QP_tmp = QP_i1;
                QP_i1 = QP_i2;
                QP_i2 = QP_tmp;
            }

            QP_yStarVal = QP_vmax * (1.06 + 0.12*QP_drawn);
            QP_yStar = QP_y0 - (QP_yStarVal / QP_yMax) * QP_plotH;

            setColor(0,0,0);
            setLineWidth(2);

            makeLine(QP_xs[QP_i1], QP_yStar+QP_tick, QP_xs[QP_i1], QP_yStar);
            run("Draw");
            makeLine(QP_xs[QP_i2], QP_yStar+QP_tick, QP_xs[QP_i2], QP_yStar);
            run("Draw");
            makeLine(QP_xs[QP_i1], QP_yStar, QP_xs[QP_i2], QP_yStar);
            run("Draw");

            setFont("SansSerif", 30, "antialiased");
            QP_xMid = (QP_xs[QP_i1] + QP_xs[QP_i2]) / 2.0;
            QP_wApprox = QP_textWidthApprox(QP_stars, 16);
            drawString(QP_stars, QP_xMid - QP_wApprox/2.0, QP_yStar - 4);

            QP_drawn++;
        }
    }

    // labels (baseline = first group = 100%)
    if (QP_showLabels==1) {

        QP_baseMean = QP_means[0];
        setColor(0,0,0);
        setFont("SansSerif", 18, "antialiased");

        for (QP_i=0; QP_i<QP_n; QP_i++) {

            if (QP_i==0) QP_pct = 100;
            else {
                QP_pct = 0/0;
                if (QP_baseMean > 0) QP_pct = (QP_means[QP_i] / QP_baseMean) * 100;
            }

            QP_absS = QP_fmtAbs(QP_means[QP_i], QP_unitSuffix, QP_absDigits);
            QP_pctS = QP_fmtPct(QP_pct, QP_pctDigits);

            QP_yAbs = QP_yTopOfMean(QP_means[QP_i], QP_y0, QP_plotH, QP_yMax) + 14;
            if (QP_yAbs < QP_plotY + 22) QP_yAbs = QP_plotY + 22;
            QP_yPct = QP_yAbs + 18;

            if (QP_yPct > QP_y0 - 6) {
                QP_shift = QP_yPct - (QP_y0 - 6);
                QP_yAbs = QP_yAbs - QP_shift;
                QP_yPct = QP_yPct - QP_shift;
            }

            QP_wA = QP_textWidthApprox(QP_absS, 7);
            QP_wP = QP_textWidthApprox(QP_pctS, 7);
            QP_wM = QP_max2(QP_wA, QP_wP);

            drawString(QP_absS, QP_xs[QP_i] - QP_wM/2, QP_yAbs);
            drawString(QP_pctS, QP_xs[QP_i] - QP_wM/2, QP_yPct);
        }
    }
}


// ============================================================
// SIGNIFICANCE PARSING
// ============================================================

// MW -> [count, idx1, idx2, p]
function QP_getSigPairsForParam_MW(QP_statsTxt, QP_paramName, QP_groupsOrdered) {

    QP_lines = split(QP_statsTxt, "\n");
    QP_g1 = "";
    QP_g2 = "";
    QP_inMain = 0;

    for (QP_i=0; QP_i<lengthOf(QP_lines); QP_i++) {
        QP_L = QP_lines[QP_i];

        if (startsWith(QP_L, "Groups\t")) {
            QP_parts = split(QP_L, "\t");
            if (lengthOf(QP_parts)>1) {
                QP_vs = QP_parts[1];
                QP_vsParts = split(QP_vs, " vs ");
                if (lengthOf(QP_vsParts)>=2) {
                    QP_g1 = QP_vsParts[0];
                    QP_g2 = QP_vsParts[1];
                }
            }
        }

        if (startsWith(QP_L, "Param\t")) {
            QP_inMain = 1;
            continue;
        }

        if (QP_inMain==1) {
            if (startsWith(QP_L, "Adjusted p-values")) break;
            if (QP_L=="") continue;

            QP_parts = split(QP_L, "\t");
            if (lengthOf(QP_parts) < 9) continue;

            if (QP_parts[0] == QP_paramName) {

                QP_p = QP_parseFloatSafe(QP_parts[8]);
                QP_i1 = QP_findStringIndex(QP_groupsOrdered, QP_g1);
                QP_i2 = QP_findStringIndex(QP_groupsOrdered, QP_g2);

                if (QP_i1 < 0 || QP_i2 < 0) return newArray(0);
                return newArray(1, QP_i1, QP_i2, QP_p);
            }
        }
    }

    return newArray(0);
}


// KW -> [count, idx1, idx2, q_or_p, idx1, idx2, q_or_p, ...]
function QP_getSigPairsForParam_KW(QP_statsTxt, QP_paramName, QP_groupsOrdered) {

    QP_lines = split(QP_statsTxt, "\n");
    QP_inBlock = 0;
    QP_foundHeader = 0;
    QP_out = newArray(0);

    for (QP_i=0; QP_i<lengthOf(QP_lines); QP_i++) {
        QP_L = QP_lines[QP_i];

        if (startsWith(QP_L, "# ")) {
            if (QP_inBlock==1) break;

            QP_blockName = substring(QP_L, 2);
            if (QP_blockName == QP_paramName) {
                QP_inBlock = 1;
                QP_foundHeader = 0;
                continue;
            }
        }

        if (QP_inBlock==1) {

            if (QP_L=="") continue;

            if (QP_foundHeader==0) {
                if (startsWith(QP_L, "GroupA\tGroupB\t")) {
                    QP_foundHeader = 1;
                }
                continue;
            }

            if (startsWith(QP_L, "# ")) break;

            QP_parts = split(QP_L, "\t");
            if (lengthOf(QP_parts) < 10) continue;

            QP_g1 = QP_parts[0];
            QP_g2 = QP_parts[1];

            QP_p = QP_parseFloatSafe(QP_parts[9]);
            QP_q = 0/0;
            if (lengthOf(QP_parts) > 11) QP_q = QP_parseFloatSafe(QP_parts[11]);

            if (QP_q == QP_q) QP_use = QP_q;
            else QP_use = QP_p;

            QP_i1 = QP_findStringIndex(QP_groupsOrdered, QP_g1);
            QP_i2 = QP_findStringIndex(QP_groupsOrdered, QP_g2);

            if (QP_i1 >= 0 && QP_i2 >= 0) {
                QP_out = QP_arrayAppend(QP_out, QP_i1);
                QP_out = QP_arrayAppend(QP_out, QP_i2);
                QP_out = QP_arrayAppend(QP_out, QP_use);
            }
        }
    }

    if (lengthOf(QP_out)==0) return newArray(0);

    QP_count = lengthOf(QP_out)/3;
    QP_final = newArray(1 + lengthOf(QP_out));
    QP_final[0] = QP_count;
    for (QP_i=0; QP_i<lengthOf(QP_out); QP_i++) QP_final[QP_i+1] = QP_out[QP_i];
    return QP_final;
}


function QP_countSignificantPairs(QP_sigPairs) {
    if (lengthOf(QP_sigPairs)==0) return 0;
    if (QP_sigPairs[0] <= 0) return 0;

    QP_n = 0;
    for (QP_i=0; QP_i<QP_sigPairs[0]; QP_i++) {
        QP_pv = QP_sigPairs[1 + 3*QP_i + 2];

        if (QP_pv == QP_pv) {
            if (QP_pv < 0.05) QP_n++;
        }
    }
    return QP_n;
}


// ============================================================
// DATA / PARSING
// ============================================================
function QP_detectStatsMode(QP_statsTxt, QP_statsPath) {

    if (indexOf(QP_statsTxt, "Mode\tMann-Whitney") >= 0) return "MW";
    if (indexOf(QP_statsTxt, "Mode\tKruskal-Wallis") >= 0) return "KW";

    QP_name = QP_baseNameNoExt(QP_statsPath);
    if (startsWith(QP_name, "STATS_mannwhitney")) return "MW";
    if (startsWith(QP_name, "STATS_kruskalwallis")) return "KW";

    return "";
}

function QP_extractInputPathFromStats(QP_statsTxt) {

    QP_statsTxt = replace(QP_statsTxt, "\r", "");

    // 1) exact line starting with Input\t
    QP_lines = split(QP_statsTxt, "\n");
    for (QP_i=0; QP_i<lengthOf(QP_lines); QP_i++) {
        QP_L = QP_lines[QP_i];
        if (startsWith(QP_L, "Input\t")) {
            QP_parts = split(QP_L, "\t");
            if (lengthOf(QP_parts)>1) return QP_parts[1];
        }
    }

    // 2) inline "... Input\t<path>"
    QP_pos = indexOf(QP_statsTxt, "Input\t");
    if (QP_pos >= 0) {
        QP_start = QP_pos + lengthOf("Input\t");
        QP_rest = substring(QP_statsTxt, QP_start);
        QP_nl = indexOf(QP_rest, "\n");
        if (QP_nl >= 0) return substring(QP_rest, 0, QP_nl);
        return QP_rest;
    }

    return "";
}

function QP_resolveLongPath(QP_statsPath, QP_longPathFromStats) {

    QP_candidate = "" + QP_longPathFromStats;
    QP_candidate = replace(QP_candidate, "\\", "/");

    // 1) exact path from stats file
    if (QP_isReadableLongFile(QP_candidate))
        return QP_candidate;

    // 2) same filename, but in stats directory
    QP_statsDir = QP_dirOf(QP_statsPath);
    QP_longFile = QP_fileNameOnly(QP_candidate);
    QP_candidate2 = QP_statsDir + QP_longFile;

    if (QP_isReadableLongFile(QP_candidate2))
        return QP_candidate2;

    // 3) search for likely LONG file in stats directory
    QP_candidate3 = QP_findLikelyLongInDir(QP_statsDir);
    if (QP_candidate3 != "")
        return QP_candidate3;

    // 4) ask manually
    QP_manual = File.openDialog("Could not resolve LONG file automatically.\nPlease select the matching ANOVA_Ready_Data ... LONG file manually.");
    if (QP_manual == "")
        exit("Aborted: LONG file could not be resolved.");

    QP_manual = replace(QP_manual, "\\", "/");
    if (!QP_isReadableLongFile(QP_manual))
        exit("Selected LONG file could not be read or is not a valid LONG file.");

    return QP_manual;
}

function QP_isReadableLongFile(QP_path) {

    if (QP_path == "") return false;
    QP_path = replace(QP_path, "\\", "/");

    if (!File.exists(QP_path)) return false;

    QP_txt = File.openAsString(QP_path);
    if (QP_txt == "") return false;
    if (QP_txt == "0") return false;

    QP_txt = replace(QP_txt, "\r", "");
    if (indexOf(QP_txt, "Group_Assignment") < 0) return false;
    if (indexOf(QP_txt, "Probe_ID") < 0) return false;

    return true;
}

function QP_findLikelyLongInDir(QP_dir) {

    QP_list = getFileList(QP_dir);
    if (lengthOf(QP_list) == 0) return "";

    // pass 1: prefer ANOVA_Ready_Data ... LONG ...
    for (QP_i=0; QP_i<lengthOf(QP_list); QP_i++) {
        QP_name = QP_list[QP_i];
        if (endsWith(QP_name, "/")) continue;

        if (startsWith(QP_name, "ANOVA_Ready_Data") && indexOf(QP_name, "LONG") >= 0) {
            QP_candidate = QP_dir + QP_name;
            if (QP_isReadableLongFile(QP_candidate))
                return QP_candidate;
        }
    }

    // pass 2: any readable txt with LONG structure
    for (QP_i=0; QP_i<lengthOf(QP_list); QP_i++) {
        QP_name = QP_list[QP_i];
        if (endsWith(QP_name, "/")) continue;

        if (endsWith(QP_name, ".txt")) {
            QP_candidate = QP_dir + QP_name;
            if (QP_isReadableLongFile(QP_candidate))
                return QP_candidate;
        }
    }

    return "";
}

function QP_getGroupsFromLong(QP_longPath) {

    QP_txt = File.openAsString(QP_longPath);
    QP_txt = replace(QP_txt, "\r", "");
    QP_lines = split(QP_txt, "\n");
    if (lengthOf(QP_lines) < 2) return newArray(0);

    QP_header = split(QP_lines[0], "\t");
    QP_gCol = -1;

    for (QP_i=0; QP_i<lengthOf(QP_header); QP_i++) {
        if (QP_header[QP_i] == "Group_Assignment") QP_gCol = QP_i;
    }
    if (QP_gCol < 0) return newArray(0);

    QP_groups = newArray(0);

    for (QP_r=1; QP_r<lengthOf(QP_lines); QP_r++) {
        QP_line = QP_lines[QP_r];
        if (trim(QP_line)=="") continue;

        QP_parts = split(QP_line, "\t");
        if (lengthOf(QP_parts) <= QP_gCol) continue;

        QP_g = trim(QP_parts[QP_gCol]);
        if (!QP_isBadToken(QP_g) && !QP_arrayContains(QP_groups, QP_g))
            QP_groups = QP_arrayAppend(QP_groups, QP_g);
    }

    return QP_groups;
}

function QP_reorderGroupsWithBaseline(QP_groups, QP_baseline) {
    QP_out = newArray(0);
    QP_out = QP_arrayAppend(QP_out, QP_baseline);

    for (QP_i=0; QP_i<lengthOf(QP_groups); QP_i++) {
        if (QP_groups[QP_i] != QP_baseline)
            QP_out = QP_arrayAppend(QP_out, QP_groups[QP_i]);
    }
    return QP_out;
}


// Return [okFlag, mean1..meanN, sd1..sdN]
function QP_meanSdFromLong_groups(QP_longPath, QP_groupsOrdered, QP_paramName) {

    QP_txt = File.openAsString(QP_longPath);
    QP_txt = replace(QP_txt, "\r", "");
    QP_lines = split(QP_txt, "\n");
    QP_nGroups = lengthOf(QP_groupsOrdered);

    QP_res = newArray(1 + 2*QP_nGroups);

    if (lengthOf(QP_lines) < 2) {
        QP_res[0] = 0;
        return QP_res;
    }

    QP_header = split(QP_lines[0], "\t");
    QP_gCol = -1;
    QP_pCol = -1;

    for (QP_i=0; QP_i<lengthOf(QP_header); QP_i++) {
        if (QP_header[QP_i]=="Group_Assignment") QP_gCol = QP_i;
        if (QP_header[QP_i]==QP_paramName)       QP_pCol = QP_i;
    }

    if (QP_gCol<0 || QP_pCol<0) {
        QP_res[0] = 0;
        return QP_res;
    }

    QP_res[0] = 1;

    QP_nArr    = newArray(QP_nGroups);
    QP_meanArr = newArray(QP_nGroups);
    QP_M2Arr   = newArray(QP_nGroups);

    for (QP_r=1; QP_r<lengthOf(QP_lines); QP_r++) {
        QP_line = QP_lines[QP_r];
        if (QP_line=="") continue;

        QP_parts = split(QP_line, "\t");
        if (lengthOf(QP_parts) <= QP_pCol || lengthOf(QP_parts) <= QP_gCol) continue;

        QP_grp = QP_parts[QP_gCol];
        QP_raw = QP_parts[QP_pCol];
        QP_v   = QP_parseFloatSafe(QP_raw);

        if (QP_v != QP_v) continue;

        QP_gi = QP_findStringIndex(QP_groupsOrdered, QP_grp);
        if (QP_gi < 0) continue;

        QP_nArr[QP_gi]++;
        QP_delta = QP_v - QP_meanArr[QP_gi];
        QP_meanArr[QP_gi] = QP_meanArr[QP_gi] + QP_delta / QP_nArr[QP_gi];
        QP_M2Arr[QP_gi]   = QP_M2Arr[QP_gi] + QP_delta * (QP_v - QP_meanArr[QP_gi]);
    }

    for (QP_gi=0; QP_gi<QP_nGroups; QP_gi++) {
        QP_sd = 0/0;
        if (QP_nArr[QP_gi] > 1) QP_sd = sqrt(QP_M2Arr[QP_gi] / (QP_nArr[QP_gi] - 1));
        if (QP_nArr[QP_gi] == 0) QP_meanArr[QP_gi] = 0/0;

        QP_res[1 + QP_gi] = QP_meanArr[QP_gi];
        QP_res[1 + QP_nGroups + QP_gi] = QP_sd;
    }

    return QP_res;
}


// ============================================================
// HELPERS
// ============================================================
function QP_findStringIndex(arr, s) {
    for (QP_i=0; QP_i<lengthOf(arr); QP_i++) if (arr[QP_i]==s) return QP_i;
    return -1;
}

function QP_parseFloatSafe(raw) {
    if (raw=="") return 0/0;
    QP_s = "" + raw;
    QP_s = replace(QP_s, " ", "");
    QP_s = replace(QP_s, ",", ".");
    if (QP_s=="NaN" || QP_s=="Infinity" || QP_s=="-Infinity") return 0/0;
    return parseFloat(QP_s);
}

function QP_isBadToken(s) {
    QP_t = toLowerCase(trim(s));
    if (QP_t == "" || QP_t == "na" || QP_t == "nan" || QP_t == "inf") return 1;
    return 0;
}

function QP_starsOnly(p) {
    if (p!=p) return "";
    if (p < 0.0001) return "****";
    if (p < 0.001)  return "***";
    if (p < 0.01)   return "**";
    if (p < 0.05)   return "*";
    return "";
}

function QP_max2(a,b) {
    if (a>b) return a;
    return b;
}

function QP_textWidthApprox(str, pxPerChar) {
    if (str=="") return 0;
    return lengthOf(str) * pxPerChar;
}

function QP_dirOf(QP_path) {
    QP_p = replace(QP_path, "\\", "/");
    QP_last = -1;
    for (QP_i=0; QP_i<lengthOf(QP_p); QP_i++) {
        if (substring(QP_p, QP_i, QP_i+1)=="/") QP_last = QP_i;
    }
    if (QP_last < 0) return "";
    return substring(QP_p, 0, QP_last+1);
}

function QP_fileNameOnly(QP_path) {
    QP_p = replace(QP_path, "\\", "/");
    QP_last = -1;
    for (QP_i=0; QP_i<lengthOf(QP_p); QP_i++) {
        if (substring(QP_p, QP_i, QP_i+1)=="/") QP_last = QP_i;
    }
    if (QP_last < 0) return QP_p;
    return substring(QP_p, QP_last+1);
}

function QP_baseNameNoExt(QP_path) {
    QP_name = QP_fileNameOnly(QP_path);
    if (endsWith(QP_name, ".txt")) QP_name = substring(QP_name, 0, lengthOf(QP_name)-4);
    return QP_name;
}

function QP_cleanStatsBase(QP_base) {

    QP_b = "" + QP_base;

    if (startsWith(QP_b, "STATS_mannwhitney__"))   QP_b = substring(QP_b, lengthOf("STATS_mannwhitney__"));
    if (startsWith(QP_b, "STATS_mannwhitney_"))    QP_b = substring(QP_b, lengthOf("STATS_mannwhitney_"));
    if (startsWith(QP_b, "STATS_kruskalwallis__")) QP_b = substring(QP_b, lengthOf("STATS_kruskalwallis__"));
    if (startsWith(QP_b, "STATS_kruskalwallis_"))  QP_b = substring(QP_b, lengthOf("STATS_kruskalwallis_"));

    QP_b = replace(QP_b, " (ENG)", "");
    QP_b = replace(QP_b, " (GER)", "");
    QP_b = replace(QP_b, "(ENG)", "");
    QP_b = replace(QP_b, "(GER)", "");
    QP_b = replace(QP_b, "()", "");
    QP_b = replace(QP_b, " ()", "");
    QP_b = replace(QP_b, "  ", " ");
    QP_b = replace(QP_b, "  ", " ");

    return QP_b;
}

function QP_fmtAbs(QP_abs, QP_unitSuffix, QP_absDigits) {
    return d2s(QP_abs, QP_absDigits) + QP_unitSuffix;
}

function QP_fmtPct(QP_pct, QP_pctDigits) {
    if (QP_pct!=QP_pct) return "(NA)";
    return "(" + d2s(QP_pct, QP_pctDigits) + "%)";
}

function QP_yTopOfMean(QP_mean, QP_y0, QP_plotH, QP_yMax) {
    if (QP_yMax<=0) return QP_y0;
    return QP_y0 - (QP_mean / QP_yMax) * QP_plotH;
}

function QP_arrayContains(arr, v) {
    for (QP_i=0; QP_i<lengthOf(arr); QP_i++) if (arr[QP_i] == v) return true;
    return false;
}

function QP_arrayAppend(arr, v) {
    QP_newArr = newArray(lengthOf(arr) + 1);
    for (QP_i=0; QP_i<lengthOf(arr); QP_i++) QP_newArr[QP_i] = arr[QP_i];
    QP_newArr[lengthOf(arr)] = v;
    return QP_newArr;
}

function QP_joinArray(arr, sep) {
    QP_s = "";
    for (QP_i=0; QP_i<lengthOf(arr); QP_i++) {
        if (QP_i > 0) QP_s = QP_s + sep;
        QP_s = QP_s + arr[QP_i];
    }
    return QP_s;
}

function QP_safeToken(QP_s) {
    QP_t = "" + QP_s;
    QP_t = replace(QP_t, " ", "_");
    QP_t = replace(QP_t, "/", "_");
    QP_t = replace(QP_t, "\\", "_");
    QP_t = replace(QP_t, ":", "_");
    QP_t = replace(QP_t, ";", "_");
    QP_t = replace(QP_t, ",", "_");
    QP_t = replace(QP_t, "(", "");
    QP_t = replace(QP_t, ")", "");
    QP_t = replace(QP_t, "[", "");
    QP_t = replace(QP_t, "]", "");
    return QP_t;
}



// ============================================================
// CUSTOM SCATTER (ImageJ Macro) — Classic + Robust (USER CHOICE / 4 MODES)
// - 4 panels: Thr10, ThrUser, Thr50, Thr90
// - User can choose ONE regression mode, or export ALL variants (4 PNGs):
//     1) Classic (OLS)
//     2) Robust IRLS (Tukey+MAD+X-leverage)
//     3) Robust Theil-Sen
//     4) Robust Trimmed OLS (80%)
// - Smart Axis Rounding (DATA-DRIVEN, NO HARDCODED AXES)
// - Tick decimals derived from STEP size (per axis)
// - Line Clipping
//
// NEW (tiny knobs):
//   SP_xAxisLabel_YShift : moves X-axis label up/down (px). + = down
//   SP_yAxisLabel_XShift : moves Y-axis label left/right (px). + = right (towards plot), - = left
// ============================================================

macro "Scatter: Systole vs Diastole (Classic + Robust) [F9]" {

    // ---- user settings ----
    SP_dec = 6;
    SP_UI = 1.80;   // UI scaling for high-res screens
    SP_P  = 900;    // panel size (square)

    // NEW: label shift knobs (UNCHANGED)
    SP_xAxisLabel_YShift = 0;    // + moves label DOWN, - moves UP
    SP_yAxisLabel_XShift = -20;  // + moves label RIGHT (towards plot), - moves LEFT

    // Layout spacing (UNCHANGED)
    SP_titlePad    = floor(8*SP_UI + 0.5);
    SP_xLabelPad   = floor(50*SP_UI + 0.5);
    SP_yTickPad    = floor(10*SP_UI + 0.5);
    SP_yTickVShift = floor(10*SP_UI + 0.5);
    SP_xTickPad    = floor(26*SP_UI + 0.5);

    SP_marginL = floor(115*SP_UI + 0.5);
    SP_marginR = floor(40*SP_UI + 0.5);
    SP_marginT = floor(60*SP_UI + 0.5);
    SP_marginB = floor(85*SP_UI + 0.5);

    SP_gridN = 5; // "target" grid density (axis may choose N=4..6 for best fit)
    SP_axisW = maxOf(1, floor(2*SP_UI + 0.5));
    SP_gridW = maxOf(1, floor(1*SP_UI + 0.5));

    SP_titleFont = floor(24*SP_UI + 0.5);
    SP_axisFont  = floor(22*SP_UI + 0.5);
    SP_tickFont  = floor(22*SP_UI + 0.5);

    SP_dotD = floor(7*SP_UI + 0.5);
    if (SP_dotD < 3) SP_dotD = 3;

    // Colors (RGB)
    SP_bR=0;   SP_bG=0;   SP_bB=255; // Blue
    SP_rR=255; SP_rG=0;   SP_rB=0;   // Red
    SP_gR=210; SP_gG=210; SP_gB=210; // Grid (light grey)
    SP_kR=0;   SP_kG=0;   SP_kB=0;   // Black

    // Regression drawing
    SP_regLine  = 1;
    SP_regEq    = 1;
    SP_regEqDec = 3;
    SP_regLineW = maxOf(1, floor(3*SP_UI + 0.5));

    SP_eqPadX    = floor(12*SP_UI + 0.5);
    SP_eqPadY    = floor(22*SP_UI + 0.5);
    SP_eqLineGap = floor((SP_tickFont + 10) + 0.5);


    // ============================================================
    // IMPORT (1:1 aus deiner funktionierenden Version)
    // ============================================================

    // --- 1) File selection ---
    SP_path = File.openDialog("Select ANOVA_Ready_Data_[Date] LONG (ENG).txt");
    if (SP_path == "") exit("Abbruch.");
    SP_dir  = File.getParent(SP_path);
    SP_file = File.getName(SP_path);
    SP_base = SP_stripExtension(SP_file);

    // --- 2) Read file ---
    SP_txt = File.openAsString(SP_path);
    SP_lines = split(SP_txt, "\n");
    if (SP_lines.length < 2) exit("Datei ist leer.");

    // --- 3) Header / column indices ---
    SP_header = SP_trimCR(SP_lines[0]);
    SP_cols   = split(SP_header, "\t");

    SP_idxGroup = SP_findCol(SP_cols, "Group_Assignment");
    if (SP_idxGroup < 0) exit("Spalte 'Group_Assignment' nicht gefunden.");

    SP_systNames  = newArray("Systoles10% mean [s]", "SystolesUser mean [s]", "Systoles50% mean [s]", "Systoles90% mean [s]");
    SP_diastNames = newArray("Diastoles10% mean [s]", "DiastolesUser mean [s]", "Diastoles50% mean [s]", "Diastoles90% mean [s]");
    SP_thrLabels  = newArray("10%", "User", "50%", "90%");

    SP_systIdx = newArray(4); SP_diastIdx = newArray(4);
    for (t=0; t<4; t++) {
        SP_systIdx[t]  = SP_findCol(SP_cols, SP_systNames[t]);
        SP_diastIdx[t] = SP_findCol(SP_cols, SP_diastNames[t]);
        if (SP_systIdx[t] < 0)  exit("Spalte nicht gefunden: " + SP_systNames[t]);
        if (SP_diastIdx[t] < 0) exit("Spalte nicht gefunden: " + SP_diastNames[t]);
    }

    

    // --- 4) Detect groups (need at least 2) ---
    SP_groups = newArray(0);
    for (r=1; r<SP_lines.length; r++) {
        line = SP_trimCR(SP_lines[r]);
        if (trim(line) != "") {
            f = split(line, "\t");
            if (f.length > SP_idxGroup) {
                g = trim(f[SP_idxGroup]);
                if (!SP_isBadToken(g) && !SP_arrayContains(SP_groups, g)) {
                    SP_groups = SP_arrayAppend(SP_groups, g);
                }
            }
        }
    }

    if (SP_groups.length < 2)
        exit("Es werden mindestens 2 Gruppen benötigt.");

    // ------------------------------------------------------------
    // Group selection logic
    // - 2 groups: keep old behavior
    // - 3+ groups: user chooses the two groups to compare
    // ------------------------------------------------------------
    if (SP_groups.length == 2) {

        // exactly as before
        Dialog.create("Scatter Plot Settings");
        Dialog.addChoice("BLUE group:", SP_groups, SP_groups[0]);
        Dialog.show();
        SP_blue = Dialog.getChoice();

        if (SP_blue == SP_groups[0]) SP_red = SP_groups[1];
        else                         SP_red = SP_groups[0];

    } else {

        // Step 1: choose first group
        Dialog.create("Scatter Plot Settings");
        Dialog.addMessage(SP_groups.length + " groups detected.\nPlease select two to be plotted against each other.");
        Dialog.addChoice("Group 1:", SP_groups, SP_groups[0]);
        Dialog.show();
        SP_group1 = Dialog.getChoice();

        // Step 2: build remaining list and choose second group
        SP_groupsRemaining = newArray(0);
        for (i=0; i<SP_groups.length; i++) {
            if (SP_groups[i] != SP_group1)
                SP_groupsRemaining = SP_arrayAppend(SP_groupsRemaining, SP_groups[i]);
        }

        Dialog.create("Scatter Plot Settings");
        Dialog.addChoice("Group 2:", SP_groupsRemaining, SP_groupsRemaining[0]);
        Dialog.show();
        SP_group2 = Dialog.getChoice();

        // Step 3: choose which of the two is BLUE
        SP_pair = newArray(SP_group1, SP_group2);

        Dialog.create("Scatter Plot Settings");
        Dialog.addChoice("BLUE group:", SP_pair, SP_group1);
        Dialog.show();
        SP_blue = Dialog.getChoice();

        if (SP_blue == SP_group1) SP_red = SP_group2;
        else                      SP_red = SP_group1;
    }


    // --- user chooses regression (or export all 4) ---
    SP_regModes = newArray(
        "Classic (OLS)",
        "Robust IRLS (Tukey+MAD+X-leverage)",
        "Robust Theil-Sen",
        "Robust Trimmed OLS (80%)"
    );

    Dialog.create("Regression Settings");
    Dialog.addChoice("Regression:", SP_regModes, SP_regModes[1]);
    Dialog.addCheckbox("Export ALL variants (4 PNGs)", false);
    Dialog.show();
    SP_regModeStr = Dialog.getChoice();
    SP_exportAll  = Dialog.getCheckbox();

    SP_modePick = 0;
    if (SP_regModeStr == SP_regModes[1]) SP_modePick = 1;
    if (SP_regModeStr == SP_regModes[2]) SP_modePick = 2;
    if (SP_regModeStr == SP_regModes[3]) SP_modePick = 3;

    if (SP_exportAll) SP_modes = newArray(0, 1, 2, 3);
    else              SP_modes = newArray(SP_modePick);

    // ============================================================
    // END IMPORT
    // ============================================================


    for (mm=0; mm<SP_modes.length; mm++) {

        SP_mode = SP_modes[mm];

        SP_modeTag  = "Classic";
        SP_eqSuffix = "";
        if (SP_mode == 1) { SP_modeTag = "IRLS_Tukey"; SP_eqSuffix = " (IRLS)"; }
        if (SP_mode == 2) { SP_modeTag = "TheilSen";   SP_eqSuffix = " (Theil–Sen)"; }
        if (SP_mode == 3) { SP_modeTag = "Trimmed80";  SP_eqSuffix = " (Trimmed)"; }

        // --- 5) Main plot loop (4 panels) ---
        SP_stackTitle = "SP__SCATTER_STACK_TMP__" + SP_modeTag;
        newImage(SP_stackTitle, "RGB white", SP_P, SP_P, 4);

        for (t=0; t<4; t++) {

            xB = newArray(0); yB = newArray(0);
            xR = newArray(0); yR = newArray(0);

            for (r=1; r<SP_lines.length; r++) {
                line = SP_trimCR(SP_lines[r]);
                if (trim(line) == "") continue;
                f = split(line, "\t");
                if (f.length <= SP_idxGroup) continue;

                g = trim(f[SP_idxGroup]);
                x = SP_parseIfValid(f[SP_systIdx[t]]);
                y = SP_parseIfValid(f[SP_diastIdx[t]]);

                if (x==x && y==y) {
                    if (g == SP_blue) { xB = SP_arrayAppendNum(xB, x); yB = SP_arrayAppendNum(yB, y); }
                    else if (g == SP_red) { xR = SP_arrayAppendNum(xR, x); yR = SP_arrayAppendNum(yR, y); }
                }
            }

            // ============================================================
            // ADAPTIVE SCALING (FIXED) — DATA-DRIVEN, NO HARDCODED AXES
            // - axes follow loaded data
            // - "nice" rounding
            // - decimals follow step size (per axis)
            // - robust for <1, 1–99, 100+ and also min around 7 (=> axis around 7..8)
            // ============================================================

            // data bounds from BOTH groups
            xMinD =  1e99; xMaxD = -1e99;
            yMinD =  1e99; yMaxD = -1e99;

            for (i=0; i<xB.length; i++) {
                if (xB[i] < xMinD) xMinD = xB[i];
                if (xB[i] > xMaxD) xMaxD = xB[i];
                if (yB[i] < yMinD) yMinD = yB[i];
                if (yB[i] > yMaxD) yMaxD = yB[i];
            }
            for (i=0; i<xR.length; i++) {
                if (xR[i] < xMinD) xMinD = xR[i];
                if (xR[i] > xMaxD) xMaxD = xR[i];
                if (yR[i] < yMinD) yMinD = yR[i];
                if (yR[i] > yMaxD) yMaxD = yR[i];
            }

            // fallback (empty slice safety)
            if (xMaxD < -1e98) { xMinD = 0; xMaxD = 1; }
            if (yMaxD < -1e98) { yMinD = 0; yMaxD = 1; }

            // choose nice axes; returns: [min, max, step, N, dec]
            ax = SP_axisAuto(xMinD, xMaxD, SP_gridN);
            ay = SP_axisAuto(yMinD, yMaxD, SP_gridN);

            xmin = ax[0]; xmax = ax[1]; xStep = ax[2]; xN = round(ax[3]); xDec = round(ax[4]);
            ymin = ay[0]; ymax = ay[1]; yStep = ay[2]; yN = round(ay[3]); yDec = round(ay[4]);

            if (xN < 2) xN = 2;
            if (yN < 2) yN = 2;

            // ============================================================

            panelTitle = "SP__PANEL_TMP";
            newImage(panelTitle, "RGB white", SP_P, SP_P, 1);
            selectWindow(panelTitle);

            px0 = SP_marginL; py0 = SP_marginT;
            px1 = SP_P - SP_marginR; py1 = SP_P - SP_marginB;

            // Grid & frame (X and Y can have different N)
            setColor(SP_gR, SP_gG, SP_gB); setLineWidth(SP_gridW);

            // vertical grid (X)
            for (k=0; k<=xN; k++) {
                xg = px0 + (px1-px0)*k/xN;
                drawLine(xg, py0, xg, py1);
            }
            // horizontal grid (Y)
            for (k=0; k<=yN; k++) {
                yg = py0 + (py1-py0)*k/yN;
                drawLine(px0, yg, px1, yg);
            }

            setColor(SP_kR, SP_kG, SP_kB); setLineWidth(SP_axisW);
            drawRect(px0, py0, px1-px0, py1-py0);

            // Axis labels (UNCHANGED placement knobs)
            setFont("SansSerif", SP_axisFont, "plain");
            xlab = "Systole [s]"; sw = getStringWidth(xlab);
            drawString(xlab, (px0+px1-sw)/2, py1 + SP_xLabelPad + SP_xAxisLabel_YShift);

            // Ticks (DECIMALS FOLLOW STEP SIZE, per axis)
            setFont("SansSerif", SP_tickFont, "plain");

            // X ticks
            for (k=0; k<=xN; k++) {
                xg = px0 + (px1-px0)*k/xN;
                xv = xmin + xStep * k;
                drawLine(xg, py1, xg, py1+6);
                s = SP_d2sSafe(xv, xDec); sw = getStringWidth(s);
                drawString(s, xg - sw/2, py1 + SP_xTickPad);
            }

            // Y ticks
            for (k=0; k<=yN; k++) {
                yg = py0 + (py1-py0)*k/yN;
                yv = ymax - yStep * k;
                drawLine(px0-6, yg, px0, yg);
                s = SP_d2sSafe(yv, yDec); sw = getStringWidth(s);
                drawString(s, px0 - SP_yTickPad - sw, yg + SP_yTickVShift);
            }

            ylab = "Diastole [s]";
            SP_drawVerticalLabel(ylab, px0, py0, py1, yDec, ymax, ymin, yN);

            // Title
            setFont("SansSerif", SP_titleFont, "bold");
            ttl = "Thr" + SP_thrLabels[t];
            drawString(ttl, (px0 + px1 - getStringWidth(ttl))/2, py0 - SP_titlePad);

            // Regression (mode) — UNCHANGED
            if (SP_mode == 1) {
                regB = SP_irlsTukeyReg(xB, yB);
                regR = SP_irlsTukeyReg(xR, yR);
            } else if (SP_mode == 2) {
                regB = SP_theilSenReg(xB, yB);
                regR = SP_theilSenReg(xR, yR);
            } else if (SP_mode == 3) {
                regB = SP_trimmedReg(xB, yB, 0.80);
                regR = SP_trimmedReg(xR, yR, 0.80);
            } else {
                regB = SP_linReg(xB, yB);
                regR = SP_linReg(xR, yR);
            }

            // Draw regression lines — UNCHANGED
            if (SP_regLine == 1) {
                setLineWidth(SP_regLineW);
                if (regB[3] >= 2) {
                    setColor(SP_bR, SP_bG, SP_bB);
                    SP_drawRegLine(regB[0], regB[1], xmin, xmax, ymin, ymax, px0, py0, px1, py1);
                }
                if (regR[3] >= 2) {
                    setColor(SP_rR, SP_rG, SP_rB);
                    SP_drawRegLine(regR[0], regR[1], xmin, xmax, ymin, ymax, px0, py0, px1, py1);
                }
            }

            // Print equations — UNCHANGED
            if (SP_regEq == 1) {
                setFont("SansSerif", SP_tickFont, "plain");
                eqX = px0 + SP_eqPadX; eqY = py0 + SP_eqPadY;

                if (regB[3] >= 2) {
                    setColor(SP_bR, SP_bG, SP_bB);
                    drawString(SP_regEqStr(regB[0], regB[1], SP_regEqDec) + SP_eqSuffix, eqX, eqY);
                    eqY += SP_eqLineGap;
                }
                if (regR[3] >= 2) {
                    setColor(SP_rR, SP_rG, SP_rB);
                    drawString(SP_regEqStr(regR[0], regR[1], SP_regEqDec) + SP_eqSuffix, eqX, eqY);
                }
            }

            // Points (big filled circles with dark halo) — UNCHANGED
            
			rad = floor(SP_dotD/4);
			
			// Blau gefüllt
			SP_drawPoints(xB, yB, xmin, xmax, ymin, ymax, px0, py0, px1, py1, rad, SP_bR, SP_bG, SP_bB, 0, 0, 150);
			
			// Rot hohl
			SP_drawPoints(xR, yR, xmin, xmax, ymin, ymax, px0, py0, px1, py1, rad, SP_rR, SP_rG, SP_rB, 150, 0, 0);

            // Copy to stack slice
            run("Select All"); run("Copy");
            selectWindow(SP_stackTitle);
            setSlice(t+1);
            run("Paste");

            selectWindow(panelTitle);
            close();
        }

        // Montage + save
        selectWindow(SP_stackTitle);
        run("Make Montage...", "columns=2 rows=2 scale=1 border=0");
        
        SP_pairLeft  = "" + SP_blue;
        SP_pairRight = "" + SP_red;

        SP_pairLeft  = replace(SP_pairLeft,  " ", "_");
        SP_pairRight = replace(SP_pairRight, " ", "_");

        SP_pairLeft  = replace(SP_pairLeft,  "/", "_");
        SP_pairRight = replace(SP_pairRight, "/", "_");

        SP_pairLeft  = replace(SP_pairLeft,  "\\", "_");
        SP_pairRight = replace(SP_pairRight, "\\", "_");

        SP_pairLeft  = replace(SP_pairLeft,  ":", "_");
        SP_pairRight = replace(SP_pairRight, ":", "_");

        SP_pairLeft  = replace(SP_pairLeft,  ";", "_");
        SP_pairRight = replace(SP_pairRight, ";", "_");

        SP_pairLeft  = replace(SP_pairLeft,  ",", "_");
        SP_pairRight = replace(SP_pairRight, ",", "_");

        SP_pairLeft  = replace(SP_pairLeft,  "(", "");
        SP_pairRight = replace(SP_pairRight, "(", "");

        SP_pairLeft  = replace(SP_pairLeft,  ")", "");
        SP_pairRight = replace(SP_pairRight, ")","");

        SP_pairTag = SP_pairLeft + "_vs_" + SP_pairRight;

		SP_baseSafe = "" + SP_base;
		SP_baseSafe = replace(SP_baseSafe, ":", "_");
		SP_baseSafe = replace(SP_baseSafe, "/", "_");
		SP_baseSafe = replace(SP_baseSafe, "\\", "_");

       	outTitle = SP_baseSafe + "__Scatter_2x2__" + SP_pairTag + "__" + SP_modeTag;
        
        rename(outTitle);

        // Legend — UNCHANGED
        SP_drawLegendTopLeft(SP_blue, SP_red);

        saveAs("PNG", SP_dir + File.separator + outTitle + ".png");
        print("Saved: " + SP_dir + File.separator + outTitle + ".png");


    }

    print("Done.");

    close("*");
    run("Close All");
}


// ======================= TICK FORMAT (tiny bias to avoid .059 instead of .060) =======================

function SP_d2sSafe(v, dec) {
    eps = 0.0005 * pow(10, -dec);
    return d2s(v + eps, dec);
}


// ============================================================
// NEW: DATA-DRIVEN AXIS (no hardcoding)
// Returns: [niceMin, niceMax, step, N, decimals]
// - chooses N from {targetN-1, targetN, targetN+1} to reduce wasted space
// - clamps to 0 only if data are non-negative and min is near 0
// - decimals derived from step size
// ============================================================

// ============================================================
// AXIS AUTO (FORCE ZERO START IF DATA >= 0)
// Returns: [niceMin, niceMax, step, N, decimals]
// - If minD >= 0  -> niceMin is forced to 0 (always)
// - niceMax is "nice" and covers the data (with small headroom)
// - decimals derived from step size
// ============================================================

function SP_axisAuto(minD, maxD, targetN) {

    // sanitize
    if (maxD < minD) { tmp=minD; minD=maxD; maxD=tmp; }
    span = maxD - minD;
    if (span <= 1e-15) span = maxOf(1e-6, abs(maxD)*0.1 + 1e-6);

    // headroom only at the top (since min will be clamped to 0)
    padTop = 0.03 * span;
    maxP  = maxD + padTop;

    // ---- FORCE ZERO START (as requested) ----
    niceMinFixed = 0;

    // candidates around target
    cand = newArray(targetN-1, targetN, targetN+1);
    bestScore = 1e99;

    bestMin = 0;
    bestMax = 1;
    bestStep = 1;
    bestN = targetN;

    // If the user guarantees all values > 0, we always force 0.
    // If someone accidentally has negative data, we still fall back to data-driven min.
    forceZero = (minD >= 0);

    for (ci=0; ci<cand.length; ci++) {

        N = cand[ci];
        if (N < 2) continue;
        if (N > 12) continue;

        if (forceZero) {

            // choose a "nice" step so that N steps roughly reach maxP
            step = SP_axisNiceStep(maxP - 0, N);
            if (step <= 0) continue;

            niceMin = 0;
            niceMax = SP_ceilToStep(maxP, step);

            // actual step count
            aN = round((niceMax - niceMin)/step);
            if (aN < 2) aN = 2;

            // relock max to avoid float drift
            niceMax = niceMin + aN*step;

            // scoring: prefer small overshoot and staying close to targetN
            usedSpan = niceMax - niceMin;
            over = (usedSpan - maxD) / maxOf(1e-12, maxD);
            if (over < 0) over = 0;

            dec = SP_axisDecimalsForStep(step);

            score = over;
            score += 0.07 * abs(aN - targetN);
            score += 0.01 * dec;

            if (abs(step - floor(step+0.5)) < 1e-12) score -= 0.02;

            if (score < bestScore) {
                bestScore = score;
                bestMin = niceMin;
                bestMax = niceMax;
                bestStep = step;
                bestN = aN;
            }

        } else {

            // fallback: original behavior for negative ranges (rare)
            pad = 0.03 * span;
            minP = minD - pad;
            maxP2 = maxD + pad;

            step2 = SP_axisNiceStep(maxP2 - minP, N);
            if (step2 <= 0) continue;

            niceMin2 = SP_floorToStep(minP, step2);
            niceMax2 = SP_ceilToStep(maxP2, step2);

            aN2 = round((niceMax2 - niceMin2)/step2);
            if (aN2 < 2) aN2 = 2;
            niceMax2 = niceMin2 + aN2*step2;

            usedSpan2 = niceMax2 - niceMin2;
            over2 = (usedSpan2 - (maxD-minD)) / maxOf(1e-12, (maxD-minD));
            if (over2 < 0) over2 = 0;

            dec2 = SP_axisDecimalsForStep(step2);

            score2 = over2 + 0.07*abs(aN2-targetN) + 0.01*dec2;
            if (abs(step2 - floor(step2+0.5)) < 1e-12) score2 -= 0.02;

            if (score2 < bestScore) {
                bestScore = score2;
                bestMin = niceMin2;
                bestMax = niceMax2;
                bestStep = step2;
                bestN = aN2;
            }
        }
    }

    bestDec = SP_axisDecimalsForStep(bestStep);
    return newArray(bestMin, bestMax, bestStep, bestN, bestDec);
}


function SP_axisNiceStep(range, nSteps) {
    if (range <= 0) return 1.0;

    raw = range / nSteps;
    if (raw <= 0) return 1.0;

    mag  = pow(10, floor(log(raw)/log(10)));
    frac = raw / mag;

    vals = newArray(1.0, 1.5, 2.0, 2.5, 3.0, 4.0, 5.0, 10.0);
    for (i=0; i<vals.length; i++) {
        if (vals[i] >= frac) return vals[i] * mag;
    }
    return 10.0 * mag;
}

function SP_axisDecimalsForStep(step) {
    if (step <= 0) return 0;
    // integer => 0
    if (abs(step - floor(step+0.5)) < 1e-12) return 0;

    dec = 0;
    tmp = step;
    while (dec < 8) {
        if (abs(tmp - floor(tmp + 0.5)) < 1e-9) break;
        tmp *= 10;
        dec++;
    }
    return dec;
}

function SP_floorToStep(v, step) {
    if (step <= 0) return v;
    return floor((v + 1e-12)/step) * step;
}

function SP_ceil(v) {
    return -floor(-v);
}

function SP_ceilToStep(v, step) {
    if (step <= 0) return v;
    return SP_ceil((v - 1e-12)/step) * step;
}


// ======================= ROBUST: MEDIAN / MAD =======================

function SP_median(a) {
    n = a.length;
    if (n == 0) return NaN;
    tmp = newArray(n);
    for (i=0; i<n; i++) tmp[i] = a[i];
    Array.sort(tmp);
    mid = floor(n/2);
    if ((n % 2) == 1) return tmp[mid];
    return (tmp[mid-1] + tmp[mid]) / 2;
}

function SP_madAbout(a, center) {
    n = a.length;
    if (n == 0) return NaN;
    dev = newArray(n);
    for (i=0; i<n; i++) {
        d = a[i] - center;
        if (d < 0) d = -d;
        dev[i] = d;
    }
    return SP_median(dev);
}


// ======================= WEIGHTED LS =======================

function SP_linRegW(x, y, w) {
    n = x.length;
    sw=0; swx=0; swy=0; swxx=0; swxy=0; nEff=0;

    for (i=0; i<n; i++) {
        wi = w[i];
        if (wi <= 0) continue;
        nEff++;
        sw   += wi;
        swx  += wi * x[i];
        swy  += wi * y[i];
        swxx += wi * x[i] * x[i];
        swxy += wi * x[i] * y[i];
    }

    if (nEff < 2 || sw == 0) return newArray(NaN, NaN, 0, nEff);

    den = sw*swxx - swx*swx;
    if (den == 0) return newArray(NaN, NaN, 0, nEff);

    m = (sw*swxy - swx*swy) / den;
    b = (swy - m*swx) / sw;
    return newArray(m, b, 0, nEff);
}


// ======================= ROBUST: IRLS Tukey (MAD) + Leverage Downweight =======================

function SP_irlsTukeyReg(x, y) {
    n = x.length;
    if (n < 2) return newArray(NaN, NaN, 0, n);

    reg = SP_linReg(x, y);
    m = reg[0]; b = reg[1];
    if (m != m) return reg;

    medx = SP_median(x);
    madx = SP_madAbout(x, medx);
    sigx = 1.4826 * madx;
    if (sigx <= 0) sigx = 1e-12;

    cR = 4.685;
    cX = 4.685;

    maxIter = 25;
    tol = 1e-12;

    for (iter=0; iter<maxIter; iter++) {

        r = newArray(n);
        for (i=0; i<n; i++) r[i] = y[i] - (m*x[i] + b);

        medr = SP_median(r);
        madr = SP_madAbout(r, medr);
        sigma = 1.4826 * madr;
        if (sigma <= 0) break;

        w = newArray(n);
        nEff = 0;

        for (i=0; i<n; i++) {

            u  = (r[i] - medr) / (cR * sigma);
            au = u; if (au < 0) au = -au;

            wr = 0;
            if (au < 1) {
                t = 1 - u*u;
                wr = t*t;
            }

            ux = (x[i] - medx) / (cX * sigx);
            ax = ux; if (ax < 0) ax = -ax;

            wx = 0;
            if (ax < 1) {
                t2 = 1 - ux*ux;
                wx = t2*t2;
            }

            w[i] = wr * wx;
            if (w[i] > 0) nEff++;
        }

        if (nEff < 2) break;

        regW = SP_linRegW(x, y, w);
        m2 = regW[0]; b2 = regW[1];
        if (m2 != m2) break;

        if (abs(m2 - m) + abs(b2 - b) < tol * (1 + abs(m) + abs(b))) {
            m = m2; b = b2;
            return newArray(m, b, 0, nEff);
        }

        m = m2; b = b2;
    }

    return newArray(m, b, 0, n);
}


// ======================= ROBUST: Theil–Sen =======================

function SP_theilSenReg(x, y) {
    n0 = x.length;
    if (n0 < 2) return newArray(NaN, NaN, 0, n0);

    maxN = 400;
    if (n0 > maxN) {
        step = floor((n0 + maxN - 1) / maxN);
        x2 = newArray(0); y2 = newArray(0);
        for (i=0; i<n0; i+=step) {
            x2 = SP_arrayAppendNum(x2, x[i]);
            y2 = SP_arrayAppendNum(y2, y[i]);
        }
        x = x2; y = y2;
    }

    n = x.length;
    if (n < 2) return newArray(NaN, NaN, 0, n);

    pairsMax = n*(n-1)/2;
    slopes = newArray(pairsMax);
    idx = 0;

    for (i=0; i<n-1; i++) {
        for (j=i+1; j<n; j++) {
            dx = x[j] - x[i];
            if (dx == 0) continue;
            slopes[idx] = (y[j] - y[i]) / dx;
            idx++;
        }
    }
    if (idx < 1) return newArray(NaN, NaN, 0, n);

    s2 = newArray(idx);
    for (k=0; k<idx; k++) s2[k] = slopes[k];

    m = SP_median(s2);

    bArr = newArray(n);
    for (i=0; i<n; i++) bArr[i] = y[i] - m*x[i];

    b = SP_median(bArr);
    return newArray(m, b, 0, n);
}


// ======================= ROBUST: TRIMMED OLS (iterative) =======================

function SP_trimmedReg(x, y, keepFrac) {
    n = x.length;
    if (n < 2) return newArray(NaN, NaN, 0, n);

    if (keepFrac < 0.50) keepFrac = 0.50;
    if (keepFrac > 0.98) keepFrac = 0.98;

    reg = SP_linReg(x, y);
    m = reg[0]; b = reg[1];
    if (m != m) return reg;

    maxIter = 12;

    for (iter=0; iter<maxIter; iter++) {

        absRes = newArray(n);
        for (i=0; i<n; i++) {
            r = y[i] - (m*x[i] + b);
            if (r < 0) r = -r;
            absRes[i] = r;
        }

        tmp = newArray(n);
        for (i=0; i<n; i++) tmp[i] = absRes[i];
        Array.sort(tmp);

        h = floor(keepFrac*n + 0.5);
        if (h < 2) h = 2;
        if (h > n) h = n;

        cut = tmp[h-1];

        xIn = newArray(0);
        yIn = newArray(0);

        for (i=0; i<n; i++) {
            if (absRes[i] <= cut) {
                xIn = SP_arrayAppendNum(xIn, x[i]);
                yIn = SP_arrayAppendNum(yIn, y[i]);
            }
        }

        if (xIn.length < 2) break;

        reg2 = SP_linReg(xIn, yIn);
        m2 = reg2[0]; b2 = reg2[1];
        if (m2 != m2) break;

        if (abs(m2 - m) + abs(b2 - b) < 1e-12 * (1 + abs(m) + abs(b))) {
            m = m2; b = b2;
            return newArray(m, b, 0, xIn.length);
        }

        m = m2; b = b2;
    }

    return newArray(m, b, 0, n);
}


// ======================= PLOTTING HELPERS =======================

function SP_drawRegLine(m, b, xmin, xmax, ymin, ymax, px0, py0, px1, py1) {
    lx0 = xmin; ly0 = m*lx0 + b;
    lx1 = xmax; ly1 = m*lx1 + b;

    if (m != 0) {
        if (ly0 < ymin) { ly0 = ymin; lx0 = (ymin - b) / m; }
        if (ly0 > ymax) { ly0 = ymax; lx0 = (ymax - b) / m; }
        if (ly1 < ymin) { ly1 = ymin; lx1 = (ymin - b) / m; }
        if (ly1 > ymax) { ly1 = ymax; lx1 = (ymax - b) / m; }
    }

    if (lx0 < xmin) lx0 = xmin; if (lx0 > xmax) lx0 = xmax;
    if (lx1 < xmin) lx1 = xmin; if (lx1 > xmax) lx1 = xmax;

    xp0 = px0 + (lx0 - xmin)/(xmax - xmin) * (px1 - px0);
    yp0 = py1 - (ly0 - ymin)/(ymax - ymin) * (py1 - py0);
    xp1 = px0 + (lx1 - xmin)/(xmax - xmin) * (px1 - px0);
    yp1 = py1 - (ly1 - ymin)/(ymax - ymin) * (py1 - py0);

    drawLine(xp0, yp0, xp1, yp1);
}

function SP_drawPoints(x, y, xmin, xmax, ymin, ymax, px0, py0, px1, py1, rad, r, g, b, br, bg, bb) {
    for (i=0; i<x.length; i++) {
        xp = px0 + (x[i]-xmin)/(xmax-xmin)*(px1-px0);
        yp = py1 - (y[i]-ymin)/(ymax-ymin)*(py1-py0);
        setColor(br, bg, bb);
        fillOval(xp-rad-1, yp-rad-1, 2*rad+2, 2*rad+2);
        setColor(r, g, b);
        fillOval(xp-rad, yp-rad, 2*rad, 2*rad);
    }
}

// UPDATED signature: includes yN (placement unchanged, only width estimation correct)
function SP_drawVerticalLabel(text, px0, py0, py1, dec, ymax, ymin, yN) {

    if (yN < 2) yN = 2;

    swMax = 0;
    for (k=0; k<=yN; k++) {
        s = SP_d2sSafe(ymax - (ymax-ymin)*k/yN, dec);
        if (getStringWidth(s) > swMax) swMax = getStringWidth(s);
    }

    tw = py1 - py0;
    th = maxOf(40, floor(SP_axisFont*1.3 + 0.5));

    newImage("Y_TMP", "RGB white", tw, th, 1);
    setColor(0,0,0);
    setFont("SansSerif", SP_axisFont, "plain");
    drawString(text, (tw - getStringWidth(text))/2, th-6);

    run("Rotate 90 Degrees Left");
    run("Select All"); run("Copy");
    close();

    selectWindow("SP__PANEL_TMP");
    setPasteMode("Transparent-white");

    makeRectangle(px0 - swMax - 50 + SP_yAxisLabel_XShift, py0 + (py1-py0-tw)/2, th, tw);
    run("Paste");
}

function SP_drawLegendTopLeft(blueName, redName) {

    legBox    = maxOf(10, floor(12*SP_UI + 0.5));
    legPadY   = floor(6*SP_UI + 0.5);
    legTextDx = floor(8*SP_UI + 0.5);
    txtYoff   = floor(2*SP_UI + 0.5);

    legX = SP_marginL;
    legY = maxOf(4, floor(12*SP_UI + 0.5));

    legTextYShift = floor(4*SP_UI + 8);  // + = Text tiefer

    setFont("SansSerif", SP_tickFont, "plain");

    setColor(SP_bR, SP_bG, SP_bB); fillRect(legX, legY, legBox, legBox);
    setColor(SP_kR, SP_kG, SP_kB); drawRect(legX, legY, legBox, legBox);
    drawString(blueName, legX + legBox + legTextDx, legY  + legBox - txtYoff + legTextYShift);

    legY2 = legY + legBox + legPadY;
    setColor(SP_rR, SP_rG, SP_rB); fillRect(legX, legY2, legBox, legBox);
    setColor(SP_kR, SP_kG, SP_kB); drawRect(legX, legY2, legBox, legBox);
    drawString(redName,  legX + legBox + legTextDx, legY2 + legBox - txtYoff + legTextYShift);
}


// ======================= CLASSIC OLS =======================

function SP_linReg(x, y) {
    n = x.length;
    sx=0; sy=0; sxx=0; sxy=0;
    for (i=0; i<n; i++) {
        sx  += x[i];
        sy  += y[i];
        sxx += x[i]*x[i];
        sxy += x[i]*y[i];
    }
    d = n*sxx - sx*sx;
    if (d == 0) return newArray(NaN, NaN, 0, n);
    m = (n*sxy - sx*sy)/d;
    b = (sy - (m*sx))/n;
    return newArray(m, b, 0, n);
}

function SP_regEqStr(m, b, dec) {
    s = "y = " + d2s(m, dec) + "x";
    if (b < 0) s += " - " + d2s(abs(b), dec);
    else       s += " + " + d2s(b, dec);
    return s;
}


// ======================= FILE/TABLE HELPERS (IMPORT-STYLE) =======================

function SP_isBadToken(s) {
    t = toLowerCase(trim(s));
    if (t == "" || t == "na" || t == "nan" || t == "inf") return 1;
    return 0;
}

function SP_findCol(arr, name) {
    for (i=0; i<arr.length; i++)
        if (arr[i] == name) return i;
    return -1;
}

function SP_trimCR(s) {
    if (endsWith(s, "\r")) return substring(s, 0, lengthOf(s)-1);
    return s;
}

function SP_stripExtension(f) {
    i = lastIndexOf(f, ".");
    if (i < 0) return f;
    return substring(f, 0, i);
}

function SP_arrayContains(arr, v) {
    for (i=0; i<arr.length; i++)
        if (arr[i] == v) return true;
    return false;
}

function SP_arrayAppend(arr, v) {
    newArr = newArray(arr.length + 1);
    for (i=0; i<arr.length; i++) newArr[i] = arr[i];
    newArr[arr.length] = v;
    return newArr;
}

function SP_arrayAppendNum(arr, v) {
    newArr = newArray(arr.length + 1);
    for (i=0; i<arr.length; i++) newArr[i] = arr[i];
    newArr[arr.length] = v;
    return newArr;
}

function SP_parseIfValid(s) {
    if (SP_isBadToken(s)) return NaN;
    return parseFloat(s);
}


}



// =======================
// 14) Motion Heatmaps
// =======================


if (option == "14. Create Motion-Heatmaps") {

// --- MyoCyter 2.4: Motion Heatmaps & Quantitative Analysis ---
//
// Kernlogik:
// - AVI öffnen
// - Gaussian Blur auf Stack
// - Sum-Z-Projection
// - zeitnormalisierte Kopie nur zur Threshold-Bestimmung
// - Threshold = 5% von P99.5 (nur positive Pixel)
// - binäre Bewegungsmaske erzeugen
// - Binärmaske bereinigen
// - nur die größte zusammenhängende Struktur behalten
// - exakte Pixelmaske auf das rohe Summenbild anwenden
// - daraus messen: Mean_Intensity, Area_Pixels, Total_Seconds, (Area*Intensity)/Seconds
// - Heatmaps, Montagen und Summary-Plots wie bisher

// -----------------------------
// Parameter
// -----------------------------
mh_thresholdFrac = 0.05;   // 5% von P99.5
mh_percentileRef = 99.5;   // robustes "Maximum"
mh_histBins      = 4096;   // Histogramm-Auflösung für P99.5
mh_gaussSigma    = 2;      // Gaussian Blur Sigma

// --- Verzeichnis-Auswahl & Initialisierung ---
mh_startDir = getDirectory("Please choose a specific <diffMov>-directory OR the main directory");
mh_startDir = "" + mh_startDir;
if (mh_startDir == "null") exit("Canceled.");
mh_startDir = replace(mh_startDir, "\\", "/");
if (!endsWith(mh_startDir, "/")) mh_startDir = mh_startDir + "/";

// --- Variablen für die statistische Auswertung (Plotten) ---
pl_folderNames = newArray();
pl_meansInt = newArray();
pl_sdsInt = newArray();
pl_meansMet = newArray();
pl_sdsMet = newArray();

// --- Variablen für den Vereinigungs-Export ---
mh_unionFilesENG = newArray();
mh_unionHeaders = newArray();

// --- Suche nach diffMov-Ordnern ---
mh_tmp = mh_startDir;
if (endsWith(mh_tmp, "/")) mh_tmp = substring(mh_tmp, 0, lengthOf(mh_tmp)-1);
mh_lastSlash = -1;
for (mh_k = 0; mh_k < lengthOf(mh_tmp); mh_k++) {
    if (substring(mh_tmp, mh_k, mh_k+1) == "/") mh_lastSlash = mh_k;
}
mh_lastName = mh_tmp;
if (mh_lastSlash >= 0) mh_lastName = substring(mh_tmp, mh_lastSlash+1);

mh_targets = newArray();
if (mh_lastName == "diffMov") {
    mh_targets = Array.concat(mh_targets, mh_startDir);
} else {
    mh_stack = newArray(mh_startDir);
    for (mh_idx = 0; mh_idx < mh_stack.length; mh_idx++) {
        mh_current = mh_stack[mh_idx];
        if (!endsWith(mh_current, "/")) mh_current = mh_current + "/";
        mh_items = getFileList(mh_current);
        for (mh_i = 0; mh_i < mh_items.length; mh_i++) {
            mh_name = mh_items[mh_i];
            if (endsWith(mh_name, "/")) {
                if (mh_name == "diffMov/") {
                    mh_targets = Array.concat(mh_targets, mh_current + mh_name);
                }
                mh_stack = Array.concat(mh_stack, replace(mh_current + mh_name, "\\", "/"));
            }
        }
    }
}

if (mh_targets.length == 0) exit("No 'diffMov' folders found.");

// --- Hauptverarbeitung ---
for (mh_t = 0; mh_t < mh_targets.length; mh_t++) {
    mh_dir = mh_targets[mh_t];
    mh_base = mh_dir + "Motion-Heatmaps/";
    File.makeDirectory(mh_base);
    File.makeDirectory(mh_base + "Fire/");
    File.makeDirectory(mh_base + "Thermal/");
    File.makeDirectory(mh_base + "Royal/");

    mh_resultsString = "Filename\tMean_Intensity\tArea_Pixels\tTotal_Seconds\t(Area*Intensity)/Seconds\n";

    mh_currentIntVals = newArray();
    mh_currentMetVals = newArray();

    mh_list = getFileList(mh_dir);
    for (mh_i2 = 0; mh_i2 < mh_list.length; mh_i2++) {
        mh_nm = mh_list[mh_i2];
        mh_nm_low = toLowerCase(mh_nm);

        if (endsWith(mh_nm_low, ".avi") && indexOf(mh_nm_low, "mjpeg-diff-cell") >= 0) {

            // temporäre Fenster von vorher sicherheitshalber schließen
            mh_closeIfOpen("__SUMRAW__");
            mh_closeIfOpen("__SUMNORM__");
            mh_closeIfOpen("__SUMTHR__");
            mh_closeIfOpen("__MASK__");
            mh_closeIfOpen("TMP_MASK");

            mh_maskTitle = "";

            // -----------------------------
            // Video öffnen
            // -----------------------------
            run("AVI...", "open=[" + mh_dir + mh_nm + "] convert");
            mh_title = getTitle();
            mh_titleNoExt = replace(mh_title, ".avi", "");
            mh_mapName = replace(mh_titleNoExt, "mjpeg-diff-", "");

            getDimensions(mh_w, mh_h, mh_ch, mh_slices, mh_frames);
            mh_nFrames = mh_slices;
            if (mh_frames > mh_nFrames) mh_nFrames = mh_frames;
            if (mh_nFrames < 1) mh_nFrames = 1;

            mh_seconds = mh_getDurationSeconds(mh_nFrames);
            if (mh_seconds <= 0) {
                print("Warning: Could not determine duration for " + mh_nm + ". Falling back to frame count as seconds.");
                mh_seconds = mh_nFrames;
            }

            // -----------------------------
            // 1) Gaussian Blur auf Stack
            // -----------------------------
            run("Gaussian Blur...", "sigma=" + mh_gaussSigma + " stack");

            // -----------------------------
            // 2) Sum-Z-Projection
            // -----------------------------
            run("Z Project...", "projection=[Sum Slices]");
            mh_sumTitle = getTitle();

            if (isOpen(mh_title)) {
                selectWindow(mh_title);
                close();
            }

            selectWindow(mh_sumTitle);
            rename("__SUMRAW__");

            // -----------------------------
            // 3) Zeitnormalisierte Kopie nur für Threshold
            // -----------------------------
            selectWindow("__SUMRAW__");
            run("Duplicate...", "title=__SUMNORM__");
            selectWindow("__SUMNORM__");
            run("32-bit");
            run("Divide...", "value=" + mh_seconds);

            // -----------------------------
            // 4) P99.5 nur auf positiven Pixeln bestimmen
            // -----------------------------
            mh_thrRef = mh_getPositivePercentile(mh_percentileRef, mh_histBins);
            mh_threshold = mh_thresholdFrac * mh_thrRef;

            // -----------------------------
            // 5) Binärmaske aus __SUMNORM__ erzeugen
            // -----------------------------
            selectWindow("__SUMNORM__");
            run("Duplicate...", "title=TMP_MASK");
            mh_maskTitle = getTitle();
            selectWindow(mh_maskTitle);

            if (mh_thrRef > 0) {
                setThreshold(mh_threshold, 1e30);
                run("Convert to Mask");
                resetThreshold();

                selectWindow(mh_maskTitle);
                run("8-bit");

                // leichte Binärbereinigung
                run("Options...", "iterations=1 count=1 black");
                selectWindow(mh_maskTitle); run("Open");
                selectWindow(mh_maskTitle); run("Close-");
                selectWindow(mh_maskTitle); run("Fill Holes");

                // nur größte zusammenhängende Struktur behalten
                selectWindow(mh_maskTitle);
                mh_keepLargestComponentInMask(mh_maskTitle);
            } else {
                selectWindow(mh_maskTitle);
                run("8-bit");
                selectAll();
                run("Clear");
            }

            // -----------------------------
            // 6) Exakte Maske auf rohes Summenbild anwenden
            // -----------------------------
            selectWindow(mh_maskTitle);
            run("32-bit");
            run("Divide...", "value=255");

            imageCalculator("Multiply create 32-bit", "__SUMRAW__", mh_maskTitle);
            rename("__SUMTHR__");

            // -----------------------------
            // 7) Messung auf exakt maskiertem rohen Summenbild
            // -----------------------------
            selectWindow("__SUMTHR__");
            run("Clear Results");
            setThreshold(0.0000001, 1e30);
            run("Set Measurements...", "area mean limit redirect=None decimal=4");
            run("Measure");
            resetThreshold();

            mh_area = getValue("Area");
            mh_mean = getValue("Mean");

            if (isNaN(mh_area)) mh_area = 0;
            if (isNaN(mh_mean)) mh_mean = 0;

            mh_metric = 0;
            if (mh_seconds > 0) mh_metric = (mh_area * mh_mean) / mh_seconds;

            mh_currentIntVals = Array.concat(mh_currentIntVals, mh_mean);
            mh_currentMetVals = Array.concat(mh_currentMetVals, mh_metric);

            mh_resultsString = mh_resultsString + mh_mapName + "\t" + mh_mean + "\t" + mh_area + "\t" + mh_seconds + "\t" + mh_metric + "\n";

            // -----------------------------
            // 8) Heatmaps aus dem maskierten Summenbild
            // -----------------------------
            mh_LUTs = newArray("Fire", "Thermal", "Royal");
            for (mh_l = 0; mh_l < mh_LUTs.length; mh_l++) {
                selectWindow("__SUMTHR__");
                run("Duplicate...", "title=__LUT__" + mh_LUTs[mh_l]);
                run("8-bit");
                run(mh_LUTs[mh_l]);
                run("Apply LUT");
                saveAs("Jpeg", mh_base + mh_LUTs[mh_l] + "/" + mh_mapName + "_" + mh_LUTs[mh_l] + ".jpg");
                close();
            }

            // Aufräumen
            if (mh_maskTitle != "" && isOpen(mh_maskTitle)) {
                selectWindow(mh_maskTitle);
                close();
            }
            if (isOpen("__SUMNORM__")) {
                selectWindow("__SUMNORM__");
                close();
            }
            if (isOpen("__SUMRAW__")) {
                selectWindow("__SUMRAW__");
                close();
            }
            if (isOpen("__SUMTHR__")) {
                selectWindow("__SUMTHR__");
                close();
            }
            roiManager("reset");
        }
    }

    // --- Ordnerweise Statistik ---
    if (mh_currentIntVals.length > 0) {
        Array.getStatistics(mh_currentIntVals, mh_min1, mh_max1, meanInt, stdInt);
        Array.getStatistics(mh_currentMetVals, mh_min2, mh_max2, meanMet, stdMet);

        mh_dirNoSlash = mh_dir;
        if (endsWith(mh_dirNoSlash, "/")) mh_dirNoSlash = substring(mh_dirNoSlash, 0, lengthOf(mh_dirNoSlash)-1);
        splitDir = split(mh_dirNoSlash, "/");
        mh_nSplit = splitDir.length;

        folderLabel = "diffMov";
        if (mh_nSplit >= 3 && splitDir[mh_nSplit-1] == "diffMov")
            folderLabel = splitDir[mh_nSplit-3];
        else if (mh_nSplit >= 3)
            folderLabel = splitDir[mh_nSplit-3];
        else if (mh_nSplit >= 1)
            folderLabel = splitDir[mh_nSplit-1];

        pl_folderNames = Array.concat(pl_folderNames, folderLabel);
        pl_meansInt = Array.concat(pl_meansInt, meanInt);
        pl_sdsInt = Array.concat(pl_sdsInt, stdInt);
        pl_meansMet = Array.concat(pl_meansMet, meanMet);
        pl_sdsMet = Array.concat(pl_sdsMet, stdMet);
    }

    // --- TXT-Export ---
    File.saveString(mh_resultsString, mh_base + "Heatmaps Intensity (ENG).txt");
    mh_resultsGER = replace(mh_resultsString, ".", ",");
    File.saveString(mh_resultsGER, mh_base + "Heatmaps Intensity (GER).txt");

    // Header für UNITED-File = Ordnername zwei Ebenen über diffMov
    mh_dirNoSlash2 = mh_dir;
    if (endsWith(mh_dirNoSlash2, "/")) mh_dirNoSlash2 = substring(mh_dirNoSlash2, 0, lengthOf(mh_dirNoSlash2)-1);
    mh_partsUnion = split(mh_dirNoSlash2, "/");
    mh_nPartsUnion = mh_partsUnion.length;

    mh_unionHeader = "diffMov";
    if (mh_nPartsUnion >= 3 && mh_partsUnion[mh_nPartsUnion-1] == "diffMov")
        mh_unionHeader = mh_partsUnion[mh_nPartsUnion-3];
    else if (mh_nPartsUnion >= 3)
        mh_unionHeader = mh_partsUnion[mh_nPartsUnion-3];
    else if (mh_nPartsUnion >= 1)
        mh_unionHeader = mh_partsUnion[mh_nPartsUnion-1];

    mh_unionFilesENG = Array.concat(mh_unionFilesENG, mh_base + "Heatmaps Intensity (ENG).txt");
    mh_unionHeaders = Array.concat(mh_unionHeaders, mh_unionHeader);

    // --- Montagen nur wenn mindestens 2 Bilder vorhanden sind ---
    mh_folders = newArray("Fire", "Royal", "Thermal");
    for (mh_f = 0; mh_f < mh_folders.length; mh_f++) {
        mh_sub = mh_base + mh_folders[mh_f] + "/";
        mh_jlist = getFileList(mh_sub);

        mh_jpgCount = 0;
        for (mh_k2 = 0; mh_k2 < mh_jlist.length; mh_k2++) {
            if (endsWith(toLowerCase(mh_jlist[mh_k2]), ".jpg")) {
                mh_jpgCount++;
            }
        }

        if (mh_jpgCount < 2) {
            continue;
        }

        mh_opened = 0;
        for (mh_k2 = 0; mh_k2 < mh_jlist.length; mh_k2++) {
            if (endsWith(toLowerCase(mh_jlist[mh_k2]), ".jpg")) {
                open(mh_sub + mh_jlist[mh_k2]);
                rename(replace(getTitle(), "_" + mh_folders[mh_f], ""));
                mh_opened++;
            }
        }

        if (mh_opened >= 2) {
            run("Images to Stack", "use");
            run("Make Montage...", "scale=1 label");
            saveAs("Jpeg", mh_base + mh_folders[mh_f] + ".jpg");
            run("Close All");
        } else {
            run("Close All");
        }
    }
}

if (mh_unionFilesENG.length > 0) {
    mh_writeUnitedHeatmapFiles(
        mh_unionFilesENG,
        mh_unionHeaders,
        mh_startDir + "Heatmaps Intensity UNITED (ENG).txt",
        mh_startDir + "Heatmaps Intensity UNITED (GER).txt"
    );
}

// ============================================================
// --- PLOTTING SEKTION ---
// ============================================================
if (pl_folderNames.length > 0) {
    fTitle = 24;
    fAxis  = 20;
    fTicks = 18;

    cW = 1400;
    cH = 700;
    newImage("Summary Plots", "RGB white", cW, cH, 1);

    drawBarPlot(100, 80, 520, 450, "Mean Intensity", pl_folderNames, pl_meansInt, pl_sdsInt, fTitle, fAxis, fTicks);
    drawBarPlot(760, 80, 520, 450, "(Area * Intensity) / s", pl_folderNames, pl_meansMet, pl_sdsMet, fTitle, fAxis, fTicks);

    saveAs("Jpeg", mh_startDir + "Summary_Analysis_Plots.jpg");
}

run("Close All");
if (isOpen("Log")) close("Log");
if (isOpen("Results")) close("Results");

// ------------------------------------------------------------
// Hilfsfunktionen
// ------------------------------------------------------------

function mh_getDurationSeconds(nFrames) {
    fps = Stack.getFrameRate();
    if (fps > 0) return nFrames / fps;

    interval = Stack.getFrameInterval();
    Stack.getUnits(xUnit, yUnit, zUnit, tUnit, vUnit);

    if (interval <= 0) return 0;

    t = toLowerCase(tUnit);
    factor = 1;

    if (t == "s" || t == "sec" || startsWith(t, "sec")) factor = 1;
    else if (t == "ms" || t == "msec" || startsWith(t, "mill")) factor = 0.001;
    else if (t == "us" || t == "usec" || startsWith(t, "micro")) factor = 0.000001;
    else if (startsWith(t, "min")) factor = 60;
    else if (startsWith(t, "h") || startsWith(t, "hour")) factor = 3600;
    else factor = 1;

    return nFrames * interval * factor;
}

// Bestimmt das Perzentil nur aus positiven Pixeln (>0),
// damit der Null-Hintergrund das P99.5 nicht verfälscht
function mh_getPositivePercentile(pct, bins) {
    getStatistics(mh_areaTmp, mh_meanTmp, mh_minTmp, mh_maxTmp, mh_stdTmp);

    if (mh_maxTmp <= 0) return 0;

    getHistogram(mh_vals, mh_counts, bins, 0, mh_maxTmp);

    total = 0;
    for (i = 1; i < mh_counts.length; i++) total += mh_counts[i];
    if (total <= 0) return 0;

    target = total * pct / 100.0;
    cum = 0;

    for (i = 1; i < mh_counts.length; i++) {
        cum += mh_counts[i];
        if (cum >= target) {
            return mh_vals[i];
        }
    }
    return mh_maxTmp;
}

// Behält in der aktuellen Binärmaske nur die größte zusammenhängende Struktur
function mh_keepLargestComponentInMask(maskTitle) {
    selectWindow(maskTitle);
    run("8-bit");

    roiManager("reset");
    run("Clear Results");
    run("Set Measurements...", "area redirect=None decimal=4");
    run("Analyze Particles...", "size=0-Infinity show=Nothing add");

    n = roiManager("count");
    if (n < 1) {
        selectWindow(maskTitle);
        selectAll();
        run("Clear");
        roiManager("reset");
        return -1;
    }

    maxArea = -1;
    maxIdx = -1;

    run("Clear Results");
    for (i = 0; i < n; i++) {
        roiManager("Select", i);
        run("Measure");
        a = getResult("Area", i);
        if (a > maxArea) {
            maxArea = a;
            maxIdx = i;
        }
    }

    if (maxIdx < 0) {
        selectWindow(maskTitle);
        selectAll();
        run("Clear");
        roiManager("reset");
        return -1;
    }

    selectWindow(maskTitle);
    roiManager("Select", maxIdx);
    setBackgroundColor(0, 0, 0);
    run("Clear Outside");
    roiManager("reset");
    return 0;
}

function mh_closeIfOpen(title) {
    if (isOpen(title)) {
        selectWindow(title);
        close();
    }
}

function mh_getEffectiveLineCount(lines) {
    n = lines.length;
    for (i = n; i > 0; i--) {
        if (lines[i-1] != "") return i;
    }
    return 0;
}

function mh_padLineToColumns(line, nCols) {
    out = "" + line;
    nTabs = 0;
    for (i = 0; i < lengthOf(out); i++) {
        if (substring(out, i, i+1) == "\t") nTabs++;
    }

    neededTabs = (nCols - 1) - nTabs;
    if (neededTabs < 0) neededTabs = 0;

    for (i = 0; i < neededTabs; i++) out = out + "\t";
    return out;
}

function mh_writeUnitedHeatmapFiles(filePaths, headers, outPathENG, outPathGER) {
    nFiles = filePaths.length;
    if (nFiles < 1) return;

    blockCols = 5;
    contents = newArray();
    lineCounts = newArray();
    maxLines = 0;

    for (i = 0; i < nFiles; i++) {
        txt = File.openAsString(filePaths[i]);
        txt = replace(txt, "\r\n", "\n");
        txt = replace(txt, "\r", "\n");

        contents = Array.concat(contents, txt);

        lines = split(txt, "\n");
        eff = mh_getEffectiveLineCount(lines);
        lineCounts = Array.concat(lineCounts, eff);
        if (eff > maxLines) maxLines = eff;
    }

    united = "";

    // 1. Kopfzeile: Probenname / Ordner zwei Ebenen über diffMov
    row = "";
    for (i = 0; i < nFiles; i++) {
        row = row + mh_padLineToColumns(headers[i], blockCols);
        if (i < nFiles-1) row = row + "\t";
    }
    united = united + row + "\n";

    // Danach alle Zeilen der einzelnen Dateien nebeneinander
    for (r = 0; r < maxLines; r++) {
        row = "";
        for (i = 0; i < nFiles; i++) {
            lines = split(contents[i], "\n");
            line = "";
            if (r < lineCounts[i]) line = lines[r];

            row = row + mh_padLineToColumns(line, blockCols);
            if (i < nFiles-1) row = row + "\t";
        }
        united = united + row + "\n";
    }

    File.saveString(united, outPathENG);
    File.saveString(replace(united, ".", ","), outPathGER);
}

function drawBarPlot(xOff, yOff, w, h, title, labels, means, sds, fT, fA, fTk) {
    maxV = 0;
    for (i=0; i<means.length; i++) {
        val = means[i] + sds[i];
        if (val > maxV) maxV = val;
    }

    yMax = getNiceMax(maxV * 1.15);

    setColor(0,0,0);
    setLineWidth(2);
    drawLine(xOff, yOff+h, xOff+w, yOff+h);
    drawLine(xOff, yOff, xOff, yOff+h);

    setFont("SansSerif", fT, "bold antialiased");
    drawString(title, xOff + (w/2) - (lengthOf(title)*fT/4), yOff - 30);

    n = means.length;
    barW = (w / (n * 2.5));
    gap = (w - (n * barW)) / (n + 1);

    for (i=0; i<n; i++) {
        bX = xOff + gap + (i * (barW + gap)) + barW/2;
        bH = (means[i] / yMax) * h;
        sdH = (sds[i] / yMax) * h;

        setColor(70, 130, 180);
        fillRect(bX - barW/2, yOff + h - bH, barW, bH);
        setColor(0,0,0);
        drawRect(bX - barW/2, yOff + h - bH, barW, bH);

        drawLine(bX, yOff + h - bH, bX, yOff + h - bH - sdH);
        drawLine(bX - 8, yOff + h - bH - sdH, bX + 8, yOff + h - bH - sdH);

        // X-Achsen-Beschriftung = Probenname
        setFont("SansSerif", fTk, "antialiased");
        lab = labels[i];
        labW = getStringWidth(lab);
        drawString(lab, bX - labW/2, yOff + h + 30);
    }

    setFont("SansSerif", fTk, "antialiased");
    precision = getRequiredPrecision(yMax);

    for (j=0; j<=10; j++) {
        val = (j / 10) * yMax;
        yPos = yOff + h - (j / 10 * h);

        setColor(0,0,0);
        drawLine(xOff - 5, yPos, xOff, yPos);

        lab = d2s(val, precision);
        w_lab = getStringWidth(lab);
        drawString(lab, xOff - 10 - w_lab, yPos + 7);
    }
}

function getNiceMax(val) {
    if (val <= 0) return 1;
    mh_log10val = log(val) / log(10);
    mag = pow(10, floor(mh_log10val));
    norm = val / mag;
    if (norm <= 1.0) nice = 1.0;
    else if (norm <= 2.0) nice = 2.0;
    else if (norm <= 5.0) nice = 5.0;
    else if (norm <= 8.0) nice = 8.0;
    else nice = 10.0;
    return nice * mag;
}

function getRequiredPrecision(yMax) {
    if (yMax >= 10) return 1;
    if (yMax >= 1) return 2;
    if (yMax >= 0.1) return 3;
    return 4;
}

close("*");
if (isOpen("ROI Manager")) {close("ROI Manager");}

}
